WorkflowBuilder(Version=2.9.0)
GroupWorkflow SubjectInitialization
    Bonsai.IO.ReadAllText(Path=config\config.yml)
    -> Config.DeserializeFromYaml(Type=TypeMapping<Config.Config>)
    -> AsyncSubject Config

    Bonsai.IO.ReadAllText(Path=config\setup.json)
    -> Setup.DeserializeFromJson(Type=TypeMapping<Setup.Setup>)
    -> AsyncSubject SetupConfig => #5
    SubscribeSubject Config => #6
    #5, #6 -> SubscribeWhen

    SubscribeSubject Config
    -> MemberSelector(Selector=Paths.Animal)
    -> PropertyMapping(Path)
    -> Bonsai.IO.ReadAllText(Path=C:/Users/HSP/Documents/BonsaiWorkflows/CDC.SoundLateralizationTask/config/batch/ANIMAL0000.yml)
    -> Animal.DeserializeFromYaml(Type=TypeMapping<Animal.Animal>)
    -> AsyncSubject AnimalConfig => #13
    SubscribeSubject Config => #14
    #13, #14 -> SubscribeWhen

    DoubleProperty(Value=0)
    -> IgnoreElements
    -> BehaviorSubject LeftRewardSteps
    -> BehaviorSubject RightRewardSteps

    Bonsai.Vision.Drawing.CreateCanvas(Size(Width=1440, Height=1080), Depth=U8, Channels=3, Color(Val0=0, Val1=0, Val2=0, Val3=0))
    -> Bonsai.Vision.Drawing.Circle(Center(X=0, Y=0), Radius=0, Color(Val0=255, Val1=255, Val2=255, Val3=255), Thickness=1, LineType=Connected8, Shift=0)
    -> Bonsai.Vision.Drawing.DrawCanvas
    -> IgnoreElements
    -> BehaviorSubject Image

GroupWorkflow Hardware
    GroupWorkflow Camera
        Bonsai.Spinnaker.SpinnakerCapture(Index=nil, ColorProcessing=Default) => #0
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=Camera.Type)
        -> Condition => #3
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=WorkflowProperty<Setup.CameraType>(Value=FLIR))
            -> WorkflowOutput
        #0, #3 -> SubscribeWhen
        -> MemberSelector(Selector=Image) => #5
        Bonsai.PointGrey.FlyCapture(Index=0, ColorProcessing=Default, NumBuffers=10, GrabMode=BufferFrames) => #6
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=Camera.Type)
        -> Condition => #9
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=WorkflowProperty<Setup.CameraType>(Value=PointGrey))
            -> WorkflowOutput
        #6, #9 -> SubscribeWhen
        -> MemberSelector(Selector=Image) => #11
        #5, #11 -> Merge
        -> PublishSubject Camera => #13
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=Camera.UseCamera)
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it
        -> Delay(DueTime=PT1S) => #17
        #13, #17 -> SubscribeWhen

    SubscribeSubject Config
    -> MemberSelector(Selector=Ports.Behavior)
    -> PropertyMapping(PortName)
    -> GroupWorkflow Behavior
        BehaviorSubject<Bonsai.Harp.HarpMessage> BehaviorCommands => #0
        ExternalizedMapping(PortName) => #1
        #0, #1 -> Harp.Behavior.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM93)
        -> PublishSubject BehaviorMessages

        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateLed0CurrentPayload(Led0Current=10)) => #4
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateLed1CurrentPayload(Led1Current=10)) => #5
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable=None)) => #6
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear="DOPort0 DOPort1 DOPort2 Led0 Led1")) => #7
        #4, #5, #6, #7 -> Merge
        -> MulticastSubject BehaviorCommands => #9
        SubscribeSubject BehaviorMessages => #10
        #9, #10 -> SubscribeWhen

    SubscribeSubject Config
    -> MemberSelector(Selector=Ports.Soundcard)
    -> PropertyMapping(PortName)
    -> GroupWorkflow SoundCard
        BehaviorSubject<Bonsai.Harp.HarpMessage> SoundCardCommands => #0
        ExternalizedMapping(PortName) => #1
        #0, #1 -> Harp.SoundCard.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM107)
        -> PublishSubject SoundCardMessages

    SubscribeSubject Config
    -> MemberSelector(Selector=Ports.LeftPump)
    -> PropertyMapping(PortName)
    -> GroupWorkflow LeftSyringePump
        BehaviorSubject<Bonsai.Harp.HarpMessage> LeftPumpCommands => #0
        ExternalizedMapping(PortName) => #1
        #0, #1 -> Harp.SyringePump.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM0)
        -> PublishSubject LeftPumpMessages => #3
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=SyringePumps.UsePumps)
        -> Bonsai.Scripting.Expressions.ExpressionCondition => #6
          Expression: it
        #3, #6 -> SubscribeWhen

        Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolDirectionPayload(ProtocolDirection=Forward)) => #8
        SubscribeSubject LeftRewardSteps
        -> InputMapping(Selector=it, ProtocolStepCount(Selector=it))
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolStepCountPayload(ProtocolStepCount=75)) => #11
        Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolPeriodPayload(ProtocolPeriod=1)) => #12
        Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateStepModePayload(StepMode=Half)) => #13
        #8, #11, #12, #13 -> Merge
        -> MulticastSubject LeftPumpCommands => #15
        SubscribeSubject LeftPumpMessages => #16
        #15, #16 -> SubscribeWhen

    SubscribeSubject Config
    -> MemberSelector(Selector=Ports.RightPump)
    -> PropertyMapping(PortName)
    -> GroupWorkflow RightSyringePump
        BehaviorSubject<Bonsai.Harp.HarpMessage> RightPumpCommands => #0
        ExternalizedMapping(PortName) => #1
        #0, #1 -> Harp.SyringePump.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM0)
        -> PublishSubject RightPumpMessages => #3
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=SyringePumps.UsePumps)
        -> Bonsai.Scripting.Expressions.ExpressionCondition => #6
          Expression: it
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=SyringePumps.NumPumps)
        -> Bonsai.Scripting.Expressions.ExpressionCondition => #9
          Expression: it == 2
        #6, #9 -> Zip => #10
        #3, #10 -> SubscribeWhen

        Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolDirectionPayload(ProtocolDirection=Forward)) => #12
        SubscribeSubject RightRewardSteps
        -> InputMapping(Selector=it, ProtocolStepCount(Selector=it))
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolStepCountPayload(ProtocolStepCount=75)) => #15
        Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolPeriodPayload(ProtocolPeriod=1)) => #16
        Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateStepModePayload(StepMode=Half)) => #17
        #12, #15, #16, #17 -> Merge
        -> MulticastSubject RightPumpCommands => #19
        SubscribeSubject RightPumpMessages => #20
        #19, #20 -> SubscribeWhen

GroupWorkflow Utils
    GroupWorkflow WaterDelivery
        GroupWorkflow RewardSteps
            SubscribeSubject AnimalConfig
            -> MemberSelector(Selector=Reward.BaseAmount) => #1
            SubscribeSubject SetupConfig => #2
            -> MemberSelector(Selector=SyringePumps.LeftSlope) => #3
            #2 -> MemberSelector(Selector=SyringePumps.LeftIntercept) => #4
            #1, #3, #4 -> CombineLatest
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Convert.ToInt32((Item1 - Item3) / Item2)
            -> MulticastSubject LeftRewardSteps

            SubscribeSubject AnimalConfig
            -> MemberSelector(Selector=Reward.BaseAmount) => #9
            SubscribeSubject SetupConfig => #10
            -> MemberSelector(Selector=SyringePumps.RightSlope) => #11
            #10 -> MemberSelector(Selector=SyringePumps.RightIntercept) => #12
            #9, #11, #12 -> CombineLatest
            -> Condition => #14
                SubscribeSubject SetupConfig
                -> MemberSelector(Selector=SyringePumps.NumPumps) => #1
                ExternalizedMapping(Value(DisplayName=NumPumps)) => #2
                #1, #2 -> Equal(Operand=IntProperty(Value=2))
                -> WorkflowOutput
            SubscribeSubject AnimalConfig
            -> MemberSelector(Selector=Reward.BaseAmount) => #16
            SubscribeSubject SetupConfig => #17
            -> MemberSelector(Selector=SyringePumps.LeftSlope) => #18
            #17 -> MemberSelector(Selector=SyringePumps.LeftIntercept) => #19
            #16, #18, #19 -> CombineLatest
            -> Condition => #21
                SubscribeSubject SetupConfig
                -> MemberSelector(Selector=SyringePumps.NumPumps) => #1
                ExternalizedMapping(Value(DisplayName=NumPumps)) => #2
                #1, #2 -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            #14, #21 -> Merge
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Convert.ToInt32((Item1 - Item3) / Item2)
            -> MulticastSubject RightRewardSteps

        GroupWorkflow TwoPumpRewardDelivery
            SubscribeSubject RewardLeft => #0
            -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolDirectionPayload(ProtocolDirection=Forward)) => #1
            SubscribeSubject LeftRewardSteps => #2
            #0, #2 -> WithLatestFrom
            -> InputMapping(Selector=it, ProtocolStepCount(Selector=Item2))
            -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolStepCountPayload(ProtocolStepCount=75)) => #5
            #1, #5 -> Merge
            -> MulticastSubject LeftPumpCommands
            -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableMotorDriverPayload(EnableMotorDriver=Enabled))
            -> MulticastSubject LeftPumpCommands
            -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableProtocolPayload(EnableProtocol=Enabled))
            -> MulticastSubject LeftPumpCommands => #11
            SubscribeSubject LeftRewardSteps => #12
            #11, #12 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Scripting.Expressions.ExpressionTransform FromMillisecondsToTimeSpan
              Expression: TimeSpan.FromMilliseconds(it + 100)
            -> InputMapping(Selector=it, DueTime(Selector=it))
            -> SelectMany "Delay (DuckTapeSolution)"
                WorkflowInput Source1 => #0
                ExternalizedMapping(DueTime) => #1
                #0, #1 -> Delay(DueTime=PT0.009S)
                -> Take(Count=1)
                -> WorkflowOutput
            -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableMotorDriverPayload(EnableMotorDriver=Disabled))
            -> MulticastSubject LeftPumpCommands => #19
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=SyringePumps.UsePumps)
            -> Bonsai.Scripting.Expressions.ExpressionCondition => #22
              Expression: it
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=SyringePumps.NumPumps)
            -> Bonsai.Scripting.Expressions.ExpressionCondition => #25
              Expression: it == 2
            #22, #25 -> Zip => #26
            #19, #26 -> SubscribeWhen

            SubscribeSubject RewardRight => #28
            -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolDirectionPayload(ProtocolDirection=Forward)) => #29
            SubscribeSubject RightRewardSteps => #30
            #28, #30 -> WithLatestFrom
            -> InputMapping(Selector=it, ProtocolStepCount(Selector=Item2))
            -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolStepCountPayload(ProtocolStepCount=75)) => #33
            #29, #33 -> Merge
            -> MulticastSubject RightPumpCommands
            -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableMotorDriverPayload(EnableMotorDriver=Enabled))
            -> MulticastSubject RightPumpCommands
            -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableProtocolPayload(EnableProtocol=Enabled))
            -> MulticastSubject RightPumpCommands => #39
            SubscribeSubject RightRewardSteps => #40
            #39, #40 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Scripting.Expressions.ExpressionTransform FromMillisecondsToTimeSpan
              Expression: TimeSpan.FromMilliseconds(it + 100)
            -> InputMapping(Selector=it, DueTime(Selector=it)) => #44
            Source2=#44 -> SelectMany "Delay (DuckTapeSolution)"
                WorkflowInput Source1 => #0
                ExternalizedMapping(DueTime) => #1
                #0, #1 -> Delay(DueTime=PT0.009S)
                -> Take(Count=1)
                -> WorkflowOutput
            -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableMotorDriverPayload(EnableMotorDriver=Disabled))
            -> MulticastSubject RightPumpCommands => #47
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=SyringePumps.UsePumps)
            -> Bonsai.Scripting.Expressions.ExpressionCondition => #50
              Expression: it
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=SyringePumps.NumPumps)
            -> Bonsai.Scripting.Expressions.ExpressionCondition => #53
              Expression: it == 2
            #50, #53 -> Zip => #54
            #47, #54 -> SubscribeWhen

        GroupWorkflow OnePumpRewardDelivery
            SubscribeSubject RewardLeft
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO1))
            -> MulticastSubject BehaviorCommands => #2
            SubscribeSubject LeftRewardSteps => #3
            #2, #3 -> WithLatestFrom
            -> InputMapping(Selector=it, ProtocolStepCount(Selector=Item2))
            -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolStepCountPayload(ProtocolStepCount=45))
            -> MulticastSubject LeftPumpCommands => #7
            SubscribeSubject RewardRight
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DO1))
            -> MulticastSubject BehaviorCommands => #10
            SubscribeSubject RightRewardSteps => #11
            #10, #11 -> WithLatestFrom
            -> InputMapping(Selector=it, ProtocolStepCount(Selector=Item2))
            -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolStepCountPayload(ProtocolStepCount=45))
            -> MulticastSubject LeftPumpCommands => #15
            #7, #15 -> Merge
            -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolDirectionPayload(ProtocolDirection=Forward))
            -> MulticastSubject LeftPumpCommands
            -> Delay(DueTime=PT0.01S)
            -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableMotorDriverPayload(EnableMotorDriver=Enabled))
            -> MulticastSubject LeftPumpCommands
            -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableProtocolPayload(EnableProtocol=Enabled))
            -> MulticastSubject LeftPumpCommands => #23
            SubscribeSubject LeftRewardSteps => #24
            #23, #24 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Scripting.Expressions.ExpressionTransform FromMillisecondsToTimeSpan
              Expression: TimeSpan.FromMilliseconds(it + 100)
            -> InputMapping(Selector=it, DueTime(Selector=it))
            -> SelectMany "Delay (DuckTapeSolution)"
                WorkflowInput Source1 => #0
                ExternalizedMapping(DueTime) => #1
                #0, #1 -> Delay(DueTime=PT0.145S)
                -> Take(Count=1)
                -> WorkflowOutput
            -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableMotorDriverPayload(EnableMotorDriver=Disabled))
            -> MulticastSubject LeftPumpCommands => #31
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=SyringePumps.UsePumps)
            -> Bonsai.Scripting.Expressions.ExpressionCondition => #34
              Expression: it
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=SyringePumps.NumPumps)
            -> Bonsai.Scripting.Expressions.ExpressionCondition => #37
              Expression: it == 1
            #34, #37 -> Zip => #38
            #31, #38 -> SubscribeWhen
            -> WorkflowOutput

    GroupWorkflow PumpRefill
        GroupWorkflow RefillSteps
            DoubleProperty(Value=10000) => #0
            SubscribeSubject SetupConfig => #1
            -> MemberSelector(Selector=SyringePumps.LeftSlope) => #2
            #1 -> MemberSelector(Selector=SyringePumps.LeftIntercept) => #3
            #0, #2, #3 -> CombineLatest
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Convert.ToInt32((Item1 - Item3) / Item2)
            -> BehaviorSubject LeftRefillSteps

            DoubleProperty(Value=10000) => #7
            SubscribeSubject SetupConfig => #8
            -> MemberSelector(Selector=SyringePumps.RightSlope) => #9
            #8 -> MemberSelector(Selector=SyringePumps.RightIntercept) => #10
            #7, #9, #10 -> CombineLatest
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Convert.ToInt32((Item1 - Item3) / Item2)
            -> BehaviorSubject RightRefillSteps

        SubscribeSubject RefillLeft
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableMotorDriverPayload(EnableMotorDriver=Disabled))
        -> MulticastSubject RightPumpCommands => #3
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolDirectionPayload(ProtocolDirection=Reverse)) => #4
        SubscribeSubject LeftRefillSteps => #5
        #3, #5 -> WithLatestFrom
        -> InputMapping(Selector=it, ProtocolStepCount(Selector=Item2))
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolStepCountPayload(ProtocolStepCount=75)) => #8
        #4, #8 -> Merge
        -> MulticastSubject LeftPumpCommands
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableMotorDriverPayload(EnableMotorDriver=Enabled))
        -> MulticastSubject LeftPumpCommands
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableProtocolPayload(EnableProtocol=Enabled))
        -> MulticastSubject LeftPumpCommands => #14
        SubscribeSubject LeftRefillSteps => #15
        #14, #15 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromMillisecondsToTimeSpan
          Expression: TimeSpan.FromMilliseconds(it + 100)
        -> InputMapping(Selector=it, DueTime(Selector=it))
        -> SelectMany "Delay (DuckTapeSolution)"
            WorkflowInput Source1 => #0
            ExternalizedMapping(DueTime) => #1
            #0, #1 -> Delay(DueTime=PT0S)
            -> Take(Count=1)
            -> WorkflowOutput
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableProtocolPayload(EnableProtocol=Disabled))
        -> MulticastSubject LeftPumpCommands
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableMotorDriverPayload(EnableMotorDriver=Disabled))
        -> MulticastSubject LeftPumpCommands

        SubscribeSubject RefillRight
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableMotorDriverPayload(EnableMotorDriver=Disabled))
        -> MulticastSubject LeftPumpCommands => #27
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolDirectionPayload(ProtocolDirection=Reverse)) => #28
        SubscribeSubject RightRefillSteps => #29
        #27, #29 -> WithLatestFrom
        -> InputMapping(Selector=it, ProtocolStepCount(Selector=Item2))
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolStepCountPayload(ProtocolStepCount=75)) => #32
        #28, #32 -> Merge
        -> MulticastSubject RightPumpCommands
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableMotorDriverPayload(EnableMotorDriver=Enabled))
        -> MulticastSubject RightPumpCommands
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableProtocolPayload(EnableProtocol=Enabled))
        -> MulticastSubject RightPumpCommands => #38
        SubscribeSubject RightRefillSteps => #39
        #38, #39 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromMillisecondsToTimeSpan
          Expression: TimeSpan.FromMilliseconds(it + 100)
        -> InputMapping(Selector=it, DueTime(Selector=it))
        -> SelectMany "Delay (DuckTapeSolution)"
            WorkflowInput Source1 => #0
            ExternalizedMapping(DueTime) => #1
            #0, #1 -> Delay(DueTime=PT0S)
            -> Take(Count=1)
            -> WorkflowOutput
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableProtocolPayload(EnableProtocol=Disabled))
        -> MulticastSubject RightPumpCommands
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableMotorDriverPayload(EnableMotorDriver=Disabled))
        -> MulticastSubject RightPumpCommands

    GroupWorkflow PlaySound
        SubscribeSubject PlaySound => #0
        SubscribeSubject SoundIndex
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Convert.ToInt32(it)
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it >= 2 && it <=31
        -> PropertyMapping(PlaySoundOrFrequency) => #4
        #0, #4 -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreatePlaySoundOrFrequencyPayload(PlaySoundOrFrequency=2)) => #5
        SubscribeSubject LeftIntensity => #6
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=Speakers.LeftSlope) => #8
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=Speakers.LeftIntercept) => #10
        #8, #10 -> Zip => #11
        #6, #11 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: - 20 * (Item1 - Item2.Item2) / Item2.Item1
        -> Multiply(Operand=DoubleProperty(Value=10))
        -> InputMapping(Selector=it, AttenuationLeft(Selector=it))
        -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreateAttenuationLeftPayload(AttenuationLeft=216)) => #16
        SubscribeSubject RightIntensity => #17
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=Speakers.RightSlope) => #19
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=Speakers.RightIntercept) => #21
        #19, #21 -> Zip => #22
        #17, #22 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: - 20 * (Item1 - Item2.Item2) / Item2.Item1
        -> Multiply(Operand=DoubleProperty(Value=10))
        -> InputMapping(Selector=it, AttenuationRight(Selector=it))
        -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreateAttenuationRightPayload(AttenuationRight=216)) => #27
        #5, #16, #27 -> Merge
        -> MulticastSubject SoundCardCommands
        -> WorkflowOutput

    GroupWorkflow ToggleDOs
        SubscribeSubject BoxLed
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputTogglePayload(OutputToggle=Led0)) => #1
        SubscribeSubject PokeLed
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputTogglePayload(OutputToggle=Led1)) => #3
        SubscribeSubject PortDO0
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputTogglePayload(OutputToggle=DOPort0)) => #5
        SubscribeSubject PortDO1
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputTogglePayload(OutputToggle=DOPort1)) => #7
        SubscribeSubject PortDO2
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputTogglePayload(OutputToggle=DOPort2)) => #9
        #1, #3, #5, #7, #9 -> Merge
        -> MulticastSubject BehaviorCommands
        -> WorkflowOutput

GroupWorkflow ImageSubtraction
    SubscribeSubject Camera => #0
    SubscribeSubject Image => #1
    #0, #1 -> WithLatestFrom
    -> Subtract
    -> PublishSubject ImageSubtraction
    -> WorkflowOutput

GroupWorkflow GUI
    SubscribeSubject LoadImage => #0
    ExternalizedMapping(FileName(DisplayName=LoadPath)) => #1
    #0, #1 -> Bonsai.Vision.LoadImage(FileName="", Mode=Unchanged)
    -> MulticastSubject Image

    SubscribeSubject SaveCurrentFrame => #4
    SubscribeSubject Camera => #5
    #4, #5 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #7
    ExternalizedMapping(FileName(DisplayName=SavePath)) => #8
    #7, #8 -> Bonsai.Vision.SaveImage(FileName="", Suffix=Timestamp)

    StringProperty(Value="Setup: ") => #10
    SubscribeSubject Config
    -> MemberSelector(Selector=Setup)
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
      Expression: it.ToString()
    #10, #13 -> CombineLatest
    -> Add
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="Setup: 0")
    -> VisualizerMapping => #18
    StringProperty(Value="Left Poke: ") => #19
    SubscribeSubject BehaviorMessages
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState)
    -> GroupWorkflow FilterPokeEvents
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Value) => #1
        ExternalizedMapping(Value(DisplayName=Port)) => #2
        #1, #2 -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort0)) => #3
        -> Condition
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=LeftPoke.LowToHigh)
            -> WorkflowOutput
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
          Expression: Convert.ToBoolean(it)
        #3 -> Condition
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=LeftPoke.LowToHigh)
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
          Expression: !Convert.ToBoolean(it)
        #5, #7 -> Merge => #8
        #0 -> MemberSelector(Selector=Seconds) => #9
        #8, #9 -> WithLatestFrom
        -> DistinctUntilChangedBy(KeySelector=Item1)
        -> Bonsai.Harp.CreateTimestamped
        -> WorkflowOutput
    -> MemberSelector(Selector=Value)
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #24
      Expression: it.ToString()
    #19, #24 -> CombineLatest
    -> Add
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="Left Poke: True")
    -> VisualizerMapping => #29
    StringProperty(Value="Center Poke: ") => #30
    SubscribeSubject BehaviorMessages
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState)
    -> GroupWorkflow FilterPokeEvents
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Value) => #1
        ExternalizedMapping(Value(DisplayName=Port)) => #2
        #1, #2 -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort1)) => #3
        -> Condition
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=CenterPoke.LowToHigh)
            -> WorkflowOutput
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
          Expression: Convert.ToBoolean(it)
        #3 -> Condition
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=CenterPoke.LowToHigh)
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
          Expression: !Convert.ToBoolean(it)
        #5, #7 -> Merge => #8
        #0 -> MemberSelector(Selector=Seconds) => #9
        #8, #9 -> WithLatestFrom
        -> DistinctUntilChangedBy(KeySelector=Item1)
        -> Bonsai.Harp.CreateTimestamped
        -> WorkflowOutput
    -> MemberSelector(Selector=Value)
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #35
      Expression: it.ToString()
    #30, #35 -> CombineLatest
    -> Add
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="Center Poke: False")
    -> VisualizerMapping => #40
    StringProperty(Value="Right Poke: ") => #41
    SubscribeSubject BehaviorMessages
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState)
    -> GroupWorkflow FilterPokeEvents
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Value) => #1
        ExternalizedMapping(Value(DisplayName=Port)) => #2
        #1, #2 -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort2)) => #3
        -> Condition
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=RightPoke.LowToHigh)
            -> WorkflowOutput
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
          Expression: Convert.ToBoolean(it)
        #3 -> Condition
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=RightPoke.LowToHigh)
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
          Expression: !Convert.ToBoolean(it)
        #5, #7 -> Merge => #8
        #0 -> MemberSelector(Selector=Seconds) => #9
        #8, #9 -> WithLatestFrom
        -> DistinctUntilChangedBy(KeySelector=Item1)
        -> Bonsai.Harp.CreateTimestamped
        -> WorkflowOutput
    -> MemberSelector(Selector=Value)
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #46
      Expression: it.ToString()
    #41, #46 -> CombineLatest
    -> Add
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="Right Poke: True")
    -> VisualizerMapping => #51
    StringProperty(Value="PortDIO0: ") => #52
    SubscribeSubject BehaviorMessages
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedPortDIOStateEvent)
    -> GroupWorkflow FilterPokeEvents
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Value) => #1
        ExternalizedMapping(Value(DisplayName=Port)) => #2
        #1, #2 -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.PortDigitalIOS>(Value=DIO0))
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
          Expression: Convert.ToBoolean(it)
        #0 -> MemberSelector(Selector=Seconds) => #5
        #4, #5 -> WithLatestFrom
        -> DistinctUntilChangedBy(KeySelector=Item1)
        -> Bonsai.Harp.CreateTimestamped
        -> WorkflowOutput
    -> MemberSelector(Selector=Value)
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #57
      Expression: it.ToString()
    #52, #57 -> CombineLatest
    -> Add
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="PortDIO0: True")
    -> VisualizerMapping => #62
    StringProperty(Value="PortDIO1: ") => #63
    SubscribeSubject BehaviorMessages
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedPortDIOStateEvent)
    -> GroupWorkflow FilterPokeEvents
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Value) => #1
        ExternalizedMapping(Value(DisplayName=Port)) => #2
        #1, #2 -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.PortDigitalIOS>(Value=DIO1))
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
          Expression: Convert.ToBoolean(it)
        #0 -> MemberSelector(Selector=Seconds) => #5
        #4, #5 -> WithLatestFrom
        -> DistinctUntilChangedBy(KeySelector=Item1)
        -> Bonsai.Harp.CreateTimestamped
        -> WorkflowOutput
    -> MemberSelector(Selector=Value)
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #68
      Expression: it.ToString()
    #63, #68 -> CombineLatest
    -> Add
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="PortDIO1: False")
    -> VisualizerMapping => #73
    StringProperty(Value="PortDIO2: ") => #74
    SubscribeSubject BehaviorMessages
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedPortDIOStateEvent)
    -> GroupWorkflow FilterPokeEvents
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Value) => #1
        ExternalizedMapping(Value(DisplayName=Port)) => #2
        #1, #2 -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.PortDigitalIOS>(Value=DIO2))
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
          Expression: Convert.ToBoolean(it)
        #0 -> MemberSelector(Selector=Seconds) => #5
        #4, #5 -> WithLatestFrom
        -> DistinctUntilChangedBy(KeySelector=Item1)
        -> Bonsai.Harp.CreateTimestamped
        -> WorkflowOutput
    -> MemberSelector(Selector=Value)
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #79
      Expression: it.ToString()
    #74, #79 -> CombineLatest
    -> Add
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="PortDIO2: True")
    -> VisualizerMapping => #84
    #18, #29, #40, #51, #62, #73, #84 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=1, RowCount=7, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #86
    Bonsai.Gui.PropertyGridBuilder(Enabled=true, Visible=true, HelpVisible=true, ToolbarVisible=true, AutoRefresh=false)
    -> VisualizerMapping => #88
    Bonsai.Gui.ButtonBuilder LoadImage(Enabled=true, Visible=true, Text="Load Image")
    -> PublishSubject LoadImage
    -> VisualizerMapping => #91
    Bonsai.Gui.ButtonBuilder SaveCurrentFrame(Enabled=true, Visible=true, Text="Save Current Frame")
    -> PublishSubject SaveCurrentFrame
    -> VisualizerMapping => #94
    Bonsai.Gui.RadioButtonBuilder Camera(Enabled=true, Visible=true, Text=Camera, Checked=true)
    -> BehaviorSubject CameraRB
    -> VisualizerMapping => #97
    Bonsai.Gui.RadioButtonBuilder Image(Enabled=true, Visible=true, Text=Image, Checked=false)
    -> BehaviorSubject ImageRB
    -> VisualizerMapping => #100
    Bonsai.Gui.RadioButtonBuilder Subtraction(Enabled=true, Visible=true, Text=Subtraction, Checked=false)
    -> BehaviorSubject SubtractRB
    -> VisualizerMapping => #103
    #97, #100, #103 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=3, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #105
    #88, #91, #94, #105 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=1, RowCount=4, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #107
    #86, #107 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #109
    SubscribeSubject Camera
    -> Condition => #111
        SubscribeSubject CameraRB
        -> WorkflowOutput
    SubscribeSubject ImageRB
    -> Delay(DueTime=PT0S) => #113
    SubscribeSubject Image => #114
    #113, #114 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Condition => #117
        SubscribeSubject ImageRB
        -> WorkflowOutput
    SubscribeSubject ImageSubtraction
    -> Condition => #119
        SubscribeSubject SubtractRB
        -> WorkflowOutput
    #111, #117, #119 -> Merge
    -> VisualizerMapping
    -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=1, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #123
    Bonsai.Gui.SliderBuilder LeftIntensity(Enabled=true, Visible=true, Minimum=0, Maximum=68, DecimalPlaces=1, Value=50)
    -> PublishSubject LeftIntensity
    -> VisualizerMapping => #126
    Bonsai.Gui.SliderBuilder RightIntensity(Enabled=true, Visible=true, Minimum=0, Maximum=68, DecimalPlaces=1, Value=50)
    -> PublishSubject RightIntensity
    -> VisualizerMapping => #129
    Bonsai.Gui.ComboBoxBuilder SoundIndexes(Enabled=true, Visible=true, Items(string=2, string=4, string=6, string=8, string=10, string=31), SelectedItem=2)
    -> PublishSubject SoundIndex
    -> VisualizerMapping => #132
    Bonsai.Gui.ButtonBuilder PlaySound(Enabled=true, Visible=true, Text="Play Sound")
    -> PublishSubject PlaySound
    -> VisualizerMapping => #135
    Bonsai.Gui.ButtonBuilder RewardLeft(Enabled=true, Visible=true, Text="Reward Left")
    -> PublishSubject RewardLeft
    -> VisualizerMapping => #138
    Bonsai.Gui.ButtonBuilder RewardRight(Enabled=true, Visible=true, Text="Reward Right")
    -> PublishSubject RewardRight
    -> VisualizerMapping => #141
    Bonsai.Gui.ButtonBuilder RefillLeft(Enabled=true, Visible=true, Text="Refill Left")
    -> PublishSubject RefillLeft
    -> VisualizerMapping => #144
    Bonsai.Gui.ButtonBuilder RefillRight(Enabled=true, Visible=true, Text="Refill Right")
    -> PublishSubject RefillRight
    -> VisualizerMapping => #147
    #126, #129, #132, #135, #138, #141, #144, #147 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=4, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #149
    Bonsai.Gui.ToggleButtonBuilder BoxLed(Enabled=true, Visible=true, Text="Toggle Box LED", Checked=false)
    -> PublishSubject BoxLed
    -> VisualizerMapping => #152
    Bonsai.Gui.ToggleButtonBuilder PokeLed(Enabled=true, Visible=true, Text="Toggle Poke LED", Checked=false)
    -> PublishSubject PokeLed
    -> VisualizerMapping => #155
    Bonsai.Gui.ToggleButtonBuilder PortDO0(Enabled=true, Visible=true, Text="Toggle PortDO0", Checked=false)
    -> PublishSubject PortDO0
    -> VisualizerMapping => #158
    Bonsai.Gui.ToggleButtonBuilder PortDO1(Enabled=true, Visible=true, Text="Toggle PortDO1", Checked=false)
    -> PublishSubject PortDO1
    -> VisualizerMapping => #161
    Bonsai.Gui.ToggleButtonBuilder PortDO2(Enabled=true, Visible=true, Text="Toggle PortDO2", Checked=false)
    -> PublishSubject PortDO2
    -> VisualizerMapping => #164
    Bonsai.Gui.ButtonBuilder StopApplication(Enabled=true, Visible=true, Text="Stop Application")
    -> PublishSubject StopApplication
    -> VisualizerMapping => #167
    #152, #155, #158, #161, #164, #167 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=3, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #169
    #109, #123, #149, #169 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
    -> WorkflowOutput

SubscribeSubject StopApplication
-> Take(Count=1)
-> WorkflowOutput
