WorkflowBuilder(Version=2.9.0)
GroupWorkflow Utils
    GroupWorkflow UpdateSubjects
        GroupWorkflow TrialBeginning
            GroupWorkflow ResetSubjects
                SubscribeSubject ITIStart => #0
                SubscribeSubject TrialEnd => #1
                #0, #1 -> Gate
                -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=new_trial, PrintSubjectName=PrintCode)
                -> DoubleProperty(Value=NaN)
                -> MulticastSubject TimeToCNP
                -> MulticastSubject TimedOptoOnset
                -> MulticastSubject TimedSoundOnset
                -> MulticastSubject TimedRT
                -> MulticastSubject TimedMT
                -> MulticastSubject TimedLNP
                -> MulticastSubject TimedLED
                -> MulticastSubject ResponsePoke
                -> MulticastSubject CNPStart
                -> MulticastSubject RTStart
                -> MulticastSubject MTStart
                -> WorkflowOutput

                SubscribeSubject ITIStart => #17
                SubscribeSubject TrialEnd => #18
                #17, #18 -> Gate
                -> BooleanProperty(Value=false)
                -> MulticastSubject RewardDelivered

            GroupWorkflow LevelDependantSettings
                SubscribeSubject ITIStart => #0
                SubscribeSubject TrialEnd => #1
                #0, #1 -> Gate => #2
                -> Condition "TrialsCompleted == TrialsPerBlock"
                    SubscribeSubject TrialsCompleted => #0
                    SubscribeSubject TrialsPerBlock => #1
                    #0, #1 -> WithLatestFrom
                    -> GreaterThanOrEqual => #3
                    SubscribeSubject LevelConfig
                    -> MemberSelector(Selector=CriticalPerformance.UsePerformance)
                    -> Equal(Operand=BooleanProperty(Value=false)) => #6
                    SubscribeSubject BlockPerformance => #7
                    SubscribeSubject LevelConfig
                    -> MemberSelector(Selector=CriticalPerformance.Value) => #9
                    #7, #9 -> WithLatestFrom
                    -> GreaterThanOrEqual => #11
                    SubscribeSubject LevelConfig
                    -> MemberSelector(Selector=CriticalPerformance.UsePerformance) => #13
                    #11, #13 -> CombineLatest
                    -> LogicalAnd => #15
                    #6, #15 -> CombineLatest
                    -> LogicalOr => #17
                    #3, #17 -> CombineLatest
                    -> LogicalAnd
                    -> WorkflowOutput
                -> GroupWorkflow StartNewBlock(Description="Resets every block subject (variable) and updates the training level if needed") => #4
                    WorkflowInput Source1 => #0
                    -> Condition IsBiasedSession
                        SubscribeSubject AnimalConfig
                        -> MemberSelector(Selector=BiasedSession.IsBiasedSession)
                        -> WorkflowOutput
                    -> GroupWorkflow LeftProbability
                        WorkflowInput Source1 => #0
                        -> Condition "PreviousBlock == 1" => #1
                            SubscribeSubject Block
                            -> Equal(Operand=IntProperty(Value=1))
                            -> WorkflowOutput
                        SubscribeSubject Random
                        -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1) => #3
                        #1, #3 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> Bonsai.Numerics.Distributions.Sample
                        -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
                          Expression: it == 0 ? -1 : 1
                        #0 -> Condition "PreviousBlock != 1" => #8
                            SubscribeSubject Block
                            -> NotEqual(Operand=IntProperty(Value=1))
                            -> WorkflowOutput
                        SubscribeSubject PreferentialSide => #9
                        #8, #9 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> Multiply(Operand=IntProperty(Value=-1)) => #12
                        #7, #12 -> Merge
                        -> MulticastSubject PreferentialSide
                        -> WorkflowOutput
                    -> GroupWorkflow TrialsPerBlock => #3
                        WorkflowInput Source1 => #0
                        SubscribeSubject Random => #1
                        SubscribeSubject AnimalConfig
                        -> MemberSelector(Selector=BiasedSession.BlockDistributions.Mean) => #3
                        SubscribeSubject AnimalConfig
                        -> MemberSelector(Selector=BiasedSession.BlockDistributions.MinValue) => #5
                        #3, #5 -> Zip
                        -> Subtract
                        -> Bonsai.Scripting.Expressions.ExpressionTransform => #8
                          Expression: 1.0 / it
                        #1, #8 -> Zip
                        -> InputMapping(Selector=Item1, Rate(Selector=Item2))
                        -> Bonsai.Numerics.Distributions.CreateExponential(Rate=INF) => #11
                        #0, #11 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> Bonsai.Numerics.Distributions.Sample
                        -> Bonsai.Scripting.Expressions.ExpressionTransform ConvertToInt => #15
                          Expression: Convert.ToInt32(it)
                        SubscribeSubject AnimalConfig
                        -> MemberSelector(Selector=BiasedSession.BlockDistributions.MinValue) => #17
                        #15, #17 -> WithLatestFrom
                        -> Add => #19
                        -> Condition GreaterThanToMaxVal => #20
                            WorkflowInput Source1 => #0
                            SubscribeSubject AnimalConfig
                            -> MemberSelector(Selector=BiasedSession.BlockDistributions.MaxValue) => #2
                            #0, #2 -> CombineLatest
                            -> GreaterThan
                            -> WorkflowOutput
                        SubscribeSubject AnimalConfig
                        -> MemberSelector(Selector=BiasedSession.BlockDistributions.MaxValue) => #22
                        #20, #22 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2) => #24
                        #19 -> Condition LessThanOrEqualMaxVal => #25
                            WorkflowInput Source1 => #0
                            SubscribeSubject AnimalConfig
                            -> MemberSelector(Selector=BiasedSession.BlockDistributions.MaxValue) => #2
                            #0, #2 -> CombineLatest
                            -> LessThanOrEqual
                            -> WorkflowOutput
                        #24, #25 -> Merge
                        -> MulticastSubject TrialsPerBlock
                        -> WorkflowOutput
                    #0 -> Condition !IsBiasedSession
                        SubscribeSubject AnimalConfig
                        -> MemberSelector(Selector=BiasedSession.IsBiasedSession)
                        -> Equal(Operand=BooleanProperty(Value=false))
                        -> WorkflowOutput
                    -> IntProperty(Value=0) => #5
                    #3, #5 -> Merge => #6
                    -> Condition UpdateTrainingLevelCondition(Description="!UsePerformance || (UsePerformance && (BlockPerformance >= CriticalPerformance) && (TrainingLevel < NumLevels))")
                        SubscribeSubject TrainingLevel => #0
                        SubscribeSubject TrainingConfig
                        -> MemberSelector(Selector=Levels.Count) => #2
                        SubscribeSubject AnimalConfig
                        -> MemberSelector(Selector=Session.LastTrainingLevel) => #4
                        #2, #4 -> Zip
                        -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
                          Expression: Math.Min(Item1, Item2)
                        #0, #6 -> WithLatestFrom
                        -> LessThan
                        -> WorkflowOutput
                    -> GroupWorkflow UpdateTrainingLevel => #8
                        WorkflowInput Source1 => #0
                        SubscribeSubject TrainingLevel => #1
                        #0, #1 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> Add(Operand=IntProperty(Value=1))
                        -> MulticastSubject TrainingLevel
                        -> WorkflowOutput
                    #6 -> Condition !UpdateTrainingLevelCondition(Description="!(!UsePerformance || (UsePerformance && (BlockPerformance >= CriticalPerformance) && (TrainingLevel < NumLevels)))") => #9
                        SubscribeSubject TrainingLevel => #0
                        SubscribeSubject TrainingConfig
                        -> MemberSelector(Selector=Levels.Count) => #2
                        SubscribeSubject AnimalConfig
                        -> MemberSelector(Selector=Session.LastTrainingLevel) => #4
                        #2, #4 -> Zip
                        -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
                          Expression: Math.Min(Item1, Item2)
                        #0, #6 -> WithLatestFrom
                        -> GreaterThanOrEqual
                        -> WorkflowOutput
                    #8, #9 -> Merge => #10
                    Source2=#10 -> Delay(DueTime=PT0.1S)
                    -> GroupWorkflow UpdateBlockNumber
                        WorkflowInput Source1 => #0
                        SubscribeSubject Block => #1
                        #0, #1 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> Add(Operand=IntProperty(Value=1))
                        -> MulticastSubject Block
                        -> WorkflowOutput
                    -> GroupWorkflow ResetBlockSubjects
                        WorkflowInput Source1
                        -> DoubleProperty(Value=0)
                        -> MulticastSubject RightAnswers
                        -> MulticastSubject TrialsCompleted
                        -> MulticastSubject BlockPerformance
                        -> MulticastSubject TrialsAborted
                        -> MulticastSubject BlockAbortRatio
                        -> MulticastSubject BlockTrial
                        -> WorkflowOutput
                    -> WorkflowOutput
                #2 -> Condition "TrialsCompleted != TrialsPerBlock" => #5
                    SubscribeSubject TrialsCompleted => #0
                    SubscribeSubject TrialsPerBlock => #1
                    #0, #1 -> WithLatestFrom
                    -> GreaterThanOrEqual => #3
                    SubscribeSubject LevelConfig
                    -> MemberSelector(Selector=CriticalPerformance.UsePerformance)
                    -> Equal(Operand=BooleanProperty(Value=false)) => #6
                    SubscribeSubject BlockPerformance => #7
                    SubscribeSubject LevelConfig
                    -> MemberSelector(Selector=CriticalPerformance.Value) => #9
                    #7, #9 -> WithLatestFrom
                    -> GreaterThanOrEqual => #11
                    SubscribeSubject LevelConfig
                    -> MemberSelector(Selector=CriticalPerformance.UsePerformance) => #13
                    #11, #13 -> CombineLatest
                    -> LogicalAnd => #15
                    #6, #15 -> CombineLatest
                    -> LogicalOr => #17
                    #3, #17 -> CombineLatest
                    -> LogicalAnd
                    -> Equal(Operand=BooleanProperty(Value=false))
                    -> WorkflowOutput
                #4, #5 -> Merge
                -> GroupWorkflow UpdateTrialNumbers(Description="Updates the total trial number and the block trial number")
                    WorkflowInput Source1
                    -> GroupWorkflow UpdateTrialNumber
                        WorkflowInput Source1 => #0
                        SubscribeSubject Trial => #1
                        #0, #1 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> Add(Operand=IntProperty(Value=1))
                        -> MulticastSubject Trial
                        -> WorkflowOutput
                    -> GroupWorkflow UpdateBlockTrialNumber
                        WorkflowInput Source1 => #0
                        SubscribeSubject BlockTrial => #1
                        #0, #1 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> Add(Operand=IntProperty(Value=1))
                        -> MulticastSubject BlockTrial
                        -> WorkflowOutput
                    -> WorkflowOutput
                -> GroupWorkflow TrialSoundCharacteristics
                    WorkflowInput Source1 => #0
                    -> Condition "RepeatTrial == 0"
                        SubscribeSubject RepeatTrial
                        -> Equal(Operand=BooleanProperty(Value=false))
                        -> WorkflowOutput
                    -> GroupWorkflow IsLateralizedTrial
                        WorkflowInput Source1 => #0
                        SubscribeSubject Random
                        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1) => #2
                        #0, #2 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> Bonsai.Numerics.Distributions.Sample => #5
                        SubscribeSubject LevelConfig
                        -> MemberSelector(Selector=Sound.FullyLateralizedProbability) => #7
                        #5, #7 -> WithLatestFrom
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: Item1 <= Item2
                        -> MulticastSubject IsLateralizedTrial
                        -> WorkflowOutput
                    -> GroupWorkflow ABL
                        WorkflowInput Source1 => #0
                        -> Condition !UseFixedABL
                            SubscribeSubject LevelConfig
                            -> MemberSelector(Selector=Sound.Abl.UseFixedAbl)
                            -> Equal(Operand=BooleanProperty(Value=false)) => #2
                            SubscribeSubject IsLateralizedTrial
                            -> Equal(Operand=BooleanProperty(Value=false)) => #4
                            #2, #4 -> CombineLatest
                            -> LogicalOr
                            -> WorkflowOutput
                        -> GroupWorkflow RandomABL => #2
                            WorkflowInput Source1
                            -> GroupWorkflow PickRandomIndex => #1
                                WorkflowInput Source1 => #0
                                -> Condition !AblBlock => #1
                                    SubscribeSubject AnimalConfig
                                    -> MemberSelector(Selector=Sound.AblBlock)
                                    -> Equal(Operand=BooleanProperty(Value=false))
                                    -> WorkflowOutput
                                SubscribeSubject LevelConfig
                                -> MemberSelector(Selector=Sound.Abl.AblList.Count)
                                -> Subtract(Operand=IntProperty(Value=1)) => #4
                                SubscribeSubject Random => #5
                                #4, #5 -> WithLatestFrom
                                -> InputMapping(Selector=Item2, Upper(Selector=Item1))
                                -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=2) => #8
                                #1, #8 -> WithLatestFrom
                                -> MemberSelector(Selector=Item2)
                                -> Bonsai.Numerics.Distributions.Sample => #11
                                #0 -> Condition "AblBlock && BlockTrial != 1" => #12
                                    SubscribeSubject AnimalConfig
                                    -> MemberSelector(Selector=Sound.AblBlock) => #1
                                    SubscribeSubject BlockTrial
                                    -> NotEqual(Operand=IntProperty(Value=1)) => #3
                                    #1, #3 -> CombineLatest
                                    -> LogicalAnd
                                    -> WorkflowOutput
                                SubscribeSubject AblIndexArray => #13
                                SubscribeSubject AblIndex => #14
                                #13, #14 -> CombineLatest => #15
                                #12, #15 -> WithLatestFrom
                                -> InputMapping(Selector=Item2.Item1, Value(Selector=Item2.Item2))
                                -> Index(Operand=IntProperty(Value=0)) => #18
                                #0 -> Condition "AblBlock && BlockTrial == 1"
                                    SubscribeSubject AnimalConfig
                                    -> MemberSelector(Selector=Sound.AblBlock) => #1
                                    SubscribeSubject BlockTrial
                                    -> Equal(Operand=IntProperty(Value=1)) => #3
                                    #1, #3 -> CombineLatest
                                    -> LogicalAnd
                                    -> WorkflowOutput
                                -> GroupWorkflow NewBlockAbl => #20
                                    SubscribeSubject LevelConfig
                                    -> MemberSelector(Selector=Sound.Abl.AblList.Count)
                                    -> InputMapping(Selector=it, Count(Selector=it))
                                    -> SelectMany GenerateSideArray
                                        ExternalizedMapping(Count)
                                        -> Range(Start=0, Count=3)
                                        -> ToArray
                                        -> WorkflowOutput
                                    -> CF.ShuffleArray
                                    -> MulticastSubject AblIndexArray

                                    WorkflowInput Source1 => #6
                                    SubscribeSubject AblIndex => #7
                                    #6, #7 -> WithLatestFrom
                                    -> MemberSelector(Selector=Item2)
                                    -> Add(Operand=IntProperty(Value=1)) => #10
                                    -> Condition => #11
                                        WorkflowInput Source1 => #0
                                        SubscribeSubject LevelConfig
                                        -> MemberSelector(Selector=Sound.Abl.AblList.Count) => #2
                                        #0, #2 -> CombineLatest
                                        -> GreaterThanOrEqual
                                        -> WorkflowOutput
                                    SubscribeSubject AblIndexArray => #12
                                    #11, #12 -> WithLatestFrom
                                    -> MemberSelector(Selector=Item2)
                                    -> CF.ShuffleArray
                                    -> MulticastSubject AblIndexArray
                                    -> Index(Operand=IntProperty(Value=0))
                                    -> Sink ResetAblIndex => #18
                                        WorkflowInput Source1
                                        -> IntProperty(Value=-1)
                                        -> MulticastSubject AblIndex
                                        -> WorkflowOutput
                                    #10 -> Condition
                                        WorkflowInput Source1 => #0
                                        SubscribeSubject LevelConfig
                                        -> MemberSelector(Selector=Sound.Abl.AblList.Count) => #2
                                        #0, #2 -> CombineLatest
                                        -> LessThan
                                        -> WorkflowOutput
                                    -> MulticastSubject AblIndex => #20
                                    SubscribeSubject AblIndexArray => #21
                                    #20, #21 -> WithLatestFrom
                                    -> InputMapping(Selector=Item2, Value(Selector=Item1))
                                    -> Index(Operand=IntProperty(Value=0)) => #24
                                    #18, #24 -> Merge
                                    -> WorkflowOutput
                                #11, #18, #20 -> Merge
                                -> WorkflowOutput
                            SubscribeSubject LevelConfig
                            -> MemberSelector(Selector=Sound.Abl.AblList) => #3
                            #1, #3 -> WithLatestFrom
                            -> InputMapping(Selector=Item2, Value(Selector=Item1))
                            -> Index(Operand=IntProperty(Value=0))
                            -> WorkflowOutput
                        #0 -> Condition UseFixedABL => #3
                            SubscribeSubject LevelConfig
                            -> MemberSelector(Selector=Sound.Abl.UseFixedAbl) => #1
                            SubscribeSubject IsLateralizedTrial => #2
                            #1, #2 -> CombineLatest
                            -> LogicalAnd
                            -> WorkflowOutput
                        SubscribeSubject LevelConfig
                        -> MemberSelector(Selector=Sound.Abl.FixedAbl) => #5
                        #3, #5 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2) => #7
                        #2, #7 -> Merge
                        -> MulticastSubject ABL
                        -> WorkflowOutput
                    -> GroupWorkflow ILD
                        WorkflowInput Source1 => #0
                        -> Condition ForceTrialSide => #1
                            SubscribeSubject ForcedTrialSide => #0
                            ExternalizedMapping(Value(DisplayName=NotEqual)) => #1
                            #0, #1 -> NotEqual(Operand=IntProperty(Value=0))
                            -> WorkflowOutput
                        SubscribeSubject ForcedTrialSide => #2
                        #1, #2 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2) => #4
                        #0 -> Condition !ForceTrialSide => #5
                            SubscribeSubject ForcedTrialSide => #0
                            ExternalizedMapping(Value(DisplayName=Equal)) => #1
                            #0, #1 -> Equal(Operand=IntProperty(Value=0))
                            -> WorkflowOutput
                        -> Condition IsRandom
                            SubscribeSubject AnimalConfig
                            -> MemberSelector(Selector=Sound.PseudoRandomSide)
                            -> Equal(Operand=BooleanProperty(Value=false))
                            -> WorkflowOutput
                        -> GroupWorkflow RandomSide => #7
                            WorkflowInput Source1 => #0
                            SubscribeSubject Random
                            -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1) => #2
                            #0, #2 -> WithLatestFrom
                            -> MemberSelector(Selector=Item2)
                            -> Bonsai.Numerics.Distributions.Sample => #5
                            -> Condition IsLeft
                                WorkflowInput Source1 => #0
                                SubscribeSubject LeftProbability => #1
                                #0, #1 -> CombineLatest
                                -> LessThan
                                -> WorkflowOutput
                            -> IntProperty(Value=-1) => #7
                            #5 -> Condition IsRight
                                WorkflowInput Source1 => #0
                                SubscribeSubject LeftProbability => #1
                                #0, #1 -> CombineLatest
                                -> GreaterThanOrEqual
                                -> WorkflowOutput
                            -> IntProperty(Value=1) => #9
                            #7, #9 -> Merge
                            -> WorkflowOutput
                        #5 -> Condition IsPseudoRandom => #8
                            SubscribeSubject AnimalConfig
                            -> MemberSelector(Selector=Sound.PseudoRandomSide)
                            -> WorkflowOutput
                        SubscribeSubject SideIndex => #9
                        #8, #9 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> Sink UpdateSideIndex => #12
                            WorkflowInput Source1
                            -> Add(Operand=IntProperty(Value=1)) => #1
                            -> Condition IsFinalIndex => #2
                                WorkflowInput Source1 => #0
                                SubscribeSubject AnimalConfig
                                -> MemberSelector(Selector=Sound.MaxSide)
                                -> Multiply(Operand=IntProperty(Value=2)) => #3
                                #0, #3 -> CombineLatest
                                -> GreaterThanOrEqual
                                -> WorkflowOutput
                            #1 -> Condition !IsFinalIndex
                                WorkflowInput Source1 => #0
                                SubscribeSubject AnimalConfig
                                -> MemberSelector(Selector=Sound.MaxSide)
                                -> Multiply(Operand=IntProperty(Value=2)) => #3
                                #0, #3 -> CombineLatest
                                -> LessThan
                                -> WorkflowOutput
                            -> IntProperty(Value=0)
                            -> MulticastSubject NewSideArray => #5
                            #2, #5 -> Merge
                            -> MulticastSubject SideIndex
                            -> WorkflowOutput
                        SubscribeSubject SideArray => #13
                        #12, #13 -> WithLatestFrom
                        -> InputMapping(Selector=Item2, Value(Selector=Item1))
                        -> Index(Operand=IntProperty(Value=0)) => #16
                        #7, #16 -> Merge => #17
                        #4, #17 -> Merge
                        -> MulticastSubject LeftOrRight => #19
                        -> Condition IsLateralizedTrial => #20
                            SubscribeSubject IsLateralizedTrial
                            -> WorkflowOutput
                        SubscribeSubject ABL => #21
                        #20, #21 -> WithLatestFrom
                        -> Sink ModifyABL => #23
                            WorkflowInput Source1
                            -> MemberSelector(Selector=Item2)
                            -> Divide(Operand=DoubleProperty(Value=2))
                            -> MulticastSubject ABL
                            -> WorkflowOutput
                        #19 -> Condition !IsLateralizedTrial => #24
                            SubscribeSubject IsLateralizedTrial
                            -> Equal(Operand=BooleanProperty(Value=false))
                            -> WorkflowOutput
                        -> GroupWorkflow PickRandomIndex => #25
                            WorkflowInput Source1 => #0
                            SubscribeSubject ILDs
                            -> MemberSelector(Selector=Length)
                            -> Subtract(Operand=IntProperty(Value=1)) => #3
                            SubscribeSubject Random => #4
                            #3, #4 -> WithLatestFrom
                            -> InputMapping(Selector=Item2, Upper(Selector=Item1))
                            -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=4) => #7
                            #0, #7 -> WithLatestFrom
                            -> MemberSelector(Selector=Item2)
                            -> Bonsai.Numerics.Distributions.Sample => #10
                            SubscribeSubject ILDs => #11
                            #10, #11 -> WithLatestFrom
                            -> InputMapping(Selector=Item2, Value(Selector=Item1))
                            -> Index(Operand=IntProperty(Value=1))
                            -> WorkflowOutput
                        #24, #25 -> Zip => #26
                        #23, #26 -> Merge
                        -> Multiply
                        -> MulticastSubject ILD
                        -> WorkflowOutput
                    -> GroupWorkflow IntensityCalculation
                        WorkflowInput Source1 => #0
                        SubscribeSubject ABL => #1
                        #0, #1 -> WithLatestFrom => #2
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: Item2 + (Item1 / 2)
                        -> MulticastSubject RightIntensity => #4
                        #2 -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: Item2 - (Item1 / 2)
                        -> MulticastSubject LeftIntensity => #6
                        #4, #6 -> Zip
                        -> WorkflowOutput
                    -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=correct_side, PrintSubjectName=PrintCode)
                    -> Delay(DueTime=PT0.1S)
                    -> BooleanProperty(Value=false)
                    -> MulticastSubject ResetForcedSide => #9
                    #0 -> Condition "RepeatTrial != 0"
                        SubscribeSubject RepeatTrial
                        -> WorkflowOutput
                    -> Delay(DueTime=PT0.1S)
                    -> BooleanProperty(Value=false)
                    -> MulticastSubject RepeatTrial => #13
                    #9, #13 -> Merge
                    -> WorkflowOutput
                -> WorkflowOutput

            GroupWorkflow PickRandomSound
                SubscribeSubject ITIStart => #0
                SubscribeSubject TrialEnd => #1
                #0, #1 -> Gate => #2
                SubscribeSubject SetupConfig
                -> MemberSelector(Selector=Sounds.Count)
                -> Subtract(Operand=IntProperty(Value=1)) => #5
                SubscribeSubject Random => #6
                #5, #6 -> WithLatestFrom
                -> InputMapping(Selector=Item2, Upper(Selector=Item1))
                -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=4) => #9
                #2, #9 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Bonsai.Numerics.Distributions.Sample => #12
                SubscribeSubject SetupConfig
                -> MemberSelector(Selector=Sounds) => #14
                #12, #14 -> WithLatestFrom
                -> InputMapping(Selector=Item2, Value(Selector=Item1))
                -> Index(Operand=IntProperty(Value=4))
                -> MulticastSubject SoundIndex
                -> WorkflowOutput

            GroupWorkflow IsShortSound
                SubscribeSubject ITIStart => #0
                SubscribeSubject TrialEnd => #1
                #0, #1 -> Gate => #2
                SubscribeSubject Random
                -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1) => #4
                #2, #4 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Bonsai.Numerics.Distributions.Sample => #7
                -> Condition !IsShortDuration
                    WorkflowInput Source1 => #0
                    SubscribeSubject AnimalConfig
                    -> MemberSelector(Selector=Sound.ShortDurationRatio) => #2
                    #0, #2 -> CombineLatest
                    -> GreaterThanOrEqual
                    -> WorkflowOutput
                -> BooleanProperty(Value=false) => #9
                #7 -> Condition IsShortDuration
                    WorkflowInput Source1 => #0
                    SubscribeSubject AnimalConfig
                    -> MemberSelector(Selector=Sound.ShortDurationRatio) => #2
                    #0, #2 -> CombineLatest
                    -> LessThan
                    -> WorkflowOutput
                -> BooleanProperty(Value=true) => #11
                #9, #11 -> Merge
                -> MulticastSubject IsShortDuration
                -> WorkflowOutput

            GroupWorkflow Optogenetics
                GroupWorkflow UpdateOptoAborts
                    SubscribeSubject Outcome
                    -> Bonsai.Scripting.Expressions.ExpressionCondition => #1
                      Expression: it == -2
                    SubscribeSubject OptoAborts => #2
                    #1, #2 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> Add(Operand=IntProperty(Value=1))
                    -> MulticastSubject OptoAborts
                    -> WorkflowOutput

                GroupWorkflow UpdateOptoProtocol
                    SubscribeSubject OptoTrial
                    -> Bonsai.Scripting.Expressions.ExpressionCondition IsOptoTrial => #1
                      Expression: it == 1
                    SubscribeSubject Random
                    -> Condition => #3
                        SubscribeSubject AnimalConfig
                        -> MemberSelector(Selector=Optogenetics.UseOpto)
                        -> WorkflowOutput
                    SubscribeSubject AnimalConfig
                    -> MemberSelector(Selector=Optogenetics.Protocols)
                    -> Merge
                    -> MemberSelector(Selector=Probability)
                    -> ToArray => #8
                    #3, #8 -> WithLatestFrom
                    -> InputMapping(Selector=Item1, ProbabilityMass(Selector=Item2))
                    -> Bonsai.Numerics.Distributions.CreateCategorical(ProbabilityMass(double=1, double=1)) => #11
                    #1, #11 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> Bonsai.Numerics.Distributions.Sample => #14
                    SubscribeSubject AnimalConfig
                    -> MemberSelector(Selector=Optogenetics.Protocols) => #16
                    #14, #16 -> WithLatestFrom
                    -> InputMapping(Selector=Item2, Value(Selector=Item1))
                    -> Index(Operand=IntProperty(Value=0))
                    -> MulticastSubject OptoProtocol
                    -> WorkflowOutput

                SubscribeSubject ITIStart => #2
                SubscribeSubject TrialEnd => #3
                #2, #3 -> Gate
                -> Condition "RepeatTrial == 0"
                    SubscribeSubject RepeatTrial
                    -> Equal(Operand=BooleanProperty(Value=false))
                    -> WorkflowOutput
                -> IntProperty(Value=0) => #6
                SubscribeSubject OptoAborts
                -> Condition GreaterThanOrEqual => #8
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> GreaterThanOrEqual(Operand=IntProperty(Value=3)) => #2
                    SubscribeSubject OptoTrial
                    -> NotEqual(Operand=DoubleProperty(Value=0)) => #4
                    #2, #4 -> CombineLatest
                    -> LogicalAnd
                    -> WorkflowOutput
                #6, #8 -> Merge => #9
                SubscribeSubject Random
                -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1) => #11
                #9, #11 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Bonsai.Numerics.Distributions.Sample => #14
                -> Condition
                    WorkflowInput Source1 => #0
                    SubscribeSubject AnimalConfig => #1
                    -> MemberSelector(Selector=Optogenetics.OptoRatio)
                    -> PropertyMapping(Value) => #3
                    #0, #3 -> GreaterThan(Operand=DoubleProperty(Value=0.7)) => #4
                    #1 -> MemberSelector(Selector=Optogenetics.UseOpto) => #5
                    #4, #5 -> CombineLatest
                    -> LogicalAnd
                    -> WorkflowOutput
                -> IntProperty(Value=0) => #16
                #14 -> Condition
                    WorkflowInput Source1 => #0
                    SubscribeSubject AnimalConfig => #1
                    -> MemberSelector(Selector=Optogenetics.OptoRatio)
                    -> PropertyMapping(Value) => #3
                    #0, #3 -> LessThanOrEqual(Operand=DoubleProperty(Value=0.7)) => #4
                    #1 -> MemberSelector(Selector=Optogenetics.UseOpto) => #5
                    #4, #5 -> CombineLatest
                    -> LogicalAnd
                    -> WorkflowOutput
                -> IntProperty(Value=1) => #18
                #16, #18 -> Merge
                -> MulticastSubject OptoTrial
                -> IntProperty(Value=0)
                -> MulticastSubject OptoAborts => #22
                SubscribeSubject AnimalConfig
                -> MemberSelector(Selector=Optogenetics.UseOpto) => #24
                #22, #24 -> SubscribeWhen
                -> WorkflowOutput

            GroupWorkflow ForcedTrialSide
                SubscribeSubject TrialLeftButton => #0
                -> Bonsai.Scripting.Expressions.ExpressionCondition
                  Expression: it
                -> IntProperty(Value=-1) => #2
                SubscribeSubject TrialRightButton => #3
                #0, #3 -> CombineLatest
                -> LogicalOr
                -> Bonsai.Scripting.Expressions.ExpressionCondition
                  Expression: !it
                -> IntProperty(Value=0) => #7
                #3 -> Bonsai.Scripting.Expressions.ExpressionCondition
                  Expression: it
                -> IntProperty(Value=1) => #9
                #2, #7, #9 -> Merge
                -> MulticastSubject ForcedTrialSide

                SubscribeSubject TrialLeftButton
                -> Bonsai.Scripting.Expressions.ExpressionCondition => #13
                  Expression: it
                SubscribeSubject ResetForcedSide => #14
                #13, #14 -> Merge
                -> BooleanProperty(Value=false)
                -> MulticastSubject TrialRightButtonState
                SubscribeSubject TrialRightButton
                -> Bonsai.Scripting.Expressions.ExpressionCondition => #19
                  Expression: it
                #19, #14 -> Merge
                -> BooleanProperty(Value=false)
                -> MulticastSubject TrialLeftButtonState

            GroupWorkflow FixationTime
                SubscribeSubject ITIStart => #0
                SubscribeSubject TrialEnd => #1
                #0, #1 -> Gate
                -> Condition "RepeatTrial == 0" => #3
                    SubscribeSubject RepeatTrial
                    -> Equal(Operand=BooleanProperty(Value=false)) => #1
                    SubscribeSubject Outcome
                    -> LessThan(Operand=IntProperty(Value=0)) => #3
                    SubscribeSubject LevelConfig
                    -> MemberSelector(Selector=TrialRepetition.RepeatFixTime)
                    -> Equal(Operand=BooleanProperty(Value=false)) => #6
                    #3, #6 -> CombineLatest
                    -> LogicalAnd => #8
                    #1, #8 -> CombineLatest
                    -> LogicalOr
                    -> WorkflowOutput
                -> Condition IsTraining
                    SubscribeSubject TrainingLevel => #0
                    SubscribeSubject TrainingConfig
                    -> MemberSelector(Selector=Levels.Count) => #2
                    #0, #2 -> CombineLatest
                    -> NotEqual
                    -> WorkflowOutput
                -> GroupWorkflow RandomSoundOnsetTime => #5
                    WorkflowInput Source1 => #0
                    GroupWorkflow SoundOnsetExponentialDistribution => #1
                        SubscribeSubject LevelConfig
                        -> MemberSelector(Selector=FtExpMean)
                        -> Bonsai.Dsp.Pow(Power=-1) => #2
                        SubscribeSubject Random => #3
                        #2, #3 -> WithLatestFrom
                        -> InputMapping(Selector=Item2, TypeMapping=TypeMapping<System.Random>, Rate(Selector=Item1))
                        -> Bonsai.Numerics.Distributions.CreateExponential(Rate=0.0025)
                        -> WorkflowOutput
                    #0, #1 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2) => #3
                    -> Condition RandomizeFT
                        SubscribeSubject LevelConfig
                        -> MemberSelector(Selector=FtExpMean)
                        -> NotEqual(Operand=DoubleProperty(Value=0))
                        -> WorkflowOutput
                    -> Bonsai.Numerics.Distributions.Sample => #5
                    -> Condition GreaterThan5x => #6
                        WorkflowInput Source1 => #0
                        SubscribeSubject LevelConfig
                        -> MemberSelector(Selector=FtExpMean)
                        -> Multiply(Operand=DoubleProperty(Value=5)) => #3
                        #0, #3 -> CombineLatest
                        -> GreaterThan
                        -> WorkflowOutput
                    SubscribeSubject LevelConfig
                    -> MemberSelector(Selector=FtExpMean)
                    -> Multiply(Operand=DoubleProperty(Value=5)) => #9
                    #6, #9 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2) => #11
                    #5 -> Condition LessThanOrEqualTo5x => #12
                        WorkflowInput Source1 => #0
                        SubscribeSubject LevelConfig
                        -> MemberSelector(Selector=FtExpMean)
                        -> Multiply(Operand=DoubleProperty(Value=5)) => #3
                        #0, #3 -> CombineLatest
                        -> LessThanOrEqual
                        -> WorkflowOutput
                    #11, #12 -> Merge => #13
                    #3 -> Condition !RandomizeFT
                        SubscribeSubject LevelConfig
                        -> MemberSelector(Selector=FtExpMean)
                        -> Equal(Operand=DoubleProperty(Value=0))
                        -> WorkflowOutput
                    -> DoubleProperty(Value=0) => #15
                    #13, #15 -> Merge
                    -> WorkflowOutput
                SubscribeSubject BaseFT => #6
                #5, #6 -> WithLatestFrom
                -> Add
                -> MulticastSubject IntendedSoundOnset => #9
                #3 -> Condition !IsTraining
                    SubscribeSubject TrainingLevel => #0
                    SubscribeSubject TrainingConfig
                    -> MemberSelector(Selector=Levels.Count) => #2
                    #0, #2 -> CombineLatest
                    -> Equal
                    -> WorkflowOutput
                -> IntProperty(Value=0) => #11
                SubscribeSubject OptoAborts
                -> Condition GreaterThanOrEqual => #13
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> GreaterThanOrEqual(Operand=IntProperty(Value=3)) => #2
                    SubscribeSubject OptoTrial
                    -> NotEqual(Operand=DoubleProperty(Value=0)) => #4
                    #2, #4 -> CombineLatest
                    -> LogicalAnd
                    -> WorkflowOutput
                #11, #13 -> Merge
                -> GroupWorkflow EvaluateCatchTrialCase
                    WorkflowInput Source1 => #0
                    SubscribeSubject Random => #1
                    SubscribeSubject AnimalConfig
                    -> MemberSelector(Selector=FixationTime.CatchTrials.Probability) => #3
                    #1, #3 -> Zip
                    -> InputMapping(Selector=Item1, P(Selector=Item2))
                    -> Bonsai.Numerics.Distributions.CreateBinomial(P=0, N=1) => #6
                    #0, #6 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> Bonsai.Numerics.Distributions.Sample
                    -> Bonsai.Scripting.Expressions.ExpressionTransform ConvertToBoolean
                      Expression: Convert.ToBoolean(it)
                    -> MulticastSubject CatchTrial => #11
                    -> Condition !IsCatchTrial => #12
                        WorkflowInput Source1
                        -> Equal(Operand=BooleanProperty(Value=false))
                        -> WorkflowOutput
                    SubscribeSubject AnimalConfig
                    -> MemberSelector(Selector=FixationTime.Task) => #14
                    #12, #14 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2) => #16
                    #11 -> Condition IsCatchTrial => #17
                        WorkflowInput Source1
                        -> WorkflowOutput
                    SubscribeSubject AnimalConfig
                    -> MemberSelector(Selector=FixationTime.CatchTrials.Distribution) => #19
                    #17, #19 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2) => #21
                    #16, #21 -> Merge
                    -> WorkflowOutput
                -> SelectMany FixTimeByDist => #16
                    WorkflowInput Source1
                    -> Disable Take(Count=1)
                    -> Merge => #2
                    -> Bonsai.Scripting.Expressions.ExpressionCondition Constant
                      Expression: string.Equals(it.distribution, "constant")
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
                      Expression: Convert.ToDouble(it.value)
                    #2 -> Bonsai.Scripting.Expressions.ExpressionCondition Exponential => #5
                      Expression: string.Equals(it.distribution, "exponential")
                    -> Bonsai.Scripting.Expressions.ExpressionTransform Mean
                      Expression: Convert.ToDouble(it.mean)
                    -> Bonsai.Dsp.Pow(Power=-1) => #7
                    SubscribeSubject Random => #8
                    #7, #8 -> WithLatestFrom
                    -> InputMapping(Selector=Item2, Rate(Selector=Item1))
                    -> Bonsai.Numerics.Distributions.CreateExponential(Rate=0.005)
                    -> Bonsai.Numerics.Distributions.Sample => #12
                    #5 -> Bonsai.Scripting.Expressions.ExpressionTransform MaxValue => #13
                      Expression: Convert.ToDouble(it.max_value)
                    #12, #13 -> Zip => #14
                    -> Bonsai.Scripting.Expressions.ExpressionCondition
                      Expression: Item1 <= Item2
                    -> MemberSelector(Selector=Item1) => #16
                    #14 -> Bonsai.Scripting.Expressions.ExpressionCondition
                      Expression: Item1 > Item2
                    -> MemberSelector(Selector=Item2) => #18
                    #16, #18 -> Merge => #19
                    #2 -> Bonsai.Scripting.Expressions.ExpressionCondition Uniform => #20
                      Expression: string.Equals(it.distribution, "uniform")
                    -> Bonsai.Scripting.Expressions.ExpressionTransform Lower => #21
                      Expression: Convert.ToDouble(it.lower)
                    #20 -> Bonsai.Scripting.Expressions.ExpressionTransform Upper => #22
                      Expression: Convert.ToDouble(it.upper)
                    #21, #22 -> Zip => #23
                    SubscribeSubject Random => #24
                    #23, #24 -> WithLatestFrom
                    -> InputMapping(Selector=Item2, Lower(Selector=Item1.Item1), Upper(Selector=Item1.Item2))
                    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                    -> Bonsai.Numerics.Distributions.Sample => #28
                    #2 -> Bonsai.Scripting.Expressions.ExpressionCondition Gaussian => #29
                      Expression: string.Equals(it.distribution, "gaussian")
                    -> Bonsai.Scripting.Expressions.ExpressionTransform Mean => #30
                      Expression: Convert.ToDouble(it.mean)
                    #29 -> Bonsai.Scripting.Expressions.ExpressionTransform StdDev => #31
                      Expression: Convert.ToDouble(it.std_dev)
                    #30, #31 -> Zip => #32
                    SubscribeSubject Random => #33
                    #32, #33 -> WithLatestFrom
                    -> InputMapping(Selector=Item2, Mean(Selector=Item1.Item1), StdDev(Selector=Item1.Item2))
                    -> Bonsai.Numerics.Distributions.CreateNormal(Mean=0, StdDev=1)
                    -> Bonsai.Numerics.Distributions.Sample => #37
                    #29 -> Bonsai.Scripting.Expressions.ExpressionTransform MinValue => #38
                      Expression: Convert.ToDouble(it.min_value)
                    #29 -> Bonsai.Scripting.Expressions.ExpressionTransform MaxValue => #39
                      Expression: Convert.ToDouble(it.max_value)
                    #37, #38, #39 -> Zip => #40
                    -> Bonsai.Scripting.Expressions.ExpressionCondition
                      Expression: Item1 < Item2
                    -> MemberSelector(Selector=Item2) => #42
                    #40 -> Bonsai.Scripting.Expressions.ExpressionCondition
                      Expression: Item1 >= Item2 && Item1 <= Item3
                    -> MemberSelector(Selector=Item1) => #44
                    #40 -> Bonsai.Scripting.Expressions.ExpressionCondition
                      Expression: Item1 > Item3
                    -> MemberSelector(Selector=Item3) => #46
                    #42, #44, #46 -> Merge => #47
                    #4, #19, #28, #47 -> Merge
                    -> ToArray
                    -> WorkflowOutput
                -> SelectMany FixTime
                    WorkflowInput Source1
                    -> Take(Count=1)
                    -> Merge
                    -> Sum
                    -> WorkflowOutput
                -> MulticastSubject IntendedSoundOnset => #18
                #16 -> SelectMany OptoTime
                    WorkflowInput Source1
                    -> Take(Count=1)
                    -> Merge => #2
                    SubscribeSubject AnimalConfig
                    -> MemberSelector(Selector=FixationTime.Task)
                    -> Merge => #5
                    #2, #5 -> Zip
                    -> Bonsai.Scripting.Expressions.ExpressionCondition
                      Expression: Convert.ToBoolean(Item2.opto_onset)
                    -> MemberSelector(Selector=Item1)
                    -> Prepend(Operand=DoubleProperty(Value=0))
                    -> Sum
                    -> WorkflowOutput
                -> MulticastSubject IntendedOptoOnset => #20
                #9, #18, #20 -> Merge
                -> WorkflowOutput

        GroupWorkflow AutoUpdated
            GroupWorkflow BlockPerformance
                SubscribeSubject RightAnswers => #0
                SubscribeSubject TrialsCompleted => #1
                #0, #1 -> CombineLatest
                -> Divide
                -> MulticastSubject BlockPerformance
                -> WorkflowOutput

            GroupWorkflow BlockAbortRatio
                SubscribeSubject TrialsAborted => #0
                SubscribeSubject BlockTrial => #1
                #0, #1 -> CombineLatest
                -> Divide
                -> MulticastSubject BlockAbortRatio
                -> WorkflowOutput

            GroupWorkflow TimedFT
                SubscribeSubject RTStart => #0
                SubscribeSubject CNPStart => #1
                #0, #1 -> WithLatestFrom
                -> Subtract
                -> Multiply(Operand=DoubleProperty(Value=1000))
                -> MulticastSubject TimedFT
                -> Bonsai.Scripting.Expressions.ExpressionCondition
                  Expression: !Double.IsNaN(it) && it != 0
                -> Skip(Count=1)
                -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=fixation_time, PrintSubjectName=PrintCode)

                SubscribeSubject OptoActivationDuringTask => #9
                SubscribeSubject CNPStart => #10
                #9, #10 -> WithLatestFrom
                -> Subtract
                -> Multiply(Operand=DoubleProperty(Value=1000))
                -> MulticastSubject TimedOptoOnset

            GroupWorkflow RepeatErrors
                SubscribeSubject LevelConfig
                -> MemberSelector(Selector=TrialRepetition.RepeatErrors)
                -> MulticastSubject RepeatErrorsButtonState => #2
                SubscribeSubject RepeatErrorsButton => #3
                #2, #3 -> Merge
                -> MulticastSubject RepeatErrors
                -> WorkflowOutput

                Disable SubscribeSubject RepeatErrorsButton
                -> Disable MulticastSubject RepeatErrors
                -> Disable WorkflowOutput

                Disable SubscribeSubject LevelConfig
                -> Disable MemberSelector(Selector=TrialRepetition.RepeatErrors)
                -> Disable MulticastSubject RepeatErrorsButtonState

            GroupWorkflow Outcome
                SubscribeSubject Outcome
                -> Bonsai.Scripting.Expressions.ExpressionCondition
                  Expression: it == 2
                -> GroupWorkflow ParseOutcome => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=AbortType)) => #1
                    #0, #1 -> IntProperty(Value=0) => #2
                    ExternalizedMapping(Value(DisplayName=Success)) => #3
                    #0, #3 -> IntProperty(Value=1) => #4
                    #2, #4 -> Zip
                    -> WorkflowOutput
                SubscribeSubject Outcome
                -> Bonsai.Scripting.Expressions.ExpressionCondition
                  Expression: it == 1
                -> GroupWorkflow ParseOutcome => #5
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=AbortType)) => #1
                    #0, #1 -> IntProperty(Value=0) => #2
                    ExternalizedMapping(Value(DisplayName=Success)) => #3
                    #0, #3 -> IntProperty(Value=-1) => #4
                    #2, #4 -> Zip
                    -> WorkflowOutput
                SubscribeSubject Outcome
                -> Bonsai.Scripting.Expressions.ExpressionCondition
                  Expression: it == -1
                -> GroupWorkflow ParseOutcome => #8
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=AbortType)) => #1
                    #0, #1 -> IntProperty(Value=1) => #2
                    ExternalizedMapping(Value(DisplayName=Success)) => #3
                    #0, #3 -> IntProperty(Value=0) => #4
                    #2, #4 -> Zip
                    -> WorkflowOutput
                SubscribeSubject Outcome
                -> Bonsai.Scripting.Expressions.ExpressionCondition
                  Expression: it == -2
                -> GroupWorkflow ParseOutcome => #11
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=AbortType)) => #1
                    #0, #1 -> IntProperty(Value=2) => #2
                    ExternalizedMapping(Value(DisplayName=Success)) => #3
                    #0, #3 -> IntProperty(Value=0) => #4
                    #2, #4 -> Zip
                    -> WorkflowOutput
                SubscribeSubject Outcome
                -> Bonsai.Scripting.Expressions.ExpressionCondition
                  Expression: it == -3
                -> GroupWorkflow ParseOutcome => #14
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=AbortType)) => #1
                    #0, #1 -> IntProperty(Value=3) => #2
                    ExternalizedMapping(Value(DisplayName=Success)) => #3
                    #0, #3 -> IntProperty(Value=0) => #4
                    #2, #4 -> Zip
                    -> WorkflowOutput
                SubscribeSubject Outcome
                -> Bonsai.Scripting.Expressions.ExpressionCondition
                  Expression: it == -4
                -> GroupWorkflow ParseOutcome => #17
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=AbortType)) => #1
                    #0, #1 -> IntProperty(Value=4) => #2
                    ExternalizedMapping(Value(DisplayName=Success)) => #3
                    #0, #3 -> IntProperty(Value=0) => #4
                    #2, #4 -> Zip
                    -> WorkflowOutput
                SubscribeSubject Outcome
                -> Bonsai.Scripting.Expressions.ExpressionCondition
                  Expression: it == -5
                -> GroupWorkflow ParseOutcome => #20
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=AbortType)) => #1
                    #0, #1 -> IntProperty(Value=5) => #2
                    ExternalizedMapping(Value(DisplayName=Success)) => #3
                    #0, #3 -> IntProperty(Value=0) => #4
                    #2, #4 -> Zip
                    -> WorkflowOutput
                SubscribeSubject Outcome
                -> Bonsai.Scripting.Expressions.ExpressionCondition
                  Expression: it == -6
                -> GroupWorkflow ParseOutcome => #23
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=AbortType)) => #1
                    #0, #1 -> IntProperty(Value=6) => #2
                    ExternalizedMapping(Value(DisplayName=Success)) => #3
                    #0, #3 -> IntProperty(Value=0) => #4
                    #2, #4 -> Zip
                    -> WorkflowOutput
                SubscribeSubject Outcome
                -> Bonsai.Scripting.Expressions.ExpressionCondition
                  Expression: it == -7
                -> GroupWorkflow ParseOutcome => #26
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=AbortType)) => #1
                    #0, #1 -> IntProperty(Value=7) => #2
                    ExternalizedMapping(Value(DisplayName=Success)) => #3
                    #0, #3 -> IntProperty(Value=0) => #4
                    #2, #4 -> Zip
                    -> WorkflowOutput
                SubscribeSubject Outcome
                -> Bonsai.Scripting.Expressions.ExpressionCondition
                  Expression: it == -8
                -> GroupWorkflow ParseOutcome => #29
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=AbortType)) => #1
                    #0, #1 -> IntProperty(Value=8) => #2
                    ExternalizedMapping(Value(DisplayName=Success)) => #3
                    #0, #3 -> IntProperty(Value=0) => #4
                    #2, #4 -> Zip
                    -> WorkflowOutput
                #2, #5, #8, #11, #14, #17, #20, #23, #26, #29 -> Merge
                -> MulticastSubject ParsedOutcome
                -> WorkflowOutput

            GroupWorkflow Bias
                SubscribeSubject Outcome => #0
                SubscribeSubject ResponsePoke => #1
                #0, #1 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #3
                -> Bonsai.Scripting.Expressions.ExpressionCondition => #4
                  Expression: !Double.IsNaN(it)
                #3 -> Bonsai.Scripting.Expressions.ExpressionCondition
                  Expression: Double.IsNaN(it)
                -> DoubleProperty(Value=0) => #6
                #4, #6 -> Merge
                -> SelectMany "Add Element"
                    SubscribeSubject PreviousSides
                    -> Take(Count=1)
                    -> Concat => #2
                    WorkflowInput Source1
                    -> Take(Count=1) => #4
                    #2, #4 -> Merge
                    -> ToArray
                    -> WorkflowOutput
                -> SelectMany "Remove First Element"
                    WorkflowInput Source1
                    -> Take(Count=1) => #1
                    -> Concat => #2
                    -> Condition "Not Last Element?" => #3
                        WorkflowInput Source1
                        -> ElementIndex
                        -> MemberSelector(Selector=Index) => #2
                        SubscribeSubject PreviousSides
                        -> MemberSelector(Selector=Length)
                        -> Subtract(Operand=IntProperty(Value=1))
                        -> IntProperty(Value=0) => #6
                        #2, #6 -> WithLatestFrom
                        -> NotEqual
                        -> WorkflowOutput
                    #2 -> Last => #4
                    #3, #4 -> TakeUntil
                    -> ToArray => #6
                    #1 -> Condition "Empty Array?" => #7
                        WorkflowInput Source1
                        -> MemberSelector(Selector=Length)
                        -> Equal(Operand=IntProperty(Value=0))
                        -> WorkflowOutput
                    #6, #7 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> MulticastSubject PreviousSides => #10
                -> SelectMany Sum => #11
                    WorkflowInput Source1
                    -> Merge
                    -> Accumulate
                    -> Last
                    -> WorkflowOutput
                #10 -> MemberSelector(Selector=Length)
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
                  Expression: Convert.ToDouble(it)
                #11, #13 -> Zip
                -> Divide
                -> MulticastSubject Bias
                -> WorkflowOutput

            GroupWorkflow BiasPerformance
                SubscribeSubject Outcome => #0
                -> Bonsai.Scripting.Expressions.ExpressionCondition IsHit
                  Expression: it == 2
                -> DoubleProperty(Value=1) => #2
                #0 -> Bonsai.Scripting.Expressions.ExpressionCondition IsMiss
                  Expression: it != 2
                -> DoubleProperty(Value=0) => #4
                #2, #4 -> Merge
                -> SelectMany "Add Element"
                    SubscribeSubject HitHistory
                    -> Take(Count=1)
                    -> Concat => #2
                    WorkflowInput Source1
                    -> Take(Count=1) => #4
                    #2, #4 -> Merge
                    -> ToArray
                    -> WorkflowOutput
                -> SelectMany "Remove First Element"
                    WorkflowInput Source1
                    -> Take(Count=1) => #1
                    -> Concat => #2
                    -> Condition "Not Last Element?" => #3
                        WorkflowInput Source1
                        -> ElementIndex
                        -> MemberSelector(Selector=Index) => #2
                        SubscribeSubject HitHistory
                        -> MemberSelector(Selector=Length)
                        -> Subtract(Operand=IntProperty(Value=1))
                        -> IntProperty(Value=0) => #6
                        #2, #6 -> WithLatestFrom
                        -> NotEqual
                        -> WorkflowOutput
                    #2 -> Last => #4
                    #3, #4 -> TakeUntil
                    -> ToArray => #6
                    #1 -> Condition "Empty Array?" => #7
                        WorkflowInput Source1
                        -> MemberSelector(Selector=Length)
                        -> Equal(Operand=IntProperty(Value=0))
                        -> WorkflowOutput
                    #6, #7 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> MulticastSubject HitHistory => #8
                -> SelectMany Sum => #9
                    WorkflowInput Source1
                    -> Merge
                    -> Accumulate
                    -> Last
                    -> WorkflowOutput
                #8 -> MemberSelector(Selector=Length) => #10
                #9, #10 -> Zip
                -> Divide
                -> MulticastSubject BiasPerformance
                -> WorkflowOutput

            GroupWorkflow LeftProbability
                SubscribeSubject PreferentialSide => #0
                -> Bonsai.Scripting.Expressions.ExpressionCondition IsLeft => #1
                  Expression: it == -1
                SubscribeSubject AnimalConfig
                -> MemberSelector(Selector=BiasedSession.BiasProbability) => #3
                #1, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #5
                #0 -> Bonsai.Scripting.Expressions.ExpressionCondition IsUnbiased
                  Expression: it == 0
                -> DoubleProperty(Value=0.5) => #7
                #0 -> Bonsai.Scripting.Expressions.ExpressionCondition IsRight => #8
                  Expression: it == 1
                SubscribeSubject AnimalConfig
                -> MemberSelector(Selector=BiasedSession.BiasProbability) => #10
                #8, #10 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
                  Expression: 1 - it
                #5, #7, #13 -> Merge
                -> MulticastSubject LeftProbability
                -> IntProperty(Value=0)
                -> MulticastSubject NewSideArray
                -> MulticastSubject SideIndex

            GroupWorkflow RTStart
                SubscribeSubject SoundCardMessages
                -> Harp.SoundCard.Parse(Register=Harp.SoundCard.TimestampedInputState)
                -> Condition => #2
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Value)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: Convert.ToBoolean(it & Harp.SoundCard.DigitalInputs.DI0)
                    -> WorkflowOutput
                SubscribeSubject Trial => #3
                #2, #3 -> Gate
                -> MemberSelector(Selector=Seconds)
                -> MulticastSubject RTStart

            GroupWorkflow TimedLED
                SubscribeSubject CDMessages
                -> Harp.CurrentDriver.Parse(Register=Harp.CurrentDriver.TimestampedDac0Voltage)
                -> Condition IsProtocolEnd
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Value)
                    -> Equal(Operand=FloatProperty(Value=0))
                    -> WorkflowOutput
                -> MemberSelector(Selector=Seconds) => #3
                SubscribeSubject CDMessages
                -> Harp.CurrentDriver.Parse(Register=Harp.CurrentDriver.TimestampedDac0Voltage)
                -> Condition IsProtocolStart
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Value)
                    -> NotEqual(Operand=FloatProperty(Value=0))
                    -> WorkflowOutput
                -> MemberSelector(Selector=Seconds) => #7
                #3, #7 -> WithLatestFrom => #8
                SubscribeSubject OptoActivationDuringTask => #9
                #8, #9 -> Gate
                -> Subtract
                -> MulticastSubject TimedLED
                -> WorkflowOutput

        GroupWorkflow TrialEnd
            GroupWorkflow RepeatTrial
                SubscribeSubject Outcome => #0
                -> Bonsai.Scripting.Expressions.ExpressionCondition
                  Expression: it == 2
                -> BooleanProperty(Value=false) => #2
                #0 -> Bonsai.Scripting.Expressions.ExpressionCondition => #3
                  Expression: it == 1
                SubscribeSubject RepeatErrors => #4
                #3, #4 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #6
                #0 -> Bonsai.Scripting.Expressions.ExpressionCondition => #7
                  Expression: it < 0
                SubscribeSubject LevelConfig
                -> MemberSelector(Selector=TrialRepetition.RepeatAborts) => #9
                #7, #9 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #11
                #2, #6, #11 -> Merge
                -> MulticastSubject RepeatTrial

            GroupWorkflow IntendedLNP
                SubscribeSubject Outcome
                -> Bonsai.Scripting.Expressions.ExpressionCondition => #1
                  Expression: it > 0
                SubscribeSubject IntendedLNP => #2
                SubscribeSubject AnimalConfig
                -> MemberSelector(Selector=LnpTime.Delta) => #4
                #2, #4 -> CombineLatest => #5
                #1, #5 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Add => #8
                -> Condition "IntendedLNP <= LNPTarget" => #9
                    WorkflowInput Source1 => #0
                    SubscribeSubject AnimalConfig
                    -> MemberSelector(Selector=LnpTime.Target) => #2
                    #0, #2 -> CombineLatest
                    -> LessThanOrEqual
                    -> WorkflowOutput
                #8 -> Condition "IntendedLNP > LNPTarget" => #10
                    WorkflowInput Source1 => #0
                    SubscribeSubject AnimalConfig
                    -> MemberSelector(Selector=LnpTime.Target) => #2
                    #0, #2 -> CombineLatest
                    -> GreaterThan
                    -> WorkflowOutput
                SubscribeSubject AnimalConfig
                -> MemberSelector(Selector=LnpTime.Target) => #12
                #10, #12 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #14
                #9, #14 -> Merge
                -> MulticastSubject IntendedLNP
                -> WorkflowOutput

            GroupWorkflow BaseRT
                SubscribeSubject Outcome
                -> Bonsai.Scripting.Expressions.ExpressionCondition => #1
                  Expression: it > 0
                SubscribeSubject BaseRT => #2
                SubscribeSubject AnimalConfig
                -> MemberSelector(Selector=ReactionTime.Delta) => #4
                #2, #4 -> CombineLatest => #5
                #1, #5 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Add => #8
                -> Condition "BaseRT <= RTTarget" => #9
                    WorkflowInput Source1 => #0
                    SubscribeSubject AnimalConfig
                    -> MemberSelector(Selector=ReactionTime.Target) => #2
                    #0, #2 -> CombineLatest
                    -> LessThanOrEqual => #4
                    SubscribeSubject LevelConfig
                    -> MemberSelector(Selector=ReactionTime.UseMinRt) => #6
                    #4, #6 -> CombineLatest
                    -> LogicalAnd
                    -> WorkflowOutput
                #8 -> Condition "BaseRT > RTTarget" => #10
                    WorkflowInput Source1 => #0
                    SubscribeSubject AnimalConfig
                    -> MemberSelector(Selector=ReactionTime.Target) => #2
                    #0, #2 -> CombineLatest
                    -> GreaterThan => #4
                    SubscribeSubject LevelConfig
                    -> MemberSelector(Selector=ReactionTime.UseMinRt) => #6
                    #4, #6 -> CombineLatest
                    -> LogicalAnd
                    -> WorkflowOutput
                SubscribeSubject AnimalConfig
                -> MemberSelector(Selector=ReactionTime.Target) => #12
                #10, #12 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #14
                #9, #14 -> Merge
                -> MulticastSubject BaseRT
                -> WorkflowOutput

            GroupWorkflow TimedRT
                SubscribeSubject Outcome
                -> Bonsai.Scripting.Expressions.ExpressionCondition => #1
                  Expression: it == -2
                SubscribeSubject TimedFT => #2
                SubscribeSubject IntendedOptoOnset => #3
                SubscribeSubject IntendedSoundOnset => #4
                #3, #4 -> CombineLatest
                -> Add => #6
                #2, #6 -> CombineLatest
                -> Subtract
                -> Divide(Operand=DoubleProperty(Value=1000)) => #9
                #1, #9 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject TimedRT

            Disable GroupWorkflow BaseSoundOnset
                SubscribeSubject Outcome
                -> Bonsai.Scripting.Expressions.ExpressionCondition => #1
                  Expression: it > 0
                SubscribeSubject BaseSoundOnset => #2
                SubscribeSubject AnimalConfig
                -> MemberSelector(Selector=FixationTime.SoundOnsetTime.Delta) => #4
                #2, #4 -> CombineLatest => #5
                #1, #5 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Add => #8
                -> Condition "BaseFT <= FTTarget" => #9
                    WorkflowInput Source1 => #0
                    SubscribeSubject AnimalConfig
                    -> MemberSelector(Selector=FixationTime.SoundOnsetTime.Target) => #2
                    #0, #2 -> CombineLatest
                    -> LessThanOrEqual
                    -> WorkflowOutput
                #8 -> Condition "BaseFT > FTTarget" => #10
                    WorkflowInput Source1 => #0
                    SubscribeSubject AnimalConfig
                    -> MemberSelector(Selector=FixationTime.SoundOnsetTime.Target) => #2
                    #0, #2 -> CombineLatest
                    -> GreaterThan
                    -> WorkflowOutput
                SubscribeSubject AnimalConfig
                -> MemberSelector(Selector=FixationTime.SoundOnsetTime.Target) => #12
                #10, #12 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #14
                #9, #14 -> Merge
                -> MulticastSubject BaseSoundOnset
                -> WorkflowOutput

            Disable GroupWorkflow BaseOptoOnset
                SubscribeSubject Outcome
                -> Bonsai.Scripting.Expressions.ExpressionCondition => #1
                  Expression: it > 0
                SubscribeSubject BaseOptoOnset => #2
                SubscribeSubject AnimalConfig
                -> MemberSelector(Selector=FixationTime.OptoOnsetTime.Delta) => #4
                #2, #4 -> CombineLatest => #5
                #1, #5 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Add => #8
                -> Condition "BaseFT <= FTTarget" => #9
                    WorkflowInput Source1 => #0
                    SubscribeSubject AnimalConfig
                    -> MemberSelector(Selector=FixationTime.OptoOnsetTime.Target) => #2
                    #0, #2 -> CombineLatest
                    -> LessThanOrEqual
                    -> WorkflowOutput
                #8 -> Condition "BaseFT > FTTarget" => #10
                    WorkflowInput Source1 => #0
                    SubscribeSubject AnimalConfig
                    -> MemberSelector(Selector=FixationTime.OptoOnsetTime.Target) => #2
                    #0, #2 -> CombineLatest
                    -> GreaterThan
                    -> WorkflowOutput
                SubscribeSubject AnimalConfig
                -> MemberSelector(Selector=FixationTime.OptoOnsetTime.Target) => #12
                #10, #12 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #14
                #9, #14 -> Merge
                -> MulticastSubject BaseOptoOnset
                -> WorkflowOutput

            GroupWorkflow TrialsCompleted
                SubscribeSubject Outcome
                -> Bonsai.Scripting.Expressions.ExpressionCondition => #1
                  Expression: it > 0
                SubscribeSubject TrialsCompleted => #2
                #1, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Add(Operand=IntProperty(Value=1))
                -> MulticastSubject TrialsCompleted
                -> WorkflowOutput

            GroupWorkflow RightAnswers
                SubscribeSubject Outcome
                -> Bonsai.Scripting.Expressions.ExpressionCondition => #1
                  Expression: it == 2
                SubscribeSubject RightAnswers => #2
                #1, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Add(Operand=DoubleProperty(Value=1))
                -> MulticastSubject RightAnswers
                -> WorkflowOutput

            GroupWorkflow TrialsAborted
                SubscribeSubject Outcome
                -> Bonsai.Scripting.Expressions.ExpressionCondition => #1
                  Expression: it < 0
                SubscribeSubject TrialsAborted => #2
                #1, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Add(Operand=DoubleProperty(Value=1))
                -> MulticastSubject TrialsAborted
                -> WorkflowOutput

        GroupWorkflow PsychometricFunction
            SubscribeSubject Block
            -> Delay(DueTime=PT1S) => #1
            SubscribeSubject LateralizedILDs
            -> MemberSelector(Selector=Length) => #3
            #1, #3 -> WithLatestFrom
            -> InputMapping(Selector=Item2, Count(Selector=Item2))
            -> SelectMany
                ExternalizedMapping(Count)
                -> Range(Start=0, Count=10)
                -> DoubleProperty(Value=0)
                -> ToArray
                -> WorkflowOutput
            -> MulticastSubject NumILDTrials
            -> MulticastSubject RightAnswersILD
            -> MulticastSubject PsychophysicalFunction

            SubscribeSubject TrialEnd => #10
            SubscribeSubject ILD => #11
            #10, #11 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Condition => #14
                SubscribeSubject Outcome
                -> GreaterThan(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> SelectMany UpdateRightAnswersPerILD => #15
                SubscribeSubject RightAnswersILD
                -> Merge => #1
                SubscribeSubject LateralizedILDs
                -> Merge => #3
                #1, #3 -> Zip => #4
                -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2) => #1
                    SubscribeSubject ILD => #2
                    #1, #2 -> WithLatestFrom
                    -> Equal => #4
                    SubscribeSubject Outcome
                    -> Equal(Operand=IntProperty(Value=2)) => #6
                    #4, #6 -> CombineLatest
                    -> LogicalAnd
                    -> WorkflowOutput
                -> MemberSelector(Selector=Item1)
                -> Add(Operand=DoubleProperty(Value=1)) => #7
                #4 -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2) => #1
                    SubscribeSubject ILD => #2
                    #1, #2 -> WithLatestFrom
                    -> NotEqual => #4
                    SubscribeSubject Outcome
                    -> NotEqual(Operand=IntProperty(Value=2)) => #6
                    #4, #6 -> CombineLatest
                    -> LogicalOr
                    -> WorkflowOutput
                -> MemberSelector(Selector=Item1)
                -> Add(Operand=DoubleProperty(Value=0)) => #10
                #7, #10 -> Merge => #11
                SubscribeSubject LateralizedILDs
                -> MemberSelector(Selector=Length)
                -> PropertyMapping(Count) => #14
                #11, #14 -> Take(Count=10)
                -> ToArray
                -> MulticastSubject RightAnswersILD
                -> WorkflowOutput
            #14 -> SelectMany UpdateTrialsPerILD => #16
                SubscribeSubject NumILDTrials
                -> Merge => #1
                SubscribeSubject LateralizedILDs
                -> Merge => #3
                #1, #3 -> Zip => #4
                -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2) => #1
                    SubscribeSubject ILD => #2
                    #1, #2 -> WithLatestFrom
                    -> Equal
                    -> WorkflowOutput
                -> MemberSelector(Selector=Item1)
                -> Add(Operand=DoubleProperty(Value=1)) => #7
                #4 -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2) => #1
                    SubscribeSubject ILD => #2
                    #1, #2 -> WithLatestFrom
                    -> NotEqual
                    -> WorkflowOutput
                -> MemberSelector(Selector=Item1)
                -> Add(Operand=DoubleProperty(Value=0)) => #10
                #7, #10 -> Merge => #11
                SubscribeSubject LateralizedILDs
                -> MemberSelector(Selector=Length)
                -> PropertyMapping(Count) => #14
                #11, #14 -> Take(Count=10)
                -> ToArray
                -> MulticastSubject NumILDTrials
                -> WorkflowOutput
            #15, #16 -> Zip
            -> SelectMany UpdatePsychometricFuction
                WorkflowInput Source1
                -> Take(Count=1) => #1
                -> MemberSelector(Selector=Item1)
                -> Merge => #3
                #1 -> MemberSelector(Selector=Item2)
                -> Merge => #5
                #3, #5 -> Zip => #6
                -> Bonsai.Scripting.Expressions.ExpressionCondition
                  Expression: Item2 != 0
                -> Divide => #8
                #6 -> Bonsai.Scripting.Expressions.ExpressionCondition
                  Expression: Item2 == 0
                -> DoubleProperty(Value=0) => #10
                #8, #10 -> Merge
                -> ToArray
                -> WorkflowOutput
            -> MulticastSubject PsychophysicalFunction

    GroupWorkflow GenerateILDArray
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=Sound.Ild)
        -> InputMapping(Selector=it, NumSteps(Selector=NumSteps), StepSize(Selector=StepSize), UseLog(Selector=UseLog), LogBase(Selector=LogBase))
        -> CF.GenerateILDArray(NumSteps=5, StepSize=1, UseLog=true, LogBase=2)
        -> MulticastSubject ILDs

        SubscribeSubject LevelConfig => #5
        -> Condition !FullyLateralized
            SubscribeSubject LevelConfig
            -> MemberSelector(Selector=Sound.FullyLateralizedProbability)
            -> NotEqual(Operand=DoubleProperty(Value=1))
            -> WorkflowOutput
        -> MemberSelector(Selector=Sound.Ild)
        -> InputMapping(Selector=it, NumSteps(Selector=NumSteps), StepSize(Selector=StepSize), UseLog(Selector=UseLog), LogBase(Selector=LogBase))
        -> CF.GenerateLateralizedILDs(NumSteps=5, StepSize=1, UseLog=true, LogBase=2) => #9
        #5 -> Condition "FullyLateralized && UseFixedAbl"
            SubscribeSubject LevelConfig => #0
            -> MemberSelector(Selector=Sound.FullyLateralizedProbability)
            -> Equal(Operand=DoubleProperty(Value=1)) => #2
            #0 -> MemberSelector(Selector=Sound.Abl.UseFixedAbl) => #3
            #2, #3 -> CombineLatest
            -> LogicalAnd
            -> WorkflowOutput
        -> SelectMany => #11
            Range(Start=0, Count=2) => #0
            -> Bonsai.Scripting.Expressions.ExpressionCondition => #1
              Expression: it == 0
            SubscribeSubject LevelConfig
            -> MemberSelector(Selector=Sound.Abl.FixedAbl) => #3
            #1, #3 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Multiply(Operand=DoubleProperty(Value=-1)) => #6
            #0 -> Bonsai.Scripting.Expressions.ExpressionCondition => #7
              Expression: it == 1
            SubscribeSubject LevelConfig
            -> MemberSelector(Selector=Sound.Abl.FixedAbl) => #9
            #7, #9 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #11
            #6, #11 -> Merge
            -> Take(Count=2)
            -> ToArray
            -> WorkflowOutput
        #5 -> Condition "FullyLateralized && !UseFixedAbl" => #12
            SubscribeSubject LevelConfig => #0
            -> MemberSelector(Selector=Sound.FullyLateralizedProbability)
            -> Equal(Operand=DoubleProperty(Value=1)) => #2
            #0 -> MemberSelector(Selector=Sound.Abl.UseFixedAbl)
            -> Equal(Operand=BooleanProperty(Value=false)) => #4
            #2, #4 -> CombineLatest
            -> LogicalAnd
            -> WorkflowOutput
        SubscribeSubject LevelConfig
        -> Take(Count=1)
        -> MemberSelector(Selector=Sound.Abl.AblList)
        -> Merge
        -> ToArray => #17
        #12, #17 -> WithLatestFrom
        -> InputMapping(Selector=it, ILDs(Selector=Item2))
        -> CF.GenerateLateralizedILDsFL(ILDs(double=20, double=40, double=60)) => #20
        #9, #11, #20 -> Merge
        -> MulticastSubject LateralizedILDs

    GroupWorkflow GenerateSideArray
        SubscribeSubject NewSideArray => #0
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=Sound.MaxSide) => #2
        #0, #2 -> WithLatestFrom
        -> InputMapping(Selector=it, Count(Selector=Item2))
        -> SelectMany GenerateSideArray
            ExternalizedMapping(Count)
            -> Range(Start=0, Count=8) => #1
            -> Condition
                WorkflowInput Source1 => #0
                SubscribeSubject AnimalConfig
                -> MemberSelector(Selector=Sound.MaxSide) => #2
                SubscribeSubject LeftProbability => #3
                #2, #3 -> CombineLatest
                -> Multiply
                -> Bonsai.Scripting.Expressions.ExpressionTransform ConvertToInt => #6
                  Expression: Convert.ToInt32(it)
                #0, #6 -> CombineLatest
                -> LessThan
                -> WorkflowOutput
            -> IntProperty(Value=-1) => #3
            #1 -> Condition
                WorkflowInput Source1 => #0
                SubscribeSubject AnimalConfig
                -> MemberSelector(Selector=Sound.MaxSide) => #2
                SubscribeSubject LeftProbability => #3
                #2, #3 -> CombineLatest
                -> Multiply
                -> Bonsai.Scripting.Expressions.ExpressionTransform ConvertToInt => #6
                  Expression: Convert.ToInt32(it)
                #0, #6 -> CombineLatest
                -> GreaterThanOrEqual
                -> WorkflowOutput
            -> IntProperty(Value=1) => #5
            #3, #5 -> Merge
            -> ToArray
            -> WorkflowOutput
        -> CF.ShuffleArray
        -> MulticastSubject SideArray

    GroupWorkflow PlaySound
        SubscribeSubject FixEnd
        -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=stimulus, PrintSubjectName=PrintCode) => #1
        -> Condition !IsShortDuration
            SubscribeSubject IsShortDuration
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        -> SelectMany PlaySound => #3
            Timer(DueTime=PT0S, Period=PT9.5S)
            -> MulticastSubject PlaySound

            SubscribeSubject MTStart
            -> Skip(Count=1)
            -> Condition UseRT => #4
                SubscribeSubject LevelConfig
                -> MemberSelector(Selector=ReactionTime.TurnSoundOff)
                -> WorkflowOutput
            SubscribeSubject LNPStart
            -> Skip(Count=1)
            -> Condition !UseRT => #7
                SubscribeSubject LevelConfig
                -> MemberSelector(Selector=ReactionTime.TurnSoundOff)
                -> Equal(Operand=BooleanProperty(Value=false))
                -> WorkflowOutput
            SubscribeSubject Outcome
            -> Skip(Count=1)
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it >= -5 && it <= -3
            -> DoubleProperty(Value=0) => #11
            #4, #7, #11 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        #1 -> Condition IsShortDuration
            SubscribeSubject IsShortDuration
            -> WorkflowOutput
        -> SelectMany PlayShortSound => #5
            WorkflowInput Source1
            -> MulticastSubject PlaySound

            SubscribeSubject MTStart
            -> Skip(Count=1)
            -> Condition UseRT => #4
                SubscribeSubject LevelConfig
                -> MemberSelector(Selector=ReactionTime.TurnSoundOff)
                -> WorkflowOutput
            SubscribeSubject LNPStart
            -> Skip(Count=1)
            -> Condition !UseRT => #7
                SubscribeSubject LevelConfig
                -> MemberSelector(Selector=ReactionTime.TurnSoundOff)
                -> Equal(Operand=BooleanProperty(Value=false))
                -> WorkflowOutput
            SubscribeSubject Outcome
            -> Skip(Count=1)
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it >= -5 && it <= -3
            -> DoubleProperty(Value=0) => #11
            #4, #7, #11 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        #3, #5 -> Merge
        -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreateStopPayload(Stop=0))
        -> MulticastSubject SoundCardCommands
        -> WorkflowOutput

    GroupWorkflow WaterDelivery
        GroupWorkflow RewardButtonsLogic
            SubscribeSubject RewardLeftButton
            -> IntProperty(Value=-1) => #1
            SubscribeSubject RewardRightButton
            -> IntProperty(Value=1) => #3
            #1, #3 -> Merge
            -> MulticastSubject WaterDelivery
            -> WorkflowOutput

        GroupWorkflow RewardSteps
            SubscribeSubject LeftReward => #0
            SubscribeSubject SetupConfig => #1
            -> MemberSelector(Selector=SyringePumps.LeftSlope) => #2
            #1 -> MemberSelector(Selector=SyringePumps.LeftIntercept) => #3
            #0, #2, #3 -> CombineLatest
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Convert.ToInt32((Item1 - Item3) / Item2)
            -> MulticastSubject LeftRewardSteps

            SubscribeSubject RightReward => #7
            SubscribeSubject SetupConfig => #8
            -> MemberSelector(Selector=SyringePumps.RightSlope) => #9
            #8 -> MemberSelector(Selector=SyringePumps.RightIntercept) => #10
            #7, #9, #10 -> CombineLatest
            -> Condition => #12
                SubscribeSubject SetupConfig
                -> MemberSelector(Selector=SyringePumps.NumPumps) => #1
                ExternalizedMapping(Value(DisplayName=NumPumps)) => #2
                #1, #2 -> Equal(Operand=IntProperty(Value=2))
                -> WorkflowOutput
            SubscribeSubject RightReward => #13
            SubscribeSubject SetupConfig => #14
            -> MemberSelector(Selector=SyringePumps.LeftSlope) => #15
            #14 -> MemberSelector(Selector=SyringePumps.LeftIntercept) => #16
            #13, #15, #16 -> CombineLatest
            -> Condition => #18
                SubscribeSubject SetupConfig
                -> MemberSelector(Selector=SyringePumps.NumPumps) => #1
                ExternalizedMapping(Value(DisplayName=NumPumps)) => #2
                #1, #2 -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            #12, #18 -> Merge
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Convert.ToInt32((Item1 - Item3) / Item2)
            -> MulticastSubject RightRewardSteps

        GroupWorkflow TwoPumpRewardDelivery
            SubscribeSubject WaterDelivery => #0
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -1
            -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableMotorDriverPayload(EnableMotorDriver=Enabled))
            -> MulticastSubject LeftPumpCommands
            -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableProtocolPayload(EnableProtocol=Enabled))
            -> MulticastSubject LeftPumpCommands
            -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=reward_delivery, PrintSubjectName=PrintCode) => #6
            SubscribeSubject LeftRewardSteps => #7
            #6, #7 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Scripting.Expressions.ExpressionTransform FromMillisecondsToTimeSpan
              Expression: TimeSpan.FromMilliseconds(it + 100)
            -> InputMapping(Selector=it, DueTime(Selector=it))
            -> SelectMany "Delay (DuckTapeSolution)"
                WorkflowInput Source1 => #0
                ExternalizedMapping(DueTime) => #1
                #0, #1 -> Delay(DueTime=PT0.145S)
                -> Take(Count=1)
                -> WorkflowOutput
            -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableMotorDriverPayload(EnableMotorDriver=Disabled))
            -> MulticastSubject LeftPumpCommands => #14
            #0 -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == 1
            -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableMotorDriverPayload(EnableMotorDriver=Enabled))
            -> MulticastSubject RightPumpCommands
            -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableProtocolPayload(EnableProtocol=Enabled))
            -> MulticastSubject RightPumpCommands
            -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=reward_delivery, PrintSubjectName=PrintCode) => #20
            SubscribeSubject RightRewardSteps => #21
            #20, #21 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Scripting.Expressions.ExpressionTransform FromMillisecondsToTimeSpan
              Expression: TimeSpan.FromMilliseconds(it + 100)
            -> InputMapping(Selector=it, DueTime(Selector=it)) => #25
            Source2=#25 -> SelectMany "Delay (DuckTapeSolution)"
                WorkflowInput Source1 => #0
                ExternalizedMapping(DueTime) => #1
                #0, #1 -> Delay(DueTime=PT0.145S)
                -> Take(Count=1)
                -> WorkflowOutput
            -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableMotorDriverPayload(EnableMotorDriver=Disabled))
            -> MulticastSubject RightPumpCommands => #28
            #14, #28 -> Merge => #29
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=SyringePumps.UsePumps)
            -> Bonsai.Scripting.Expressions.ExpressionCondition => #32
              Expression: it
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=SyringePumps.NumPumps)
            -> Bonsai.Scripting.Expressions.ExpressionCondition => #35
              Expression: it == 2
            #32, #35 -> Zip => #36
            #29, #36 -> SubscribeWhen
            -> WorkflowOutput

        GroupWorkflow OnePumpRewardDelivery
            GroupWorkflow WaterRefill
                SubscribeSubject Outcome
                -> Condition UseAutofill
                    SubscribeSubject SetupConfig
                    -> MemberSelector(Selector=SyringePumps.Autorefill)
                    -> WorkflowOutput
                -> Bonsai.Scripting.Expressions.ExpressionCondition
                  Expression: it != 2 && it != 0
                -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO2))
                -> MulticastSubject BehaviorCommands
                -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolDirectionPayload(ProtocolDirection=Reverse))
                -> MulticastSubject LeftPumpCommands
                -> Delay(DueTime=PT0.01S)
                -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableMotorDriverPayload(EnableMotorDriver=Enabled))
                -> MulticastSubject LeftPumpCommands
                -> SelectMany Refill
                    WorkflowInput Source1
                    -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableProtocolPayload(EnableProtocol=Enabled))
                    -> MulticastSubject LeftPumpCommands
                    -> Take(Count=1)
                    -> Repeat => #4
                    SubscribeSubject ITIStart => #5
                    #4, #5 -> TakeUntil
                    -> Last
                    -> WorkflowOutput
                -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableProtocolPayload(EnableProtocol=Disabled))
                -> MulticastSubject LeftPumpCommands
                -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableMotorDriverPayload(EnableMotorDriver=Disabled))
                -> MulticastSubject LeftPumpCommands
                -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolDirectionPayload(ProtocolDirection=Forward))
                -> MulticastSubject LeftPumpCommands
                -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DO2))
                -> MulticastSubject BehaviorCommands => #18
                SubscribeSubject SetupConfig
                -> MemberSelector(Selector=SyringePumps.UsePumps)
                -> Bonsai.Scripting.Expressions.ExpressionCondition => #21
                  Expression: it
                SubscribeSubject SetupConfig
                -> MemberSelector(Selector=SyringePumps.NumPumps)
                -> Bonsai.Scripting.Expressions.ExpressionCondition => #24
                  Expression: it == 1
                #21, #24 -> Zip => #25
                #18, #25 -> SubscribeWhen
                -> WorkflowOutput

            SubscribeSubject WaterDelivery => #1
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -1
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO1))
            -> MulticastSubject BehaviorCommands => #4
            SubscribeSubject LeftRewardSteps => #5
            #4, #5 -> WithLatestFrom
            -> InputMapping(Selector=it, ProtocolStepCount(Selector=Item2))
            -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolStepCountPayload(ProtocolStepCount=45))
            -> MulticastSubject LeftPumpCommands => #9
            #1 -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == 1
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DO1))
            -> MulticastSubject BehaviorCommands => #12
            SubscribeSubject RightRewardSteps => #13
            #12, #13 -> WithLatestFrom
            -> InputMapping(Selector=it, ProtocolStepCount(Selector=Item2))
            -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolStepCountPayload(ProtocolStepCount=45))
            -> MulticastSubject LeftPumpCommands => #17
            #9, #17 -> Merge
            -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=reward_delivery, PrintSubjectName=PrintCode)
            -> Delay(DueTime=PT0.01S)
            -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableMotorDriverPayload(EnableMotorDriver=Enabled))
            -> MulticastSubject LeftPumpCommands
            -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableProtocolPayload(EnableProtocol=Enabled))
            -> MulticastSubject LeftPumpCommands => #24
            SubscribeSubject LeftRewardSteps => #25
            #24, #25 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Scripting.Expressions.ExpressionTransform FromMillisecondsToTimeSpan
              Expression: TimeSpan.FromMilliseconds(it + 100)
            -> InputMapping(Selector=it, DueTime(Selector=it))
            -> SelectMany "Delay (DuckTapeSolution)"
                WorkflowInput Source1 => #0
                ExternalizedMapping(DueTime) => #1
                #0, #1 -> Delay(DueTime=PT0.145S)
                -> Take(Count=1)
                -> WorkflowOutput
            -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableMotorDriverPayload(EnableMotorDriver=Disabled))
            -> MulticastSubject LeftPumpCommands => #32
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=SyringePumps.UsePumps)
            -> Bonsai.Scripting.Expressions.ExpressionCondition => #35
              Expression: it
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=SyringePumps.NumPumps)
            -> Bonsai.Scripting.Expressions.ExpressionCondition => #38
              Expression: it == 1
            #35, #38 -> Zip => #39
            #32, #39 -> SubscribeWhen
            -> WorkflowOutput

    GroupWorkflow GetPenaltyTime
        SubscribeSubject Outcome => #0
        -> Bonsai.Scripting.Expressions.ExpressionCondition => #1
          Expression: it == 2
        DoubleProperty(Value=0) => #2
        #1, #2 -> WithLatestFrom => #3
        #0 -> Bonsai.Scripting.Expressions.ExpressionCondition => #4
          Expression: it == 1
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=PenaltyTimes.Incorrect) => #6
        #4, #6 -> WithLatestFrom => #7
        #0 -> Bonsai.Scripting.Expressions.ExpressionCondition => #8
          Expression: it == -2
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=PenaltyTimes.FixationAbort) => #10
        #8, #10 -> WithLatestFrom => #11
        #0 -> Bonsai.Scripting.Expressions.ExpressionCondition => #12
          Expression: it < 0 && it != -2
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=PenaltyTimes.Abort) => #14
        #12, #14 -> WithLatestFrom => #15
        #3, #7, #11, #15 -> Merge
        -> MemberSelector(Selector=Item2)
        -> MulticastSubject Penalty
        -> WorkflowOutput

    GroupWorkflow AutobiasCorrection
        SubscribeSubject Bias => #0
        -> Condition => #1
            WorkflowInput Source1
            -> Bonsai.Numerics.Abs => #1
            SubscribeSubject AnimalConfig
            -> MemberSelector(Selector=AutobiasCorrection.CutoffBias) => #3
            #1, #3 -> CombineLatest
            -> LessThan => #5
            SubscribeSubject BiasPerformance => #6
            SubscribeSubject AnimalConfig
            -> MemberSelector(Selector=AutobiasCorrection.PerformanceThreshold) => #8
            #6, #8 -> CombineLatest
            -> GreaterThanOrEqual => #10
            SubscribeSubject AnimalConfig
            -> MemberSelector(Selector=AutobiasCorrection.UseCorrection)
            -> Equal(Operand=BooleanProperty(Value=false)) => #13
            #5, #10, #13 -> CombineLatest
            -> LogicalOr
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        -> Condition
            WorkflowInput Source1 => #0
            SubscribeSubject AnimalConfig
            -> MemberSelector(Selector=AutobiasCorrection.CutoffBias) => #2
            #0, #2 -> CombineLatest
            -> GreaterThanOrEqual
            -> WorkflowOutput
        -> GroupWorkflow => #3
            WorkflowInput Source1 => #0
            SubscribeSubject AnimalConfig
            -> MemberSelector(Selector=Reward.BaseAmount) => #2
            SubscribeSubject AnimalConfig
            -> MemberSelector(Selector=AutobiasCorrection.CutoffBias) => #4
            SubscribeSubject AnimalConfig
            -> MemberSelector(Selector=AutobiasCorrection.SlopeMultiplier) => #6
            #0, #2, #4, #6 -> CombineLatest
            -> WorkflowOutput
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
          Expression: Item2 * (1 + Item4 * ((Item3 - Item1)/(Item3 - 1)))
        #1 -> Condition
            WorkflowInput Source1 => #0
            SubscribeSubject AnimalConfig
            -> MemberSelector(Selector=AutobiasCorrection.CutoffBias)
            -> Multiply(Operand=DoubleProperty(Value=-1)) => #3
            #0, #3 -> CombineLatest
            -> LessThanOrEqual
            -> WorkflowOutput
        -> GroupWorkflow => #6
            WorkflowInput Source1 => #0
            SubscribeSubject AnimalConfig
            -> MemberSelector(Selector=Reward.BaseAmount) => #2
            SubscribeSubject AnimalConfig
            -> MemberSelector(Selector=AutobiasCorrection.CutoffBias) => #4
            SubscribeSubject AnimalConfig
            -> MemberSelector(Selector=AutobiasCorrection.SlopeMultiplier) => #6
            #0, #2, #4, #6 -> CombineLatest
            -> WorkflowOutput
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
          Expression: Item2 * ((1 + Item1)/(1 - Item3))
        #0 -> Condition => #8
            WorkflowInput Source1
            -> Bonsai.Numerics.Abs => #1
            SubscribeSubject AnimalConfig
            -> MemberSelector(Selector=AutobiasCorrection.CutoffBias) => #3
            #1, #3 -> CombineLatest
            -> LessThan => #5
            SubscribeSubject BiasPerformance => #6
            SubscribeSubject AnimalConfig
            -> MemberSelector(Selector=AutobiasCorrection.PerformanceThreshold) => #8
            #6, #8 -> CombineLatest
            -> GreaterThanOrEqual => #10
            SubscribeSubject AnimalConfig
            -> MemberSelector(Selector=AutobiasCorrection.UseCorrection)
            -> Equal(Operand=BooleanProperty(Value=false)) => #13
            #5, #10, #13 -> CombineLatest
            -> LogicalOr
            -> WorkflowOutput
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=Reward.BaseAmount) => #10
        #8, #10 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #12
        #4, #7, #12 -> Merge
        -> MulticastSubject LeftReward => #14
        #3 -> Bonsai.Scripting.Expressions.ExpressionTransform => #15
          Expression: Item2 * ((1 - Item1)/(1 - Item3))
        #6 -> Bonsai.Scripting.Expressions.ExpressionTransform => #16
          Expression: Item2 * (1 + Item4 * ((Item3 + Item1)/(Item3 - 1)))
        #15, #12, #16 -> Merge
        -> MulticastSubject RightReward => #18
        #14, #18 -> Merge
        -> WorkflowOutput

    GroupWorkflow ShortTermPerformance
        SubscribeSubject Outcome
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it > 0
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it == 2
        -> SelectMany "Add Element" => #3
            SubscribeSubject ShortTermPerformance
            -> Take(Count=1)
            -> Concat => #2
            WorkflowInput Source1
            -> Take(Count=1) => #4
            #2, #4 -> Merge
            -> ToArray
            -> WorkflowOutput
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Length) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> GreaterThan(Operand=IntProperty(Value=10))
            -> WorkflowOutput
        -> SelectMany "Remove First Element" => #5
            SubscribeSubject ShortTermPerformance
            -> Take(Count=1) => #1
            -> Concat => #2
            -> Condition "Not Last Element?" => #3
                WorkflowInput Source1
                -> ElementIndex
                -> MemberSelector(Selector=Index) => #2
                SubscribeSubject HitHistory
                -> MemberSelector(Selector=Length)
                -> Subtract(Operand=IntProperty(Value=1))
                -> IntProperty(Value=0) => #6
                #2, #6 -> WithLatestFrom
                -> NotEqual
                -> WorkflowOutput
            #2 -> Last => #4
            #3, #4 -> TakeUntil
            -> ToArray => #6
            #1 -> Condition "Empty Array?" => #7
                WorkflowInput Source1
                -> MemberSelector(Selector=Length)
                -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            #6, #7 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        #3 -> Condition => #6
            WorkflowInput Source1
            -> MemberSelector(Selector=Length) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> LessThanOrEqual(Operand=IntProperty(Value=25))
            -> WorkflowOutput
        #5, #6 -> Merge
        -> MulticastSubject ShortTermPerformance

        SubscribeSubject Outcome
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it < 0
        -> SelectMany "Add Element" => #11
            SubscribeSubject ShortTermAbortRate
            -> Take(Count=1)
            -> Concat => #2
            WorkflowInput Source1
            -> Take(Count=1) => #4
            #2, #4 -> Merge
            -> ToArray
            -> WorkflowOutput
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Length) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> GreaterThan(Operand=IntProperty(Value=10))
            -> WorkflowOutput
        -> SelectMany "Remove First Element" => #13
            SubscribeSubject ShortTermAbortRate
            -> Take(Count=1) => #1
            -> Concat => #2
            -> Condition "Not Last Element?" => #3
                WorkflowInput Source1
                -> ElementIndex
                -> MemberSelector(Selector=Index) => #2
                SubscribeSubject PreviousSides
                -> MemberSelector(Selector=Length)
                -> Subtract(Operand=IntProperty(Value=1))
                -> IntProperty(Value=0) => #6
                #2, #6 -> WithLatestFrom
                -> NotEqual
                -> WorkflowOutput
            #2 -> Last => #4
            #3, #4 -> TakeUntil
            -> ToArray => #6
            #1 -> Condition "Empty Array?" => #7
                WorkflowInput Source1
                -> MemberSelector(Selector=Length)
                -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            #6, #7 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        #11 -> Condition => #14
            WorkflowInput Source1
            -> MemberSelector(Selector=Length) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> LessThanOrEqual(Operand=IntProperty(Value=25))
            -> WorkflowOutput
        #13, #14 -> Merge
        -> MulticastSubject ShortTermAbortRate

    GroupWorkflow OptogeneticsProtocol
        GroupWorkflow OptoOnsetTrigger
            SubscribeSubject OptoOnsetTrigger
            -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Value)
                -> Equal(Operand=BooleanProperty(Value=false)) => #2
                SubscribeSubject OptoTrial
                -> Equal(Operand=DoubleProperty(Value=1)) => #4
                #2, #4 -> CombineLatest
                -> LogicalAnd
                -> WorkflowOutput
            -> MemberSelector(Selector=Seconds) => #2
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it <= -2
            -> DoubleProperty(Value=NaN) => #5
            #2, #5 -> Merge => #6
            SubscribeSubject TrialStart => #7
            #6, #7 -> Gate
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: !Double.IsNaN(it)
            -> PublishSubject OptoActivationDuringTask

        SubscribeSubject OptoActivationDuringTask => #1
        SubscribeSubject OptogeneticsButton
        -> DoubleProperty(Value=0) => #3
        #1, #3 -> Merge => #4
        SubscribeSubject OptoProtocol
        -> MemberSelector(Selector=Led0.Voltage) => #6
        #4, #6 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> InputMapping(Selector=it, Dac0Voltage(Selector=it))
        -> Harp.CurrentDriver.CreateMessage(MessageType=Write, Payload=Harp.CurrentDriver.CreateDac0VoltagePayload(Dac0Voltage=1000)) => #10
        SubscribeSubject OptoProtocol
        -> MemberSelector(Selector=Led1.Voltage) => #12
        #4, #12 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> InputMapping(Selector=it, Dac1Voltage(Selector=it))
        -> Harp.CurrentDriver.CreateMessage(MessageType=Write, Payload=Harp.CurrentDriver.CreateDac1VoltagePayload(Dac1Voltage=0)) => #16
        SubscribeSubject OptoActivationDuringTask => #17
        SubscribeSubject OptogeneticsButton
        -> DoubleProperty(Value=0) => #19
        #17, #19 -> Merge => #20
        SubscribeSubject OptoProtocol
        -> MemberSelector(Selector=Duration)
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan => #23
          Expression: TimeSpan.FromSeconds(it)
        #20, #23 -> WithLatestFrom
        -> InputMapping(Selector=it, DueTime(Selector=Item2))
        -> SelectMany "Delay (DuckTapeSolution)"
            WorkflowInput Source1 => #0
            ExternalizedMapping(DueTime) => #1
            #0, #1 -> Delay(DueTime=PT0.2S)
            -> Take(Count=1)
            -> WorkflowOutput
        -> DoubleProperty(Value=0) => #27
        SubscribeSubject MTStart
        -> Condition => #29
            SubscribeSubject OptoProtocol
            -> MemberSelector(Selector=UseRt) => #1
            SubscribeSubject OptoTrial
            -> Equal(Operand=DoubleProperty(Value=1)) => #3
            #1, #3 -> CombineLatest
            -> LogicalAnd
            -> WorkflowOutput
        #27, #29 -> Merge => #30
        -> Harp.CurrentDriver.CreateMessage(MessageType=Write, Payload=Harp.CurrentDriver.CreateDac0VoltagePayload(Dac0Voltage=0)) => #31
        #30 -> Harp.CurrentDriver.CreateMessage(MessageType=Write, Payload=Harp.CurrentDriver.CreateDac1VoltagePayload(Dac1Voltage=0)) => #32
        #10, #16, #31, #32 -> Merge
        -> MulticastSubject CDCommands
        -> WorkflowOutput

    GroupWorkflow LNPTime
        SubscribeSubject LNPTrigger
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> WorkflowOutput
        -> SelectMany
            SubscribeSubject LeftPoke => #0
            SubscribeSubject ResponsePoke
            -> Bonsai.Scripting.Expressions.ExpressionCondition => #2
              Expression: !Double.IsNaN(it)
            #0, #2 -> SubscribeWhen => #3
            #3, #2 -> WithLatestFrom
            -> Condition IsLeft => #5
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item1.Value)
                -> Equal(Operand=BooleanProperty(Value=false)) => #2
                #0 -> MemberSelector(Selector=Item2)
                -> Equal(Operand=IntProperty(Value=-1)) => #4
                #2, #4 -> Zip
                -> LogicalAnd
                -> WorkflowOutput
            SubscribeSubject RightPoke => #6
            SubscribeSubject ResponsePoke
            -> Bonsai.Scripting.Expressions.ExpressionCondition => #8
              Expression: !Double.IsNaN(it)
            #6, #8 -> SubscribeWhen => #9
            #9, #8 -> WithLatestFrom
            -> Condition IsRight => #11
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item1.Value)
                -> Equal(Operand=BooleanProperty(Value=false)) => #2
                #0 -> MemberSelector(Selector=Item2)
                -> Equal(Operand=IntProperty(Value=1)) => #4
                #2, #4 -> Zip
                -> LogicalAnd
                -> WorkflowOutput
            #5, #11 -> Merge
            -> Take(Count=1)
            -> MemberSelector(Selector=Item1.Seconds)
            -> MulticastSubject LNPEnd => #15
            SubscribeSubject LNPStart => #16
            #15, #16 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject TimedLNP
            -> Take(Count=1)
            -> WorkflowOutput
        -> DoubleProperty(Value=NaN)
        -> MulticastSubject TimedLNP
        -> MulticastSubject LNPStart
        -> MulticastSubject LNPEnd
        -> WorkflowOutput

GroupWorkflow Hardware
    GroupWorkflow Camera
        Bonsai.Spinnaker.SpinnakerCapture(Index=nil, ColorProcessing=Default) => #0
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=Camera.Type)
        -> Condition => #3
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=WorkflowProperty<Setup.CameraType>(Value=FLIR))
            -> WorkflowOutput
        #0, #3 -> SubscribeWhen => #4
        -> MemberSelector(Selector=Image) => #5
        Bonsai.PointGrey.FlyCapture(Index=0, ColorProcessing=Default, NumBuffers=10, GrabMode=BufferFrames) => #6
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=Camera.Type)
        -> Condition => #9
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=WorkflowProperty<Setup.CameraType>(Value=PointGrey))
            -> WorkflowOutput
        #6, #9 -> SubscribeWhen => #10
        -> MemberSelector(Selector=Image) => #11
        #5, #11 -> Merge
        -> PublishSubject Camera
        -> IntProperty(Value=0) => #14
        #4 -> GroupWorkflow SpinnakerMetadata => #15
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=ChunkData.Timestamp) => #1
            #0 -> MemberSelector(Selector=ChunkData.FrameID) => #2
            #0 -> MemberSelector(Selector=ChunkData.ExposureEndLineStatusAll) => #3
            #1, #2, #3 -> Zip
            -> WorkflowOutput
        #10 -> GroupWorkflow FlyCaptureMetadata => #16
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Metadata.embeddedTimeStamp)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
              Expression: Convert.ToInt64(it)
            #0 -> MemberSelector(Selector=Metadata.embeddedFrameCounter)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
              Expression: Convert.ToInt64(it)
            #0 -> Bonsai.PointGrey.GpioPinState => #5
            -> MemberSelector(Selector=Val0)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
              Expression: Convert.ToInt64(it)
            #5 -> MemberSelector(Selector=Val1)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Convert.ToInt64(it)
            -> Multiply(Operand=WorkflowProperty<System.Int64>(Value=2)) => #10
            #5 -> MemberSelector(Selector=Val2)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Convert.ToInt64(it)
            -> Multiply(Operand=WorkflowProperty<System.Int64>(Value=4)) => #13
            #5 -> MemberSelector(Selector=Val3)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Convert.ToInt64(it)
            -> Multiply(Operand=WorkflowProperty<System.Int64>(Value=8)) => #16
            #7, #10, #13, #16 -> Zip
            -> BitwiseOr => #18
            #2, #4, #18 -> Zip
            -> WorkflowOutput
        #15, #16 -> Merge
        -> PublishSubject CameraMetadata
        -> IntProperty(Value=0) => #19
        #14, #19 -> Merge => #20
        SubscribeSubject OutputDirPath => #21
        SubscribeSubject OutputBackupDirPath => #22
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=Camera.UseCamera)
        -> Bonsai.Scripting.Expressions.ExpressionCondition => #25
          Expression: it
        #21, #22, #25 -> Zip
        -> Delay(DueTime=PT1S) => #27
        #20, #27 -> SubscribeWhen

    SubscribeSubject Config
    -> MemberSelector(Selector=Ports.Behavior)
    -> PropertyMapping(PortName)
    -> GroupWorkflow Behavior
        BehaviorSubject<Bonsai.Harp.HarpMessage> BehaviorCommands => #0
        ExternalizedMapping(PortName) => #1
        #0, #1 -> Harp.Behavior.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM12)
        -> PublishSubject BehaviorMessages => #3
        SubscribeSubject OutputDirPath => #4
        SubscribeSubject OutputBackupDirPath => #5
        #4, #5 -> Zip
        -> Delay(DueTime=PT1S) => #7
        #3, #7 -> SubscribeWhen

        SubscribeSubject BehaviorMessages
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData)
        -> MemberSelector(Selector=Seconds)
        -> PublishSubject Timestamp

        SubscribeSubject BehaviorMessages
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState)
        -> GroupWorkflow FilterPokeEvents
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value) => #1
            ExternalizedMapping(Value(DisplayName=Port)) => #2
            #1, #2 -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort0)) => #3
            -> Condition
                SubscribeSubject SetupConfig
                -> MemberSelector(Selector=LeftPoke.LowToHigh)
                -> WorkflowOutput
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
              Expression: Convert.ToBoolean(it)
            #3 -> Condition
                SubscribeSubject SetupConfig
                -> MemberSelector(Selector=LeftPoke.LowToHigh)
                -> Equal(Operand=BooleanProperty(Value=false))
                -> WorkflowOutput
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
              Expression: !Convert.ToBoolean(it)
            #5, #7 -> Merge => #8
            #0 -> MemberSelector(Selector=Seconds) => #9
            #8, #9 -> WithLatestFrom
            -> DistinctUntilChangedBy(KeySelector=Item1)
            -> Bonsai.Harp.CreateTimestamped
            -> WorkflowOutput
        -> MulticastSubject LeftPoke

        SubscribeSubject BehaviorMessages
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState)
        -> GroupWorkflow FilterPokeEvents
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value) => #1
            ExternalizedMapping(Value(DisplayName=Port)) => #2
            #1, #2 -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort1)) => #3
            -> Condition
                SubscribeSubject SetupConfig
                -> MemberSelector(Selector=CenterPoke.LowToHigh)
                -> WorkflowOutput
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
              Expression: Convert.ToBoolean(it)
            #3 -> Condition
                SubscribeSubject SetupConfig
                -> MemberSelector(Selector=CenterPoke.LowToHigh)
                -> Equal(Operand=BooleanProperty(Value=false))
                -> WorkflowOutput
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
              Expression: !Convert.ToBoolean(it)
            #5, #7 -> Merge => #8
            #0 -> MemberSelector(Selector=Seconds) => #9
            #8, #9 -> WithLatestFrom
            -> DistinctUntilChangedBy(KeySelector=Item1)
            -> Bonsai.Harp.CreateTimestamped
            -> WorkflowOutput
        -> MulticastSubject CenterPoke

        SubscribeSubject BehaviorMessages
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState)
        -> GroupWorkflow FilterPokeEvents
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value) => #1
            ExternalizedMapping(Value(DisplayName=Port)) => #2
            #1, #2 -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort2)) => #3
            -> Condition
                SubscribeSubject SetupConfig
                -> MemberSelector(Selector=RightPoke.LowToHigh)
                -> WorkflowOutput
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
              Expression: Convert.ToBoolean(it)
            #3 -> Condition
                SubscribeSubject SetupConfig
                -> MemberSelector(Selector=RightPoke.LowToHigh)
                -> Equal(Operand=BooleanProperty(Value=false))
                -> WorkflowOutput
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
              Expression: !Convert.ToBoolean(it)
            #5, #7 -> Merge => #8
            #0 -> MemberSelector(Selector=Seconds) => #9
            #8, #9 -> WithLatestFrom
            -> DistinctUntilChangedBy(KeySelector=Item1)
            -> Bonsai.Harp.CreateTimestamped
            -> WorkflowOutput
        -> MulticastSubject RightPoke

        SubscribeSubject BehaviorMessages
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedPortDIOStateEvent)
        -> GroupWorkflow FilterPokeEvents
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value) => #1
            ExternalizedMapping(Value(DisplayName=Port)) => #2
            #1, #2 -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.PortDigitalIOS>(Value=DIO0))
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
              Expression: Convert.ToBoolean(it)
            #0 -> MemberSelector(Selector=Seconds) => #5
            #4, #5 -> WithLatestFrom
            -> DistinctUntilChangedBy(KeySelector=Item1)
            -> Bonsai.Harp.CreateTimestamped
            -> WorkflowOutput
        -> Skip(Count=1)
        -> PublishSubject OptoOnsetTrigger

        SubscribeSubject BehaviorMessages
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedPortDIOStateEvent)
        -> GroupWorkflow FilterPokeEvents
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value) => #1
            ExternalizedMapping(Value(DisplayName=Port)) => #2
            #1, #2 -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.PortDigitalIOS>(Value=DIO1))
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
              Expression: Convert.ToBoolean(it)
            #0 -> MemberSelector(Selector=Seconds) => #5
            #4, #5 -> WithLatestFrom
            -> DistinctUntilChangedBy(KeySelector=Item1)
            -> Bonsai.Harp.CreateTimestamped
            -> WorkflowOutput
        -> MulticastSubject SoundOnsetTrigger

        SubscribeSubject BehaviorMessages
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedPortDIOStateEvent)
        -> GroupWorkflow FilterPokeEvents
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value) => #1
            ExternalizedMapping(Value(DisplayName=Port)) => #2
            #1, #2 -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.PortDigitalIOS>(Value=DIO2))
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
              Expression: Convert.ToBoolean(it)
            #0 -> MemberSelector(Selector=Seconds) => #5
            #4, #5 -> WithLatestFrom
            -> DistinctUntilChangedBy(KeySelector=Item1)
            -> Bonsai.Harp.CreateTimestamped
            -> WorkflowOutput
        -> MulticastSubject LNPTrigger

        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateLed0CurrentPayload(Led0Current=10)) => #38
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateLed1CurrentPayload(Led1Current=10)) => #39
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable="DOPort0 DOPort1 DOPort2")) => #40
        SubscribeSubject OptoTrial
        -> Bonsai.Scripting.Expressions.ExpressionCondition !IsOptoTrial
          Expression: it != 1
        -> DoubleProperty(Value=1) => #43
        SubscribeSubject IntendedOptoOnset
        -> Condition => #45
            WorkflowInput Source1
            -> GreaterThan(Operand=DoubleProperty(Value=0)) => #1
            SubscribeSubject OptoTrial
            -> Equal(Operand=DoubleProperty(Value=1)) => #3
            SubscribeSubject OptoProtocol
            -> MemberSelector(Selector=Onset) => #5
            ExternalizedMapping(Value) => #6
            #5, #6 -> Equal(Operand=WorkflowProperty<Animal.OptoProtocolOnset>(Value=MidFixation)) => #7
            #1, #3, #7 -> CombineLatest
            -> LogicalAnd
            -> WorkflowOutput
        SubscribeSubject IntendedSoundOnset
        -> Condition => #47
            WorkflowInput Source1
            -> GreaterThan(Operand=DoubleProperty(Value=0)) => #1
            SubscribeSubject OptoTrial
            -> Equal(Operand=DoubleProperty(Value=1)) => #3
            SubscribeSubject OptoProtocol
            -> MemberSelector(Selector=Onset) => #5
            ExternalizedMapping(Value) => #6
            #5, #6 -> Equal(Operand=WorkflowProperty<Animal.OptoProtocolOnset>(Value=SoundStart)) => #7
            #1, #3, #7 -> CombineLatest
            -> LogicalAnd
            -> WorkflowOutput
        #45, #47 -> Merge => #48
        SubscribeSubject OptoProtocol
        -> MemberSelector(Selector=ProtocolDelay) => #50
        #48, #50 -> CombineLatest
        -> Add => #52
        #43, #52 -> Merge
        -> InputMapping(Selector=it, PulseDOPort0(Selector=it))
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDOPort0Payload(PulseDOPort0=1)) => #55
        SubscribeSubject IntendedSoundOnset
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it > 0
        -> InputMapping(Selector=it, PulseDOPort1(Selector=it))
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDOPort1Payload(PulseDOPort1=411)) => #59
        SubscribeSubject IntendedLNP
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it > 0
        -> Multiply(Operand=DoubleProperty(Value=1000))
        -> InputMapping(Selector=it, PulseDOPort2(Selector=it))
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDOPort2Payload(PulseDOPort2=10)) => #64
        SubscribeSubject Outcome
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it != 2 && it != 0
        -> Condition
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=Lights.PenaltyLight)
            -> WorkflowOutput
        -> SelectMany => #68
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=Lights.BoxPeriod)
            -> Divide(Operand=DoubleProperty(Value=2))
            -> Bonsai.Scripting.Expressions.ExpressionTransform FromMillisecondsToTimeSpan
              Expression: TimeSpan.FromMilliseconds(it)
            -> PropertyMapping(Period)
            -> Timer(DueTime=PT0S, Period=PT0.5S) => #5
            SubscribeSubject ITIStart
            -> Skip(Count=1) => #7
            #5, #7 -> TakeUntil
            -> WorkflowOutput
        -> Bonsai.Scripting.Expressions.ExpressionCondition => #69
          Expression: it % 2 == 0
        SubscribeSubject ITIStart
        -> Condition
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=Lights.ItiLight)
            -> WorkflowOutput
        -> Delay(DueTime=PT0.2S)
        -> Int64Property(Value=0) => #73
        #69, #73 -> Merge
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=Led0)) => #75
        SubscribeSubject SoundOnsetTrigger
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: Value
        -> Skip(Count=1)
        -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=fixation, PrintSubjectName=PrintCode)
        -> Condition
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=Lights.FixationLight)
            -> WorkflowOutput
        -> SelectMany => #81
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=Lights.PokePeriod)
            -> Divide(Operand=DoubleProperty(Value=2))
            -> Bonsai.Scripting.Expressions.ExpressionTransform FromMillisecondsToTimeSpan
              Expression: TimeSpan.FromMilliseconds(it)
            -> PropertyMapping(Period)
            -> Timer(DueTime=PT0S, Period=PT0.5S) => #5
            SubscribeSubject SoundOnsetTrigger
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: !Value
            -> Skip(Count=1)
            -> IntProperty(Value=0) => #9
            SubscribeSubject Outcome => #10
            #9, #10 -> Merge
            -> Skip(Count=2) => #12
            #5, #12 -> TakeUntil
            -> WorkflowOutput
        -> Bonsai.Scripting.Expressions.ExpressionCondition => #82
          Expression: it % 2 == 0
        SubscribeSubject TrialStart
        -> Condition
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=Lights.PokeLight)
            -> WorkflowOutput
        -> Int64Property(Value=0) => #85
        #82, #85 -> Merge
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=Led1)) => #87
        #68 -> Bonsai.Scripting.Expressions.ExpressionCondition => #88
          Expression: it % 2 != 0
        SubscribeSubject TrialStart
        -> Int64Property(Value=0) => #90
        SubscribeSubject ITIStart
        -> Delay(DueTime=PT0.1S)
        -> Int64Property(Value=0) => #93
        #88, #90, #93 -> Merge
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=Led0)) => #95
        #81 -> Bonsai.Scripting.Expressions.ExpressionCondition => #96
          Expression: it % 2 != 0
        SubscribeSubject SoundOnsetTrigger
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: !Value
        -> Skip(Count=2)
        -> IntProperty(Value=0) => #100
        SubscribeSubject Outcome => #101
        #100, #101 -> Merge
        -> Delay(DueTime=PT0.1S)
        -> Int64Property(Value=0) => #104
        #96, #104 -> Merge
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=Led1)) => #106
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateMimicPort1IRPayload(MimicPort1IR=DO0)) => #107
        SubscribeSubject TimeToCNP
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: !Double.IsNaN(it)
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet="DOPort0 DOPort1")) => #110
        SubscribeSubject LNPStart
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: !Double.IsNaN(it)
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort2)) => #113
        #38, #39, #40, #55, #59, #64, #75, #87, #95, #106, #107, #110, #113 -> Merge
        -> MulticastSubject BehaviorCommands => #115
        SubscribeSubject BehaviorMessages => #116
        #115, #116 -> SubscribeWhen

    SubscribeSubject Config
    -> MemberSelector(Selector=Ports.Soundcard)
    -> PropertyMapping(PortName)
    -> GroupWorkflow SoundCard
        BehaviorSubject<Bonsai.Harp.HarpMessage> SoundCardCommands => #0
        ExternalizedMapping(PortName) => #1
        #0, #1 -> Harp.SoundCard.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM13)
        -> PublishSubject SoundCardMessages => #3
        SubscribeSubject OutputDirPath => #4
        SubscribeSubject OutputBackupDirPath => #5
        #4, #5 -> Zip
        -> Delay(DueTime=PT1S) => #7
        #3, #7 -> SubscribeWhen

        SubscribeSubject SoundCardMessages
        -> Harp.SoundCard.Parse(Register=Harp.SoundCard.InputState)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it & Harp.SoundCard.DigitalInputs.DI0

        SubscribeSubject PlaySound
        -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreateOutputSetPayload(OutputSet=DO1)) => #13
        Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreateConfigureDO1Payload(ConfigureDO1=Pulse)) => #14
        SubscribeSubject IsShortDuration => #15
        -> Bonsai.Scripting.Expressions.ExpressionCondition IfFalse
          Expression: !it
        -> IntProperty(Value=100)
        -> Sink SaveDuration => #18
            WorkflowInput Source1
            -> IntProperty(Value=0)
            -> MulticastSubject ShortSoundDuration
            -> WorkflowOutput
        #15 -> Bonsai.Scripting.Expressions.ExpressionCondition IfTrue
          Expression: it
        -> GroupWorkflow PickShortDuration
            WorkflowInput Source1 => #0
            SubscribeSubject AnimalConfig
            -> MemberSelector(Selector=Sound.ShortDurations.Count)
            -> Subtract(Operand=IntProperty(Value=1))
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
              Expression: Math.Max(it, 0)
            SubscribeSubject Random => #5
            #4, #5 -> WithLatestFrom
            -> InputMapping(Selector=Item2, Upper(Selector=Item1))
            -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=0) => #8
            #0, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Numerics.Distributions.Sample => #11
            SubscribeSubject AnimalConfig
            -> MemberSelector(Selector=Sound.ShortDurations) => #13
            #11, #13 -> WithLatestFrom
            -> InputMapping(Selector=Item2, Value(Selector=Item1))
            -> Index(Operand=IntProperty(Value=3))
            -> WorkflowOutput
        -> Sink SaveDuration => #21
            WorkflowInput Source1
            -> MulticastSubject ShortSoundDuration
            -> WorkflowOutput
        #18, #21 -> Merge
        -> InputMapping(Selector=it, PulseDO1(Selector=it))
        -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreatePulseDO1Payload(PulseDO1=100)) => #24
        SubscribeSubject SoundIndex
        -> InputMapping(Selector=it, SoundIndexDI0(Selector=it))
        -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreateSoundIndexDI0Payload(SoundIndexDI0=10)) => #27
        SubscribeSubject LeftIntensity => #28
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=Speakers.LeftSlope) => #30
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=Speakers.LeftIntercept) => #32
        #30, #32 -> Zip => #33
        #28, #33 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: - 20 * (Item1 - Item2.Item2) / Item2.Item1
        -> MulticastSubject LeftAmp
        -> Multiply(Operand=DoubleProperty(Value=10))
        -> InputMapping(Selector=it, AttenuationLeftDI0(Selector=it))
        -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreateAttenuationLeftDI0Payload(AttenuationLeftDI0=423)) => #39
        SubscribeSubject RightIntensity => #40
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=Speakers.RightSlope) => #42
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=Speakers.RightIntercept) => #44
        #42, #44 -> Zip => #45
        #40, #45 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: - 20 * (Item1 - Item2.Item2) / Item2.Item1
        -> MulticastSubject RightAmp
        -> Multiply(Operand=DoubleProperty(Value=10))
        -> InputMapping(Selector=it, AttenuationRightDI0(Selector=it))
        -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreateAttenuationRightDI0Payload(AttenuationRightDI0=425)) => #51
        SubscribeSubject IsShortDuration => #52
        -> Bonsai.Scripting.Expressions.ExpressionCondition IfFalse
          Expression: !it
        -> IntProperty(Value=2) => #54
        #52 -> Bonsai.Scripting.Expressions.ExpressionCondition IfTrue
          Expression: it
        -> IntProperty(Value=1) => #56
        #54, #56 -> Merge
        -> InputMapping(Selector=it, ConfigureDI0(Selector=it))
        -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreateConfigureDI0Payload(ConfigureDI0=StartSound)) => #59
        #13, #14, #24, #27, #39, #51, #59 -> Merge
        -> MulticastSubject SoundCardCommands => #61
        SubscribeSubject SoundCardMessages => #62
        #61, #62 -> SubscribeWhen

    SubscribeSubject Config
    -> MemberSelector(Selector=Ports.LeftPump)
    -> PropertyMapping(PortName)
    -> GroupWorkflow LeftSyringePump
        BehaviorSubject<Bonsai.Harp.HarpMessage> LeftPumpCommands => #0
        ExternalizedMapping(PortName) => #1
        #0, #1 -> Harp.SyringePump.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM10)
        -> PublishSubject LeftPumpMessages => #3
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=SyringePumps.UsePumps)
        -> Bonsai.Scripting.Expressions.ExpressionCondition => #6
          Expression: it
        SubscribeSubject OutputDirPath => #7
        SubscribeSubject OutputBackupDirPath => #8
        #6, #7, #8 -> Zip
        -> Delay(DueTime=PT1S) => #10
        #3, #10 -> SubscribeWhen

        Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolDirectionPayload(ProtocolDirection=Forward)) => #12
        SubscribeSubject LeftRewardSteps
        -> InputMapping(Selector=it, ProtocolStepCount(Selector=it))
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolStepCountPayload(ProtocolStepCount=45))
        -> Condition => #16
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=SyringePumps.NumPumps) => #1
            ExternalizedMapping(Value(DisplayName=NumPumps)) => #2
            #1, #2 -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolPeriodPayload(ProtocolPeriod=1)) => #17
        Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateStepModePayload(StepMode=Half)) => #18
        #12, #16, #17, #18 -> Merge
        -> MulticastSubject LeftPumpCommands => #20
        SubscribeSubject LeftPumpMessages => #21
        #20, #21 -> SubscribeWhen

    SubscribeSubject Config
    -> MemberSelector(Selector=Ports.RightPump)
    -> PropertyMapping(PortName)
    -> GroupWorkflow RightSyringePump
        BehaviorSubject<Bonsai.Harp.HarpMessage> RightPumpCommands => #0
        ExternalizedMapping(PortName) => #1
        #0, #1 -> Harp.SyringePump.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM9)
        -> PublishSubject RightPumpMessages => #3
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=SyringePumps.UsePumps)
        -> Bonsai.Scripting.Expressions.ExpressionCondition => #6
          Expression: it
        SubscribeSubject OutputDirPath => #7
        SubscribeSubject OutputBackupDirPath => #8
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=SyringePumps.NumPumps)
        -> Bonsai.Scripting.Expressions.ExpressionCondition => #11
          Expression: it == 2
        #6, #7, #8, #11 -> Zip
        -> Delay(DueTime=PT1S) => #13
        #3, #13 -> SubscribeWhen

        Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolDirectionPayload(ProtocolDirection=Forward)) => #15
        SubscribeSubject RightRewardSteps
        -> InputMapping(Selector=it, ProtocolStepCount(Selector=it))
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolStepCountPayload(ProtocolStepCount=45)) => #18
        Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolPeriodPayload(ProtocolPeriod=1)) => #19
        Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateStepModePayload(StepMode=Half)) => #20
        #15, #18, #19, #20 -> Merge
        -> MulticastSubject RightPumpCommands => #22
        SubscribeSubject RightPumpMessages => #23
        #22, #23 -> SubscribeWhen

    SubscribeSubject Config
    -> MemberSelector(Selector=Ports.Currentdriver)
    -> PropertyMapping(PortName)
    -> GroupWorkflow CurrentDriver
        GroupWorkflow OptogeneticsConfig
            SubscribeSubject OptoProtocol
            -> MemberSelector(Selector=Led0.Mode)
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == "Current"
            -> Harp.CurrentDriver.CreateMessage(MessageType=Write, Payload=Harp.CurrentDriver.CreateLedEnablePayload(LedEnable=LED0)) => #3
            SubscribeSubject OptoProtocol
            -> MemberSelector(Selector=Led1.Mode)
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == "Current"
            -> Harp.CurrentDriver.CreateMessage(MessageType=Write, Payload=Harp.CurrentDriver.CreateLedEnablePayload(LedEnable=LED1)) => #7
            SubscribeSubject OptoProtocol
            -> MemberSelector(Selector=Led0.Mode)
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == "Analog"
            -> Harp.CurrentDriver.CreateMessage(MessageType=Write, Payload=Harp.CurrentDriver.CreateLedDisablePayload(LedDisable=LED0)) => #11
            SubscribeSubject OptoProtocol
            -> MemberSelector(Selector=Led1.Mode)
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == "Analog"
            -> Harp.CurrentDriver.CreateMessage(MessageType=Write, Payload=Harp.CurrentDriver.CreateLedDisablePayload(LedDisable=LED1)) => #15
            SubscribeSubject OptoProtocol
            -> MemberSelector(Selector=Led0.UsePulses) => #17
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: !it
            -> ByteProperty(Value=0) => #19
            #17 -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it
            -> ByteProperty(Value=1) => #21
            #19, #21 -> Merge => #22
            SubscribeSubject OptoProtocol
            -> MemberSelector(Selector=Led1.UsePulses) => #24
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: !it
            -> ByteProperty(Value=0) => #26
            #24 -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it
            -> ByteProperty(Value=2) => #28
            #26, #28 -> Merge => #29
            #22, #29 -> CombineLatest
            -> BitwiseOr
            -> InputMapping(Selector=it, PulseEnable(Selector=it))
            -> Harp.CurrentDriver.CreateMessage(MessageType=Write, Payload=Harp.CurrentDriver.CreatePulseEnablePayload(PulseEnable=None)) => #33
            SubscribeSubject OptoProtocol
            -> MemberSelector(Selector=Led0.DutyCycle)
            -> InputMapping(Selector=it, PulseDutyCycleLed0(Selector=it))
            -> Harp.CurrentDriver.CreateMessage(MessageType=Write, Payload=Harp.CurrentDriver.CreatePulseDutyCycleLed0Payload(PulseDutyCycleLed0=100)) => #37
            SubscribeSubject OptoProtocol
            -> MemberSelector(Selector=Led1.DutyCycle)
            -> InputMapping(Selector=it, PulseDutyCycleLed1(Selector=it))
            -> Harp.CurrentDriver.CreateMessage(MessageType=Write, Payload=Harp.CurrentDriver.CreatePulseDutyCycleLed1Payload(PulseDutyCycleLed1=100)) => #41
            SubscribeSubject OptoProtocol
            -> MemberSelector(Selector=Led0.Frequency)
            -> InputMapping(Selector=it, PulseFrequencyLed0(Selector=it))
            -> Harp.CurrentDriver.CreateMessage(MessageType=Write, Payload=Harp.CurrentDriver.CreatePulseFrequencyLed0Payload(PulseFrequencyLed0=1)) => #45
            SubscribeSubject OptoProtocol
            -> MemberSelector(Selector=Led1.Frequency)
            -> InputMapping(Selector=it, PulseFrequencyLed1(Selector=it))
            -> Harp.CurrentDriver.CreateMessage(MessageType=Write, Payload=Harp.CurrentDriver.CreatePulseFrequencyLed1Payload(PulseFrequencyLed1=1)) => #49
            SubscribeSubject OptoProtocol
            -> MemberSelector(Selector=RampTime)
            -> InputMapping(RampLed0(Selector=it))
            -> Harp.CurrentDriver.CreateMessage(MessageType=Write, Payload=Harp.CurrentDriver.CreateRampLed0Payload(RampLed0=1)) => #53
            SubscribeSubject OptoProtocol
            -> MemberSelector(Selector=RampTime)
            -> InputMapping(Selector=it, RampLed1(Selector=it))
            -> Harp.CurrentDriver.CreateMessage(MessageType=Write, Payload=Harp.CurrentDriver.CreateRampLed1Payload(RampLed1=1)) => #57
            SubscribeSubject OptoProtocol
            -> MemberSelector(Selector=RampMode) => #59
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it = "None"
            -> ByteProperty(Value=0) => #61
            #59 -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it = "Rise"
            -> ByteProperty(Value=5) => #63
            #59 -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it = "Fall"
            -> ByteProperty(Value=10) => #65
            #59 -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it = "Both"
            -> ByteProperty(Value=15) => #67
            #61, #63, #65, #67 -> Merge
            -> InputMapping(Selector=it, RampConfig(Selector=it))
            -> Harp.CurrentDriver.CreateMessage(MessageType=Write, Payload=Harp.CurrentDriver.CreateRampConfigPayload(RampConfig=None)) => #70
            Source3=#3, Source4=#7, Source5=#11, Source6=#15, Source7=#33, Source8=#37, Source9=#41, Source10=#45, Source11=#49, Source12=#53, Source13=#57, Source14=#70 -> Merge
            -> MulticastSubject CDCommands => #72
            SubscribeSubject CDMessages => #73
            #72, #73 -> SubscribeWhen
            -> WorkflowOutput

        BehaviorSubject<Bonsai.Harp.HarpMessage> CDCommands => #1
        ExternalizedMapping(PortName) => #2
        #1, #2 -> Harp.CurrentDriver.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM11)
        -> PublishSubject CDMessages => #4
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=Optogenetics.UseOpto)
        -> Bonsai.Scripting.Expressions.ExpressionCondition => #7
          Expression: it
        SubscribeSubject OutputDirPath => #8
        SubscribeSubject OutputBackupDirPath => #9
        #7, #8, #9 -> Zip
        -> Delay(DueTime=PT1S) => #11
        #4, #11 -> SubscribeWhen

    SubscribeSubject Config
    -> MemberSelector(Selector=Ports.Clocksynchronizer)
    -> PropertyMapping(PortName)
    -> GroupWorkflow ClockSynchronizer
        IntProperty(Value=0)
        -> Bonsai.Harp.SynchronizeTimestamp => #1
        ExternalizedMapping(PortName) => #2
        #1, #2 -> Harp.ClockSynchronizer.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM4)

GroupWorkflow Output
    ExternalizedMapping(Version)
    -> GroupWorkflow Data
        SubscribeSubject TrialEnd
        -> Skip(Count=1) => #1
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=AnimalId)
        -> PropertyMapping(AnimalId) => #4
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=Batch)
        -> PropertyMapping(Batch) => #7
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=Session.Experimenter)
        -> PropertyMapping(Experimenter) => #10
        ExternalizedMapping(Version) => #11
        SubscribeSubject Trial => #12
        SubscribeSubject TrialStart => #13
        SubscribeSubject TrialEnd => #14
        SubscribeSubject TrialEnd => #15
        SubscribeSubject TrialStart => #16
        #15, #16 -> CombineLatest
        -> Subtract => #18
        SubscribeSubject TrialStart => #19
        -> Take(Count=1) => #20
        #19, #20 -> WithLatestFrom
        -> Subtract => #22
        #12, #13, #14, #18, #22 -> CombineLatest
        -> InputMapping(Selector=it, Number(Selector=Item1), StartTime(Selector=Item2), EndTime(Selector=Item3), Duration(Selector=Item4), TaredStartTime(Selector=Item5))
        -> Output.Trial(Number=2, StartTime=3859098001.52, TaredStartTime=34.159008026123047, EndTime=3859097998.42, Duration=-3.0999999046325684)
        -> PropertyMapping(Trial) => #26
        SubscribeSubject Block => #27
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=LevelId) => #29
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=TrialsPerBlock) => #31
        #27, #29, #31 -> CombineLatest
        -> InputMapping(Selector=it, Number(Selector=Item1), TrainingLevel(Selector=Item2), TrialsPerBlock(Selector=Item3))
        -> Output.Block(Number=1, TrainingLevel=16, TrialsPerBlock=100)
        -> PropertyMapping(Block) => #35
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=Session.Number) => #37
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=Session.Type) => #39
        SubscribeSubject Config
        -> MemberSelector(Selector=Setup) => #41
        #37, #39, #41 -> CombineLatest
        -> InputMapping(Selector=it, Number(Selector=Item1), Type(Selector=Item2), Box(Selector=Item3))
        -> Output.Session(Number=4, Type=1, Box=11)
        -> PropertyMapping(Session) => #45
        SubscribeSubject ABL => #46
        SubscribeSubject ILD => #47
        SubscribeSubject SoundIndex => #48
        SubscribeSubject LeftAmp => #49
        SubscribeSubject RightAmp => #50
        SubscribeSubject IsShortDuration => #51
        SubscribeSubject ShortSoundDuration => #52
        #46, #47, #48, #49, #50, #51, #52 -> CombineLatest
        -> InputMapping
          Selector=it
          Abl(Selector=Item1)
          Ild(Selector=Item2)
          SoundIndex(Selector=Item3)
          LeftAmp(Selector=Item4)
          RightAmp(Selector=Item5)
          IsShortSound(Selector=Item6)
          ShortDuration(Selector=Item7)
        -> Output.Sound(Abl=20, Ild=2, SoundIndex=10, LeftAmp=42.384101699424136, RightAmp=42.510893654013039, IsShortSound=false, ShortDuration=0)
        -> PropertyMapping(Sound) => #56
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=Iti.Value) => #58
        SubscribeSubject ITIStart => #59
        SubscribeSubject TrialStart => #60
        SubscribeSubject TrialStart => #61
        SubscribeSubject ITIStart => #62
        #61, #62 -> CombineLatest
        -> Subtract => #64
        #58, #59, #60, #64 -> CombineLatest
        -> InputMapping(Selector=it, IntendedDuration(Selector=Item1), StartTime(Selector=Item2), EndTime(Selector=Item3), TimedDuration(Selector=Item4))
        -> Output.ITI(IntendedDuration=3, StartTime=3859097998.512, EndTime=3859098001.52, TimedDuration=3.0079998970031738)
        -> PropertyMapping(Iti) => #68
        SubscribeSubject TimeToCNP => #69
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=MaxWait) => #71
        SubscribeSubject CNPStart => #72
        #69, #71, #72 -> CombineLatest
        -> InputMapping(Selector=it, TimedValue(Selector=Item1), MaxDuration(Selector=Item2), StartTime(Selector=Item3))
        -> Output.Cnp(StartTime=3859098016.2779841, TimedValue=14.757984161376953, MaxDuration=30)
        -> PropertyMapping(Cnp) => #76
        SubscribeSubject BaseFT => #77
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=FtExpMean) => #79
        SubscribeSubject IntendedSoundOnset => #80
        SubscribeSubject TimedFT => #81
        SubscribeSubject TimedFT => #82
        SubscribeSubject TimedRT
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it >= 0
        -> Divide(Operand=DoubleProperty(Value=1000)) => #85
        #82, #85 -> CombineLatest
        -> Add => #87
        SubscribeSubject CatchTrial => #88
        #77, #79, #80, #81, #87, #88 -> CombineLatest
        -> InputMapping
          Selector=it
          BaseTime(Selector=Item1)
          ExpMean(Selector=Item2)
          IntendedDuration(Selector=Item3)
          TimedDuration(Selector=Item4)
          TotalDuration(Selector=Item5)
          CatchTrial(Selector=Item6)
        -> Output.FixationTime(BaseTime=10, ExpMean=400, IntendedDuration=411.93317153835619, TimedDuration=423.583984375, TotalDuration=423.58526411867143, CatchTrial=false)
        -> PropertyMapping(FixationTime) => #92
        SubscribeSubject BaseRT => #93
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=ReactionTime.MaxValue) => #95
        SubscribeSubject TimedRT => #96
        SubscribeSubject RTStart => #97
        #93, #95, #96, #97 -> CombineLatest
        -> InputMapping(Selector=it, BaseTime(Selector=Item1), MaxDuration(Selector=Item2), TimedDuration(Selector=Item3), StartTime(Selector=Item4))
        -> Output.ReactionTime(BaseTime=0.01, MaxDuration=10, StartTime=3859098016.7015681, TimedDuration=1.2797436714172363)
        -> PropertyMapping(ReactionTime) => #101
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=MaxMt) => #103
        SubscribeSubject TimedMT => #104
        SubscribeSubject MTStart => #105
        #103, #104, #105 -> CombineLatest
        -> InputMapping(Selector=it, MaxDuration(Selector=Item1), TimedDuration(Selector=Item2), StartTime(Selector=Item3))
        -> Output.MovementTime(MaxDuration=2, StartTime=3859098017.9813118, TimedDuration=0.27452802658081055)
        -> PropertyMapping(MovementTime) => #109
        SubscribeSubject IntendedLNP => #110
        SubscribeSubject LNPStart => #111
        SubscribeSubject LNPEnd => #112
        SubscribeSubject TimedLNP => #113
        #110, #111, #112, #113 -> CombineLatest
        -> InputMapping(Selector=it, IntendedDuration(Selector=Item1), StartTime(Selector=Item2), EndTime(Selector=Item3), TimedDuration(Selector=Item4))
        -> Output.LnpTime(IntendedDuration=0.01, StartTime=NaN, EndTime=0, TimedDuration=NaN)
        -> PropertyMapping(LnpTime) => #117
        SubscribeSubject ResponsePoke => #118
        SubscribeSubject ParsedOutcome => #119
        SubscribeSubject BlockPerformance => #120
        SubscribeSubject BlockAbortRatio => #121
        Source1=#118, Source3=#119, Source4=#120, Source5=#121 -> CombineLatest
        -> InputMapping
          Selector=it
          ResponsePoke(Selector=Item1)
          BlockPerformance(Selector=Item3)
          BlockAbortRatio(Selector=Item4)
          Success(Selector=Item2.Item2)
          AbortType(Selector=Item2.Item1)
        -> Output.Outcome(ResponsePoke=-1, Success=-1, AbortType=Empty, BlockPerformance=0, BlockAbortRatio=0.5)
        -> PropertyMapping(Outcome) => #125
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=PenaltyTimes)
        -> InputMapping(Selector=it, Incorrect(Selector=Incorrect), Abort(Selector=Abort), FixationAbort(Selector=FixationAbort))
        -> Output.PenaltyTimes(Incorrect=15, Abort=1, FixationAbort=5)
        -> PropertyMapping(PenaltyTimes) => #130
        SubscribeSubject Bias
        -> PropertyMapping(Bias) => #132
        SubscribeSubject LeftReward => #133
        SubscribeSubject RightReward => #134
        SubscribeSubject RewardDelivered => #135
        #133, #134, #135 -> CombineLatest
        -> InputMapping(Selector=it, Left(Selector=Item1), Right(Selector=Item2), Delivered(Selector=Item3))
        -> Output.Reward(Left=15, Right=15, Delivered=false)
        -> PropertyMapping(Reward) => #139
        SubscribeSubject RepeatTrial
        -> PropertyMapping(RepeatedTrial) => #141
        SubscribeSubject OptoTrial
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #143
          Expression: Convert.ToBoolean(it)
        SubscribeSubject TimedLED => #144
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=Optogenetics.Mode) => #146
        SubscribeSubject OptoProtocol
        -> MemberSelector(Selector=RampMode) => #148
        SubscribeSubject OptoProtocol
        -> MemberSelector(Selector=RampTime) => #150
        SubscribeSubject OptoProtocol
        -> MemberSelector(Selector=Onset) => #152
        SubscribeSubject OptoProtocol
        -> MemberSelector(Selector=ProtocolDelay) => #154
        #143, #144, #146, #148, #150, #152, #154 -> CombineLatest => #155
        SubscribeSubject OptoProtocol
        -> MemberSelector(Selector=Led0.Voltage) => #157
        SubscribeSubject OptoProtocol
        -> MemberSelector(Selector=Led0.Power) => #159
        SubscribeSubject OptoProtocol
        -> MemberSelector(Selector=Led0.UsePulses) => #161
        SubscribeSubject OptoProtocol
        -> MemberSelector(Selector=Led0.Frequency) => #163
        SubscribeSubject OptoProtocol
        -> MemberSelector(Selector=Led0.DutyCycle) => #165
        #157, #159, #161, #163, #165 -> CombineLatest => #166
        SubscribeSubject OptoProtocol
        -> MemberSelector(Selector=Led1.Voltage) => #168
        SubscribeSubject OptoProtocol
        -> MemberSelector(Selector=Led1.Power) => #170
        SubscribeSubject OptoProtocol
        -> MemberSelector(Selector=Led1.UsePulses) => #172
        SubscribeSubject OptoProtocol
        -> MemberSelector(Selector=Led1.Frequency) => #174
        SubscribeSubject OptoProtocol
        -> MemberSelector(Selector=Led1.DutyCycle) => #176
        #168, #170, #172, #174, #176 -> CombineLatest => #177
        SubscribeSubject TimedOptoOnset => #178
        SubscribeSubject IntendedOptoOnset => #179
        #155, #166, #177, #178, #179 -> CombineLatest
        -> InputMapping
          Selector=it
          OptoTrial(Selector=Item1.Item1)
          Duration(Selector=Item1.Item2)
          Mode(Selector=Item1.Item3)
          RampMode(Selector=Item1.Item4)
          RampTime(Selector=Item1.Item5)
          Onset(Selector=Item1.Item6)
          ProtocolDelay(Selector=Item1.Item7)
          Led0Voltage(Selector=Item2.Item1)
          Led0Power(Selector=Item2.Item2)
          Led0Pulses(Selector=Item2.Item3)
          Led0Frequency(Selector=Item2.Item4)
          Led0DutyCycle(Selector=Item2.Item5)
          Led1Voltage(Selector=Item3.Item1)
          Led1Power(Selector=Item3.Item2)
          Led1Pulses(Selector=Item3.Item3)
          Led1Frequency(Selector=Item3.Item4)
          Led1DutyCycle(Selector=Item3.Item5)
          IntendedOptoOnsetTime(Selector=Item4)
          TimedOptoOnsetTime(Selector=Item5)
        -> Output.Optogenetics
          OptoTrial=false
          IntendedOptoOnsetTime=NaN
          TimedOptoOnsetTime=151.96174233083519
          Duration=NaN
          Mode=None
          RampMode=None
          RampTime=1
          Onset=MidFixation
          ProtocolDelay=0
          Led0Voltage=0
          Led0Power=0
          Led0Pulses=false
          Led0Frequency=1
          Led0DutyCycle=100
          Led1Voltage=0
          Led1Power=0
          Led1Pulses=false
          Led1Frequency=1
          Led1DutyCycle=100
        -> PropertyMapping(Optogenetics) => #183
        #1, #4, #7, #10, #11, #26, #35, #45, #56, #68, #76, #92, #101, #109, #117, #125, #130, #132, #139, #141, #183 -> Output.Output(AnimalId=ANIMAL0001, Batch=batch, Experimenter=JG, Version=0.10.0, Bias=-0.04, RepeatedTrial=false)
        -> BehaviorSubject JsonLine

        SubscribeSubject TrialEnd
        -> Skip(Count=1) => #187
        SubscribeSubject Outcome => #188
        #187, #188 -> WithLatestFrom => #189
        -> Bonsai.Scripting.Expressions.ExpressionCondition HasLnpTime => #190
          Expression: Item2 == 2 || Item2 == 1 || Item2 == -7
        SubscribeSubject LNPEnd
        -> Bonsai.Scripting.Expressions.ExpressionCondition => #192
          Expression: !Double.IsNaN(it)
        SubscribeSubject TimedLNP
        -> Bonsai.Scripting.Expressions.ExpressionCondition => #194
          Expression: !Double.IsNaN(it)
        #192, #194 -> Zip => #195
        #190, #195 -> Zip
        -> MemberSelector(Selector=Item2) => #197
        SubscribeSubject JsonLine => #198
        #197, #198 -> WithLatestFrom
        -> InputMapping
          Selector=it
          IntendedDuration(Selector=Item2.LnpTime.IntendedDuration)
          TimedDuration(Selector=Item1.Item2)
          StartTime(Selector=Item2.LnpTime.StartTime)
          EndTime(Selector=Item1.Item1)
        -> Output.LnpTime(IntendedDuration=0.01, StartTime=3859097645.2024, EndTime=0, TimedDuration=0.189727783203125) => #201
        SubscribeSubject JsonLine => #202
        #201, #202 -> WithLatestFrom
        -> InputMapping
          Selector=it
          LnpTime(Selector=Item1)
          AnimalId(Selector=Item2.AnimalId)
          Batch(Selector=Item2.Batch)
          Experimenter(Selector=Item2.Experimenter)
          Version(Selector=Item2.Version)
          Trial(Selector=Item2.Trial)
          Block(Selector=Item2.Block)
          Session(Selector=Item2.Session)
          Sound(Selector=Item2.Sound)
          Iti(Selector=Item2.Iti)
          Cnp(Selector=Item2.Cnp)
          FixationTime(Selector=Item2.FixationTime)
          ReactionTime(Selector=Item2.ReactionTime)
          MovementTime(Selector=Item2.MovementTime)
          Outcome(Selector=Item2.Outcome)
          PenaltyTimes(Selector=Item2.PenaltyTimes)
          Bias(Selector=Item2.Bias)
          Reward(Selector=Item2.Reward)
          RepeatedTrial(Selector=Item2.RepeatedTrial)
          Optogenetics(Selector=Item2.Optogenetics)
        -> Output.Output(AnimalId=ANIMAL0001, Batch=batch, Experimenter=JG, Version=0.10.0, Bias=-0.08, RepeatedTrial=false) => #205
        #189 -> Bonsai.Scripting.Expressions.ExpressionCondition !HasLnpTime => #206
          Expression: !(Item2 == 2 || Item2 == 1 || Item2 == -7)
        SubscribeSubject JsonLine => #207
        #206, #207 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #209
        #205, #209 -> Merge
        -> Output.SerializeToJson(Formatting=None) => #211
        SubscribeSubject OutputDirPath => #212
        SubscribeSubject Suffix
        -> Format(Format=unparsed_out/out_{0}.json, Selector=it) => #214
        #212, #214 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item1 + Item2
        -> PropertyMapping(Path) => #217
        #211, #217 -> JsonWriter(Path=C:/Users/RenartLab/Desktop/CDC.SoundLateralizationTask/output/batch/ANIMAL0001/260415/unparsed_out/out_123922.json, Suffix=None, Overwrite=false)
        -> Condition => #219
            SubscribeSubject Config
            -> MemberSelector(Selector=Paths.OutputBackup)
            -> NotEqual(Operand=StringProperty)
            -> WorkflowOutput
        SubscribeSubject OutputBackupDirPath => #220
        SubscribeSubject Suffix
        -> Format(Format=unparsed_out/out_{0}.json, Selector=it) => #222
        #220, #222 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item1 + Item2
        -> PropertyMapping(Path) => #225
        #219, #225 -> JsonWriter => #226
          Path: G:\.shortcut-targets-by-id\0ByIwavJ3nGrAbVVmNWo3OU5sM1k\RatBehaviorRoom\Rats\ILDtask\ASD_MV animals/batch/ANIMAL0001/260415/unparsed_out/out_123922.json
          Suffix=None
          Overwrite=false
        SubscribeSubject OutputDirPath => #227
        SubscribeSubject OutputBackupDirPath => #228
        #227, #228 -> Zip => #229
        #226, #229 -> SubscribeWhen
        -> WorkflowOutput

    GroupWorkflow Video
        SubscribeSubject Camera
        -> Bonsai.Vision.ImageWriter(Path=\\.\pipe\video, Suffix=None, Overwrite=false) => #1
        SubscribeSubject OutputDirPath => #2
        #1, #2 -> SubscribeWhen

        StringProperty(Value="-y -f rawvideo -vcodec rawvideo -s ") => #4
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=Camera.Resolution) => #6
        StringProperty(Value=" -pix_fmt gray -r ") => #7
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=Camera.FramesPerSecond)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #10
          Expression: Convert.ToString(it)
        StringProperty(Value=" -i \\.\pipe\video -c:v h264 -vb 20M ") => #11
        #4, #6, #7, #10, #11 -> Zip
        -> Add => #13
        SubscribeSubject OutputDirPath => #14
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=AnimalId) => #16
        StringProperty(Value=_) => #17
        SubscribeSubject SuffixDay => #18
        StringProperty(Value=_) => #19
        SubscribeSubject Suffix => #20
        #16, #17, #18, #19, #20 -> Zip
        -> Add
        -> Format(Format={0}.mp4, Selector=it) => #23
        #14, #23 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #25
          Expression: Item1 + Item2
        #13, #25 -> Zip
        -> Add
        -> Condition => #28
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=Camera.Codec) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Equal(Operand=WorkflowProperty<Setup.CameraCodec>(Value=H264))
            -> WorkflowOutput
        StringProperty(Value="-y -f rawvideo -vcodec rawvideo -s ") => #29
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=Camera.Resolution) => #31
        StringProperty(Value=" -pix_fmt gray -r ") => #32
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=Camera.FramesPerSecond)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #35
          Expression: Convert.ToString(it)
        StringProperty(Value=" -i \\.\pipe\video -c:v h264_amf -quality 2 -preset 2 -rc cqp -qp_i ") => #36
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=Camera.QpI)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #39
          Expression: Convert.ToString(it)
        StringProperty(Value=" -qp_p ") => #40
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=Camera.QpP)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #43
          Expression: Convert.ToString(it)
        StringProperty(Value=" -qp_b ") => #44
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=Camera.QpB)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #47
          Expression: Convert.ToString(it) + " "
        #29, #31, #32, #35, #36, #39, #40, #43, #44, #47 -> Zip
        -> Add => #49
        SubscribeSubject OutputDirPath => #50
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=AnimalId) => #52
        StringProperty(Value=_) => #53
        SubscribeSubject SuffixDay => #54
        StringProperty(Value=_) => #55
        SubscribeSubject Suffix => #56
        #52, #53, #54, #55, #56 -> Zip
        -> Add
        -> Format(Format={0}.mp4, Selector=it) => #59
        #50, #59 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #61
          Expression: Item1 + Item2
        #49, #61 -> Zip
        -> Add
        -> Condition => #64
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=Camera.Codec) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Equal(Operand=WorkflowProperty<Setup.CameraCodec>(Value=H264Amf))
            -> WorkflowOutput
        #28, #64 -> Merge
        -> PropertyMapping(Arguments)
        -> Bonsai.IO.StartProcess => #67
          FileName='"ffmpeg"'
          Arguments: -y -f rawvideo -vcodec rawvideo -s 1440x1080 -pix_fmt gray -r 100 -i \\.\pipe\video -c:v h264_amf -quality 2 -preset 2 -rc cqp -qp_i 40 -qp_p 40 -qp_b 40 C:/Users/RenartLab/Desktop/CDC.SoundLateralizationTask/output/batch/ANIMAL0001/260415/ANIMAL0001_260415_123922.mp4
        SubscribeSubject OutputDirPath => #68
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=Camera.UseCamera)
        -> Bonsai.Scripting.Expressions.ExpressionCondition => #71
          Expression: it
        #68, #71 -> Zip => #72
        #67, #72 -> SubscribeWhen

    GroupWorkflow CameraMetadata
        SubscribeSubject CameraMetadata => #0
        SubscribeSubject OutputDirPath => #1
        SubscribeSubject Suffix
        -> Format(Format=cam_metadata_{0}.csv, Selector=it) => #3
        #1, #3 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item1 + Item2
        -> PropertyMapping(FileName) => #6
        #0, #6 -> Bonsai.IO.CsvWriter
          FileName=C:/Users/RenartLab/Desktop/CDC.SoundLateralizationTask/output/batch/ANIMAL0001/260415/cam_metadata_123922.csv
          Append=false
          Overwrite=false
          Suffix=None
          IncludeHeader=false
        -> Disable Condition => #8
            SubscribeSubject Config
            -> MemberSelector(Selector=Paths.OutputBackup)
            -> NotEqual(Operand=StringProperty)
            -> WorkflowOutput
        Disable SubscribeSubject OutputBackupDirPath => #9
        Disable SubscribeSubject Suffix
        -> Disable Format(Format=cam_metadata_{0}.csv, Selector=it) => #11
        #9, #11 -> Disable Zip
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item1 + Item2
        -> Disable PropertyMapping(FileName) => #14
        #8, #14 -> Disable Bonsai.IO.CsvWriter => #15
          FileName=C:/Users/HSP/Documents/backup/batch/ANIMAL0003/250916/cam_metadata_135951.csv
          Append=false
          Overwrite=false
          Suffix=None
          IncludeHeader=false
        SubscribeSubject OutputDirPath => #16
        Disable SubscribeSubject OutputBackupDirPath => #17
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=Camera.UseCamera)
        -> Bonsai.Scripting.Expressions.ExpressionCondition => #20
          Expression: it
        #16, #17, #20 -> Zip => #21
        #15, #21 -> SubscribeWhen

    GroupWorkflow Logging
        GroupWorkflow Behavior
            SubscribeSubject BehaviorMessages
            -> Bonsai.Harp.GroupByRegister => #1
            SubscribeSubject OutputDirPath => #2
            SubscribeSubject Suffix
            -> Format(Format=events/{0}/behavior/behavior.bin, Selector=it) => #4
            #2, #4 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Item1 + Item2
            -> PropertyMapping(FileName) => #7
            #1, #7 -> Bonsai.Harp.MessageWriter
              FileName=C:/Users/RenartLab/Desktop/CDC.SoundLateralizationTask/output/batch/ANIMAL0001/260415/events/123922/behavior/behavior.bin
              Suffix=None
              Buffered=true
              Overwrite=false
              FilterType=Include
              MessageType=nil
            -> Disable Condition => #9
                SubscribeSubject Config
                -> MemberSelector(Selector=Paths.OutputBackup)
                -> NotEqual(Operand=StringProperty)
                -> WorkflowOutput
            Disable SubscribeSubject OutputBackupDirPath => #10
            Disable SubscribeSubject Suffix
            -> Disable Format(Format=events/{0}/behavior/behavior.bin, Selector=it) => #12
            #10, #12 -> Disable Zip
            -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Item1 + Item2
            -> Disable PropertyMapping(FileName) => #15
            #9, #15 -> Disable Bonsai.Harp.MessageWriter => #16
              FileName=C:/Users/HSP/Documents/backup/batch/ANIMAL0000/251022/events/131546/behavior/behavior.bin
              Suffix=None
              Buffered=true
              Overwrite=false
              FilterType=Include
              MessageType=nil
            SubscribeSubject OutputDirPath => #17
            Disable SubscribeSubject OutputBackupDirPath => #18
            #17, #18 -> Disable Zip => #19
            #16, #19 -> SubscribeWhen

            Harp.Behavior.GetDeviceMetadata => #21
            SubscribeSubject OutputDirPath => #22
            SubscribeSubject Suffix
            -> Format(Format=events/{0}/behavior/device.yml, Selector=it) => #24
            #22, #24 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Item1 + Item2
            -> PropertyMapping(Path) => #27
            #21, #27 -> Bonsai.IO.WriteAllText
              Path=C:/Users/RenartLab/Desktop/CDC.SoundLateralizationTask/output/batch/ANIMAL0001/260415/events/123922/behavior/device.yml
              Overwrite=true
              Append=false
            -> Disable Condition => #29
                SubscribeSubject Config
                -> MemberSelector(Selector=Paths.OutputBackup)
                -> NotEqual(Operand=StringProperty)
                -> WorkflowOutput
            Disable SubscribeSubject OutputBackupDirPath => #30
            Disable SubscribeSubject Suffix
            -> Disable Format(Format=events/{0}/behavior/device.yml, Selector=it) => #32
            #30, #32 -> Disable Zip
            -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Item1 + Item2
            -> Disable PropertyMapping(Path) => #35
            #29, #35 -> Disable Bonsai.IO.WriteAllText(Path=C:/Users/HSP/Documents/backup/batch/ANIMAL0000/251022/events/131546/behavior/device.yml, Overwrite=true, Append=false) => #36
            SubscribeSubject OutputDirPath => #37
            Disable SubscribeSubject OutputBackupDirPath => #38
            #37, #38 -> Disable Zip => #39
            #36, #39 -> SubscribeWhen

        GroupWorkflow SoundCard
            SubscribeSubject SoundCardMessages
            -> Bonsai.Harp.GroupByRegister => #1
            SubscribeSubject OutputDirPath => #2
            SubscribeSubject Suffix
            -> Format(Format=events/{0}/soundcard/soundcard.bin, Selector=it) => #4
            #2, #4 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Item1 + Item2
            -> PropertyMapping(FileName) => #7
            #1, #7 -> Bonsai.Harp.MessageWriter
              FileName=C:/Users/RenartLab/Desktop/CDC.SoundLateralizationTask/output/batch/ANIMAL0001/260415/events/123922/soundcard/soundcard.bin
              Suffix=None
              Buffered=true
              Overwrite=false
              FilterType=Include
              MessageType=nil
            -> Disable Condition => #9
                SubscribeSubject Config
                -> MemberSelector(Selector=Paths.OutputBackup)
                -> NotEqual(Operand=StringProperty)
                -> WorkflowOutput
            Disable SubscribeSubject OutputBackupDirPath => #10
            Disable SubscribeSubject Suffix
            -> Disable Format(Format=events/{0}/soundcard/soundcard.bin, Selector=it) => #12
            #10, #12 -> Disable Zip
            -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Item1 + Item2
            -> Disable PropertyMapping(FileName) => #15
            #9, #15 -> Disable Bonsai.Harp.MessageWriter => #16
              FileName=C:/Users/HSP/Documents/backup/batch/ANIMAL0000/251022/events/131546/soundcard/soundcard.bin
              Suffix=None
              Buffered=true
              Overwrite=false
              FilterType=Include
              MessageType=nil
            SubscribeSubject OutputDirPath => #17
            Disable SubscribeSubject OutputBackupDirPath => #18
            #17, #18 -> Disable Zip => #19
            #16, #19 -> SubscribeWhen

            Harp.SoundCard.GetDeviceMetadata => #21
            SubscribeSubject OutputDirPath => #22
            SubscribeSubject Suffix
            -> Format(Format=events/{0}/soundcard/device.yml, Selector=it) => #24
            #22, #24 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Item1 + Item2
            -> PropertyMapping(Path) => #27
            #21, #27 -> Bonsai.IO.WriteAllText
              Path=C:/Users/RenartLab/Desktop/CDC.SoundLateralizationTask/output/batch/ANIMAL0001/260415/events/123922/soundcard/device.yml
              Overwrite=true
              Append=false
            -> Disable Condition => #29
                SubscribeSubject Config
                -> MemberSelector(Selector=Paths.OutputBackup)
                -> NotEqual(Operand=StringProperty)
                -> WorkflowOutput
            Disable SubscribeSubject OutputBackupDirPath => #30
            Disable SubscribeSubject Suffix
            -> Disable Format(Format=events/{0}/soundcard/device.yml, Selector=it) => #32
            #30, #32 -> Disable Zip
            -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Item1 + Item2
            -> Disable PropertyMapping(Path) => #35
            #29, #35 -> Disable Bonsai.IO.WriteAllText(Path=C:/Users/HSP/Documents/backup/batch/ANIMAL0000/251022/events/131546/soundcard/device.yml, Overwrite=true, Append=false) => #36
            SubscribeSubject OutputDirPath => #37
            Disable SubscribeSubject OutputBackupDirPath => #38
            #37, #38 -> Disable Zip => #39
            #36, #39 -> SubscribeWhen

        GroupWorkflow LeftSyringePump
            SubscribeSubject LeftPumpMessages
            -> Bonsai.Harp.GroupByRegister => #1
            SubscribeSubject OutputDirPath => #2
            SubscribeSubject Suffix
            -> Format(Format=events/{0}/left_pump/left_pump.bin, Selector=it) => #4
            #2, #4 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Item1 + Item2
            -> PropertyMapping(FileName) => #7
            #1, #7 -> Bonsai.Harp.MessageWriter
              FileName=C:/Users/RenartLab/Desktop/CDC.SoundLateralizationTask/output/batch/ANIMAL0001/260415/events/123922/left_pump/left_pump.bin
              Suffix=None
              Buffered=true
              Overwrite=false
              FilterType=Include
              MessageType=nil
            -> Disable Condition => #9
                SubscribeSubject Config
                -> MemberSelector(Selector=Paths.OutputBackup)
                -> NotEqual(Operand=StringProperty)
                -> WorkflowOutput
            Disable SubscribeSubject OutputBackupDirPath => #10
            Disable SubscribeSubject Suffix
            -> Disable Format(Format=events/{0}/left_pump/left_pump.bin, Selector=it) => #12
            #10, #12 -> Disable Zip
            -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Item1 + Item2
            -> Disable PropertyMapping(FileName) => #15
            #9, #15 -> Disable Bonsai.Harp.MessageWriter => #16
              FileName=C:/Users/HSP/Documents/backup/batch/ANIMAL0003/250917/events/111030/left_pump/left_pump.bin
              Suffix=None
              Buffered=true
              Overwrite=false
              FilterType=Include
              MessageType=nil
            SubscribeSubject OutputDirPath => #17
            Disable SubscribeSubject OutputBackupDirPath => #18
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=SyringePumps.UsePumps)
            -> Bonsai.Scripting.Expressions.ExpressionCondition => #21
              Expression: it
            #17, #18, #21 -> Zip => #22
            #16, #22 -> SubscribeWhen

            Harp.SyringePump.GetMetadata => #24
            SubscribeSubject OutputDirPath => #25
            SubscribeSubject Suffix
            -> Format(Format=events/{0}/left_pump/device.yml, Selector=it) => #27
            #25, #27 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Item1 + Item2
            -> PropertyMapping(Path) => #30
            #24, #30 -> Bonsai.IO.WriteAllText
              Path=C:/Users/RenartLab/Desktop/CDC.SoundLateralizationTask/output/batch/ANIMAL0001/260415/events/123922/left_pump/device.yml
              Overwrite=true
              Append=false
            -> Disable Condition => #32
                SubscribeSubject Config
                -> MemberSelector(Selector=Paths.OutputBackup)
                -> NotEqual(Operand=StringProperty)
                -> WorkflowOutput
            Disable SubscribeSubject OutputBackupDirPath => #33
            Disable SubscribeSubject Suffix
            -> Disable Format(Format=events/{0}/left_pump/device.yml, Selector=it) => #35
            #33, #35 -> Disable Zip
            -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Item1 + Item2
            -> Disable PropertyMapping(Path) => #38
            #32, #38 -> Disable Bonsai.IO.WriteAllText(Path=C:/Users/HSP/Documents/backup/batch/ANIMAL0003/250917/events/111030/left_pump/device.yml, Overwrite=true, Append=false) => #39
            SubscribeSubject OutputDirPath => #40
            Disable SubscribeSubject OutputBackupDirPath => #41
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=SyringePumps.UsePumps)
            -> Bonsai.Scripting.Expressions.ExpressionCondition => #44
              Expression: it
            #40, #41, #44 -> Zip => #45
            #39, #45 -> SubscribeWhen

        GroupWorkflow RightSyringePump
            SubscribeSubject RightPumpMessages
            -> Bonsai.Harp.GroupByRegister => #1
            SubscribeSubject OutputDirPath => #2
            SubscribeSubject Suffix
            -> Format(Format=events/{0}/right_pump/right_pump.bin, Selector=it) => #4
            #2, #4 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Item1 + Item2
            -> PropertyMapping(FileName) => #7
            #1, #7 -> Bonsai.Harp.MessageWriter
              FileName=C:/Users/RenartLab/Desktop/CDC.SoundLateralizationTask/output/batch/ANIMAL0001/260415/events/123922/right_pump/right_pump.bin
              Suffix=None
              Buffered=true
              Overwrite=false
              FilterType=Include
              MessageType=nil
            -> Disable Condition => #9
                SubscribeSubject Config
                -> MemberSelector(Selector=Paths.OutputBackup)
                -> NotEqual(Operand=StringProperty)
                -> WorkflowOutput
            Disable SubscribeSubject OutputBackupDirPath => #10
            Disable SubscribeSubject Suffix
            -> Disable Format(Format=events/{0}/right_pump/right_pump.bin, Selector=it) => #12
            #10, #12 -> Disable Zip
            -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Item1 + Item2
            -> Disable PropertyMapping(FileName) => #15
            #9, #15 -> Disable Bonsai.Harp.MessageWriter => #16
              FileName=C:/Users/HSP/Documents/backup/batch/ANIMAL0003/250917/events/111030/right_pump/right_pump.bin
              Suffix=None
              Buffered=true
              Overwrite=false
              FilterType=Include
              MessageType=nil
            SubscribeSubject OutputDirPath => #17
            Disable SubscribeSubject OutputBackupDirPath => #18
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=SyringePumps.UsePumps)
            -> Bonsai.Scripting.Expressions.ExpressionCondition => #21
              Expression: it
            #17, #18, #21 -> Zip => #22
            #16, #22 -> SubscribeWhen

            Harp.SyringePump.GetMetadata => #24
            SubscribeSubject OutputDirPath => #25
            SubscribeSubject Suffix
            -> Format(Format=events/{0}/right_pump/device.yml, Selector=it) => #27
            #25, #27 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Item1 + Item2
            -> PropertyMapping(Path) => #30
            #24, #30 -> Bonsai.IO.WriteAllText
              Path=C:/Users/RenartLab/Desktop/CDC.SoundLateralizationTask/output/batch/ANIMAL0001/260415/events/123922/right_pump/device.yml
              Overwrite=true
              Append=false
            -> Disable Condition => #32
                SubscribeSubject Config
                -> MemberSelector(Selector=Paths.OutputBackup)
                -> NotEqual(Operand=StringProperty)
                -> WorkflowOutput
            Disable SubscribeSubject OutputBackupDirPath => #33
            Disable SubscribeSubject Suffix
            -> Disable Format(Format=events/{0}/right_pump/device.yml, Selector=it) => #35
            #33, #35 -> Disable Zip
            -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Item1 + Item2
            -> Disable PropertyMapping(Path) => #38
            #32, #38 -> Disable Bonsai.IO.WriteAllText(Path=C:/Users/HSP/Documents/backup/batch/ANIMAL0003/250917/events/111030/right_pump/device.yml, Overwrite=true, Append=false) => #39
            SubscribeSubject OutputDirPath => #40
            Disable SubscribeSubject OutputBackupDirPath => #41
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=SyringePumps.UsePumps)
            -> Bonsai.Scripting.Expressions.ExpressionCondition => #44
              Expression: it
            #40, #41, #44 -> Zip => #45
            #39, #45 -> SubscribeWhen

        GroupWorkflow CurrentDriver
            SubscribeSubject CDMessages
            -> Bonsai.Harp.GroupByRegister => #1
            SubscribeSubject OutputDirPath => #2
            SubscribeSubject Suffix
            -> Format(Format=events/{0}/currentdriver/currentdriver.bin, Selector=it) => #4
            #2, #4 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Item1 + Item2
            -> PropertyMapping(FileName) => #7
            #1, #7 -> Bonsai.Harp.MessageWriter
              FileName=C:/Users/RenartLab/Desktop/CDC.SoundLateralizationTask/output/batch/ANIMAL0001/260415/events/123922/currentdriver/currentdriver.bin
              Suffix=None
              Buffered=true
              Overwrite=false
              FilterType=Include
              MessageType=nil
            -> Disable Condition => #9
                SubscribeSubject Config
                -> MemberSelector(Selector=Paths.OutputBackup)
                -> NotEqual(Operand=StringProperty)
                -> WorkflowOutput
            Disable SubscribeSubject OutputBackupDirPath => #10
            Disable SubscribeSubject Suffix
            -> Disable Format(Format=events/{0}/currentdriver/currentdriver.bin, Selector=it) => #12
            #10, #12 -> Disable Zip
            -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Item1 + Item2
            -> Disable PropertyMapping(FileName) => #15
            #9, #15 -> Disable Bonsai.Harp.MessageWriter => #16
              FileName=C:/Users/HSP/Documents/backup/batch/ANIMAL0003/250917/events/111030/currentdriver/currentdriver.bin
              Suffix=None
              Buffered=true
              Overwrite=false
              FilterType=Include
              MessageType=nil
            SubscribeSubject OutputDirPath => #17
            Disable SubscribeSubject OutputBackupDirPath => #18
            SubscribeSubject AnimalConfig
            -> MemberSelector(Selector=Optogenetics.UseOpto)
            -> Bonsai.Scripting.Expressions.ExpressionCondition => #21
              Expression: it
            #17, #18, #21 -> Zip => #22
            #16, #22 -> SubscribeWhen

            Harp.CurrentDriver.GetMetadata => #24
            SubscribeSubject OutputDirPath => #25
            SubscribeSubject Suffix
            -> Format(Format=events/{0}/currentdriver/device.yml, Selector=it) => #27
            #25, #27 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Item1 + Item2
            -> PropertyMapping(Path) => #30
            #24, #30 -> Bonsai.IO.WriteAllText
              Path=C:/Users/RenartLab/Desktop/CDC.SoundLateralizationTask/output/batch/ANIMAL0001/260415/events/123922/currentdriver/device.yml
              Overwrite=true
              Append=false
            -> Disable Condition => #32
                SubscribeSubject Config
                -> MemberSelector(Selector=Paths.OutputBackup)
                -> NotEqual(Operand=StringProperty)
                -> WorkflowOutput
            Disable SubscribeSubject OutputBackupDirPath => #33
            Disable SubscribeSubject Suffix
            -> Disable Format(Format=events/{0}/currentdriver/device.yml, Selector=it) => #35
            #33, #35 -> Disable Zip
            -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Item1 + Item2
            -> Disable PropertyMapping(Path) => #38
            #32, #38 -> Disable Bonsai.IO.WriteAllText(Path=C:/Users/HSP/Documents/backup/batch/ANIMAL0003/250917/events/111030/currentdriver/device.yml, Overwrite=true, Append=false) => #39
            SubscribeSubject OutputDirPath => #40
            Disable SubscribeSubject OutputBackupDirPath => #41
            SubscribeSubject AnimalConfig
            -> MemberSelector(Selector=Optogenetics.UseOpto)
            -> Bonsai.Scripting.Expressions.ExpressionCondition => #44
              Expression: it
            #40, #41, #44 -> Zip => #45
            #39, #45 -> SubscribeWhen

    GroupWorkflow ConfigFiles
        GroupWorkflow Animal
            SubscribeSubject Config
            -> MemberSelector(Selector=Paths.Animal)
            -> PropertyMapping(Path)
            -> Bonsai.IO.ReadAllText(Path=C:/Users/RenartLab/Desktop/SLT_config_0_10_0/batch/ANIMAL0001.yml) => #3
            SubscribeSubject OutputDirPath => #4
            SubscribeSubject Suffix
            -> Format(Format=config/animal_{0}.yml, Selector=it) => #6
            #4, #6 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Item1 + Item2
            -> PropertyMapping(Path) => #9
            #3, #9 -> Bonsai.IO.WriteAllText(Path=C:/Users/RenartLab/Desktop/CDC.SoundLateralizationTask/output/batch/ANIMAL0001/260415/config/animal_123922.yml, Overwrite=false, Append=false)
            -> Condition => #11
                SubscribeSubject Config
                -> MemberSelector(Selector=Paths.OutputBackup)
                -> NotEqual(Operand=StringProperty)
                -> WorkflowOutput
            SubscribeSubject OutputBackupDirPath => #12
            SubscribeSubject Suffix
            -> Format(Format=config/animal_{0}.yml, Selector=it) => #14
            #12, #14 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Item1 + Item2
            -> PropertyMapping(Path) => #17
            #11, #17 -> Bonsai.IO.WriteAllText => #18
              Path="G:\.shortcut-targets-by-id\0ByIwavJ3nGrAbVVmNWo3OU5sM1k\RatBehaviorRoom\Rats\ILDtask\ASD_MV animals/batch/ANIMAL0001/260415/config/animal_123922.yml"
              Overwrite=false
              Append=false
            SubscribeSubject OutputDirPath => #19
            SubscribeSubject OutputBackupDirPath => #20
            #19, #20 -> Zip => #21
            #18, #21 -> SubscribeWhen

        GroupWorkflow Setup
            Bonsai.IO.ReadAllText(Path=config/setup.json) => #0
            SubscribeSubject OutputDirPath => #1
            SubscribeSubject Suffix
            -> Format(Format=config/setup_{0}.json, Selector=it) => #3
            #1, #3 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Item1 + Item2
            -> PropertyMapping(Path) => #6
            #0, #6 -> Bonsai.IO.WriteAllText(Path=C:/Users/RenartLab/Desktop/CDC.SoundLateralizationTask/output/batch/ANIMAL0001/260415/config/setup_123922.json, Overwrite=false, Append=false)
            -> Condition => #8
                SubscribeSubject Config
                -> MemberSelector(Selector=Paths.OutputBackup)
                -> NotEqual(Operand=StringProperty)
                -> WorkflowOutput
            SubscribeSubject OutputBackupDirPath => #9
            SubscribeSubject Suffix
            -> Format(Format=config/setup_{0}.json, Selector=it) => #11
            #9, #11 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Item1 + Item2
            -> PropertyMapping(Path) => #14
            #8, #14 -> Bonsai.IO.WriteAllText => #15
              Path="G:\.shortcut-targets-by-id\0ByIwavJ3nGrAbVVmNWo3OU5sM1k\RatBehaviorRoom\Rats\ILDtask\ASD_MV animals/batch/ANIMAL0001/260415/config/setup_123922.json"
              Overwrite=false
              Append=false
            SubscribeSubject OutputDirPath => #16
            SubscribeSubject OutputBackupDirPath => #17
            #16, #17 -> Zip => #18
            #15, #18 -> SubscribeWhen

        GroupWorkflow Training
            SubscribeSubject Config
            -> MemberSelector(Selector=Paths.Training)
            -> PropertyMapping(Path)
            -> Bonsai.IO.ReadAllText(Path=C:/Users/RenartLab/Desktop/SLT_config_0_10_0/training.csv) => #3
            SubscribeSubject OutputDirPath => #4
            SubscribeSubject Suffix
            -> Format(Format=config/training_{0}.csv, Selector=it) => #6
            #4, #6 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Item1 + Item2
            -> PropertyMapping(Path) => #9
            #3, #9 -> Bonsai.IO.WriteAllText(Path=C:/Users/RenartLab/Desktop/CDC.SoundLateralizationTask/output/batch/ANIMAL0001/260415/config/training_123922.csv, Overwrite=false, Append=false)
            -> Condition => #11
                SubscribeSubject Config
                -> MemberSelector(Selector=Paths.OutputBackup)
                -> NotEqual(Operand=StringProperty)
                -> WorkflowOutput
            SubscribeSubject OutputBackupDirPath => #12
            SubscribeSubject Suffix
            -> Format(Format=config/training_{0}.csv, Selector=it) => #14
            #12, #14 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Item1 + Item2
            -> PropertyMapping(Path) => #17
            #11, #17 -> Bonsai.IO.WriteAllText => #18
              Path="G:\.shortcut-targets-by-id\0ByIwavJ3nGrAbVVmNWo3OU5sM1k\RatBehaviorRoom\Rats\ILDtask\ASD_MV animals/batch/ANIMAL0001/260415/config/training_123922.csv"
              Overwrite=false
              Append=false
            SubscribeSubject OutputDirPath => #19
            SubscribeSubject OutputBackupDirPath => #20
            #19, #20 -> Zip => #21
            #18, #21 -> SubscribeWhen

    SubscribeSubject Config
    -> MemberSelector(Selector=Paths.Output)
    -> PropertyMapping(OutputDirPath)
    -> GroupWorkflow OutputDirectory => #9
        ExternalizedMapping(OutputDirPath)
        -> CF.GetOutputDir(OutputDirPath=C:/Users/RenartLab/Desktop/CDC.SoundLateralizationTask/output) => #1
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=Batch) => #3
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=AnimalId) => #5
        #1, #3, #5 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item1 + "/" + Item2 + "/" + Item3 + "/" + DateTime.Now.ToString("yyMMdd") + "/"
        -> MulticastSubject OutputDirPath
        -> WorkflowOutput
    SubscribeSubject Config => #10
    #9, #10 -> SubscribeWhen

    SubscribeSubject Config
    -> MemberSelector(Selector=Paths.OutputBackup)
    -> PropertyMapping(OutputDirPath)
    -> GroupWorkflow OutputDirectory => #15
        ExternalizedMapping(OutputDirPath)
        -> CF.GetOutputDir(OutputDirPath="G:\.shortcut-targets-by-id\0ByIwavJ3nGrAbVVmNWo3OU5sM1k\RatBehaviorRoom\Rats\ILDtask\ASD_MV animals") => #1
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=Batch) => #3
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=AnimalId) => #5
        #1, #3, #5 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item1 + "/" + Item2 + "/" + Item3 + "/" + DateTime.Now.ToString("yyMMdd") + "/"
        -> MulticastSubject OutputBackupDirPath
        -> WorkflowOutput
    SubscribeSubject Config => #16
    #15, #16 -> SubscribeWhen

GroupWorkflow Input
    GroupWorkflow SessionSubjectUpdate
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=Session.BlockNumber)
        -> MulticastSubject Block

        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=Session.StartingTrialNumber)
        -> Subtract(Operand=IntProperty(Value=1))
        -> MulticastSubject Trial

        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=FixationTime.Training.MinValue)
        -> MulticastSubject BaseFT

        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=ReactionTime.UseMinRt) => #11
        -> Condition
            WorkflowInput Source1
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        -> DoubleProperty(Value=0) => #13
        #11 -> Condition => #14
            WorkflowInput Source1
            -> WorkflowOutput
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=ReactionTime.MinValue) => #16
        #14, #16 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #18
        #13, #18 -> Merge
        -> MulticastSubject BaseRT => #20
        SubscribeSubject AnimalConfig => #21
        SubscribeSubject LevelConfig => #22
        #21, #22 -> Zip => #23
        #20, #23 -> SubscribeWhen

        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=LnpTime.MinValue)
        -> MulticastSubject IntendedLNP

        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=TrialsPerBlock)
        -> MulticastSubject TrialsPerBlock

    Bonsai.IO.ReadAllText(Path=config\config.yml)
    -> Config.DeserializeFromYaml(Type=TypeMapping<Config.Config>)
    -> AsyncSubject Config

    SubscribeSubject Config
    -> MemberSelector(Selector=Paths.Animal)
    -> PropertyMapping(Path)
    -> Bonsai.IO.ReadAllText(Path=C:/Users/RenartLab/Desktop/SLT_config_0_10_0/batch/ANIMAL0001.yml)
    -> Animal.DeserializeFromYaml(Type=TypeMapping<Animal.Animal>)
    -> AsyncSubject AnimalConfig => #9
    SubscribeSubject Config => #10
    #9, #10 -> SubscribeWhen

    Bonsai.IO.ReadAllText(Path=config\training.json)
    -> Training.DeserializeFromJson(Type=TypeMapping<Training.Training>)
    -> AsyncSubject TrainingConfig => #14
    SubscribeSubject Config => #15
    #14, #15 -> SubscribeWhen

    Bonsai.IO.ReadAllText(Path=config\setup.json)
    -> Setup.DeserializeFromJson(Type=TypeMapping<Setup.Setup>)
    -> AsyncSubject SetupConfig => #19
    SubscribeSubject Config => #20
    #19, #20 -> SubscribeWhen

    Bonsai.IO.ReadAllText(Path=config\prints.json)
    -> PrintDict.DeserializeFromJson(Type=TypeMapping<PrintDict.PrintDict>)
    -> AsyncSubject Prints

    SubscribeSubject AnimalConfig
    -> MemberSelector(Selector=Session.StartingTrainingLevel)
    -> BehaviorSubject TrainingLevel

    SubscribeSubject TrainingLevel
    -> Subtract(Operand=IntProperty(Value=1)) => #29
    SubscribeSubject TrainingConfig
    -> MemberSelector(Selector=Levels) => #31
    #29, #31 -> WithLatestFrom
    -> InputMapping(Selector=Item2, Value(Selector=Item1))
    -> Index(Operand=IntProperty(Value=15))
    -> BehaviorSubject LevelConfig => #35
    SubscribeSubject AnimalConfig => #36
    SubscribeSubject TrainingConfig => #37
    #36, #37 -> Zip => #38
    #35, #38 -> SubscribeWhen

GroupWorkflow SubjectInitialization
    Timer(DueTime=PT0S)
    -> Timestamp
    -> MemberSelector(Selector=Timestamp) => #2
    -> Format(Format={0:HHmmss}, Selector=it)
    -> AsyncSubject Suffix
    #2 -> Format(Format={0:yyMMdd}, Selector=it)
    -> AsyncSubject SuffixDay

    BooleanProperty(Value=false) => #7
    DoubleProperty(Value=0) => #8
    #7, #8 -> Zip
    -> Bonsai.Harp.CreateTimestamped
    -> BehaviorSubject LeftPoke
    -> BehaviorSubject CenterPoke
    -> BehaviorSubject RightPoke
    -> BehaviorSubject SoundOnsetTrigger
    -> BehaviorSubject LNPTrigger

    Range(Start=0, Count=25)
    -> IntProperty(Value=0)
    -> DoubleProperty(Value=0)
    -> ToArray
    -> BehaviorSubject HitHistory
    -> BehaviorSubject PreviousSides

    IntProperty(Value=0) => #22
    IntProperty(Value=0) => #23
    #22, #23 -> Zip
    -> BehaviorSubject ParsedOutcome

    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> BehaviorSubject Random

    Animal.OptoProtocol(Duration=0, Probability=0, Onset=MidFixation, ProtocolDelay=0, UseRt=false, RampMode=None, RampTime=1)
    -> BehaviorSubject OptoProtocol

    IntProperty(Value=0)
    -> ToArray
    -> IgnoreElements
    -> BehaviorSubject SideArray
    -> BehaviorSubject AblIndexArray

    BooleanProperty(Value=false)
    -> IgnoreElements
    -> BehaviorSubject RepeatErrorsButtonState

    BooleanProperty(Value=false)
    -> BehaviorSubject RepeatTrial
    -> BehaviorSubject TrialLeftButtonState
    -> BehaviorSubject TrialRightButtonState
    -> BehaviorSubject ResetForcedSide
    -> BehaviorSubject RewardDelivered
    -> BehaviorSubject CatchTrial

    BooleanProperty(Value=false)
    -> Take(Count=1)
    -> ToArray
    -> SelectMany "Remove First Element"
        WorkflowInput Source1
        -> Take(Count=1) => #1
        -> Concat => #2
        -> Condition "Not Last Element?" => #3
            WorkflowInput Source1
            -> ElementIndex
            -> MemberSelector(Selector=Index) => #2
            IntProperty(Value=0) => #3
            #2, #3 -> WithLatestFrom
            -> NotEqual
            -> WorkflowOutput
        #2 -> Last => #4
        #3, #4 -> TakeUntil
        -> ToArray => #6
        #1 -> Condition "Empty Array?" => #7
            WorkflowInput Source1
            -> MemberSelector(Selector=Length)
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        #6, #7 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> BehaviorSubject ShortTermPerformance
    -> BehaviorSubject ShortTermAbortRate

    StringProperty
    -> IgnoreElements
    -> BehaviorSubject PrintCode
    -> BehaviorSubject Print
    -> BehaviorSubject OutputDirPath
    -> BehaviorSubject OutputBackupDirPath

    DoubleProperty(Value=0)
    -> ToArray
    -> IgnoreElements
    -> BehaviorSubject ILDs
    -> BehaviorSubject LateralizedILDs
    -> BehaviorSubject PsychophysicalFunction
    -> BehaviorSubject RightAnswersILD
    -> BehaviorSubject NumILDTrials

    DoubleProperty(Value=0)
    -> IgnoreElements
    -> BehaviorSubject TrialStart
    -> BehaviorSubject LNPStart
    -> BehaviorSubject LNPEnd
    -> BehaviorSubject LeftReward
    -> BehaviorSubject RightReward
    -> BehaviorSubject TimedLNP
    -> BehaviorSubject ITIStart
    -> BehaviorSubject TimeToCNP

    IntProperty(Value=0)
    -> IgnoreElements
    -> BehaviorSubject WaterDelivery
    -> BehaviorSubject LeftOrRight
    -> BehaviorSubject PlaySound
    -> BehaviorSubject FixEnd

    BooleanProperty(Value=false)
    -> IgnoreElements
    -> BehaviorSubject RepeatErrors
    -> BehaviorSubject IsLateralizedTrial
    -> BehaviorSubject IsShortDuration

    IntProperty(Value=-1)
    -> BehaviorSubject AblIndex

    IntProperty(Value=0)
    -> BehaviorSubject Block
    -> BehaviorSubject Trial
    -> BehaviorSubject BlockTrial
    -> BehaviorSubject SoundIndex
    -> BehaviorSubject LeftIntensity
    -> BehaviorSubject RightIntensity
    -> BehaviorSubject StopSound
    -> BehaviorSubject ForcedTrialSide
    -> BehaviorSubject Outcome
    -> BehaviorSubject SideIndex
    -> BehaviorSubject OptoAborts
    -> BehaviorSubject PreferentialSide
    -> BehaviorSubject TrialsPerBlock
    -> BehaviorSubject ShortSoundDuration

    DoubleProperty(Value=0)
    -> BehaviorSubject BaseFT
    -> BehaviorSubject BaseRT
    -> BehaviorSubject IntendedLNP
    -> BehaviorSubject TimedFT
    -> BehaviorSubject TimedLED
    -> BehaviorSubject OptoTrial
    -> BehaviorSubject BlockAbortRatio
    -> BehaviorSubject BlockPerformance
    -> BehaviorSubject TimedMT
    -> BehaviorSubject TimedRT
    -> BehaviorSubject TimedOptoOnset
    -> BehaviorSubject IntendedSoundOnset
    -> BehaviorSubject TimedSoundOnset
    -> BehaviorSubject IntendedOptoOnset
    -> BehaviorSubject LeftAmp
    -> BehaviorSubject RightAmp
    -> BehaviorSubject ABL
    -> BehaviorSubject ILD
    -> BehaviorSubject Penalty
    -> BehaviorSubject NewSideArray
    -> BehaviorSubject NewAblArray
    -> BehaviorSubject RightAnswers
    -> BehaviorSubject TrialsAborted
    -> BehaviorSubject TrialsCompleted
    -> BehaviorSubject Bias
    -> BehaviorSubject BiasPerformance
    -> BehaviorSubject LeftRewardSteps
    -> BehaviorSubject RightRewardSteps
    -> BehaviorSubject ResponsePoke
    -> BehaviorSubject CNPStart
    -> BehaviorSubject RTStart
    -> BehaviorSubject MTStart
    -> BehaviorSubject LeftProbability
    -> BehaviorSubject TrialEnd

GroupWorkflow GUI
    GroupWorkflow Prints
        GroupWorkflow NewTrial
            StringProperty => #0
            ExternalizedMapping(PrintCode) => #1
            #0, #1 -> GroupWorkflow TextToPrint => #2
                SubscribeSubject Prints
                -> MemberSelector(Selector=Prints) => #1
                ExternalizedMapping(Value(DisplayName=PrintCode)) => #2
                #1, #2 -> Index(Operand=StringProperty(Value=new_trial)) => #3
                -> MemberSelector(Selector=Text) => #4
                WorkflowInput Source1 => #5
                #3 -> MemberSelector(Selector=Units) => #6
                #4, #5, #6 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 + Item2 + " " + Item3
                -> WorkflowOutput
            #2, #1 -> GroupWorkflow Print
                SubscribeSubject PrintCode => #0
                ExternalizedMapping(PrintCode) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintCode)) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=new_trial))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Print
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow ITI
            SubscribeSubject TrialStart => #0
            SubscribeSubject ITIStart => #1
            #0, #1 -> CombineLatest
            -> Subtract
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
              Expression: it.ToString()
            ExternalizedMapping(PrintCode) => #5
            #4, #5 -> GroupWorkflow TextToPrint => #6
                SubscribeSubject Prints
                -> MemberSelector(Selector=Prints) => #1
                ExternalizedMapping(Value(DisplayName=PrintCode)) => #2
                #1, #2 -> Index(Operand=StringProperty(Value=iti)) => #3
                -> MemberSelector(Selector=Text) => #4
                WorkflowInput Source1 => #5
                #3 -> MemberSelector(Selector=Units) => #6
                #4, #5, #6 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 + Item2 + " " + Item3
                -> WorkflowOutput
            #6, #5 -> GroupWorkflow Print
                SubscribeSubject PrintCode => #0
                ExternalizedMapping(PrintCode) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintCode)) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=iti))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Print
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow CorrectSide
            SubscribeSubject LeftOrRight => #0
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -1
            -> StringProperty(Value=Left) => #2
            #0 -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == 1
            -> StringProperty(Value=Right) => #4
            #2, #4 -> Merge => #5
            ExternalizedMapping(PrintCode) => #6
            #5, #6 -> GroupWorkflow TextToPrint => #7
                SubscribeSubject Prints
                -> MemberSelector(Selector=Prints) => #1
                ExternalizedMapping(Value(DisplayName=PrintCode)) => #2
                #1, #2 -> Index(Operand=StringProperty(Value=correct_side)) => #3
                -> MemberSelector(Selector=Text) => #4
                WorkflowInput Source1 => #5
                #3 -> MemberSelector(Selector=Units) => #6
                #4, #5, #6 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 + Item2 + " " + Item3
                -> WorkflowOutput
            #7, #6 -> GroupWorkflow Print
                SubscribeSubject PrintCode => #0
                ExternalizedMapping(PrintCode) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintCode)) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=correct_side))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Print
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow StartTrial
            StringProperty => #0
            ExternalizedMapping(PrintCode) => #1
            #0, #1 -> GroupWorkflow TextToPrint => #2
                SubscribeSubject Prints
                -> MemberSelector(Selector=Prints) => #1
                ExternalizedMapping(Value(DisplayName=PrintCode)) => #2
                #1, #2 -> Index(Operand=StringProperty(Value=start_trial)) => #3
                -> MemberSelector(Selector=Text) => #4
                WorkflowInput Source1 => #5
                #3 -> MemberSelector(Selector=Units) => #6
                #4, #5, #6 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 + Item2 + " " + Item3
                -> WorkflowOutput
            #2, #1 -> GroupWorkflow Print
                SubscribeSubject PrintCode => #0
                ExternalizedMapping(PrintCode) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintCode)) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=start_trial))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Print
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow Fixation
            StringProperty => #0
            ExternalizedMapping(PrintCode) => #1
            #0, #1 -> GroupWorkflow TextToPrint => #2
                SubscribeSubject Prints
                -> MemberSelector(Selector=Prints) => #1
                ExternalizedMapping(Value(DisplayName=PrintCode)) => #2
                #1, #2 -> Index(Operand=StringProperty(Value=fixation)) => #3
                -> MemberSelector(Selector=Text) => #4
                WorkflowInput Source1 => #5
                #3 -> MemberSelector(Selector=Units) => #6
                #4, #5, #6 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 + Item2 + " " + Item3
                -> WorkflowOutput
            #2, #1 -> GroupWorkflow Print
                SubscribeSubject PrintCode => #0
                ExternalizedMapping(PrintCode) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintCode)) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=fixation))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Print
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow FixationTime
            SubscribeSubject TimedFT
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #1
              Expression: it.ToString()
            ExternalizedMapping(PrintCode) => #2
            #1, #2 -> GroupWorkflow TextToPrint => #3
                SubscribeSubject Prints
                -> MemberSelector(Selector=Prints) => #1
                ExternalizedMapping(Value(DisplayName=PrintCode)) => #2
                #1, #2 -> Index(Operand=StringProperty(Value=fixation_time)) => #3
                -> MemberSelector(Selector=Text) => #4
                WorkflowInput Source1 => #5
                #3 -> MemberSelector(Selector=Units) => #6
                #4, #5, #6 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 + Item2 + " " + Item3
                -> WorkflowOutput
            #3, #2 -> GroupWorkflow Print
                SubscribeSubject PrintCode => #0
                ExternalizedMapping(PrintCode) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintCode)) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=fixation_time))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Print
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow StimulusPresentation
            StringProperty => #0
            ExternalizedMapping(PrintCode) => #1
            #0, #1 -> GroupWorkflow TextToPrint => #2
                SubscribeSubject Prints
                -> MemberSelector(Selector=Prints) => #1
                ExternalizedMapping(Value(DisplayName=PrintCode)) => #2
                #1, #2 -> Index(Operand=StringProperty(Value=stimulus)) => #3
                -> MemberSelector(Selector=Text) => #4
                WorkflowInput Source1 => #5
                #3 -> MemberSelector(Selector=Units) => #6
                #4, #5, #6 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 + Item2 + " " + Item3
                -> WorkflowOutput
            #2, #1 -> GroupWorkflow Print
                SubscribeSubject PrintCode => #0
                ExternalizedMapping(PrintCode) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintCode)) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=stimulus))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Print
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow MovementTime
            StringProperty => #0
            ExternalizedMapping(PrintCode) => #1
            #0, #1 -> GroupWorkflow TextToPrint => #2
                SubscribeSubject Prints
                -> MemberSelector(Selector=Prints) => #1
                ExternalizedMapping(Value(DisplayName=PrintCode)) => #2
                #1, #2 -> Index(Operand=StringProperty(Value=movement_time)) => #3
                -> MemberSelector(Selector=Text) => #4
                WorkflowInput Source1 => #5
                #3 -> MemberSelector(Selector=Units) => #6
                #4, #5, #6 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 + Item2 + " " + Item3
                -> WorkflowOutput
            #2, #1 -> GroupWorkflow Print
                SubscribeSubject PrintCode => #0
                ExternalizedMapping(PrintCode) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintCode)) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=movement_time))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Print
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow Outcome
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == 2
            -> StringProperty(Value="Right answer") => #2
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == 1
            -> StringProperty(Value="Wrong answer") => #5
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -1
            -> StringProperty(Value="CNP Abort") => #8
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -2
            -> StringProperty(Value="Fixation Abort") => #11
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -3
            -> StringProperty(Value="RT+ Abort") => #14
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -4
            -> StringProperty(Value="RT- Abort") => #17
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -5
            -> StringProperty(Value="MT+ Abort") => #20
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -6
            -> StringProperty(Value="MT- Abort") => #23
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -7
            -> StringProperty(Value="LNP Abort") => #26
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -8
            -> StringProperty(Value="IO crash") => #29
            #2, #5, #8, #11, #14, #17, #20, #23, #26, #29 -> Merge => #30
            ExternalizedMapping(PrintCode) => #31
            #30, #31 -> GroupWorkflow TextToPrint => #32
                SubscribeSubject Prints
                -> MemberSelector(Selector=Prints) => #1
                ExternalizedMapping(Value(DisplayName=PrintCode)) => #2
                #1, #2 -> Index(Operand=StringProperty(Value=outcome)) => #3
                -> MemberSelector(Selector=Text) => #4
                WorkflowInput Source1 => #5
                #3 -> MemberSelector(Selector=Units) => #6
                #4, #5, #6 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 + Item2 + " " + Item3
                -> WorkflowOutput
            #32, #31 -> GroupWorkflow Print
                SubscribeSubject PrintCode => #0
                ExternalizedMapping(PrintCode) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintCode)) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=outcome))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Print
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow PenaltyTime
            SubscribeSubject Penalty
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #1
              Expression: it.ToString()
            ExternalizedMapping(PrintCode) => #2
            #1, #2 -> GroupWorkflow TextToPrint => #3
                SubscribeSubject Prints
                -> MemberSelector(Selector=Prints) => #1
                ExternalizedMapping(Value(DisplayName=PrintCode)) => #2
                #1, #2 -> Index(Operand=StringProperty(Value=penalty_time)) => #3
                -> MemberSelector(Selector=Text) => #4
                WorkflowInput Source1 => #5
                #3 -> MemberSelector(Selector=Units) => #6
                #4, #5, #6 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 + Item2 + " " + Item3
                -> WorkflowOutput
            #3, #2 -> GroupWorkflow Print
                SubscribeSubject PrintCode => #0
                ExternalizedMapping(PrintCode) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintCode)) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=penalty_time))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Print
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow RewardDelivery
            SubscribeSubject WaterDelivery => #0
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -1
            -> StringProperty(Value=Left) => #2
            #0 -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == 1
            -> StringProperty(Value=Right) => #4
            #2, #4 -> Merge => #5
            ExternalizedMapping(PrintCode) => #6
            #5, #6 -> GroupWorkflow TextToPrint => #7
                SubscribeSubject Prints
                -> MemberSelector(Selector=Prints) => #1
                ExternalizedMapping(Value(DisplayName=PrintCode)) => #2
                #1, #2 -> Index(Operand=StringProperty(Value=reward_delivery)) => #3
                -> MemberSelector(Selector=Text) => #4
                WorkflowInput Source1 => #5
                #3 -> MemberSelector(Selector=Units) => #6
                #4, #5, #6 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 + Item2 + " " + Item3
                -> WorkflowOutput
            #7, #6 -> GroupWorkflow Print
                SubscribeSubject PrintCode => #0
                ExternalizedMapping(PrintCode) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintCode)) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=reward_delivery))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Print
                -> WorkflowOutput
            -> WorkflowOutput

    StringProperty(Value="Rat: ") => #1
    SubscribeSubject AnimalConfig
    -> MemberSelector(Selector=AnimalId)
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
      Expression: it.ToString()
    #1, #4 -> CombineLatest
    -> Add
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="Rat: ANIMAL0001")
    -> VisualizerMapping => #9
    StringProperty(Value="Trial: ") => #10
    SubscribeSubject BlockTrial
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #12
      Expression: it.ToString()
    #10, #12 -> CombineLatest
    -> Add
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="Trial: 2")
    -> VisualizerMapping => #17
    StringProperty(Value="Trials Completed: ") => #18
    SubscribeSubject TrialsCompleted
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #20
      Expression: it.ToString()
    #18, #20 -> CombineLatest
    -> Add
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="Trials Completed: 1")
    -> VisualizerMapping => #25
    StringProperty(Value="Block: ") => #26
    SubscribeSubject Block
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #28
      Expression: it.ToString()
    #26, #28 -> CombineLatest
    -> Add
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="Block: 1")
    -> VisualizerMapping => #33
    StringProperty(Value="ILD: ") => #34
    SubscribeSubject ILD
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #36
      Expression: it.ToString()
    StringProperty(Value=" dB") => #37
    #34, #36, #37 -> CombineLatest
    -> Add
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="ILD: 2 dB")
    -> VisualizerMapping => #42
    StringProperty(Value="ABL: ") => #43
    SubscribeSubject ABL
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #45
      Expression: it.ToString()
    StringProperty(Value=" dB") => #46
    #43, #45, #46 -> CombineLatest
    -> Add
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="ABL: 20 dB")
    -> VisualizerMapping => #51
    StringProperty(Value="Learning Stage:") => #52
    SubscribeSubject TrainingLevel
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #54
      Expression: it.ToString()
    #52, #54 -> CombineLatest
    -> Add
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="Learning Stage:16")
    -> VisualizerMapping => #59
    StringProperty(Value="Current Performance: ") => #60
    SubscribeSubject TrialEnd => #61
    SubscribeSubject BlockPerformance
    -> Multiply(Operand=DoubleProperty(Value=100))
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #64
      Expression: it.ToString("0.00")
    #61, #64 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #66
    StringProperty(Value=" %") => #67
    #60, #66, #67 -> CombineLatest
    -> Add
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="Current Performance: NaN %")
    -> VisualizerMapping => #72
    StringProperty(Value="Current Abort Rate: ") => #73
    SubscribeSubject TrialEnd => #74
    SubscribeSubject BlockAbortRatio
    -> Multiply(Operand=DoubleProperty(Value=100))
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #77
      Expression: it.ToString("0.00")
    #74, #77 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #79
    StringProperty(Value=" %") => #80
    #73, #79, #80 -> CombineLatest
    -> Add
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="Current Abort Rate: 100.00 %")
    -> VisualizerMapping => #85
    StringProperty(Value="Current Fixation Time: ") => #86
    SubscribeSubject IntendedSoundOnset
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #88
      Expression: it.ToString("0.00")
    StringProperty(Value=" ms") => #89
    #86, #88, #89 -> CombineLatest
    -> Add
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="Current Fixation Time: 411.93 ms")
    -> VisualizerMapping => #94
    StringProperty(Value="Current ITI: ") => #95
    SubscribeSubject LevelConfig
    -> MemberSelector(Selector=Iti.Value)
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #98
      Expression: it.ToString()
    StringProperty(Value=" s") => #99
    #95, #98, #99 -> CombineLatest
    -> Add
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="Current ITI: 3 s")
    -> VisualizerMapping => #104
    StringProperty(Value="Bias: ") => #105
    SubscribeSubject Bias
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #107
      Expression: it.ToString()
    #105, #107 -> CombineLatest
    -> Add
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="Bias: -0.04")
    -> VisualizerMapping => #112
    StringProperty(Value="Setup: ") => #113
    SubscribeSubject Config
    -> MemberSelector(Selector=Setup)
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #116
      Expression: it.ToString()
    #113, #116 -> CombineLatest
    -> Add
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="Setup: 11")
    -> VisualizerMapping => #121
    StringProperty(Value="Time Elapsed: ") => #122
    Timer(DueTime=PT0S, Period=PT1S)
    -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan => #124
      Expression: TimeSpan.FromSeconds(it).ToString()
    #122, #124 -> CombineLatest
    -> Add
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="Time Elapsed: 00:01:06")
    -> VisualizerMapping => #129
    #9, #17, #25, #33, #42, #51, #59, #72, #85, #94, #104, #112, #121, #129 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=1, RowCount=14, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #131
    StringProperty(Value="Optogenetics Trial: ") => #132
    SubscribeSubject OptoTrial => #133
    -> Bonsai.Scripting.Expressions.ExpressionCondition
      Expression: it == 0
    -> StringProperty(Value=No) => #135
    #133 -> Bonsai.Scripting.Expressions.ExpressionCondition
      Expression: it == 1
    -> StringProperty(Value=Yes) => #137
    #135, #137 -> Merge => #138
    #132, #138 -> CombineLatest
    -> Add
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="Optogenetics Trial: No")
    -> VisualizerMapping => #143
    StringProperty(Value="Protocol Duration: ") => #144
    SubscribeSubject OptoProtocol
    -> MemberSelector(Selector=Duration)
    -> Multiply(Operand=DoubleProperty(Value=1000))
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #148
      Expression: it.ToString()
    StringProperty(Value=" ms") => #149
    #144, #148, #149 -> CombineLatest
    -> Add
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="Protocol Duration: 0 ms")
    -> VisualizerMapping => #154
    StringProperty(Value="Onset Moment: ") => #155
    SubscribeSubject OptoProtocol
    -> MemberSelector(Selector=Onset) => #157
    -> Condition MidFixation
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=WorkflowProperty<Animal.OptoProtocolOnset>(Value=MidFixation))
        -> WorkflowOutput
    -> StringProperty(Value=Mid-fixation) => #159
    #157 -> Condition StimOnset
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=WorkflowProperty<Animal.OptoProtocolOnset>(Value=SoundStart))
        -> WorkflowOutput
    -> StringProperty(Value="Stimulus onset") => #161
    #159, #161 -> Merge => #162
    #155, #162 -> CombineLatest
    -> Add
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="Onset Moment: Mid-fixation")
    -> VisualizerMapping => #167
    StringProperty(Value="Protocol Delay: ") => #168
    SubscribeSubject OptoProtocol
    -> MemberSelector(Selector=ProtocolDelay)
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #171
      Expression: it.ToString()
    StringProperty(Value=" ms") => #172
    #168, #171, #172 -> CombineLatest
    -> Add
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="Protocol Delay: 0 ms")
    -> VisualizerMapping => #177
    StringProperty(Value="Ramp Mode: ") => #178
    SubscribeSubject OptoProtocol
    -> MemberSelector(Selector=RampMode) => #180
    -> Condition None
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=WorkflowProperty<Animal.OptoProtocolRampMode>(Value=None))
        -> WorkflowOutput
    -> StringProperty(Value=None) => #182
    #180 -> Condition Rise
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=WorkflowProperty<Animal.OptoProtocolRampMode>(Value=Rise))
        -> WorkflowOutput
    -> StringProperty(Value=Rise) => #184
    #180 -> Condition Fall
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=WorkflowProperty<Animal.OptoProtocolRampMode>(Value=Fall))
        -> WorkflowOutput
    -> StringProperty(Value=Fall) => #186
    #180 -> Condition Both
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=WorkflowProperty<Animal.OptoProtocolRampMode>(Value=Both))
        -> WorkflowOutput
    -> StringProperty(Value="Rise and Fall") => #188
    #182, #184, #186, #188 -> Merge => #189
    #178, #189 -> CombineLatest
    -> Add
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="Ramp Mode: None")
    -> VisualizerMapping => #194
    StringProperty(Value="Ramp Time: ") => #195
    SubscribeSubject OptoProtocol
    -> MemberSelector(Selector=RampTime)
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #198
      Expression: it.ToString()
    StringProperty(Value=" ms") => #199
    #195, #198, #199 -> CombineLatest
    -> Add
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="Ramp Time: 1 ms")
    -> VisualizerMapping => #204
    StringProperty(Value="LED0 Voltage: ") => #205
    SubscribeSubject OptoProtocol
    -> MemberSelector(Selector=Led0.Voltage)
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #208
      Expression: it.ToString()
    StringProperty(Value=" mV") => #209
    #205, #208, #209 -> CombineLatest
    -> Add
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="LED0 Voltage: 0 mV")
    -> VisualizerMapping => #214
    StringProperty(Value="LED0 pulses: ") => #215
    SubscribeSubject OptoProtocol
    -> MemberSelector(Selector=Led0.UsePulses)
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #218
      Expression: it.ToString()
    #215, #218 -> CombineLatest
    -> Add
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="LED0 pulses: False")
    -> VisualizerMapping => #223
    StringProperty(Value="LED0 Pulse Frequency: ") => #224
    SubscribeSubject OptoProtocol
    -> MemberSelector(Selector=Led0.Frequency)
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #227
      Expression: it.ToString()
    StringProperty(Value=" Hz") => #228
    #224, #227, #228 -> CombineLatest
    -> Add
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="LED0 Pulse Frequency: 1 Hz")
    -> VisualizerMapping => #233
    StringProperty(Value="LED0 Duty Cycle: ") => #234
    SubscribeSubject OptoProtocol
    -> MemberSelector(Selector=Led0.DutyCycle)
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #237
      Expression: it.ToString()
    StringProperty(Value=%) => #238
    #234, #237, #238 -> CombineLatest
    -> Add
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="LED0 Duty Cycle: 100%")
    -> VisualizerMapping => #243
    StringProperty(Value="LED1 Voltage: ") => #244
    SubscribeSubject OptoProtocol
    -> MemberSelector(Selector=Led1.Voltage)
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #247
      Expression: it.ToString()
    StringProperty(Value=" mV") => #248
    #244, #247, #248 -> CombineLatest
    -> Add
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="LED1 Voltage: 0 mV")
    -> VisualizerMapping => #253
    StringProperty(Value="LED1 pulses: ") => #254
    SubscribeSubject OptoProtocol
    -> MemberSelector(Selector=Led1.UsePulses)
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #257
      Expression: it.ToString()
    #254, #257 -> CombineLatest
    -> Add
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="LED1 pulses: False")
    -> VisualizerMapping => #262
    StringProperty(Value="LED1 Pulse Frequency: ") => #263
    SubscribeSubject OptoProtocol
    -> MemberSelector(Selector=Led1.Frequency)
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #266
      Expression: it.ToString()
    StringProperty(Value=" Hz") => #267
    #263, #266, #267 -> CombineLatest
    -> Add
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="LED1 Pulse Frequency: 1 Hz")
    -> VisualizerMapping => #272
    StringProperty(Value="LED1 Duty Cycle: ") => #273
    SubscribeSubject OptoProtocol
    -> MemberSelector(Selector=Led1.DutyCycle)
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #276
      Expression: it.ToString()
    StringProperty(Value=%) => #277
    #273, #276, #277 -> CombineLatest
    -> Add
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="LED1 Duty Cycle: 100%")
    -> VisualizerMapping => #282
    #143, #154, #167, #177, #194, #204, #214, #223, #233, #243, #253, #262, #272, #282 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=1, RowCount=14, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #284
    #131, #284 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #286
    SubscribeSubject TrialEnd => #287
    SubscribeSubject Trial => #288
    SubscribeSubject ILD => #289
    #288, #289 -> CombineLatest
    -> InputMapping(Selector=it, X(Selector=Item1), Y(Selector=Item2))
    -> Bonsai.Vision.CreatePoint2d(X=2, Y=2) => #292
    #287, #292 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #294
    -> Condition
        SubscribeSubject Outcome
        -> Equal(Operand=IntProperty(Value=2))
        -> WorkflowOutput
    -> Bonsai.Gui.ZedGraph.LineGraphBuilder
      SymbolType=Circle
      LineWidth=0
      CurveSettings(CurveConfiguration(Label=Correct, Color=Turquoise))
      Capacity=nil
      XMin=nil
      XMax=nil
      YMin=nil
      YMax=nil
    -> VisualizerMapping => #297
    #294 -> Condition
        SubscribeSubject Outcome
        -> Equal(Operand=IntProperty(Value=1))
        -> WorkflowOutput
    -> Bonsai.Gui.ZedGraph.LineGraphBuilder(SymbolType=Circle, LineWidth=0, CurveSettings(CurveConfiguration(Label=Error, Color=OrangeRed)), Capacity=nil, XMin=nil, XMax=nil, YMin=nil, YMax=nil)
    -> VisualizerMapping => #300
    #294 -> Condition
        SubscribeSubject Outcome
        -> LessThan(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> Bonsai.Gui.ZedGraph.LineGraphBuilder(SymbolType=Circle, LineWidth=0, CurveSettings(CurveConfiguration(Label=Abort, Color=Black)), Capacity=nil, XMin=nil, XMax=nil, YMin=nil, YMax=nil)
    -> VisualizerMapping => #303
    #297, #300, #303 -> Bonsai.Gui.ZedGraph.GraphPanelBuilder(ReverseX=false, ReverseY=false, Span=nil, Capacity=80, XMin=nil, XMax=nil, YMin=-60, YMax=60)
    -> VisualizerMapping => #305
    SubscribeSubject TrialEnd => #306
    SubscribeSubject Trial => #307
    SubscribeSubject Outcome => #308
    #307, #308 -> CombineLatest
    -> InputMapping(Selector=it, X(Selector=Item1), Y(Selector=Item2))
    -> Bonsai.Vision.CreatePoint(X=2, Y=1) => #311
    #306, #311 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #313
    -> Condition
        SubscribeSubject Outcome => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=IntProperty(Value=2)) => #2
        SubscribeSubject LeftOrRight
        -> Equal(Operand=IntProperty(Value=-1)) => #4
        #2, #4 -> CombineLatest
        -> LogicalAnd
        -> WorkflowOutput
    -> Bonsai.Gui.ZedGraph.LineGraphBuilder
      SymbolType=Triangle
      LineWidth=0
      CurveSettings(CurveConfiguration(Label=CorrectLeft, Color=Turquoise))
      Capacity=nil
      XMin=nil
      XMax=nil
      YMin=nil
      YMax=nil
    -> VisualizerMapping => #316
    #313 -> Condition
        SubscribeSubject Outcome => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=IntProperty(Value=2)) => #2
        SubscribeSubject LeftOrRight
        -> Equal(Operand=IntProperty(Value=1)) => #4
        #2, #4 -> CombineLatest
        -> LogicalAnd
        -> WorkflowOutput
    -> Bonsai.Gui.ZedGraph.LineGraphBuilder
      SymbolType=TriangleDown
      LineWidth=0
      CurveSettings(CurveConfiguration(Label=CorrectRight, Color=Turquoise))
      Capacity=nil
      XMin=nil
      XMax=nil
      YMin=nil
      YMax=nil
    -> VisualizerMapping => #319
    #313 -> Condition
        SubscribeSubject Outcome => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=IntProperty(Value=1)) => #2
        SubscribeSubject LeftOrRight
        -> Equal(Operand=IntProperty(Value=-1)) => #4
        #2, #4 -> CombineLatest
        -> LogicalAnd
        -> WorkflowOutput
    -> Bonsai.Gui.ZedGraph.LineGraphBuilder
      SymbolType=Triangle
      LineWidth=0
      CurveSettings(CurveConfiguration(Label=ErrorLeft, Color=OrangeRed))
      Capacity=nil
      XMin=nil
      XMax=nil
      YMin=nil
      YMax=nil
    -> VisualizerMapping => #322
    #313 -> Condition
        SubscribeSubject Outcome => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=IntProperty(Value=1)) => #2
        SubscribeSubject LeftOrRight
        -> Equal(Operand=IntProperty(Value=1)) => #4
        #2, #4 -> CombineLatest
        -> LogicalAnd
        -> WorkflowOutput
    -> Bonsai.Gui.ZedGraph.LineGraphBuilder
      SymbolType=TriangleDown
      LineWidth=0
      CurveSettings(CurveConfiguration(Label=ErrorRight, Color=OrangeRed))
      Capacity=nil
      XMin=nil
      XMax=nil
      YMin=nil
      YMax=nil
    -> VisualizerMapping => #325
    #313 -> Condition
        SubscribeSubject Outcome => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=IntProperty(Value=-1))
        -> WorkflowOutput
    -> Bonsai.Gui.ZedGraph.LineGraphBuilder(SymbolType=Circle, LineWidth=0, CurveSettings(CurveConfiguration(Label=CNP, Color=Blue)), Capacity=nil, XMin=nil, XMax=nil, YMin=nil, YMax=nil)
    -> VisualizerMapping => #328
    #313 -> Condition
        SubscribeSubject Outcome => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=IntProperty(Value=-2))
        -> WorkflowOutput
    -> Bonsai.Gui.ZedGraph.LineGraphBuilder
      SymbolType=Circle
      LineWidth=0
      CurveSettings(CurveConfiguration(Label=CNPFixation, Color=#8080FF))
      Capacity=nil
      XMin=nil
      XMax=nil
      YMin=nil
      YMax=nil
    -> VisualizerMapping => #331
    #313 -> Condition
        SubscribeSubject Outcome => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=IntProperty(Value=-3))
        -> WorkflowOutput
    -> Bonsai.Gui.ZedGraph.LineGraphBuilder(SymbolType=Circle, LineWidth=0, CurveSettings(CurveConfiguration(Label=RT+, Color=Cyan)), Capacity=nil, XMin=nil, XMax=nil, YMin=nil, YMax=nil)
    -> VisualizerMapping => #334
    #313 -> Condition
        SubscribeSubject Outcome => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=IntProperty(Value=-4))
        -> WorkflowOutput
    -> Bonsai.Gui.ZedGraph.LineGraphBuilder(SymbolType=Circle, LineWidth=0, CurveSettings(CurveConfiguration(Label=RT-, Color=Yellow)), Capacity=nil, XMin=nil, XMax=nil, YMin=nil, YMax=nil)
    -> VisualizerMapping => #337
    #313 -> Condition
        SubscribeSubject Outcome => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=IntProperty(Value=-5))
        -> WorkflowOutput
    -> Bonsai.Gui.ZedGraph.LineGraphBuilder(SymbolType=Circle, LineWidth=0, CurveSettings(CurveConfiguration(Label=MT+, Color=#FF8000)), Capacity=nil, XMin=nil, XMax=nil, YMin=nil, YMax=nil)
    -> VisualizerMapping => #340
    #313 -> Condition
        SubscribeSubject Outcome => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=IntProperty(Value=-6))
        -> WorkflowOutput
    -> Bonsai.Gui.ZedGraph.LineGraphBuilder(SymbolType=Circle, LineWidth=0, CurveSettings(CurveConfiguration(Label=MT-, Color=Maroon)), Capacity=nil, XMin=nil, XMax=nil, YMin=nil, YMax=nil)
    -> VisualizerMapping => #343
    #313 -> Condition
        SubscribeSubject Outcome => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=IntProperty(Value=-7))
        -> WorkflowOutput
    -> Bonsai.Gui.ZedGraph.LineGraphBuilder(SymbolType=Circle, LineWidth=0, CurveSettings(CurveConfiguration(Label=LNPFix, Color=Gray)), Capacity=nil, XMin=nil, XMax=nil, YMin=nil, YMax=nil)
    -> VisualizerMapping => #346
    #313 -> Condition
        SubscribeSubject Outcome => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=IntProperty(Value=-8))
        -> WorkflowOutput
    -> Bonsai.Gui.ZedGraph.LineGraphBuilder(SymbolType=Circle, LineWidth=0, CurveSettings(CurveConfiguration(Label=IOCrash, Color=Black)), Capacity=nil, XMin=nil, XMax=nil, YMin=nil, YMax=nil)
    -> VisualizerMapping => #349
    #316, #319, #322, #325, #328, #331, #334, #337, #340, #343, #346, #349 -> Bonsai.Gui.ZedGraph.GraphPanelBuilder(ReverseX=false, ReverseY=false, Span=nil, Capacity=80, XMin=nil, XMax=nil, YMin=-9, YMax=3)
    -> VisualizerMapping => #351
    SubscribeSubject TrialEnd => #352
    SubscribeSubject Trial => #353
    SubscribeSubject BlockPerformance => #354
    #353, #354 -> CombineLatest
    -> InputMapping(Selector=it, X(Selector=Item1), Y(Selector=Item2))
    -> Bonsai.Vision.CreatePoint2d(X=2, Y=0) => #357
    #352, #357 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Bonsai.Gui.ZedGraph.LineGraphBuilder
      SymbolType=Circle
      LineWidth=0
      CurveSettings(CurveConfiguration(Label=Performance, Color=Turquoise))
      Capacity=nil
      XMin=nil
      XMax=nil
      YMin=nil
      YMax=nil
    -> VisualizerMapping => #361
    SubscribeSubject TrialEnd => #362
    SubscribeSubject Trial => #363
    SubscribeSubject ShortTermPerformance
    -> CF.CalculateRatio => #365
    #363, #365 -> CombineLatest
    -> InputMapping(Selector=it, X(Selector=Item1), Y(Selector=Item2))
    -> Bonsai.Vision.CreatePoint2d(X=2, Y=0) => #368
    #362, #368 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Bonsai.Gui.ZedGraph.LineGraphBuilder
      SymbolType=Circle
      LineWidth=0
      CurveSettings(CurveConfiguration(Label=PerformanceLast10, Color=LightSeaGreen))
      Capacity=nil
      XMin=nil
      XMax=nil
      YMin=nil
      YMax=nil
    -> VisualizerMapping => #372
    SubscribeSubject TrialEnd => #373
    SubscribeSubject Trial => #374
    SubscribeSubject ShortTermAbortRate
    -> CF.CalculateRatio => #376
    #374, #376 -> CombineLatest
    -> InputMapping(Selector=it, X(Selector=Item1), Y(Selector=Item2))
    -> Bonsai.Vision.CreatePoint2d(X=2, Y=0.33333333333333331) => #379
    #373, #379 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Bonsai.Gui.ZedGraph.LineGraphBuilder
      SymbolType=Circle
      LineWidth=0
      CurveSettings(CurveConfiguration(Label=AbortRateLast10, Color=Black))
      Capacity=nil
      XMin=nil
      XMax=nil
      YMin=nil
      YMax=nil
    -> VisualizerMapping => #383
    #361, #372, #383 -> Bonsai.Gui.ZedGraph.GraphPanelBuilder(ReverseX=false, ReverseY=false, Span=nil, Capacity=80, XMin=nil, XMax=nil, YMin=nil, YMax=nil)
    -> VisualizerMapping => #385
    SubscribeSubject PsychophysicalFunction
    -> Bonsai.Gui.ZedGraph.BarGraphBuilder(BaseAxis=X, BarType=Cluster, CurveSettings="", Capacity=1, Min=0, Max=1)
    -> VisualizerMapping => #388
    SubscribeSubject TrialEnd => #389
    SubscribeSubject Trial => #390
    SubscribeSubject TimedRT => #391
    #390, #391 -> CombineLatest
    -> InputMapping(Selector=it, X(Selector=Item1), Y(Selector=Item2))
    -> Bonsai.Vision.CreatePoint2d(X=2, Y=1.2797436714172363) => #394
    #389, #394 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #396
    -> Condition
        SubscribeSubject Outcome => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=IntProperty(Value=2)) => #2
        SubscribeSubject LeftOrRight
        -> Equal(Operand=IntProperty(Value=-1)) => #4
        #2, #4 -> CombineLatest
        -> LogicalAnd
        -> WorkflowOutput
    -> Bonsai.Gui.ZedGraph.LineGraphBuilder
      SymbolType=Triangle
      LineWidth=0
      CurveSettings(CurveConfiguration(Label=Correct, Color=Turquoise))
      Capacity=nil
      XMin=nil
      XMax=nil
      YMin=nil
      YMax=nil
    -> VisualizerMapping => #399
    #396 -> Condition
        SubscribeSubject Outcome => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=IntProperty(Value=2)) => #2
        SubscribeSubject LeftOrRight
        -> Equal(Operand=IntProperty(Value=1)) => #4
        #2, #4 -> CombineLatest
        -> LogicalAnd
        -> WorkflowOutput
    -> Bonsai.Gui.ZedGraph.LineGraphBuilder
      SymbolType=TriangleDown
      LineWidth=0
      CurveSettings(CurveConfiguration(Label=Correct, Color=Turquoise))
      Capacity=nil
      XMin=nil
      XMax=nil
      YMin=nil
      YMax=nil
    -> VisualizerMapping => #402
    #396 -> Condition
        SubscribeSubject Outcome => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=IntProperty(Value=1)) => #2
        SubscribeSubject LeftOrRight
        -> Equal(Operand=IntProperty(Value=-1)) => #4
        #2, #4 -> CombineLatest
        -> LogicalAnd
        -> WorkflowOutput
    -> Bonsai.Gui.ZedGraph.LineGraphBuilder
      SymbolType=Triangle
      LineWidth=0
      CurveSettings(CurveConfiguration(Label=Error, Color=OrangeRed))
      Capacity=nil
      XMin=nil
      XMax=nil
      YMin=nil
      YMax=nil
    -> VisualizerMapping => #405
    #396 -> Condition
        SubscribeSubject Outcome => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=IntProperty(Value=1)) => #2
        SubscribeSubject LeftOrRight
        -> Equal(Operand=IntProperty(Value=1)) => #4
        #2, #4 -> CombineLatest
        -> LogicalAnd
        -> WorkflowOutput
    -> Bonsai.Gui.ZedGraph.LineGraphBuilder
      SymbolType=TriangleDown
      LineWidth=0
      CurveSettings(CurveConfiguration(Label=Error, Color=OrangeRed))
      Capacity=nil
      XMin=nil
      XMax=nil
      YMin=nil
      YMax=nil
    -> VisualizerMapping => #408
    #396 -> Condition
        SubscribeSubject Outcome
        -> LessThan(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> Bonsai.Gui.ZedGraph.LineGraphBuilder(SymbolType=Circle, LineWidth=0, CurveSettings(CurveConfiguration(Label=Abort, Color=Black)), Capacity=nil, XMin=nil, XMax=nil, YMin=nil, YMax=nil)
    -> VisualizerMapping => #411
    #399, #402, #405, #408, #411 -> Bonsai.Gui.ZedGraph.GraphPanelBuilder(ReverseX=false, ReverseY=false, Span=nil, Capacity=80, XMin=nil, XMax=nil, YMin=nil, YMax=nil)
    -> VisualizerMapping => #413
    #286, #305, #351, #385, #388, #413 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=3, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #415
    SubscribeSubject Camera
    -> VisualizerMapping => #417
    SubscribeSubject TrialLeftButtonState
    -> PropertyMapping(Checked)
    -> Bonsai.Gui.ToggleButtonBuilder NextTrialLeftButton(Enabled=true, Visible=true, Text="Next Trial Left", Checked=false)
    -> PublishSubject TrialLeftButton
    -> VisualizerMapping => #422
    SubscribeSubject TrialRightButtonState
    -> PropertyMapping(Checked)
    -> Bonsai.Gui.ToggleButtonBuilder NextTrialRightButton(Enabled=true, Visible=true, Text="Next Trial Right", Checked=false)
    -> PublishSubject TrialRightButton
    -> VisualizerMapping => #427
    Bonsai.Gui.ButtonBuilder RewardLeftButton(Enabled=true, Visible=true, Text="Reward Left")
    -> PublishSubject RewardLeftButton
    -> VisualizerMapping => #430
    Bonsai.Gui.ButtonBuilder RewardRightButton(Enabled=true, Visible=true, Text="Reward Right")
    -> PublishSubject RewardRightButton
    -> VisualizerMapping => #433
    SubscribeSubject AnimalConfig
    -> MemberSelector(Selector=Optogenetics.UseOpto)
    -> PropertyMapping(Enabled)
    -> Bonsai.Gui.ButtonBuilder OptogeneticsButton(Enabled=true, Visible=true, Text="Activate Optogenetics Protocol")
    -> PublishSubject OptogeneticsButton
    -> VisualizerMapping => #439
    SubscribeSubject RepeatErrorsButtonState
    -> PropertyMapping(Checked)
    -> Bonsai.Gui.ToggleButtonBuilder RepeatErrorsButton(Enabled=true, Visible=true, Text="Repeat Errors", Checked=false)
    -> PublishSubject RepeatErrorsButton
    -> VisualizerMapping => #444
    Bonsai.Gui.ButtonBuilder EndSessionButton(Enabled=true, Visible=true, Text="End Session")
    -> PublishSubject EndSessionButton
    -> VisualizerMapping => #447
    #422, #427, #430, #433, #439, #444, #447 -> Bonsai.Gui.TableLayoutPanelBuilder
      Enabled=true
      Visible=true
      ColumnCount=2
      RowCount=4
      ColumnStyles=""
      RowStyles=""
      CellSpans
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=2, RowSpan=1)
    -> VisualizerMapping => #449
    SubscribeSubject Print
    -> VisualizerMapping => #451
    #417, #449, #451 -> Bonsai.Gui.TableLayoutPanelBuilder
      Enabled=true
      Visible=true
      ColumnCount=2
      RowCount=2
      ColumnStyles=""
      RowStyles=""
      CellSpans(CellSpan(ColumnSpan=2, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1))
    -> VisualizerMapping => #453
    #415, #453 -> Bonsai.Gui.TableLayoutPanelBuilder
      Enabled=true
      Visible=true
      ColumnCount=2
      RowCount=1
      ColumnStyles(ColumnStyle(SizeType=Percent, Width=6), ColumnStyle(SizeType=Percent, Width=4))
      RowStyles=""
      CellSpans
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=2, RowSpan=2)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=2)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
    -> WorkflowOutput

Timer(DueTime=PT0S)
-> GroupWorkflow ITIStart
    WorkflowInput Source1 => #0
    SubscribeSubject Timestamp => #1
    #0, #1 -> SubscribeWhen
    -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> MemberSelector(Selector=Seconds)
    -> MulticastSubject ITIStart
    -> WorkflowOutput
-> SelectMany Inter-TrialInterval => #8
    WorkflowInput Source1 => #0
    SubscribeSubject LevelConfig
    -> MemberSelector(Selector=Iti.Value)
    -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan => #3
      Expression: TimeSpan.FromSeconds(it)
    #0, #3 -> WithLatestFrom
    -> InputMapping(Selector=it, DueTime(Selector=Item2))
    -> SelectMany "Delay (DuckTapeSolution)"
        WorkflowInput Source1 => #0
        ExternalizedMapping(DueTime) => #1
        #0, #1 -> Delay(DueTime=PT3S)
        -> Take(Count=1)
        -> WorkflowOutput
    -> IntProperty(Value=0) => #7
    SubscribeSubject CenterPoke
    -> Condition IsPokingCNP(Description="Triggers if the animal is poking the central nose poke and if  ITIReset setting is equal to 1 (not equal to 0)")
        WorkflowInput Source1
        -> MemberSelector(Selector=Value) => #1
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=Iti.CanReset) => #3
        #1, #3 -> CombineLatest
        -> LogicalAnd
        -> WorkflowOutput
    -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=iti_reset, PrintSubjectName=PrintCode)
    -> IntProperty(Value=1) => #11
    #7, #11 -> Merge => #12
    Source2=#12 -> Take(Count=1)
    -> WorkflowOutput
-> Bonsai.Scripting.Expressions.ExpressionCondition IsTrue
  Expression: it == 0
-> GroupWorkflow TrialStart
    WorkflowInput Source1
    -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> MemberSelector(Selector=Seconds)
    -> MulticastSubject TrialStart
    -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=iti, PrintSubjectName=PrintCode)
    -> WorkflowOutput
-> SelectMany StartTrial => #11
    WorkflowInput Source1
    -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=start_trial, PrintSubjectName=PrintCode)

    SubscribeSubject CenterPoke
    -> Bonsai.Scripting.Expressions.ExpressionCondition IsPokingCNP
      Expression: Value
    -> MemberSelector(Selector=Seconds)
    -> MulticastSubject CNPStart => #5
    SubscribeSubject TrialStart => #6
    #5, #6 -> WithLatestFrom
    -> Subtract
    -> Bonsai.Scripting.Expressions.ExpressionCondition
      Expression: it >= 0
    -> MulticastSubject TimeToCNP
    -> IntProperty(Value=0) => #11
    GroupWorkflow MaxWait
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=MaxWait)
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan
          Expression: TimeSpan.FromSeconds(it)
        -> WorkflowOutput
    -> InputMapping(Selector=it, DueTime(Selector=it))
    -> SelectMany "Delay (DuckTapeSolution)"
        WorkflowInput Source1 => #0
        ExternalizedMapping(DueTime) => #1
        #0, #1 -> Delay(DueTime=PT30S)
        -> Take(Count=1)
        -> WorkflowOutput
    -> IntProperty(Value=-1) => #15
    #11, #15 -> Merge
    -> Take(Count=1)
    -> WorkflowOutput
-> Bonsai.Scripting.Expressions.ExpressionCondition IsTrue
  Expression: it == 0
-> SelectMany FixationTime => #13
    SubscribeSubject SoundOnsetTrigger
    -> Bonsai.Scripting.Expressions.ExpressionCondition
      Expression: !Value
    -> Skip(Count=1)
    -> IntProperty(Value=0)
    -> MulticastSubject FixEnd => #4
    GroupWorkflow FixationBroken => #5
        SubscribeSubject CenterPoke => #0
        -> Bonsai.Scripting.Expressions.ExpressionCondition !IsPokingCNP
          Expression: !Value
        -> MemberSelector(Selector=Seconds) => #2
        #0 -> Bonsai.Scripting.Expressions.ExpressionCondition IsPokingCNP
          Expression: Value
        -> MemberSelector(Selector=Seconds) => #4
        #2, #4 -> Zip
        -> Subtract
        -> Multiply(Operand=DoubleProperty(Value=1000))
        -> MulticastSubject TimedFT
        -> IntProperty(Value=-2)
        -> WorkflowOutput
    #4, #5 -> Merge
    -> Take(Count=1)
    -> WorkflowOutput
-> Bonsai.Scripting.Expressions.ExpressionCondition IsTrue
  Expression: it == 0
-> SelectMany Stimulus => #15
    SubscribeSubject CenterPoke
    -> Bonsai.Scripting.Expressions.ExpressionCondition !IsPokingCNP
      Expression: !Value
    -> MemberSelector(Selector=Seconds)
    -> MulticastSubject MTStart => #3
    SubscribeSubject RTStart => #4
    #3, #4 -> WithLatestFrom
    -> Subtract
    -> MulticastSubject TimedRT => #7
    -> Condition "RT >= BaseRT"
        WorkflowInput Source1 => #0
        SubscribeSubject BaseRT => #1
        #0, #1 -> Zip
        -> GreaterThanOrEqual
        -> WorkflowOutput
    -> IntProperty(Value=0) => #9
    #7 -> Condition "RT < BaseRT"
        WorkflowInput Source1 => #0
        SubscribeSubject BaseRT => #1
        #0, #1 -> Zip
        -> LessThan
        -> WorkflowOutput
    -> IntProperty(Value=-4) => #11
    GroupWorkflow MaxRT
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=ReactionTime.MaxValue)
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan
          Expression: TimeSpan.FromSeconds(it)
        -> WorkflowOutput
    -> InputMapping(Selector=it, DueTime(Selector=it))
    -> SelectMany "Delay (DuckTapeSolution)"
        WorkflowInput Source1 => #0
        ExternalizedMapping(DueTime) => #1
        #0, #1 -> Delay(DueTime=PT10S)
        -> Take(Count=1)
        -> WorkflowOutput
    -> Condition "UseMaxRT != 0"
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=ReactionTime.UseMaxRt)
        -> WorkflowOutput
    -> IntProperty(Value=-3) => #16
    #9, #11, #16 -> Merge
    -> Take(Count=1)
    -> WorkflowOutput
-> Bonsai.Scripting.Expressions.ExpressionCondition IsTrue
  Expression: it == 0
-> SelectMany Decision => #17
    WorkflowInput Source1
    -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=movement_time, PrintSubjectName=PrintCode)

    GroupWorkflow Answer => #2
        SubscribeSubject LeftPoke
        -> Bonsai.Scripting.Expressions.ExpressionCondition IsPokingLeft
          Expression: Value
        -> Sink SaveAnswer => #2
            WorkflowInput Source1
            -> IntProperty(Value=-1)
            -> MulticastSubject ResponsePoke
            -> WorkflowOutput
        SubscribeSubject RightPoke
        -> Bonsai.Scripting.Expressions.ExpressionCondition IsPokingRight
          Expression: Value
        -> Sink SaveAnswer => #5
            WorkflowInput Source1
            -> IntProperty(Value=1)
            -> MulticastSubject ResponsePoke
            -> WorkflowOutput
        #2, #5 -> Merge
        -> MemberSelector(Selector=Seconds)
        -> MulticastSubject LNPStart
        -> Take(Count=1)
        -> WorkflowOutput
    SubscribeSubject MTStart => #3
    #2, #3 -> WithLatestFrom
    -> Subtract
    -> MulticastSubject TimedMT => #6
    -> Condition "TimedMT >= MinMT"
        WorkflowInput Source1 => #0
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=MinMovementTime) => #2
        #0, #2 -> Zip
        -> GreaterThanOrEqual
        -> WorkflowOutput
    -> IntProperty(Value=0)
    -> SelectMany LNPTime => #9
        SubscribeSubject LNPTrigger
        -> Condition
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value)
            -> Equal(Operand=BooleanProperty(Value=false)) => #2
            #0 -> MemberSelector(Selector=Seconds) => #3
            SubscribeSubject LNPStart => #4
            #3, #4 -> CombineLatest
            -> GreaterThanOrEqual => #6
            #2, #6 -> CombineLatest
            -> LogicalAnd
            -> WorkflowOutput
        -> BooleanProperty(Value=true) => #2
        SubscribeSubject LeftPoke
        -> Condition IsLeft => #4
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> Equal(Operand=BooleanProperty(Value=false)) => #2
            SubscribeSubject ResponsePoke
            -> Equal(Operand=IntProperty(Value=-1)) => #4
            #2, #4 -> CombineLatest
            -> LogicalAnd
            -> WorkflowOutput
        SubscribeSubject RightPoke
        -> Condition IsRight => #6
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> Equal(Operand=BooleanProperty(Value=false)) => #2
            SubscribeSubject ResponsePoke
            -> Equal(Operand=IntProperty(Value=1)) => #4
            #2, #4 -> CombineLatest
            -> LogicalAnd
            -> WorkflowOutput
        #4, #6 -> Merge
        -> BooleanProperty(Value=false) => #8
        #2, #8 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> Condition "TimedLNP >= IntendedLNP"
        WorkflowInput Source1
        -> WorkflowOutput
    -> GroupWorkflow EvaluateAnswer => #11
        WorkflowInput Source1 => #0
        SubscribeSubject ResponsePoke => #1
        SubscribeSubject LeftOrRight => #2
        #1, #2 -> CombineLatest => #3
        #0, #3 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #5
        -> Bonsai.Scripting.Expressions.ExpressionCondition AnswerIsRight
          Expression: Item1 == Item2
        -> IntProperty(Value=2) => #7
        #5 -> Bonsai.Scripting.Expressions.ExpressionCondition AnswerIsWrong
          Expression: Item1 != Item2
        -> IntProperty(Value=1) => #9
        #7, #9 -> Merge
        -> MulticastSubject Outcome
        -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=outcome, PrintSubjectName=PrintCode)
        -> WorkflowOutput
    #9 -> Condition "TimedLNP < IntendedLNP"
        WorkflowInput Source1
        -> Equal(Operand=BooleanProperty(Value=false))
        -> WorkflowOutput
    -> IntProperty(Value=-7) => #13
    #6 -> Condition "TimedMT < MinMT"
        WorkflowInput Source1 => #0
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=MinMovementTime) => #2
        #0, #2 -> Zip
        -> LessThan
        -> WorkflowOutput
    -> IntProperty(Value=-6) => #15
    GroupWorkflow MaxMT
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=MaxMt)
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan
          Expression: TimeSpan.FromSeconds(it)
        -> WorkflowOutput
    -> InputMapping(Selector=it, DueTime(Selector=it))
    -> SelectMany "Delay (DuckTapeSolution)"
        WorkflowInput Source1 => #0
        ExternalizedMapping(DueTime) => #1
        #0, #1 -> Delay(DueTime=PT2S)
        -> Take(Count=1)
        -> WorkflowOutput
    -> IntProperty(Value=-5) => #19
    SubscribeSubject LNPStart
    -> Skip(Count=1) => #21
    #19, #21 -> TakeUntil => #22
    #11, #13, #15, #22 -> Merge
    -> Take(Count=1)
    -> WorkflowOutput
-> Bonsai.Scripting.Expressions.ExpressionCondition IsTrue
  Expression: it > 0
-> SelectMany Reward => #19
    WorkflowInput Source1 => #0
    SubscribeSubject Outcome => #1
    #0, #1 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #3
    -> Bonsai.Scripting.Expressions.ExpressionCondition AnswerIsRight
      Expression: it == 2
    -> GroupWorkflow WaterDelivery => #5
        WorkflowInput Source1 => #0
        SubscribeSubject Random
        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1) => #2
        #0, #2 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Numerics.Distributions.Sample => #5
        -> Condition
            WorkflowInput Source1 => #0
            SubscribeSubject AnimalConfig
            -> MemberSelector(Selector=Reward.Probability) => #2
            #0, #2 -> CombineLatest
            -> LessThanOrEqual
            -> WorkflowOutput
        -> Sink RewardDelivered => #7
            WorkflowInput Source1
            -> BooleanProperty(Value=true)
            -> MulticastSubject RewardDelivered
            -> WorkflowOutput
        SubscribeSubject ResponsePoke => #8
        #7, #8 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> MulticastSubject WaterDelivery => #11
        #5 -> Condition => #12
            WorkflowInput Source1 => #0
            SubscribeSubject AnimalConfig
            -> MemberSelector(Selector=Reward.Probability) => #2
            #0, #2 -> CombineLatest
            -> GreaterThan
            -> WorkflowOutput
        #11, #12 -> Merge
        -> IntProperty(Value=0)
        -> WorkflowOutput
    #3 -> Bonsai.Scripting.Expressions.ExpressionCondition AnswerIsWrong
      Expression: it == 1
    -> GroupWorkflow Penalty => #7
        WorkflowInput Source1
        -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=penalty_time, PrintSubjectName=PrintCode) => #1
        SubscribeSubject Penalty
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan => #3
          Expression: TimeSpan.FromSeconds(it)
        #1, #3 -> WithLatestFrom
        -> InputMapping(Selector=it, DueTime(Selector=Item2))
        -> SelectMany "Delay (DuckTapeSolution)"
            WorkflowInput Source1 => #0
            ExternalizedMapping(DueTime) => #1
            #0, #1 -> Delay(DueTime=PT15S)
            -> Take(Count=1)
            -> WorkflowOutput
        -> IntProperty(Value=0)
        -> WorkflowOutput
    #5, #7 -> Merge
    -> Take(Count=1)
    -> WorkflowOutput
#17, #15, #13, #11 -> Merge
-> Bonsai.Scripting.Expressions.ExpressionCondition IsFalse
  Expression: it < 0
-> SelectMany Abort => #22
    WorkflowInput Source1
    -> MulticastSubject Outcome
    -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=outcome, PrintSubjectName=PrintCode)
    -> GroupWorkflow Penalty
        WorkflowInput Source1
        -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=penalty_time, PrintSubjectName=PrintCode) => #1
        SubscribeSubject Penalty
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan => #3
          Expression: TimeSpan.FromSeconds(it)
        #1, #3 -> WithLatestFrom
        -> InputMapping(Selector=it, DueTime(Selector=Item2))
        -> SelectMany "Delay (DuckTapeSolution)"
            WorkflowInput Source1 => #0
            ExternalizedMapping(DueTime) => #1
            #0, #1 -> Delay(DueTime=PT1S)
            -> Take(Count=1)
            -> WorkflowOutput
        -> IntProperty(Value=0)
        -> WorkflowOutput
    -> Take(Count=1)
    -> WorkflowOutput
#19, #22 -> Merge
-> GroupWorkflow TrialEnd => #24
    WorkflowInput Source1
    -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> MemberSelector(Selector=Seconds)
    -> MulticastSubject TrialEnd
    -> WorkflowOutput
#8 -> Bonsai.Scripting.Expressions.ExpressionCondition IsFalse
  Expression: it != 0
-> DoubleProperty(Value=0)
-> Delay(DueTime=PT0.01S) => #27
#24, #27 -> Merge
-> Repeat => #29
GroupWorkflow EndSession
    SubscribeSubject AnimalConfig
    -> MemberSelector(Selector=Session.Duration)
    -> InputMapping(Selector=it, DueTime(Selector=it))
    -> SelectMany "Delay (DuckTapeSolution)"
        WorkflowInput Source1 => #0
        ExternalizedMapping(DueTime) => #1
        #0, #1 -> Delay(DueTime=PT2H)
        -> Take(Count=1)
        -> WorkflowOutput
    -> StringProperty => #4
    SubscribeSubject EndSessionButton => #5
    #4, #5 -> Merge
    -> WorkflowOutput
-> GroupWorkflow CloseHardware => #31
    WorkflowInput Source1
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear="Led0 Led1"))
    -> MulticastSubject BehaviorCommands
    -> Harp.CurrentDriver.CreateMessage(MessageType=Write, Payload=Harp.CurrentDriver.CreateDac0VoltagePayload(Dac0Voltage=0))
    -> MulticastSubject CDCommands
    -> Harp.CurrentDriver.CreateMessage(MessageType=Write, Payload=Harp.CurrentDriver.CreateDac1VoltagePayload(Dac1Voltage=0))
    -> MulticastSubject CDCommands
    -> WorkflowOutput
#29, #31 -> TakeUntil
-> WorkflowOutput
