WorkflowBuilder(Version=2.8.1)
GroupWorkflow Prints
    GroupWorkflow Init
        StringProperty
        -> IgnoreElements
        -> BehaviorSubject Prints

        IntProperty(Value=0)
        -> IgnoreElements
        -> BehaviorSubject PrintNumber

    GroupWorkflow Prints
        GroupWorkflow ITI
            StringProperty(Value="======================================") => #0
            ExternalizedMapping(PrintNumber) => #1
            #0, #1 -> GroupWorkflow Print
                SubscribeSubject PrintNumber => #0
                ExternalizedMapping(PrintNumber) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintNumber)) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=0))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Prints
                -> WorkflowOutput

        GroupWorkflow ITIDuration
            SubscribeSubject ITIEnd => #0
            SubscribeSubject ITIStart => #1
            #0, #1 -> CombineLatest
            -> Subtract
            -> GroupWorkflow QuantityString => #4
                ExternalizedMapping(Value(DisplayName=QuantityName))
                -> StringProperty(Value="ITI duration") => #1
                WorkflowInput Source1 => #2
                ExternalizedMapping(Value(DisplayName=Unit))
                -> StringProperty(Value=s) => #4
                #1, #2, #4 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 + ": " + Item2.ToString() + " " + Item3
                -> WorkflowOutput
            ExternalizedMapping(PrintNumber) => #5
            #4, #5 -> GroupWorkflow Print
                SubscribeSubject PrintNumber => #0
                ExternalizedMapping(PrintNumber) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintNumber)) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=1))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Prints
                -> WorkflowOutput

        GroupWorkflow ABL
            SubscribeSubject ABL
            -> GroupWorkflow QuantityString => #1
                ExternalizedMapping(Value(DisplayName=QuantityName))
                -> StringProperty(Value=ABL) => #1
                WorkflowInput Source1 => #2
                ExternalizedMapping(Value(DisplayName=Unit))
                -> StringProperty(Value=dB) => #4
                #1, #2, #4 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 + ": " + Item2.ToString() + " " + Item3
                -> WorkflowOutput
            ExternalizedMapping(PrintNumber) => #2
            #1, #2 -> GroupWorkflow Print
                SubscribeSubject PrintNumber => #0
                ExternalizedMapping(PrintNumber) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintNumber)) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=2))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Prints
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow ILD
            SubscribeSubject ILD
            -> GroupWorkflow QuantityString => #1
                ExternalizedMapping(Value(DisplayName=QuantityName))
                -> StringProperty(Value=ILD) => #1
                WorkflowInput Source1 => #2
                ExternalizedMapping(Value(DisplayName=Unit))
                -> StringProperty(Value=dB) => #4
                #1, #2, #4 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 + ": " + Item2.ToString() + " " + Item3
                -> WorkflowOutput
            ExternalizedMapping(PrintNumber) => #2
            #1, #2 -> GroupWorkflow Print
                SubscribeSubject PrintNumber => #0
                ExternalizedMapping(PrintNumber) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintNumber)) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=3))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Prints
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow CorrectSide
            StringProperty(Value="Trial's correct answer: ") => #0
            SubscribeSubject LeftOrRight => #1
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -1
            -> StringProperty(Value=Left) => #3
            #1 -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == 1
            -> StringProperty(Value=Right) => #5
            #3, #5 -> Merge => #6
            #0, #6 -> CombineLatest
            -> Add => #8
            ExternalizedMapping(PrintNumber) => #9
            #8, #9 -> GroupWorkflow Print
                SubscribeSubject PrintNumber => #0
                ExternalizedMapping(PrintNumber) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintNumber)) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=4))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Prints
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow StartTrial
            StringProperty(Value="The animal can now poke") => #0
            ExternalizedMapping(PrintNumber) => #1
            #0, #1 -> GroupWorkflow Print
                SubscribeSubject PrintNumber => #0
                ExternalizedMapping(PrintNumber) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintNumber)) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=5))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Prints
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow Fixation
            StringProperty(Value="The animal is fixed") => #0
            ExternalizedMapping(PrintNumber) => #1
            #0, #1 -> GroupWorkflow Print
                SubscribeSubject PrintNumber => #0
                ExternalizedMapping(PrintNumber) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintNumber)) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=6))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Prints
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow FT
            SubscribeSubject TimedFT
            -> GroupWorkflow QuantityString => #1
                ExternalizedMapping(Value(DisplayName=QuantityName))
                -> StringProperty(Value="Fixation time") => #1
                WorkflowInput Source1 => #2
                ExternalizedMapping(Value(DisplayName=Unit))
                -> StringProperty(Value=s) => #4
                #1, #2, #4 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 + ": " + Item2.ToString() + " " + Item3
                -> WorkflowOutput
            ExternalizedMapping(PrintNumber) => #2
            #1, #2 -> GroupWorkflow Print
                SubscribeSubject PrintNumber => #0
                ExternalizedMapping(PrintNumber) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintNumber)) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=7))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Prints
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow StimulusPresentation
            StringProperty(Value="Sound playing") => #0
            ExternalizedMapping(PrintNumber) => #1
            #0, #1 -> GroupWorkflow Print
                SubscribeSubject PrintNumber => #0
                ExternalizedMapping(PrintNumber) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintNumber)) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=8))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Prints
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow MT
            StringProperty(Value="The animal can now make a decision") => #0
            ExternalizedMapping(PrintNumber) => #1
            #0, #1 -> GroupWorkflow Print
                SubscribeSubject PrintNumber => #0
                ExternalizedMapping(PrintNumber) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintNumber)) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=9))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Prints
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow Outcome
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == 2
            -> StringProperty(Value="Right answer") => #2
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == 1
            -> StringProperty(Value="Wrong answer") => #5
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -1
            -> StringProperty(Value="CNP Abort") => #8
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -2
            -> StringProperty(Value="Fixation Abort") => #11
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -3
            -> StringProperty(Value="RT Abort") => #14
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -4
            -> StringProperty(Value="MT+ Abort") => #17
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -5
            -> StringProperty(Value="MT- Abort") => #20
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -6
            -> StringProperty(Value="LNP Abort") => #23
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -7
            -> StringProperty(Value="IO crash") => #26
            #2, #5, #8, #11, #14, #17, #20, #23, #26 -> Merge => #27
            ExternalizedMapping(PrintNumber) => #28
            #27, #28 -> GroupWorkflow Print
                SubscribeSubject PrintNumber => #0
                ExternalizedMapping(PrintNumber) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintNumber)) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=10))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Prints
                -> WorkflowOutput

        GroupWorkflow PenaltyTime
            SubscribeSubject Penalty
            -> GroupWorkflow QuantityString => #1
                ExternalizedMapping(Value(DisplayName=QuantityName))
                -> StringProperty(Value="Penalty time") => #1
                WorkflowInput Source1 => #2
                ExternalizedMapping(Value(DisplayName=Unit))
                -> StringProperty(Value=s) => #4
                #1, #2, #4 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 + ": " + Item2.ToString() + " " + Item3
                -> WorkflowOutput
            ExternalizedMapping(PrintNumber) => #2
            #1, #2 -> GroupWorkflow Print
                SubscribeSubject PrintNumber => #0
                ExternalizedMapping(PrintNumber) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintNumber)) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=11))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Prints
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow LeftReward
            StringProperty(Value="Left reward given") => #0
            ExternalizedMapping(PrintNumber) => #1
            #0, #1 -> GroupWorkflow Print
                SubscribeSubject PrintNumber => #0
                ExternalizedMapping(PrintNumber) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintNumber)) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=12))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Prints
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow RightReward
            StringProperty(Value="Right reward given") => #0
            ExternalizedMapping(PrintNumber) => #1
            #0, #1 -> GroupWorkflow Print
                SubscribeSubject PrintNumber => #0
                ExternalizedMapping(PrintNumber) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintNumber)) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=13))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Prints
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow IntendedFT
            SubscribeSubject IntendedLEDOnset => #0
            SubscribeSubject IntendedFT => #1
            #0, #1 -> CombineLatest
            -> Add
            -> GroupWorkflow QuantityString => #4
                ExternalizedMapping(Value(DisplayName=QuantityName))
                -> StringProperty(Value="Intended FT") => #1
                WorkflowInput Source1 => #2
                ExternalizedMapping(Value(DisplayName=Unit))
                -> StringProperty(Value=ms) => #4
                #1, #2, #4 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 + ": " + Item2.ToString() + " " + Item3
                -> WorkflowOutput
            ExternalizedMapping(PrintNumber) => #5
            #4, #5 -> GroupWorkflow Print
                SubscribeSubject PrintNumber => #0
                ExternalizedMapping(PrintNumber) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintNumber)) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=14))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Prints
                -> WorkflowOutput
            -> WorkflowOutput

    SubscribeSubject Prints
    -> WorkflowOutput

GroupWorkflow Utils
    GroupWorkflow GenerateILDArray
        SubscribeSubject ILDSteps => #0
        SubscribeSubject ILDStepSize => #1
        SubscribeSubject UseLog
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
          Expression: Convert.ToBoolean(it)
        SubscribeSubject ILDStepSize => #4
        #0, #1, #3, #4 -> Zip
        -> InputMapping(Selector=Item1, NumSteps(Selector=Item1), StepSize(Selector=Item2), UseLog(Selector=Item3), LogBase(Selector=Item4))
        -> Extensions.GenerateILDArray(NumSteps=1, StepSize=50, UseLog=false, LogBase=50)
        -> MulticastSubject ILDs

    GroupWorkflow ShuffleILDArray
        SubscribeSubject NewILDShuffle => #0
        SubscribeSubject ILDs => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Extensions.ShuffleArray
        -> MulticastSubject ShuffledILDs

    GroupWorkflow PrepareNewTrial
        BooleanProperty(Value=true)
        -> BehaviorSubject PrepareNewTrial

        BooleanProperty(Value=false)
        -> IgnoreElements
        -> BehaviorSubject RequestNewTrial

        SubscribeSubject RequestNewTrial => #5
        -> Condition "TrialsCompleted == TrialsPerBlock"
            SubscribeSubject TrialsCompleted => #0
            SubscribeSubject TrialsPerBlock => #1
            #0, #1 -> CombineLatest
            -> Equal
            -> WorkflowOutput
        -> GroupWorkflow StartNewBlock(Description="Resets every block subject (variable) and updates the training level if needed")
            WorkflowInput Source1 => #0
            SubscribeSubject Block => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Add(Operand=IntProperty(Value=1))
            -> MulticastSubject Block => #5
            -> Condition UpdateTrainingLevelCondition(Description="!UsePerformance || (UsePerformance && (BlockPerformance >= CriticalPerformance) && (TrainingLevel < NumLevels))") => #6
                SubscribeSubject UsePerformance
                -> Equal(Operand=BooleanProperty(Value=false)) => #1
                SubscribeSubject UsePerformance => #2
                SubscribeSubject BlockPerformance => #3
                SubscribeSubject CriticalPerformance => #4
                #3, #4 -> Zip
                -> GreaterThanOrEqual => #6
                #2, #6 -> Zip
                -> LogicalAnd => #8
                #1, #8 -> Zip
                -> LogicalOr => #10
                SubscribeSubject TrainingLevel => #11
                SubscribeSubject NumLevels
                -> Subtract(Operand=IntProperty(Value=1)) => #13
                #11, #13 -> Zip
                -> LessThan => #15
                #10, #15 -> Zip
                -> LogicalAnd
                -> WorkflowOutput
            SubscribeSubject TrainingLevel => #7
            #6, #7 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Add(Operand=IntProperty(Value=1))
            -> MulticastSubject TrainingLevel => #11
            #5 -> Condition !UpdateTrainingLevelCondition(Description="!(!UsePerformance || (UsePerformance && (BlockPerformance >= CriticalPerformance) && (TrainingLevel < NumLevels)))") => #12
                SubscribeSubject UsePerformance
                -> Equal(Operand=BooleanProperty(Value=false)) => #1
                SubscribeSubject UsePerformance => #2
                SubscribeSubject BlockPerformance => #3
                SubscribeSubject CriticalPerformance => #4
                #3, #4 -> Zip
                -> GreaterThanOrEqual => #6
                #2, #6 -> Zip
                -> LogicalAnd => #8
                #1, #8 -> Zip
                -> LogicalOr => #10
                SubscribeSubject TrainingLevel => #11
                SubscribeSubject NumLevels
                -> Subtract(Operand=IntProperty(Value=1)) => #13
                #11, #13 -> Zip
                -> GreaterThanOrEqual => #15
                #10, #15 -> Zip
                -> LogicalAnd
                -> Equal(Operand=BooleanProperty(Value=false))
                -> WorkflowOutput
            #11, #12 -> Merge
            -> IntProperty(Value=0)
            -> MulticastSubject BlockTrial
            -> MulticastSubject BlockMessage
            -> DoubleProperty(Value=0)
            -> MulticastSubject TrialsCompleted
            -> MulticastSubject RightAnswers
            -> MulticastSubject BlockPerformance
            -> MulticastSubject TrialsAborted
            -> MulticastSubject BlockAbortRatio
            -> WorkflowOutput
        -> BooleanProperty(Value=true) => #8
        #5 -> Condition "TrialsCompleted != TrialsPerBlock" => #9
            SubscribeSubject TrialsCompleted => #0
            SubscribeSubject TrialsPerBlock => #1
            #0, #1 -> Zip
            -> NotEqual
            -> WorkflowOutput
        #8, #9 -> Merge
        -> GroupWorkflow UpdateTrialNumbers(Description="Updates the total trial number and the block trial number")
            WorkflowInput Source1
            -> BehaviorSubject UTN

            SubscribeSubject UTN => #2
            SubscribeSubject Trial => #3
            #2, #3 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Add(Operand=IntProperty(Value=1))
            -> MulticastSubject Trial => #7
            SubscribeSubject UTN => #8
            SubscribeSubject BlockTrial => #9
            #8, #9 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Add(Operand=IntProperty(Value=1))
            -> MulticastSubject BlockTrial => #13
            #7, #13 -> Zip
            -> WorkflowOutput
        -> GroupWorkflow RandomizeLouderSpeaker
            WorkflowInput Source1
            -> BehaviorSubject RLS

            SubscribeSubject RLS
            -> SelectMany PickSoundIndex
                WorkflowInput Source1 => #0
                SubscribeSubject AnimalConfig
                -> MemberSelector(Selector=SoundIndexes) => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                SubscribeSubject SoundChoiceDistribution
                -> Bonsai.Numerics.Distributions.Sample
                -> PropertyMapping(Value) => #7
                #4, #7 -> Index(Operand=IntProperty(Value=0))
                -> MulticastSubject SoundIndex
                -> Take(Count=1)
                -> WorkflowOutput

            SubscribeSubject RLS
            -> GroupWorkflow RemainingLevels
                WorkflowInput Source1 => #0
                -> GroupWorkflow ABL => #1
                    WorkflowInput Source1 => #0
                    -> Condition "DifferentABLs != 0"
                        SubscribeSubject TrainingConfig
                        -> MemberSelector(Selector=DifferentABLs)
                        -> WorkflowOutput
                    -> GroupWorkflow RandomABL => #2
                        WorkflowInput Source1
                        -> GroupWorkflow PickRandomIndex
                            WorkflowInput Source1
                            -> GroupWorkflow NewABLRequest => #1
                                WorkflowInput Source1 => #0
                                SubscribeSubject ABLBlock => #1
                                SubscribeSubject BlockTrial => #2
                                #1, #2 -> CombineLatest => #3
                                #0, #3 -> WithLatestFrom
                                -> MemberSelector(Selector=Item2)
                                -> Bonsai.Scripting.Expressions.ExpressionCondition "!ABLBlock || (ABLBlock && BlockTrial == 1)"
                                  Expression: !Item1 || (Item1 && Item2 == 1)
                                -> MemberSelector(Selector=Item1)
                                -> WorkflowOutput
                            SubscribeSubject Random => #2
                            SubscribeSubject AnimalConfig
                            -> MemberSelector(Selector=ABLList.Length)
                            -> Subtract(Operand=IntProperty(Value=1))
                            -> PropertyMapping(Upper) => #6
                            #2, #6 -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=2) => #7
                            #1, #7 -> WithLatestFrom
                            -> MemberSelector(Selector=Item2)
                            -> Bonsai.Numerics.Distributions.Sample
                            -> WorkflowOutput
                        -> InputMapping(Selector=it, Index(Selector=it))
                        -> SelectMany ABLValue
                            SubscribeSubject AnimalConfig
                            -> MemberSelector(Selector=ABLList) => #1
                            ExternalizedMapping(Value(DisplayName=Index)) => #2
                            #1, #2 -> Index(Operand=IntProperty(Value=0))
                            -> Take(Count=1)
                            -> WorkflowOutput
                        -> WorkflowOutput
                    #0 -> Condition "DifferentABLs == 0" => #3
                        SubscribeSubject TrainingConfig
                        -> MemberSelector(Selector=DifferentABLs)
                        -> Equal(Operand=BooleanProperty(Value=false))
                        -> WorkflowOutput
                    SubscribeSubject TrainingConfig
                    -> MemberSelector(Selector=FixedABL) => #5
                    #3, #5 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2) => #7
                    #2, #7 -> Merge
                    -> MulticastSubject ABL
                    -> SelectMany PrintRequest
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value(DisplayName=PrintNumber))
                        -> IntProperty(Value=2)
                        -> MulticastSubject PrintNumber => #3
                        #0, #3 -> Zip
                        -> MemberSelector(Selector=Item1)
                        -> Take(Count=1)
                        -> WorkflowOutput
                    -> WorkflowOutput
                #0 -> GroupWorkflow ILD => #2
                    WorkflowInput Source1 => #0
                    -> Condition "CycleILD == 0"
                        SubscribeSubject CycleILD
                        -> Equal(Operand=BooleanProperty(Value=false))
                        -> WorkflowOutput
                    -> GroupWorkflow PickRandomIndex
                        WorkflowInput Source1 => #0
                        SubscribeSubject Random => #1
                        SubscribeSubject ILDs
                        -> MemberSelector(Selector=Length)
                        -> Subtract(Operand=IntProperty(Value=1))
                        -> PropertyMapping(Upper) => #5
                        #1, #5 -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1) => #6
                        #0, #6 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> Bonsai.Numerics.Distributions.Sample
                        -> WorkflowOutput
                    -> InputMapping(Selector=it, Index(Selector=it))
                    -> SelectMany ILDValue => #4
                        SubscribeSubject ILDs => #0
                        ExternalizedMapping(Value(DisplayName=Index)) => #1
                        #0, #1 -> Index(Operand=IntProperty(Value=1))
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #0 -> Condition "CycleILD != 0" => #5
                        SubscribeSubject CycleILD
                        -> WorkflowOutput
                    SubscribeSubject ILDIndex => #6
                    #5, #6 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2) => #8
                    -> GroupWorkflow UpdateILDIndex => #9
                        WorkflowInput Source1
                        -> Add(Operand=DoubleProperty(Value=1)) => #1
                        SubscribeSubject ShuffledILDs
                        -> MemberSelector(Selector=Length) => #3
                        #1, #3 -> WithLatestFrom => #4
                        -> Bonsai.Scripting.Expressions.ExpressionCondition "ILDIndex != NumILDs"
                          Expression: Item1 != Item2
                        -> MemberSelector(Selector=Item1) => #6
                        #4 -> Bonsai.Scripting.Expressions.ExpressionCondition "ILDIndex == NumILDs"
                          Expression: Item1 == Item2
                        -> DoubleProperty(Value=0)
                        -> MulticastSubject NewILDShuffle => #9
                        #6, #9 -> Merge
                        -> MulticastSubject ILDIndex
                        -> WorkflowOutput
                    #8, #9 -> Zip
                    -> MemberSelector(Selector=Item1)
                    -> SelectMany ShuffledILDValue => #12
                        SubscribeSubject ShuffledILDs => #0
                        ExternalizedMapping(Value(DisplayName=Index)) => #1
                        #0, #1 -> Index(Operand=IntProperty(Value=0))
                        -> Take(Count=1)
                        -> WorkflowOutput
                    #4, #12 -> Merge
                    -> MulticastSubject ILD
                    -> SelectMany PrintRequest
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value(DisplayName=PrintNumber))
                        -> IntProperty(Value=3)
                        -> MulticastSubject PrintNumber => #3
                        #0, #3 -> Zip
                        -> MemberSelector(Selector=Item1)
                        -> Take(Count=1)
                        -> WorkflowOutput
                    -> Divide(Operand=DoubleProperty(Value=2))
                    -> WorkflowOutput
                #1, #2 -> Zip => #3
                -> Condition "RepeatTrial == 0" => #4
                    SubscribeSubject RepeatTrial
                    -> Equal(Operand=DoubleProperty(Value=0))
                    -> WorkflowOutput
                -> Subtract
                -> MulticastSubject LeftIntensity => #6
                #4 -> Add
                -> MulticastSubject RightIntensity => #8
                #6, #8 -> Zip
                -> IntProperty(Value=0) => #10
                #3 -> Condition "RepeatTrial != 0"
                    SubscribeSubject RepeatTrial
                    -> NotEqual(Operand=IntProperty(Value=0))
                    -> WorkflowOutput
                -> IntProperty(Value=0)
                -> MulticastSubject RepeatTrial => #13
                #10, #13 -> Merge
                -> WorkflowOutput
            -> IntProperty(Value=0)
            -> GroupWorkflow LeftOrRight
                WorkflowInput Source1 => #0
                SubscribeSubject RightIntensity => #1
                SubscribeSubject LeftIntensity => #2
                #1, #2 -> CombineLatest
                -> Subtract => #4
                -> Bonsai.Scripting.Expressions.ExpressionCondition "it >=0"
                  Expression: it >= 0
                -> IntProperty(Value=1) => #6
                #4 -> Bonsai.Scripting.Expressions.ExpressionCondition "it < 0"
                  Expression: it < 0
                -> IntProperty(Value=-1) => #8
                #6, #8 -> Merge => #9
                #0, #9 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject LeftOrRight
                -> SelectMany PrintRequest
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintNumber))
                    -> IntProperty(Value=4)
                    -> MulticastSubject PrintNumber => #3
                    #0, #3 -> Zip
                    -> MemberSelector(Selector=Item1)
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> WorkflowOutput
            -> WorkflowOutput

        SubscribeSubject RequestNewTrial => #13
        SubscribeSubject Random
        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1) => #15
        #13, #15 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Numerics.Distributions.Sample => #18
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it > 0.3
        -> IntProperty(Value=0) => #20
        #18 -> Condition
            WorkflowInput Source1
            -> LessThanOrEqual(Operand=DoubleProperty(Value=0.3)) => #1
            SubscribeSubject AnimalConfig
            -> MemberSelector(Selector=OptoSession) => #3
            #1, #3 -> Zip
            -> LogicalAnd
            -> WorkflowOutput
        -> IntProperty(Value=1) => #22
        #20, #22 -> Merge
        -> MulticastSubject LEDTrial

        SubscribeSubject BaseFT => #25
        SubscribeSubject RequestNewTrial => #26
        SubscribeSubject Random => #27
        SubscribeSubject ExpFTMean
        -> Bonsai.Dsp.Pow(Power=-1)
        -> PropertyMapping(Rate) => #30
        #27, #30 -> Bonsai.Numerics.Distributions.CreateExponential(Rate=0.01) => #31
        #26, #31 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #33
        -> Condition "RandomizeFT != 0"
            SubscribeSubject RandomizeFT
            -> WorkflowOutput
        -> Bonsai.Numerics.Distributions.Sample => #35
        #33 -> Condition "RandomizeFT == 0"
            SubscribeSubject RandomizeFT
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        -> DoubleProperty(Value=0) => #37
        #35, #37 -> Merge => #38
        #25, #38 -> CombineLatest
        -> Add
        -> MulticastSubject IntendedFT

        SubscribeSubject BaseLEDOnset => #42
        SubscribeSubject RequestNewTrial => #43
        SubscribeSubject Random => #44
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=ExpLEDOnset)
        -> Bonsai.Dsp.Pow(Power=-1)
        -> PropertyMapping(Rate) => #48
        #44, #48 -> Bonsai.Numerics.Distributions.CreateExponential(Rate=0.01) => #49
        #43, #49 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #51
        -> Condition "RandomizeFT != 0"
            SubscribeSubject RandomizeFT
            -> WorkflowOutput
        -> Bonsai.Numerics.Distributions.Sample => #53
        #51 -> Condition "RandomizeFT == 0"
            SubscribeSubject RandomizeFT
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        -> DoubleProperty(Value=0) => #55
        #53, #55 -> Merge => #56
        #42, #56 -> CombineLatest
        -> Add
        -> MulticastSubject IntendedLEDOnset

    GroupWorkflow SaveTrial
        DoubleProperty(Value=0)
        -> IgnoreElements
        -> BehaviorSubject SaveTrial

        SubscribeSubject SaveTrial
        -> SelectMany OutputFile
            SubscribeSubject Box => #0
            SubscribeSubject LEDPowerR => #1
            SubscribeSubject LEDPowerL => #2
            SubscribeSubject TimedLED => #3
            SubscribeSubject LEDTrial => #4
            SubscribeSubject BlockAbortRatio => #5
            SubscribeSubject BlockPerformance => #6
            SubscribeSubject RepeatTrial => #7
            SubscribeSubject Outcome => #8
            SubscribeSubject ResponsePoke => #9
            SubscribeSubject TimedLNP => #10
            SubscribeSubject IntendedLNP => #11
            SubscribeSubject TimedMT => #12
            SubscribeSubject MaxMT => #13
            SubscribeSubject TimedRT => #14
            SubscribeSubject MaxRT => #15
            SubscribeSubject BaseRT => #16
            SubscribeSubject TimedFT => #17
            SubscribeSubject IntendedFT => #18
            SubscribeSubject ExpFTMean => #19
            SubscribeSubject BaseFT => #20
            SubscribeSubject TimedLEDOnset => #21
            SubscribeSubject IntendedLEDOnset => #22
            SubscribeSubject AnimalConfig
            -> MemberSelector(Selector=ExpLEDOnset) => #24
            SubscribeSubject BaseLEDOnset => #25
            SubscribeSubject TimeToCNP => #26
            SubscribeSubject MaxWait => #27
            SubscribeSubject ITIEnd => #28
            SubscribeSubject ITIStart => #29
            #28, #29 -> Zip
            -> Subtract => #31
            SubscribeSubject ITIEnd => #32
            SubscribeSubject ITIStart => #33
            SubscribeSubject IntendedITI => #34
            SubscribeSubject TrialEnd => #35
            SubscribeSubject TrialStart => #36
            #35, #36 -> Zip
            -> Subtract => #38
            SubscribeSubject TrialEnd => #39
            SubscribeSubject TrialStart => #40
            SubscribeSubject WaveformR => #41
            SubscribeSubject WaveformL => #42
            SubscribeSubject RightAmp => #43
            SubscribeSubject LeftAmp => #44
            SubscribeSubject Bias => #45
            SubscribeSubject ILD => #46
            SubscribeSubject ABL => #47
            SubscribeSubject TrainingLevel => #48
            SubscribeSubject TrialsPerBlock => #49
            SubscribeSubject Block => #50
            SubscribeSubject Trial => #51
            SubscribeSubject SessionType => #52
            SubscribeSubject Session => #53
            SubscribeSubject Animal
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #55
              Expression: Convert.ToDouble(it)
            #53, #55 -> SubscribeWhen
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #57
              Expression: Convert.ToDouble(it)
            #52, #57 -> SubscribeWhen
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #59
              Expression: Convert.ToDouble(it)
            #51, #59 -> SubscribeWhen
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #61
              Expression: Convert.ToDouble(it)
            #50, #61 -> SubscribeWhen
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #63
              Expression: Convert.ToDouble(it)
            #49, #63 -> SubscribeWhen
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #65
              Expression: Convert.ToDouble(it)
            #48, #65 -> SubscribeWhen
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #67
              Expression: Convert.ToDouble(it)
            #47, #67 -> SubscribeWhen => #68
            #46, #68 -> SubscribeWhen => #69
            #45, #69 -> SubscribeWhen => #70
            #44, #70 -> SubscribeWhen => #71
            #43, #71 -> SubscribeWhen => #72
            #42, #72 -> SubscribeWhen
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #74
              Expression: Convert.ToDouble(it)
            #41, #74 -> SubscribeWhen
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #76
              Expression: Convert.ToDouble(it)
            #40, #76 -> SubscribeWhen => #77
            #39, #77 -> SubscribeWhen => #78
            #38, #78 -> SubscribeWhen => #79
            #34, #79 -> SubscribeWhen => #80
            #33, #80 -> SubscribeWhen => #81
            #32, #81 -> SubscribeWhen => #82
            #31, #82 -> SubscribeWhen => #83
            #27, #83 -> SubscribeWhen => #84
            #26, #84 -> SubscribeWhen => #85
            #25, #85 -> SubscribeWhen => #86
            #24, #86 -> SubscribeWhen => #87
            #22, #87 -> SubscribeWhen => #88
            #21, #88 -> SubscribeWhen => #89
            #20, #89 -> SubscribeWhen => #90
            #19, #90 -> SubscribeWhen => #91
            #18, #91 -> SubscribeWhen => #92
            #17, #92 -> SubscribeWhen => #93
            #16, #93 -> SubscribeWhen => #94
            #15, #94 -> SubscribeWhen => #95
            #14, #95 -> SubscribeWhen => #96
            #13, #96 -> SubscribeWhen => #97
            #12, #97 -> SubscribeWhen => #98
            #11, #98 -> SubscribeWhen => #99
            #10, #99 -> SubscribeWhen => #100
            #9, #100 -> SubscribeWhen
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #102
              Expression: Convert.ToDouble(it)
            #8, #102 -> SubscribeWhen
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #104
              Expression: Convert.ToDouble(it)
            #7, #104 -> SubscribeWhen
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #106
              Expression: Convert.ToDouble(it)
            #6, #106 -> SubscribeWhen => #107
            #5, #107 -> SubscribeWhen => #108
            #4, #108 -> SubscribeWhen => #109
            #3, #109 -> SubscribeWhen => #110
            #2, #110 -> SubscribeWhen => #111
            #1, #111 -> SubscribeWhen => #112
            #0, #112 -> SubscribeWhen
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #114
              Expression: Convert.ToDouble(it)
            #114, #112, #111, #110, #109, #108, #107, #106, #104, #102, #100, #99, #98, #97, #96, #95, #94, #93, #92, #91, #90, #85, #84, #83, #82, #81, #80, #79, #78, #77, #76, #74, #72, #71, #70, #69, #68, #67, #65, #63, #61, #59, #57, #55, #86, #87, #88, #89 -> Merge => #115
            #114 -> Delay(DueTime=PT0.001S) => #116
            #115, #116 -> TakeUntil
            -> ToArray
            -> MulticastSubject CSV
            -> BooleanProperty(Value=true)
            -> MulticastSubject PlotsMessage
            -> WorkflowOutput

    GroupWorkflow WaterDelivery
        Annotation FIXME(Text="") => #0
        SubscribeSubject WaterDelivery => #1
        -> Bonsai.Scripting.Expressions.ExpressionCondition => #2
          Expression: it == -1
        -> Condition
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=UsePumps)
            -> WorkflowOutput
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableMotorDriverPayload(EnableMotorDriver=Enabled))
        -> MulticastSubject LeftPumpCommands
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableProtocolPayload(EnableProtocol=Enabled))
        -> MulticastSubject LeftPumpCommands
        -> SelectMany PrintRequest => #8
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=PrintNumber))
            -> IntProperty(Value=12)
            -> MulticastSubject PrintNumber => #3
            #0, #3 -> Zip
            -> MemberSelector(Selector=Item1)
            -> Take(Count=1)
            -> WorkflowOutput
        #0, #8 -> Delay(DueTime=PT0.1S)
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableMotorDriverPayload(EnableMotorDriver=Disabled))
        -> MulticastSubject LeftPumpCommands
        #2 -> Condition
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=UsePumps)
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO1))
        -> MulticastSubject BehaviorCommands
        #1 -> Bonsai.Scripting.Expressions.ExpressionCondition => #15
          Expression: it == 1
        -> Condition
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=UsePumps)
            -> WorkflowOutput
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableMotorDriverPayload(EnableMotorDriver=Enabled))
        -> MulticastSubject RightPumpCommands
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableProtocolPayload(EnableProtocol=Enabled))
        -> MulticastSubject RightPumpCommands
        -> SelectMany PrintRequest => #21
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=PrintNumber))
            -> IntProperty(Value=13)
            -> MulticastSubject PrintNumber => #3
            #0, #3 -> Zip
            -> MemberSelector(Selector=Item1)
            -> Take(Count=1)
            -> WorkflowOutput
        #0, #21 -> Delay(DueTime=PT0.1S)
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableMotorDriverPayload(EnableMotorDriver=Disabled))
        -> MulticastSubject RightPumpCommands
        #15 -> Condition
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=UsePumps)
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO2))
        -> MulticastSubject BehaviorCommands

    GroupWorkflow GetPenaltyTime
        SubscribeSubject Outcome => #0
        -> Bonsai.Scripting.Expressions.ExpressionCondition => #1
          Expression: it == 2
        DoubleProperty(Value=0) => #2
        #1, #2 -> WithLatestFrom => #3
        #0 -> Bonsai.Scripting.Expressions.ExpressionCondition => #4
          Expression: it == 1
        SubscribeSubject TrainingConfig
        -> MemberSelector(Selector=IncorrectPenalty) => #6
        #4, #6 -> WithLatestFrom => #7
        #0 -> Bonsai.Scripting.Expressions.ExpressionCondition => #8
          Expression: it == -2
        SubscribeSubject TrainingConfig
        -> MemberSelector(Selector=FixationAbortPenalty) => #10
        #8, #10 -> WithLatestFrom => #11
        #0 -> Bonsai.Scripting.Expressions.ExpressionCondition => #12
          Expression: it < 0 && it != -2
        SubscribeSubject TrainingConfig
        -> MemberSelector(Selector=AbortPenalty) => #14
        #12, #14 -> WithLatestFrom => #15
        #3, #7, #11, #15 -> Merge
        -> MemberSelector(Selector=Item2)
        -> MulticastSubject Penalty
        -> WorkflowOutput

    GroupWorkflow AutobiasCorrection
        BooleanProperty(Value=false)
        -> Take(Count=1)
        -> ToArray
        -> SelectMany "Remove First Element"
            WorkflowInput Source1
            -> Take(Count=1) => #1
            -> Concat => #2
            -> Condition "Not Last Element?" => #3
                WorkflowInput Source1
                -> ElementIndex
                -> MemberSelector(Selector=Index) => #2
                IntProperty(Value=0) => #3
                #2, #3 -> WithLatestFrom
                -> NotEqual
                -> WorkflowOutput
            #2 -> Last => #4
            #3, #4 -> TakeUntil
            -> ToArray => #6
            #1 -> Condition "Empty Array?" => #7
                WorkflowInput Source1
                -> MemberSelector(Selector=Length)
                -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            #6, #7 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> BehaviorSubject HitHistory

        BooleanProperty(Value=false)
        -> Take(Count=1)
        -> ToArray
        -> SelectMany "Remove First Element"
            WorkflowInput Source1
            -> Take(Count=1) => #1
            -> Concat => #2
            -> Condition "Not Last Element?" => #3
                WorkflowInput Source1
                -> ElementIndex
                -> MemberSelector(Selector=Index) => #2
                IntProperty(Value=0) => #3
                #2, #3 -> WithLatestFrom
                -> NotEqual
                -> WorkflowOutput
            #2 -> Last => #4
            #3, #4 -> TakeUntil
            -> ToArray => #6
            #1 -> Condition "Empty Array?" => #7
                WorkflowInput Source1
                -> MemberSelector(Selector=Length)
                -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            #6, #7 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> BehaviorSubject PreviousSides

        SubscribeSubject Outcome
        -> Bonsai.Scripting.Expressions.ExpressionCondition => #11
          Expression: it > 0
        SubscribeSubject LeftOrRight => #12
        #11, #12 -> WithLatestFrom
        -> Condition => #14
            SubscribeSubject AnimalConfig
            -> MemberSelector(Selector=AutobiasCorrection)
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it == 2
        -> SelectMany "Add Element" => #17
            SubscribeSubject HitHistory
            -> Take(Count=1)
            -> Concat => #2
            WorkflowInput Source1
            -> Take(Count=1) => #4
            #2, #4 -> Merge
            -> ToArray
            -> WorkflowOutput
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Length) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> GreaterThan(Operand=IntProperty(Value=25))
            -> WorkflowOutput
        -> SelectMany "Remove First Element" => #19
            SubscribeSubject HitHistory
            -> Take(Count=1) => #1
            -> Concat => #2
            -> Condition "Not Last Element?" => #3
                WorkflowInput Source1
                -> ElementIndex
                -> MemberSelector(Selector=Index) => #2
                SubscribeSubject HitHistory
                -> MemberSelector(Selector=Length)
                -> Subtract(Operand=IntProperty(Value=1))
                -> IntProperty(Value=0) => #6
                #2, #6 -> WithLatestFrom
                -> NotEqual
                -> WorkflowOutput
            #2 -> Last => #4
            #3, #4 -> TakeUntil
            -> ToArray => #6
            #1 -> Condition "Empty Array?" => #7
                WorkflowInput Source1
                -> MemberSelector(Selector=Length)
                -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            #6, #7 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        #17 -> Condition => #20
            WorkflowInput Source1
            -> MemberSelector(Selector=Length) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> LessThanOrEqual(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        #19, #20 -> Merge
        -> MulticastSubject HitHistory => #22
        #14 -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it == -1
        -> SelectMany "Add Element" => #25
            SubscribeSubject PreviousSides
            -> Take(Count=1)
            -> Concat => #2
            WorkflowInput Source1
            -> Take(Count=1) => #4
            #2, #4 -> Merge
            -> ToArray
            -> WorkflowOutput
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Length) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> GreaterThan(Operand=IntProperty(Value=25))
            -> WorkflowOutput
        -> SelectMany "Remove First Element" => #27
            SubscribeSubject PreviousSides
            -> Take(Count=1) => #1
            -> Concat => #2
            -> Condition "Not Last Element?" => #3
                WorkflowInput Source1
                -> ElementIndex
                -> MemberSelector(Selector=Index) => #2
                SubscribeSubject PreviousSides
                -> MemberSelector(Selector=Length)
                -> Subtract(Operand=IntProperty(Value=1))
                -> IntProperty(Value=0) => #6
                #2, #6 -> WithLatestFrom
                -> NotEqual
                -> WorkflowOutput
            #2 -> Last => #4
            #3, #4 -> TakeUntil
            -> ToArray => #6
            #1 -> Condition "Empty Array?" => #7
                WorkflowInput Source1
                -> MemberSelector(Selector=Length)
                -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            #6, #7 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        #25 -> Condition => #28
            WorkflowInput Source1
            -> MemberSelector(Selector=Length) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> LessThanOrEqual(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        #27, #28 -> Merge
        -> MulticastSubject PreviousSides => #30
        #22, #30 -> Zip
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> MemberSelector(Selector=Length)
            -> Equal(Operand=IntProperty(Value=25))
            -> WorkflowOutput
        -> Antibias(BiasThreshold=0.12) => #33
        -> MemberSelector(Selector=Item1)
        -> MulticastSubject LeftMultiplier
        #33 -> MemberSelector(Selector=Item2)
        -> MulticastSubject RightMultiplier

    Annotation "TODO: check if everything is updated before saving"(Text="")
    -> GroupWorkflow UpdateSubjects
        GroupWorkflow RepeatTrial
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == 2
            -> IntProperty(Value=0)
            -> MulticastSubject RepeatTrial

            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition => #5
              Expression: it == 1
            SubscribeSubject RepeatError => #6
            #5, #6 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Convert.ToInt32(it)
            -> MulticastSubject RepeatTrial

            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition => #12
              Expression: it < 0
            SubscribeSubject RepeatAbort => #13
            #12, #13 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Convert.ToInt32(it)
            -> MulticastSubject RepeatTrial

        GroupWorkflow TrialsAborted
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition => #1
              Expression: it < 0
            SubscribeSubject TrialsAborted => #2
            #1, #2 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Add(Operand=DoubleProperty(Value=1))
            -> MulticastSubject TrialsAborted
            -> WorkflowOutput

        GroupWorkflow RightAnswers
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition => #1
              Expression: it == 2
            SubscribeSubject RightAnswers => #2
            #1, #2 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Add(Operand=DoubleProperty(Value=1))
            -> MulticastSubject RightAnswers
            -> WorkflowOutput

        GroupWorkflow TrialsCompleted
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition => #1
              Expression: it > 0
            SubscribeSubject TrialsCompleted => #2
            #1, #2 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Add(Operand=IntProperty(Value=1))
            -> MulticastSubject TrialsCompleted
            -> WorkflowOutput

        GroupWorkflow BlockAbortRatio
            SubscribeSubject TrialsAborted => #0
            SubscribeSubject BlockTrial => #1
            #0, #1 -> CombineLatest
            -> Divide
            -> MulticastSubject BlockAbortRatio
            -> WorkflowOutput

        GroupWorkflow BlockPerformance
            SubscribeSubject RightAnswers => #0
            SubscribeSubject TrialsCompleted => #1
            #0, #1 -> CombineLatest
            -> Divide
            -> MulticastSubject BlockPerformance
            -> WorkflowOutput

        GroupWorkflow BaseFT
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition => #1
              Expression: it > 0
            SubscribeSubject BaseFT => #2
            SubscribeSubject FTDelta => #3
            #2, #3 -> CombineLatest => #4
            #1, #4 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Add => #7
            -> Condition "BaseFT <= FTTarget" => #8
                WorkflowInput Source1 => #0
                SubscribeSubject FTTarget => #1
                #0, #1 -> Zip
                -> LessThanOrEqual
                -> WorkflowOutput
            #7 -> Condition "BaseFT > FTTarget" => #9
                WorkflowInput Source1 => #0
                SubscribeSubject FTTarget => #1
                #0, #1 -> Zip
                -> GreaterThan
                -> WorkflowOutput
            SubscribeSubject FTTarget => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #8, #12 -> Merge
            -> MulticastSubject BaseFT
            -> WorkflowOutput

        GroupWorkflow BaseLEDOnset
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition => #1
              Expression: it > 0
            SubscribeSubject BaseLEDOnset => #2
            SubscribeSubject LEDOnsetDelta => #3
            #2, #3 -> CombineLatest => #4
            #1, #4 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Add => #7
            -> Condition "BaseFT <= FTTarget" => #8
                WorkflowInput Source1 => #0
                SubscribeSubject LEDOnsetTarget => #1
                #0, #1 -> Zip
                -> LessThanOrEqual
                -> WorkflowOutput
            #7 -> Condition "BaseFT > FTTarget" => #9
                WorkflowInput Source1 => #0
                SubscribeSubject LEDOnsetTarget => #1
                #0, #1 -> Zip
                -> GreaterThan
                -> WorkflowOutput
            SubscribeSubject LEDOnsetTarget => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #8, #12 -> Merge
            -> MulticastSubject BaseLEDOnset
            -> WorkflowOutput

        GroupWorkflow BaseRT
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition => #1
              Expression: it > 0
            SubscribeSubject BaseRT => #2
            SubscribeSubject RTDelta => #3
            #2, #3 -> CombineLatest => #4
            #1, #4 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Add => #7
            -> Condition "BaseRT <= RTTarget" => #8
                WorkflowInput Source1 => #0
                SubscribeSubject RTTarget => #1
                #0, #1 -> Zip
                -> LessThanOrEqual
                -> WorkflowOutput
            #7 -> Condition "BaseRT > RTTarget" => #9
                WorkflowInput Source1 => #0
                SubscribeSubject RTTarget => #1
                #0, #1 -> Zip
                -> GreaterThan
                -> WorkflowOutput
            SubscribeSubject RTTarget => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #8, #12 -> Merge
            -> MulticastSubject BaseRT
            -> WorkflowOutput

        GroupWorkflow IntendedLNP
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition => #1
              Expression: it > 0
            SubscribeSubject IntendedLNP => #2
            SubscribeSubject LNPDelta => #3
            #2, #3 -> CombineLatest => #4
            #1, #4 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Add => #7
            -> Condition "IntendedLNP <= LNPTarget" => #8
                WorkflowInput Source1 => #0
                SubscribeSubject LNPTarget => #1
                #0, #1 -> Zip
                -> LessThanOrEqual
                -> WorkflowOutput
            #7 -> Condition "IntendedLNP > LNPTarget" => #9
                WorkflowInput Source1 => #0
                SubscribeSubject LNPTarget => #1
                #0, #1 -> Zip
                -> GreaterThan
                -> WorkflowOutput
            SubscribeSubject LNPTarget => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #8, #12 -> Merge
            -> MulticastSubject IntendedLNP
            -> WorkflowOutput

        GroupWorkflow ResponsePoke
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it < 0
            -> IntProperty(Value=0)
            -> MulticastSubject ResponsePoke
            -> WorkflowOutput

        GroupWorkflow TimedLNP
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it < 0
            -> DoubleProperty(Value=0)
            -> MulticastSubject TimedLNP
            -> WorkflowOutput

        GroupWorkflow TimedMT
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -1 || it == -2 || it == -3 || it == -4
            -> DoubleProperty(Value=0)
            -> MulticastSubject TimedMT
            -> WorkflowOutput

        GroupWorkflow TimedRT
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -1 || it == -2 || it == -3
            -> DoubleProperty(Value=0)
            -> MulticastSubject TimedRT
            -> WorkflowOutput

        GroupWorkflow TimedFT
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -1 || it == -2
            -> DoubleProperty(Value=0)
            -> MulticastSubject TimedFT
            -> WorkflowOutput

        GroupWorkflow IntendedFT
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -1
            -> DoubleProperty(Value=0)
            -> MulticastSubject IntendedFT
            -> WorkflowOutput

        GroupWorkflow TimedLEDOnset
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -1 || it == -2
            -> DoubleProperty(Value=0)
            -> MulticastSubject TimedLEDOnset
            -> WorkflowOutput

        GroupWorkflow IntendedLEDOnset
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -1
            -> DoubleProperty(Value=0)
            -> MulticastSubject IntendedLEDOnset
            -> WorkflowOutput

        GroupWorkflow TimeToCNP
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -1
            -> DoubleProperty(Value=0)
            -> MulticastSubject TimeToCNP
            -> WorkflowOutput

        GroupWorkflow PrepareNewTrial
            SubscribeSubject Outcome
            -> BooleanProperty(Value=true)
            -> MulticastSubject PrepareNewTrial
            -> WorkflowOutput

GroupWorkflow Distributions
    GroupWorkflow InitializeSubjects
        Bonsai.Numerics.CreateRandom(Seed=nil)
        -> BehaviorSubject Random

    Disable SubscribeSubject Random => #1
    Disable SubscribeSubject ExpFTMean
    -> Disable Bonsai.Dsp.Pow(Power=-1)
    -> Disable PropertyMapping(Rate) => #4
    #1, #4 -> Disable Bonsai.Numerics.Distributions.CreateExponential(Rate=0.01)
    -> Disable BehaviorSubject FTDistribution

    Disable SubscribeSubject Random => #7
    Disable SubscribeSubject AnimalConfig
    -> Disable MemberSelector(Selector=ExpLEDOnset)
    -> Disable Bonsai.Dsp.Pow(Power=-1)
    -> Disable PropertyMapping(Rate) => #11
    #7, #11 -> Disable Bonsai.Numerics.Distributions.CreateExponential(Rate=0.01)
    -> Disable BehaviorSubject LEDOnsetDist

    SubscribeSubject Random
    -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1)
    -> BehaviorSubject SideDistribution

    SubscribeSubject Random => #17
    SubscribeSubject AnimalConfig
    -> MemberSelector(Selector=SoundIndexes)
    -> MemberSelector(Selector=Length)
    -> Subtract(Operand=IntProperty(Value=1))
    -> PropertyMapping(Upper) => #22
    #17, #22 -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=0)
    -> BehaviorSubject SoundChoiceDistribution

GroupWorkflow Hardware
    GroupWorkflow Behavior
        GroupWorkflow InitializeSubjects
            Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateDigitalInputStatePayload(DigitalInputState=None))
            -> IgnoreElements
            -> BehaviorSubject BehaviorCommands

            BooleanProperty(Value=false) => #3
            DoubleProperty(Value=0) => #4
            #3, #4 -> Zip
            -> Bonsai.Harp.CreateTimestamped
            -> BehaviorSubject LeftPoke
            -> BehaviorSubject CenterPoke
            -> BehaviorSubject RightPoke

        SubscribeSubject BehaviorCommands
        -> Harp.Behavior.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM3)
        -> BehaviorSubject BehaviorMessages

        SubscribeSubject BehaviorMessages => #4
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData)
        -> MemberSelector(Selector=Seconds)
        -> PublishSubject Timestamp
        #4 -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState) => #8
        -> GroupWorkflow FilterPokeEvents
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value) => #1
            ExternalizedMapping(Value(DisplayName=Port)) => #2
            #1, #2 -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort0)) => #3
            -> Condition
                SubscribeSubject LowToHighL
                -> WorkflowOutput
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
              Expression: Convert.ToBoolean(it)
            #3 -> Condition
                SubscribeSubject LowToHighL
                -> Equal(Operand=BooleanProperty(Value=false))
                -> WorkflowOutput
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
              Expression: !Convert.ToBoolean(it)
            #5, #7 -> Merge => #8
            #0 -> MemberSelector(Selector=Seconds) => #9
            #8, #9 -> WithLatestFrom
            -> DistinctUntilChangedBy(KeySelector=Item1)
            -> Bonsai.Harp.CreateTimestamped
            -> WorkflowOutput
        -> MulticastSubject LeftPoke
        #8 -> GroupWorkflow FilterPokeEvents
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value) => #1
            ExternalizedMapping(Value(DisplayName=Port)) => #2
            #1, #2 -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort1)) => #3
            -> Condition
                SubscribeSubject LowToHighL
                -> WorkflowOutput
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
              Expression: Convert.ToBoolean(it)
            #3 -> Condition
                SubscribeSubject LowToHighL
                -> Equal(Operand=BooleanProperty(Value=false))
                -> WorkflowOutput
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
              Expression: !Convert.ToBoolean(it)
            #5, #7 -> Merge => #8
            #0 -> MemberSelector(Selector=Seconds) => #9
            #8, #9 -> WithLatestFrom
            -> DistinctUntilChangedBy(KeySelector=Item1)
            -> Bonsai.Harp.CreateTimestamped
            -> WorkflowOutput
        -> MulticastSubject CenterPoke
        #8 -> GroupWorkflow FilterPokeEvents
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value) => #1
            ExternalizedMapping(Value(DisplayName=Port)) => #2
            #1, #2 -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort2)) => #3
            -> Condition
                SubscribeSubject LowToHighL
                -> WorkflowOutput
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
              Expression: Convert.ToBoolean(it)
            #3 -> Condition
                SubscribeSubject LowToHighL
                -> Equal(Operand=BooleanProperty(Value=false))
                -> WorkflowOutput
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
              Expression: !Convert.ToBoolean(it)
            #5, #7 -> Merge => #8
            #0 -> MemberSelector(Selector=Seconds) => #9
            #8, #9 -> WithLatestFrom
            -> DistinctUntilChangedBy(KeySelector=Item1)
            -> Bonsai.Harp.CreateTimestamped
            -> WorkflowOutput
        -> MulticastSubject RightPoke

        Annotation LeftRewardPulseConfig(Text="") => #15
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable=DO1))
        -> MulticastSubject BehaviorCommands
        #15 -> SubscribeSubject RewardOpenL
        -> PropertyMapping(PulseDO1)
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDO1Payload(PulseDO1=79))
        -> MulticastSubject BehaviorCommands

        Annotation RightRewardPulseConfig(Text="") => #22
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable=DO2))
        -> MulticastSubject BehaviorCommands
        #22 -> SubscribeSubject RewardOpenR
        -> PropertyMapping(PulseDO2)
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDO2Payload(PulseDO2=99))
        -> MulticastSubject BehaviorCommands

        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateLed0CurrentPayload(Led0Current=10))
        -> MulticastSubject BehaviorCommands

        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateLed1CurrentPayload(Led1Current=10))
        -> MulticastSubject BehaviorCommands

    GroupWorkflow SoundCard
        GroupWorkflow InitializeSubjects
            Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreatePlaySoundOrFrequencyPayload(PlaySoundOrFrequency=2))
            -> IgnoreElements
            -> BehaviorSubject SoundCardCommands

            IntProperty(Value=0)
            -> IgnoreElements
            -> BehaviorSubject PlaySound

            IntProperty(Value=2)
            -> BehaviorSubject SoundIndex

            IntProperty(Value=0)
            -> BehaviorSubject LeftIntensity

            IntProperty(Value=0)
            -> BehaviorSubject RightIntensity

        SubscribeSubject SoundCardCommands
        -> Harp.SoundCard.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM17)
        -> BehaviorSubject SoundCardMessages

        SubscribeSubject PlaySound => #4
        SubscribeSubject SoundIndex
        -> PropertyMapping(PlaySoundOrFrequency) => #6
        #4, #6 -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreatePlaySoundOrFrequencyPayload(PlaySoundOrFrequency=2))
        -> MulticastSubject SoundCardCommands

        SubscribeSubject LeftIntensity => #9
        SubscribeSubject LeftSlope => #10
        SubscribeSubject LeftIntercept => #11
        #10, #11 -> Zip => #12
        #9, #12 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: - 20 * (Item1 - Item2.Item2) / Item2.Item1
        -> MulticastSubject LeftAmp
        -> Multiply(Operand=DoubleProperty(Value=10))
        -> InputMapping(Selector=it, AttenuationLeft(Selector=it))
        -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreateAttenuationLeftPayload(AttenuationLeft=588))
        -> MulticastSubject SoundCardCommands

        SubscribeSubject RightIntensity => #20
        SubscribeSubject RightSlope => #21
        SubscribeSubject RightIntercept => #22
        #21, #22 -> Zip => #23
        #20, #23 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: - 20 * (Item1 - Item2.Item2) / Item2.Item1
        -> MulticastSubject RightAmp
        -> Multiply(Operand=DoubleProperty(Value=10))
        -> InputMapping(Selector=it, AttenuationRight(Selector=it))
        -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreateAttenuationRightPayload(AttenuationRight=75))
        -> MulticastSubject SoundCardCommands

    GroupWorkflow CurrentDriver
        GroupWorkflow "OptoProtocol (WIP)"
            IntProperty(Value=0)
            -> IgnoreElements
            -> BehaviorSubject StartOpto

            IntProperty(Value=0)
            -> IgnoreElements
            -> BehaviorSubject EndOpto

            Disable IntProperty(Value=0)
            -> Disable SelectMany RampIn
                WorkflowInput Source1
                -> WorkflowOutput

                ExternalizedMapping(Value(DisplayName=RampTimeInTicks))
                -> IntProperty(Value=0) => #3
                ExternalizedMapping(Value(DisplayName=Intensity)) => #4
                -> IntProperty(Value=0) => #5
                #3, #5 -> Zip
                -> Divide
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromTicks(it)
                -> PropertyMapping(Period)
                -> Timer(DueTime=PT0S, Period=PT0.001923S) => #10
                #4 -> IntProperty(Value=0)
                -> Add(Operand=IntProperty(Value=1))
                -> PropertyMapping(Count) => #13
                #10, #13 -> Take(Count=53)
                -> InputMapping(Selector=it, Dac0Voltage(Selector=it))
                -> Harp.CurrentDriver.CreateMessage(MessageType=Write, Payload=Harp.CurrentDriver.CreateDac0VoltagePayload(Dac0Voltage=1000))
                -> MulticastSubject CDCommands
            -> Disable Delay(DueTime=PT0S)
            -> Disable SelectMany RampOut
                WorkflowInput Source1
                -> WorkflowOutput

                IntProperty(Value=0) => #2
                ExternalizedMapping(Value(DisplayName=RampTimeInTicks))
                -> IntProperty(Value=0) => #4
                ExternalizedMapping(Value(DisplayName=Intensity)) => #5
                -> IntProperty(Value=0) => #6
                #4, #6 -> Zip
                -> Divide
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromTicks(it)
                -> PropertyMapping(Period)
                -> Timer(DueTime=PT0S, Period=PT0.001923S) => #11
                #5 -> IntProperty(Value=0)
                -> Add(Operand=IntProperty(Value=1))
                -> PropertyMapping(Count) => #14
                #11, #14 -> Take(Count=53) => #15
                #2, #15 -> CombineLatest
                -> Subtract
                -> InputMapping(Selector=it, Dac0Voltage(Selector=it))
                -> Harp.CurrentDriver.CreateMessage(MessageType=Write, Payload=Harp.CurrentDriver.CreateDac0VoltagePayload(Dac0Voltage=1000))
                -> MulticastSubject CDCommands

            SubscribeSubject StartOpto => #10
            -> Condition
                SubscribeSubject AnimalConfig
                -> MemberSelector(Selector=OptoContinuous)
                -> Equal(Operand=BooleanProperty(Value=false)) => #2
                SubscribeSubject LEDTrial
                -> NotEqual(Operand=DoubleProperty(Value=0)) => #4
                #2, #4 -> Zip
                -> LogicalAnd
                -> WorkflowOutput
            -> SelectMany Pulses
                SubscribeSubject AnimalConfig
                -> MemberSelector(Selector=OptoTime)
                -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime)
                -> Timer(DueTime=PT4S, Period=PT0S) => #4
                DoubleProperty(Value=1) => #5
                SubscribeSubject AnimalConfig => #6
                -> MemberSelector(Selector=OptoFrequency) => #7
                #5, #7 -> CombineLatest
                -> Divide
                -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(Period)
                -> Timer(DueTime=PT0S, Period=PT0.05S)
                -> Harp.CurrentDriver.CreateMessage(MessageType=Write, Payload=Harp.CurrentDriver.CreateDac0VoltagePayload(Dac0Voltage=1500))
                -> MulticastSubject CDCommands => #14
                #6 -> MemberSelector(Selector=OptoPulseDuration)
                -> Bonsai.Scripting.Expressions.ExpressionTransform FromMillisecondsToTimeSpan
                  Expression: TimeSpan.FromMilliseconds(it)
                -> PropertyMapping(DueTime) => #17
                #14, #17 -> Delay(DueTime=PT0.02S)
                -> Harp.CurrentDriver.CreateMessage(MessageType=Write, Payload=Harp.CurrentDriver.CreateDac0VoltagePayload(Dac0Voltage=0))
                -> MulticastSubject CDCommands => #20
                #4, #20 -> WithLatestFrom
                -> Take(Count=1)
                -> Harp.CurrentDriver.CreateMessage(MessageType=Write, Payload=Harp.CurrentDriver.CreateDac0VoltagePayload(Dac0Voltage=0))
                -> MulticastSubject CDCommands
                -> Take(Count=1)
                -> WorkflowOutput
            #10 -> Condition
                SubscribeSubject AnimalConfig
                -> MemberSelector(Selector=OptoContinuous) => #1
                SubscribeSubject LEDTrial
                -> NotEqual(Operand=DoubleProperty(Value=0)) => #3
                #1, #3 -> Zip
                -> LogicalAnd
                -> WorkflowOutput
            -> GroupWorkflow Continuous
                WorkflowInput Source1 => #0
                ExternalizedMapping(Dac0Voltage) => #1
                #0, #1 -> Harp.CurrentDriver.CreateMessage(MessageType=Write, Payload=Harp.CurrentDriver.CreateDac0VoltagePayload(Dac0Voltage=1500))
                -> BehaviorSubject CDCommands => #3
                SubscribeSubject AnimalConfig
                -> MemberSelector(Selector=OptoTime)
                -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime) => #7
                #3, #7 -> Delay(DueTime=PT1S)
                -> IntProperty(Value=0)
                -> Harp.CurrentDriver.CreateMessage(MessageType=Write, Payload=Harp.CurrentDriver.CreateDac0VoltagePayload(Dac0Voltage=0))
                -> MulticastSubject CDCommands
                -> WorkflowOutput

            SubscribeSubject EndOpto
            -> Harp.CurrentDriver.CreateMessage(MessageType=Write, Payload=Harp.CurrentDriver.CreateDac0VoltagePayload(Dac0Voltage=0))
            -> MulticastSubject CDCommands

        SubscribeSubject CDCommands
        -> Harp.CurrentDriver.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COMx) => #2
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=OptoSession)
        -> Bonsai.Scripting.Expressions.ExpressionCondition => #5
          Expression: it
        #2, #5 -> SubscribeWhen
        -> BehaviorSubject CDMessages

    GroupWorkflow LeftSyringePump
        DoubleProperty(Value=1)
        -> BehaviorSubject LeftMultiplier

        SubscribeSubject LeftPumpCommands
        -> Harp.SyringePump.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COMx) => #3
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=UsePumps)
        -> Bonsai.Scripting.Expressions.ExpressionCondition => #6
          Expression: it
        #3, #6 -> SubscribeWhen
        -> BehaviorSubject LeftPumpMessages

        Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolDirectionPayload(ProtocolDirection=Forward)) => #9
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=BaseReward) => #11
        SubscribeSubject LeftMultiplier => #12
        #11, #12 -> CombineLatest
        -> Multiply => #14
        SubscribeSubject SetupConfig => #15
        -> MemberSelector(Selector=LeftPumpSlope) => #16
        #15 -> MemberSelector(Selector=LeftPumpIntercept) => #17
        #14, #16, #17 -> CombineLatest
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Convert.ToInt32((Item1 - Item3) / Item2)
        -> InputMapping(Selector=it, ProtocolStepCount(Selector=it))
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolStepCountPayload(ProtocolStepCount=75)) => #21
        Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolPeriodPayload(ProtocolPeriod=10)) => #22
        Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateStepModePayload(StepMode=Half)) => #23
        #9, #21, #22, #23 -> Merge
        -> BehaviorSubject LeftPumpCommands

    GroupWorkflow RightSyringePump
        DoubleProperty(Value=1)
        -> BehaviorSubject RightMultiplier

        SubscribeSubject RightPumpCommands
        -> Harp.SyringePump.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COMx) => #3
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=UsePumps)
        -> Bonsai.Scripting.Expressions.ExpressionCondition => #6
          Expression: it
        #3, #6 -> SubscribeWhen
        -> BehaviorSubject RightPumpMessages

        Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolDirectionPayload(ProtocolDirection=Forward)) => #9
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=BaseReward) => #11
        SubscribeSubject RightMultiplier => #12
        #11, #12 -> CombineLatest
        -> Multiply => #14
        SubscribeSubject SetupConfig => #15
        -> MemberSelector(Selector=RightPumpSlope) => #16
        #15 -> MemberSelector(Selector=RightPumpIntercept) => #17
        #14, #16, #17 -> CombineLatest
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Convert.ToInt32((Item1 - Item3) / Item2)
        -> InputMapping(Selector=it, ProtocolStepCount(Selector=it))
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolStepCountPayload(ProtocolStepCount=75)) => #21
        Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolPeriodPayload(ProtocolPeriod=10)) => #22
        Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateStepModePayload(StepMode=Half)) => #23
        #9, #21, #22, #23 -> Merge
        -> BehaviorSubject RightPumpCommands

    Disable GroupWorkflow Camera
        Bonsai.PointGrey.FlyCapture(Index=0, ColorProcessing=Default) => #0
        -> MemberSelector(Selector=Image) => #1
        SubscribeSubject OutputFolderPath => #2
        StringProperty(Value=video_.avi) => #3
        #2, #3 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item1 + "/" + Item2
        -> PropertyMapping(FileName) => #6
        #1, #6 -> Bonsai.Vision.VideoWriter => #7
          FileName="D:\Bonsai Videos\video_.avi"
          Suffix=Timestamp
          Buffered=true
          Overwrite=false
          FourCC=FMP4
          FrameRate=100
          FrameSize(Width=0, Height=0)
          ResizeInterpolation=NearestNeighbor
        SubscribeSubject OutputFilePath => #8
        #7, #8 -> SubscribeWhen
        #0 -> MemberSelector(Selector="Metadata.embeddedGPIOPinState,Metadata.embeddedFrameCounter,Metadata.embeddedTimeStamp,Metadata.embeddedShutter") => #10
        SubscribeSubject OutputFolderPath => #11
        StringProperty(Value=cam_metadata_.csv) => #12
        #11, #12 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item1 + "/" + Item2
        -> PropertyMapping(FileName) => #15
        #10, #15 -> Bonsai.IO.CsvWriter(FileName="D:\Bonsai Videos\cam_metadata_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false) => #16
        SubscribeSubject OutputFilePath => #17
        #16, #17 -> SubscribeWhen

    GroupWorkflow Logging
        SubscribeSubject BehaviorMessages => #0
        SubscribeSubject SoundCardMessages => #1
        SubscribeSubject LeftPumpMessages => #2
        SubscribeSubject RightPumpMessages => #3
        SubscribeSubject CDMessages => #4
        #0, #1, #2, #3, #4 -> Merge => #5
        SubscribeSubject OutputFolderPath => #6
        StringProperty(Value=events.bin) => #7
        #6, #7 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item1 + "/" + Item2
        -> PropertyMapping(FileName) => #10
        #5, #10 -> Bonsai.Harp.MessageWriter(FileName=./output/Rat000/241209/events.bin, Suffix=FileCount, Buffered=true, Overwrite=false, FilterType=Include, MessageType=nil) => #11
        SubscribeSubject OutputFilePath => #12
        #11, #12 -> SubscribeWhen

GroupWorkflow InputParameters
    GroupWorkflow Auxiliary
        DoubleProperty(Value=0)
        -> BehaviorSubject ILDIndex

        DoubleProperty(Value=0)
        -> BehaviorSubject ITIStart

        DoubleProperty(Value=0)
        -> BehaviorSubject ITIEnd

        DoubleProperty(Value=0)
        -> BehaviorSubject TrialsCompleted

        DoubleProperty(Value=0)
        -> BehaviorSubject TrialsAborted

        DoubleProperty(Value=0)
        -> BehaviorSubject RightAnswers

        IntProperty(Value=0)
        -> BehaviorSubject BlockTrial

        DoubleProperty(Value=0)
        -> IgnoreElements
        -> BehaviorSubject LNPStart

        DoubleProperty(Value=0)
        -> ToArray
        -> IgnoreElements
        -> BehaviorSubject ShuffledILDs

        IntProperty(Value=0)
        -> IgnoreElements
        -> BehaviorSubject LeftOrRight

        DoubleProperty(Value=0)
        -> BehaviorSubject Penalty

        DoubleProperty(Value=0)
        -> BehaviorSubject LEDStart

        DoubleProperty(Value=0)
        -> ToArray
        -> IgnoreElements
        -> BehaviorSubject ILDs

        DoubleProperty(Value=0)
        -> IgnoreElements
        -> BehaviorSubject NewILDShuffle

    Extensions.ReadStartupFile(FilePath=config\startup.json) => #1
    -> MemberSelector(Selector=AnimalFile)
    -> GroupWorkflow Animal
        WorkflowInput Source1
        -> InputMapping(Selector=it, FilePath(Selector=it))
        -> SelectMany ReadAnimalJSON
            WorkflowInput Source1 => #0
            ExternalizedMapping(FilePath) => #1
            #0, #1 -> Extensions.ReadAnimalJSON(FilePath=./config/animal.json)
            -> Take(Count=1)
            -> WorkflowOutput
        -> BehaviorSubject AnimalConfig

        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=Animal)
        -> BehaviorSubject Animal

        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=Box)
        -> BehaviorSubject Box

        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=Session)
        -> BehaviorSubject Session

        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=SessionType)
        -> BehaviorSubject SessionType

        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=SessionDuration)
        -> BehaviorSubject SessionDuration

        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=StartingTrialNumber)
        -> Subtract(Operand=IntProperty(Value=1))
        -> BehaviorSubject Trial

        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=StartingBlockNumber)
        -> BehaviorSubject Block

        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=ABLList)
        -> BehaviorSubject ABLList

        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=CycleILD)
        -> BehaviorSubject CycleILD

        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=Bias)
        -> BehaviorSubject Bias

        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=MinLEDOnset)
        -> BehaviorSubject BaseLEDOnset

        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=LEDOnsetDelta)
        -> BehaviorSubject LEDOnsetDelta

        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=LEDOnsetTarget)
        -> BehaviorSubject LEDOnsetTarget

        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=MinFT)
        -> BehaviorSubject BaseFT

        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=FTDelta)
        -> BehaviorSubject FTDelta

        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=FTTarget)
        -> BehaviorSubject FTTarget

        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=ExpFTMean)
        -> BehaviorSubject ExpFTMean

        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=MinRT)
        -> BehaviorSubject BaseRT

        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=RTDelta)
        -> BehaviorSubject RTDelta

        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=RTTarget)
        -> BehaviorSubject RTTarget

        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=MaxRT)
        -> BehaviorSubject MaxRT

        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=MinMT)
        -> BehaviorSubject MinMT

        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=MinLNP)
        -> BehaviorSubject IntendedLNP

        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=LNPDelta)
        -> BehaviorSubject LNPDelta

        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=LNPTarget)
        -> BehaviorSubject LNPTarget
    #1 -> MemberSelector(Selector=TrainingFile)
    -> GroupWorkflow Training
        WorkflowInput Source1 => #0
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=StartingTrainingLevel) => #2
        #0, #2 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> BehaviorSubject TrainingLevel
        SubscribeSubject TrainingLevel => #6
        #0 -> PropertyMapping(FilePath) => #7
        #6 -> Subtract(Operand=DoubleProperty(Value=1))
        -> PropertyMapping(RowNumber) => #9
        #6, #7, #9 -> SelectMany ReadTrainingCSV => #10
            WorkflowInput Source1 => #0
            ExternalizedMapping(FilePath, RowNumber) => #1
            #0, #1 -> Extensions.ReadTrainingCSV(FilePath=./config/training.csv, RowNumber=0)
            -> Take(Count=1)
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1)
        -> BehaviorSubject TrainingConfig
        #10 -> MemberSelector(Selector=Item2)
        -> BehaviorSubject NumLevels

        SubscribeSubject TrainingConfig
        -> MemberSelector(Selector=TrialsPerBlock)
        -> BehaviorSubject TrialsPerBlock

        SubscribeSubject TrainingConfig
        -> MemberSelector(Selector=Level0)
        -> BehaviorSubject Level0

        SubscribeSubject TrainingConfig
        -> MemberSelector(Selector=ABLBlock)
        -> BehaviorSubject ABLBlock

        SubscribeSubject TrainingConfig
        -> MemberSelector(Selector=ILDStepSize)
        -> BehaviorSubject ILDStepSize

        SubscribeSubject TrainingConfig
        -> MemberSelector(Selector=ILDSteps)
        -> BehaviorSubject ILDSteps

        SubscribeSubject TrainingConfig
        -> MemberSelector(Selector=UseLog)
        -> BehaviorSubject UseLog

        SubscribeSubject TrainingConfig
        -> MemberSelector(Selector=LogBase)
        -> BehaviorSubject LogBase

        SubscribeSubject TrainingConfig
        -> MemberSelector(Selector=IntendedITI)
        -> BehaviorSubject IntendedITI

        SubscribeSubject TrainingConfig
        -> MemberSelector(Selector=ITIReset)
        -> BehaviorSubject ITIReset

        SubscribeSubject TrainingConfig
        -> MemberSelector(Selector=MaxWait)
        -> BehaviorSubject MaxWait

        SubscribeSubject TrainingConfig
        -> MemberSelector(Selector=RandomizeFT)
        -> BehaviorSubject RandomizeFT

        SubscribeSubject TrainingConfig
        -> MemberSelector(Selector=UseRT)
        -> BehaviorSubject UseRT

        SubscribeSubject TrainingConfig
        -> MemberSelector(Selector=UseMaxRT)
        -> BehaviorSubject UseMaxRT

        SubscribeSubject TrainingConfig
        -> MemberSelector(Selector=MaxMT)
        -> BehaviorSubject MaxMT

        SubscribeSubject TrainingConfig
        -> MemberSelector(Selector=UsePerformance)
        -> BehaviorSubject UsePerformance

        SubscribeSubject TrainingConfig
        -> MemberSelector(Selector=CriticalPerformance)
        -> BehaviorSubject CriticalPerformance

        SubscribeSubject TrainingConfig
        -> MemberSelector(Selector=RepeatError)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Convert.ToBoolean(it)
        -> BehaviorSubject RepeatError

        SubscribeSubject TrainingConfig
        -> MemberSelector(Selector=RepeatAbort)
        -> BehaviorSubject RepeatAbort

        SubscribeSubject TrainingConfig
        -> MemberSelector(Selector=Speakers)
        -> BehaviorSubject Speakers

        SubscribeSubject TrainingConfig
        -> MemberSelector(Selector=AbortLight)
        -> BehaviorSubject AbortLight

        SubscribeSubject TrainingConfig
        -> MemberSelector(Selector=ITILight)
        -> BehaviorSubject ITILight

        SubscribeSubject TrainingConfig
        -> MemberSelector(Selector=PokeLight)
        -> BehaviorSubject PokeLight

        SubscribeSubject TrainingConfig
        -> MemberSelector(Selector=FixLight)
        -> BehaviorSubject FixLight
    #1 -> MemberSelector(Selector=SetupFile)
    -> GroupWorkflow Setup
        WorkflowInput Source1
        -> InputMapping(Selector=it, FilePath(Selector=it)) => #1
        SubscribeSubject Box
        -> PropertyMapping(RowNumber) => #3
        #1, #3 -> SelectMany ReadSetupCSV
            WorkflowInput Source1 => #0
            ExternalizedMapping(FilePath, RowNumber) => #1
            #0, #1 -> Extensions.ReadSetupCSV(FilePath=./config/setup.csv, RowNumber=0)
            -> Take(Count=1)
            -> WorkflowOutput
        -> BehaviorSubject SetupConfig

        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=LowToHighL)
        -> BehaviorSubject LowToHighL

        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=LowToHighCNP)
        -> BehaviorSubject LowToHighCNP

        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=LowToHighR)
        -> BehaviorSubject LowToHighR

        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=RewardOpenL)
        -> BehaviorSubject RewardOpenL

        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=RewardOpenR)
        -> BehaviorSubject RewardOpenR

        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=RightSlope)
        -> BehaviorSubject RightSlope

        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=RightIntercept)
        -> BehaviorSubject RightIntercept

        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=LeftSlope)
        -> BehaviorSubject LeftSlope

        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=LeftIntercept)
        -> BehaviorSubject LeftIntercept

        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=BoxLEDPeriod)
        -> BehaviorSubject BoxLEDPeriod

        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=BoxLEDDutyCycle)
        -> BehaviorSubject BoxLEDDutyCycle

        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=PokeLEDPeriod)
        -> BehaviorSubject PokeLEDPeriod

        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=PokeLEDDutyCycle)
        -> BehaviorSubject PokeLEDDutyCycle
    #1 -> MemberSelector(Selector=OutputDir)
    -> GroupWorkflow Output
        WorkflowInput Source1 => #0
        StringProperty(Value=Rat) => #1
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=Animal)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
          Expression: it.ToString("D3")
        #0, #1, #4 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item1 + "/" + Item2 + Item3
        -> BehaviorSubject RatDirectoryPath
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it + "/" + DateTime.Now.ToString("yyMMdd")
        -> BehaviorSubject OutputFolderPath => #9
        Annotation Filename(Text="")
        -> StringProperty(Value=out.csv) => #11
        #9, #11 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item1 + "/" + Item2
        -> BehaviorSubject OutputFilePath

        DoubleProperty(Value=0)
        -> Take(Count=1)
        -> ToArray
        -> IgnoreElements
        -> BehaviorSubject CSV

        SubscribeSubject CSV
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #21
          Expression:
            new(
                it[0] as Animal,
                it[1] as Session,
                it[2] as SessionType,
                it[3] as Trial,
                it[4] as Block,
                it[5] as TrialsPerBlock,
                it[6] as TrainingLevel,
                it[7] as ABL,
                it[8] as ILD,
                it[9] as Bias,
                it[10] as LeftAmp,
                it[11] as RightAmp,
                it[12] as WaveformL,
                it[13] as WaveformR,
                it[14] as TrialStart,
                it[15] as TrialEnd,
                it[16] as TrialDuration,
                it[17] as IntendedITI,
                it[18] as ITIStart,
                it[19] as ITIEnd,
                it[20] as TimedITI,
                it[21] as MaxWait,
                it[22] as TimeToCNP,
                it[23] as BaseFix,
                it[24] as ExpFixMean,
                it[25] as IntendedFix,
                it[26] as TimedFix,
                it[27] as BaseRT,
                it[28] as MaxRT,
                it[29] as TimedRT,
                it[30] as MaxMT,
                it[31] as TimedMT,
                it[32] as IntendedLNP,
                it[33] as TimedLNP,
                it[34] as ResponsePoke,
                it[35] as Outcome,
                it[36] as RepeatTrial,
                it[37] as BlockPerformance,
                it[38] as BlockAbortRatio,
                it[39] as LEDTrial,
                it[40] as TimedLED,
                it[41] as LEDPowerL,
                it[42] as LEDPowerR,
                it[43] as Box
            )
        SubscribeSubject OutputFilePath
        -> PropertyMapping(FileName) => #23
        #21, #23 -> Bonsai.IO.CsvWriter(FileName=./output/Rat000/241209/out.csv, Append=true, Overwrite=false, Suffix=None, IncludeHeader=false) => #24
        SubscribeSubject OutputFilePath => #25
        #24, #25 -> SubscribeWhen

        DoubleProperty(Value=0)
        -> BehaviorSubject ABL

        DoubleProperty(Value=0)
        -> BehaviorSubject ILD

        DoubleProperty(Value=17)
        -> BehaviorSubject LeftAmp

        DoubleProperty(Value=18)
        -> BehaviorSubject RightAmp

        IntProperty(Value=0)
        -> BehaviorSubject WaveformL

        IntProperty(Value=0)
        -> BehaviorSubject WaveformR

        DoubleProperty(Value=0)
        -> IgnoreElements
        -> BehaviorSubject TrialStart

        DoubleProperty(Value=0)
        -> IgnoreElements
        -> BehaviorSubject TrialEnd

        DoubleProperty(Value=0)
        -> BehaviorSubject TimeToCNP

        DoubleProperty(Value=0)
        -> BehaviorSubject IntendedFT

        DoubleProperty(Value=0)
        -> BehaviorSubject TimedFT

        DoubleProperty(Value=0)
        -> BehaviorSubject IntendedLEDOnset

        DoubleProperty(Value=0)
        -> BehaviorSubject TimedLEDOnset

        DoubleProperty(Value=0)
        -> BehaviorSubject TimedRT

        DoubleProperty(Value=0)
        -> BehaviorSubject TimedMT

        DoubleProperty(Value=0)
        -> BehaviorSubject TimedLNP

        IntProperty(Value=0)
        -> BehaviorSubject ResponsePoke

        IntProperty(Value=0)
        -> IgnoreElements
        -> BehaviorSubject Outcome

        IntProperty(Value=0)
        -> BehaviorSubject RepeatTrial

        DoubleProperty(Value=0)
        -> BehaviorSubject BlockPerformance

        DoubleProperty(Value=0)
        -> BehaviorSubject BlockAbortRatio

        DoubleProperty(Value=13)
        -> BehaviorSubject LEDTrial

        DoubleProperty(Value=14)
        -> BehaviorSubject TimedLED

        DoubleProperty(Value=15)
        -> BehaviorSubject LEDPowerL

        DoubleProperty(Value=16)
        -> BehaviorSubject LEDPowerR

GroupWorkflow PythonCommunication
    GroupWorkflow MessagesSent
        GroupWorkflow InitializeSubjects
            IntProperty(Value=0)
            -> IgnoreElements
            -> BehaviorSubject BeginningMessage

            BooleanProperty(Value=false)
            -> IgnoreElements
            -> BehaviorSubject PlotsMessage

            IntProperty(Value=0)
            -> BehaviorSubject BlockMessage

        Bonsai.Osc.CreateUdpClient(Name=UdpClient, Port=0, RemoteHostName=localhost, RemotePort=2)

        GroupWorkflow PlotMessage
            SubscribeSubject PlotsMessage => #0
            SubscribeSubject Outcome => #1
            SubscribeSubject TimeToCNP => #2
            SubscribeSubject TimedRT => #3
            SubscribeSubject TimedMT => #4
            SubscribeSubject BlockPerformance => #5
            SubscribeSubject BlockAbortRatio => #6
            SubscribeSubject TrialsCompleted => #7
            #1, #2, #3, #4, #5, #6, #7 -> CombineLatest => #8
            #0, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Osc.SendMessage(Connection=UdpClient, Address=/plots)
            -> WorkflowOutput

        GroupWorkflow NewTrialMessage
            SubscribeSubject BeginningMessage => #0
            SubscribeSubject BlockTrial => #1
            SubscribeSubject ILD => #2
            SubscribeSubject ABL => #3
            SubscribeSubject IntendedFT => #4
            SubscribeSubject IntendedITI => #5
            #1, #2, #3, #4, #5 -> CombineLatest => #6
            #0, #6 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Bonsai.Osc.SendMessage(Connection=UdpClient, Address=/beginning)
            -> WorkflowOutput

        GroupWorkflow BlockMessage
            SubscribeSubject BlockMessage => #0
            SubscribeSubject ILDs => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            -> MemberSelector(Selector=Length)
            -> Add(Operand=IntProperty(Value=1))
            -> PropertyMapping(Count) => #6
            #3, #6 -> SelectMany
                Timer(DueTime=PT0S, Period=PT0.001S)
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #1
                  Expression: Convert.ToInt32(it)
                WorkflowInput Source1
                -> SelectMany => #3
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Length)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                      Expression: Convert.ToDouble(it)
                    #0 -> Concat => #3
                    #2, #3 -> Merge
                    -> WorkflowOutput
                #1, #3 -> Zip => #4
                ExternalizedMapping(Count) => #5
                #4, #5 -> Take(Count=3) => #6
                -> Bonsai.Scripting.Expressions.ExpressionCondition
                  Expression: Item1 != 0
                -> Delay(DueTime=PT1S) => #8
                #6 -> Bonsai.Scripting.Expressions.ExpressionCondition => #9
                  Expression: Item1 == 0
                #8, #9 -> Merge
                -> WorkflowOutput
            -> Bonsai.Osc.SendMessage(Connection=UdpClient, Address=/block)
            -> WorkflowOutput

        SubscribeSubject RepeatError
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Convert.ToInt32(it)
        -> Bonsai.Osc.SendMessage(Connection=UdpClient, Address=/repeaterrors)

    GroupWorkflow MessagesReceived
        Bonsai.Osc.CreateUdpClient(Name=UdpServer, Port=1, RemoteHostName=localhost, RemotePort=0)

        Bonsai.Osc.ReceiveMessage(Address=/stop, TypeTag=i, Connection=UdpServer)
        -> BehaviorSubject EndSession

        Bonsai.Osc.ReceiveMessage(Address=/reward, TypeTag=i, Connection=UdpServer)
        -> BehaviorSubject WaterDelivery

        Bonsai.Osc.ReceiveMessage(Address=/repeat, TypeTag=i, Connection=UdpServer) => #5
        SubscribeSubject RepeatError => #6
        #5, #6 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: !it
        -> MulticastSubject RepeatError

BooleanProperty(Value=true)
-> SelectMany Inter-TrialInterval => #7
    GroupWorkflow BoxLEDOn
        SubscribeSubject ITILight => #0
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=Led0))
        -> MulticastSubject BehaviorCommands => #3
        #0 -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: !it
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=Led0))
        -> MulticastSubject BehaviorCommands => #6
        #3, #6 -> Merge
        -> WorkflowOutput

    WorkflowInput Source1
    -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=0, PrintSubjectName=PrintNumber) => #2
    -> GroupWorkflow ITI
        WorkflowInput Source1
        -> IncludeWorkflow(Path=Extensions\TimestampEvent.bonsai, TimestampSubject=Timestamp)
        -> MemberSelector(Selector=Seconds)
        -> MulticastSubject ITIStart => #3
        SubscribeSubject IntendedITI
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #6
        #3, #6 -> Delay(DueTime=PT1S)
        -> IncludeWorkflow(Path=Extensions\TimestampEvent.bonsai, TimestampSubject=Timestamp)
        -> MemberSelector(Selector=Seconds)
        -> MulticastSubject ITIEnd
        -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=1, PrintSubjectName=PrintNumber)
        -> WorkflowOutput
    -> IntProperty(Value=0)
    -> MulticastSubject BeginningMessage => #5
    GroupWorkflow ITIReset
        SubscribeSubject CenterPoke
        -> Condition IsPokingCNP(Description="Triggers if the animal is poking the central nose poke and if  ITIReset setting is equal to 1 (not equal to 0)")
            WorkflowInput Source1
            -> MemberSelector(Selector=Value) => #1
            SubscribeSubject ITIReset => #2
            #1, #2 -> CombineLatest
            -> LogicalAnd
            -> WorkflowOutput
        -> WorkflowOutput
    -> IntProperty(Value=1) => #7
    #5, #7 -> Merge => #8
    #2 -> GroupWorkflow NewTrialPreparations => #9
        WorkflowInput Source1 => #0
        -> Condition
            SubscribeSubject PrepareNewTrial
            -> WorkflowOutput
        -> MulticastSubject RequestNewTrial
        -> BooleanProperty(Value=false)
        -> MulticastSubject PrepareNewTrial => #4
        #0 -> Condition => #5
            SubscribeSubject PrepareNewTrial
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        #4, #5 -> Merge
        -> WorkflowOutput
    #8, #9 -> Zip
    -> MemberSelector(Selector=Item1) => #11
    Source2=#11 -> Take(Count=1)
    -> WorkflowOutput
-> Bonsai.Scripting.Expressions.ExpressionCondition IsTrue
  Expression: it == 0
-> SelectMany StartTrial => #9
    GroupWorkflow LEDs
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=Led0))
        -> MulticastSubject BehaviorCommands

        SubscribeSubject PokeLight
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=Led1))
        -> MulticastSubject BehaviorCommands

    IntProperty(Value=0) => #1
    WorkflowInput Source1
    -> SelectMany PrintRequest
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value(DisplayName=PrintNumber))
        -> IntProperty(Value=5)
        -> MulticastSubject PrintNumber => #3
        #0, #3 -> Zip
        -> MemberSelector(Selector=Item1)
        -> Take(Count=1)
        -> WorkflowOutput
    -> GroupWorkflow PokeDetection => #4
        SubscribeSubject CenterPoke
        -> Bonsai.Scripting.Expressions.ExpressionCondition IsPokingCNP
          Expression: Value
        -> MemberSelector(Selector=Seconds) => #2
        -> WorkflowOutput
        WorkflowInput Source1
        -> IncludeWorkflow(Path=Extensions\TimestampEvent.bonsai, TimestampSubject=Timestamp)
        -> MemberSelector(Selector=Seconds)
        -> MulticastSubject TrialStart => #7
        #2, #7 -> Zip
        -> Subtract
        -> MulticastSubject TimeToCNP
    #1, #4 -> Zip
    -> MemberSelector(Selector=Item1) => #6
    GroupWorkflow MaxWait
        SubscribeSubject MaxWait
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan
          Expression: TimeSpan.FromSeconds(it)
        -> WorkflowOutput
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT3M, Period=PT0S)
    -> IntProperty(Value=-1) => #10
    #6, #10 -> Merge
    -> Take(Count=1)
    -> WorkflowOutput
-> Bonsai.Scripting.Expressions.ExpressionCondition IsTrue
  Expression: it == 0
-> SelectMany FixationTime => #11
    GroupWorkflow PokeLEDBlink
        SubscribeSubject PokeLEDPeriod
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromMillisecondsToTimeSpan
          Expression: TimeSpan.FromMilliseconds(it)
        -> PropertyMapping(Period)
        -> Timer(DueTime=PT0S, Period=PT1S)
        -> Condition
            SubscribeSubject FixLight
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=Led1))
        -> MulticastSubject BehaviorCommands => #6
        SubscribeSubject PokeLEDPeriod => #7
        SubscribeSubject PokeLEDDutyCycle => #8
        #7, #8 -> Zip
        -> Multiply
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromMillisecondsToTimeSpan
          Expression: TimeSpan.FromMilliseconds(it)
        -> PropertyMapping(DueTime) => #12
        #6, #12 -> Delay(DueTime=PT0.5S)
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=Led1))
        -> MulticastSubject BehaviorCommands
        -> WorkflowOutput

    WorkflowInput Source1
    -> SelectMany PrintRequest
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value(DisplayName=PrintNumber))
        -> IntProperty(Value=6)
        -> MulticastSubject PrintNumber => #3
        #0, #3 -> Zip
        -> MemberSelector(Selector=Item1)
        -> Take(Count=1)
        -> WorkflowOutput

    GroupWorkflow OptoOnsetTime
        SubscribeSubject IntendedLEDOnset
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromMillisecondsToTimeSpan
          Expression: TimeSpan.FromMilliseconds(it)
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT0.005S, Period=PT0S)
        -> IncludeWorkflow(Path=Extensions\TimestampEvent.bonsai, TimestampSubject=Timestamp)
        -> MemberSelector(Selector=Seconds)
        -> MulticastSubject LEDStart => #6
        SubscribeSubject CenterPoke
        -> Bonsai.Scripting.Expressions.ExpressionCondition IsPokingCNP
          Expression: Value
        -> MemberSelector(Selector=Seconds) => #9
        #6, #9 -> Zip
        -> Subtract
        -> MulticastSubject TimedLEDOnset
        -> MulticastSubject StartOpto
        -> WorkflowOutput
    -> GroupWorkflow SoundOnsetTime => #4
        WorkflowInput Source1 => #0
        SubscribeSubject IntendedFT
        -> SelectMany PrintRequest
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=PrintNumber))
            -> IntProperty(Value=14)
            -> MulticastSubject PrintNumber => #3
            #0, #3 -> Zip
            -> MemberSelector(Selector=Item1)
            -> Take(Count=1)
            -> WorkflowOutput
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromMillisecondsToTimeSpan
          Expression: TimeSpan.FromMilliseconds(it)
        -> PropertyMapping(DueTime) => #4
        #0, #4 -> Delay(DueTime=PT0.005S)
        -> IncludeWorkflow(Path=Extensions\TimestampEvent.bonsai, TimestampSubject=Timestamp)
        -> MemberSelector(Selector=Seconds) => #7
        SubscribeSubject LEDStart => #8
        #7, #8 -> WithLatestFrom
        -> Subtract
        -> MulticastSubject TimedFT
        -> IntProperty(Value=0)
        -> WorkflowOutput
    GroupWorkflow FixationBroken => #5
        SubscribeSubject CenterPoke => #0
        -> Bonsai.Scripting.Expressions.ExpressionCondition !IsPokingCNP
          Expression: !Value
        -> MemberSelector(Selector=Seconds) => #2
        #0 -> Bonsai.Scripting.Expressions.ExpressionCondition IsPokingCNP
          Expression: Value
        -> MemberSelector(Selector=Seconds) => #4
        #2, #4 -> Zip
        -> Subtract
        -> MulticastSubject TimedFT
        -> IntProperty(Value=-2)
        -> WorkflowOutput
    #4, #5 -> Merge
    -> SelectMany PrintRequest
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value(DisplayName=PrintNumber))
        -> IntProperty(Value=7)
        -> MulticastSubject PrintNumber => #3
        #0, #3 -> Zip
        -> MemberSelector(Selector=Item1)
        -> Take(Count=1)
        -> WorkflowOutput
    -> Take(Count=1)
    -> WorkflowOutput
-> Bonsai.Scripting.Expressions.ExpressionCondition IsTrue
  Expression: it == 0
-> SelectMany Stimulus => #13
    GroupWorkflow PokeLEDOff
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=Led1))
        -> MulticastSubject BehaviorCommands
        -> WorkflowOutput

    SubscribeSubject AnimalConfig
    -> MemberSelector(Selector=OptoTime)
    -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT1S, Period=PT0S)
    -> IncludeWorkflow(Path=Extensions\TimestampEvent.bonsai, TimestampSubject=Timestamp)
    -> MemberSelector(Selector=Seconds) => #7
    SubscribeSubject LEDStart => #8
    #7, #8 -> WithLatestFrom
    -> Subtract
    -> MulticastSubject TimedLED
    -> MulticastSubject EndOpto

    SubscribeSubject CenterPoke
    -> Bonsai.Scripting.Expressions.ExpressionCondition !IsPokingCNP
      Expression: !Value
    -> MemberSelector(Selector=Seconds) => #15
    WorkflowInput Source1
    -> GroupWorkflow PlaySound(Description="Presents the noise stimulus to the animal")
        WorkflowInput Source1
        -> IntProperty(Value=31)
        -> MulticastSubject PlaySound
        -> MulticastSubject SoundIndex
        -> SelectMany PrintRequest
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=PrintNumber))
            -> IntProperty(Value=8)
            -> MulticastSubject PrintNumber => #3
            #0, #3 -> Zip
            -> MemberSelector(Selector=Item1)
            -> Take(Count=1)
            -> WorkflowOutput
        -> WorkflowOutput
    -> IncludeWorkflow(Path=Extensions\TimestampEvent.bonsai, TimestampSubject=Timestamp)
    -> MemberSelector(Selector=Seconds) => #19
    #15, #19 -> Zip
    -> Subtract
    -> MulticastSubject TimedRT => #22
    -> Condition "UseRT == 0"
        SubscribeSubject UseRT
        -> WorkflowOutput
    -> GroupWorkflow StopSound(Description="Stops the noise stimulus") => #24
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> MulticastSubject PlaySound
        -> WorkflowOutput
    #22 -> Condition "UseRT != 0"
        SubscribeSubject UseRT
        -> Equal(Operand=BooleanProperty(Value=false))
        -> WorkflowOutput
    -> IntProperty(Value=0) => #26
    #24, #26 -> Merge => #27
    #22 -> Condition "RT >= BaseRT"
        WorkflowInput Source1 => #0
        SubscribeSubject BaseRT => #1
        #0, #1 -> Zip
        -> GreaterThanOrEqual
        -> WorkflowOutput
    -> IntProperty(Value=0) => #29
    #22 -> Condition "RT < BaseRT"
        WorkflowInput Source1 => #0
        SubscribeSubject BaseRT => #1
        #0, #1 -> Zip
        -> LessThan
        -> WorkflowOutput
    -> GroupWorkflow StopSound(Description="Stops the noise stimulus")
        WorkflowInput Source1
        -> IntProperty(Value=31)
        -> MulticastSubject PlaySound
        -> WorkflowOutput
    -> IntProperty(Value=-3) => #32
    #29, #32 -> Merge => #33
    #27, #33 -> Zip
    -> MemberSelector(Selector=Item2) => #35
    GroupWorkflow MaxRT
        SubscribeSubject MaxRT
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan
          Expression: TimeSpan.FromSeconds(it)
        -> WorkflowOutput
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT10S, Period=PT0S)
    -> Condition "UseMaxRT != 0"
        SubscribeSubject UseMaxRT
        -> WorkflowOutput
    -> GroupWorkflow StopSound(Description="Stops the noise stimulus")
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> MulticastSubject PlaySound
        -> WorkflowOutput
    -> IntProperty(Value=-3) => #41
    #35, #41 -> Merge
    -> Take(Count=1)
    -> WorkflowOutput
-> Bonsai.Scripting.Expressions.ExpressionCondition IsTrue
  Expression: it == 0
-> SelectMany Decision => #15
    WorkflowInput Source1
    -> SelectMany PrintRequest
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value(DisplayName=PrintNumber))
        -> IntProperty(Value=9)
        -> MulticastSubject PrintNumber => #3
        #0, #3 -> Zip
        -> MemberSelector(Selector=Item1)
        -> Take(Count=1)
        -> WorkflowOutput

    GroupWorkflow Answer => #2
        SubscribeSubject LeftPoke
        -> Bonsai.Scripting.Expressions.ExpressionCondition IsPokingLeft => #1
          Expression: Value
        -> IntProperty(Value=-1) => #2
        SubscribeSubject RightPoke
        -> Bonsai.Scripting.Expressions.ExpressionCondition IsPokingRight => #4
          Expression: Value
        -> IntProperty(Value=1) => #5
        #2, #5 -> Merge
        -> Take(Count=1)
        -> MulticastSubject ResponsePoke
        -> Condition "UseRT == 0"
            SubscribeSubject UseRT
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        -> GroupWorkflow StopSound
            WorkflowInput Source1
            -> IntProperty(Value=0)
            -> MulticastSubject PlaySound
            -> WorkflowOutput
        #1 -> MemberSelector(Selector=Seconds) => #11
        #4 -> MemberSelector(Selector=Seconds) => #12
        #11, #12 -> Merge
        -> Take(Count=1)
        -> MulticastSubject LNPStart
        -> WorkflowOutput
    SubscribeSubject CenterPoke
    -> Bonsai.Scripting.Expressions.ExpressionCondition !IsPokingCNP
      Expression: !Value
    -> MemberSelector(Selector=Seconds) => #5
    #2, #5 -> Zip
    -> Subtract
    -> MulticastSubject TimedMT => #8
    -> Condition "TimedMT >= MinMT"
        WorkflowInput Source1 => #0
        SubscribeSubject MinMT => #1
        #0, #1 -> Zip
        -> GreaterThanOrEqual
        -> WorkflowOutput
    -> IntProperty(Value=0)
    -> SelectMany LNPTime => #11
        SubscribeSubject IntendedLNP => #0
        SubscribeSubject Timestamp => #1
        SubscribeSubject LNPStart => #2
        #1, #2 -> Zip
        -> Subtract => #4
        #0, #4 -> Zip
        -> Subtract
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan
          Expression: TimeSpan.FromSeconds(Math.Max(it, 0))
        -> InputMapping(Selector=it, DueTime(Selector=it))
        -> SelectMany "Delay (DuckTapeSolution)"
            WorkflowInput Source1 => #0
            ExternalizedMapping(DueTime) => #1
            #0, #1 -> Delay(DueTime=PT0.01S)
            -> Take(Count=1)
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\TimestampEvent.bonsai, TimestampSubject=Timestamp) => #10
        SubscribeSubject LeftPoke
        -> Condition IsLeft => #12
            SubscribeSubject ResponsePoke
            -> Equal(Operand=IntProperty(Value=-1))
            -> WorkflowOutput
        #10, #12 -> WithLatestFrom => #13
        SubscribeSubject RightPoke
        -> Condition IsRight => #15
            SubscribeSubject ResponsePoke
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        #10, #15 -> WithLatestFrom => #16
        #13, #16 -> Merge => #17
        -> Bonsai.Scripting.Expressions.ExpressionCondition !IsPokingLNP
          Expression: !(Item2.Value)
        -> MemberSelector(Selector=Item2.Seconds) => #19
        #17 -> Bonsai.Scripting.Expressions.ExpressionCondition IsPokingLNP
          Expression: Item2.Value
        -> MemberSelector(Selector=Item1.Seconds) => #21
        #19, #21 -> Merge => #22
        SubscribeSubject LNPStart => #23
        #22, #23 -> Zip
        -> Subtract
        -> MulticastSubject TimedLNP => #26
        SubscribeSubject IntendedLNP => #27
        #26, #27 -> Zip
        -> Take(Count=1)
        -> WorkflowOutput
    -> Bonsai.Scripting.Expressions.ExpressionCondition "TimedLNP >= IntendedLNP"
      Expression: Item1 >= Item2
    -> GroupWorkflow EvaluateAnswer => #13
        WorkflowInput Source1 => #0
        SubscribeSubject ResponsePoke => #1
        SubscribeSubject LeftOrRight => #2
        #1, #2 -> CombineLatest => #3
        #0, #3 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #5
        -> Bonsai.Scripting.Expressions.ExpressionCondition AnswerIsRight
          Expression: Item1 == Item2
        -> IntProperty(Value=2) => #7
        #5 -> Bonsai.Scripting.Expressions.ExpressionCondition AnswerIsWrong
          Expression: Item1 != Item2
        -> IntProperty(Value=1) => #9
        #7, #9 -> Merge
        -> MulticastSubject Outcome
        -> SelectMany PrintRequest
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=PrintNumber))
            -> IntProperty(Value=10)
            -> MulticastSubject PrintNumber => #3
            #0, #3 -> Zip
            -> MemberSelector(Selector=Item1)
            -> Take(Count=1)
            -> WorkflowOutput
        -> WorkflowOutput
    #11 -> Bonsai.Scripting.Expressions.ExpressionCondition "TimedLNP < IntendedLNP"
      Expression: Item1 < Item2
    -> IntProperty(Value=-6) => #15
    #8 -> Condition "TimedMT < MinMT"
        WorkflowInput Source1 => #0
        SubscribeSubject MinMT => #1
        #0, #1 -> Zip
        -> LessThan
        -> WorkflowOutput
    -> IntProperty(Value=-5) => #17
    GroupWorkflow MaxMT
        SubscribeSubject MaxMT
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan
          Expression: TimeSpan.FromSeconds(it)
        -> WorkflowOutput
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT3M, Period=PT0S)
    -> IntProperty(Value=-4) => #21
    SubscribeSubject LNPStart
    -> Skip(Count=1) => #23
    #21, #23 -> TakeUntil => #24
    #13, #15, #17, #24 -> Merge
    -> Take(Count=1)
    -> WorkflowOutput
-> Bonsai.Scripting.Expressions.ExpressionCondition IsTrue
  Expression: it > 0
-> SelectMany Reward => #17
    WorkflowInput Source1 => #0
    SubscribeSubject Outcome => #1
    #0, #1 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #3
    -> Bonsai.Scripting.Expressions.ExpressionCondition AnswerIsRight
      Expression: it == 2
    -> GroupWorkflow WaterDelivery => #5
        WorkflowInput Source1 => #0
        SubscribeSubject ResponsePoke => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> MulticastSubject WaterDelivery
        -> WorkflowOutput
    #3 -> Bonsai.Scripting.Expressions.ExpressionCondition AnswerIsWrong
      Expression: it == 1
    -> SelectMany Penalty(Description=FIXME)
        GroupWorkflow BoxLEDBlink
            SubscribeSubject BoxLEDPeriod
            -> Bonsai.Scripting.Expressions.ExpressionTransform FromMillisecondsToTimeSpan
              Expression: TimeSpan.FromMilliseconds(it)
            -> PropertyMapping(Period)
            -> Timer(DueTime=PT0S, Period=PT1S)
            -> Condition
                SubscribeSubject AbortLight
                -> WorkflowOutput
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=Led0))
            -> MulticastSubject BehaviorCommands => #6
            SubscribeSubject BoxLEDPeriod => #7
            SubscribeSubject BoxLEDDutyCycle => #8
            #7, #8 -> Zip
            -> Multiply
            -> Bonsai.Scripting.Expressions.ExpressionTransform FromMillisecondsToTimeSpan
              Expression: TimeSpan.FromMilliseconds(it)
            -> PropertyMapping(DueTime) => #12
            #6, #12 -> Delay(DueTime=PT0.5S)
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=Led0))
            -> MulticastSubject BehaviorCommands
            -> WorkflowOutput

        WorkflowInput Source1
        -> SelectMany PrintRequest
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=PrintNumber))
            -> IntProperty(Value=11)
            -> MulticastSubject PrintNumber => #3
            #0, #3 -> Zip
            -> MemberSelector(Selector=Item1)
            -> Take(Count=1)
            -> WorkflowOutput

        SubscribeSubject Penalty
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT1S, Period=PT0S)
        -> Take(Count=1)
        -> WorkflowOutput
    -> IntProperty(Value=1) => #8
    #5, #8 -> Merge
    -> IncludeWorkflow(Path=Extensions\TimestampEvent.bonsai, TimestampSubject=Timestamp)
    -> MemberSelector(Selector=Seconds)
    -> MulticastSubject TrialEnd
    -> MulticastSubject SaveTrial
    -> IntProperty(Value=0)
    -> Take(Count=1)
    -> WorkflowOutput
#15 -> Bonsai.Scripting.Expressions.ExpressionCondition IsFalse => #18
  Expression: it <= 0
#13 -> Bonsai.Scripting.Expressions.ExpressionCondition IsFalse => #19
  Expression: it != 0
#11 -> Bonsai.Scripting.Expressions.ExpressionCondition IsFalse => #20
  Expression: it != 0
#9 -> Bonsai.Scripting.Expressions.ExpressionCondition IsFalse => #21
  Expression: it != 0
#18, #19, #20, #21 -> Merge
-> SelectMany Abort => #23
    GroupWorkflow PokeLEDOff
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=Led1))
        -> MulticastSubject BehaviorCommands
        -> WorkflowOutput

    SubscribeSubject AnimalConfig
    -> MemberSelector(Selector=OptoTime)
    -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT1S, Period=PT0S)
    -> MulticastSubject EndOpto

    WorkflowInput Source1
    -> MulticastSubject Outcome
    -> SelectMany PrintRequest
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value(DisplayName=PrintNumber))
        -> IntProperty(Value=10)
        -> MulticastSubject PrintNumber => #3
        #0, #3 -> Zip
        -> MemberSelector(Selector=Item1)
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany Penalty
        GroupWorkflow BoxLEDBlink
            SubscribeSubject BoxLEDPeriod
            -> Bonsai.Scripting.Expressions.ExpressionTransform FromMillisecondsToTimeSpan
              Expression: TimeSpan.FromMilliseconds(it)
            -> PropertyMapping(Period)
            -> Timer(DueTime=PT0S, Period=PT1S)
            -> Condition
                SubscribeSubject AbortLight
                -> WorkflowOutput
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=Led0))
            -> MulticastSubject BehaviorCommands => #6
            SubscribeSubject BoxLEDPeriod => #7
            SubscribeSubject BoxLEDDutyCycle => #8
            #7, #8 -> Zip
            -> Multiply
            -> Bonsai.Scripting.Expressions.ExpressionTransform FromMillisecondsToTimeSpan
              Expression: TimeSpan.FromMilliseconds(it)
            -> PropertyMapping(DueTime) => #12
            #6, #12 -> Delay(DueTime=PT0.5S)
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=Led0))
            -> MulticastSubject BehaviorCommands
            -> WorkflowOutput

        WorkflowInput Source1
        -> SelectMany PrintRequest
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=PrintNumber))
            -> IntProperty(Value=11)
            -> MulticastSubject PrintNumber => #3
            #0, #3 -> Zip
            -> MemberSelector(Selector=Item1)
            -> Take(Count=1)
            -> WorkflowOutput

        SubscribeSubject Penalty
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT1S, Period=PT0S)
        -> Take(Count=1)
        -> WorkflowOutput
    -> IncludeWorkflow(Path=Extensions\TimestampEvent.bonsai, TimestampSubject=Timestamp)
    -> MemberSelector(Selector=Seconds)
    -> MulticastSubject TrialEnd
    -> MulticastSubject SaveTrial
    -> IntProperty(Value=0)
    -> Take(Count=1)
    -> WorkflowOutput
#7 -> Bonsai.Scripting.Expressions.ExpressionCondition IsFalse
  Expression: it != 0
-> Delay(DueTime=PT0.01S) => #25
#17, #23, #25 -> Merge
-> Take(Count=1)
-> Repeat => #28
GroupWorkflow EndSession => #29
    SubscribeSubject SessionDuration
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT10M, Period=PT0S)
    -> IntProperty(Value=0) => #3
    SubscribeSubject EndSession => #4
    #3, #4 -> Merge
    -> WorkflowOutput
#28, #29 -> TakeUntil
-> WorkflowOutput
