WorkflowBuilder(Version=2.8.1)
GroupWorkflow Hardware
    GroupWorkflow Behavior
        GroupWorkflow InitializeSubjects
            Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateDigitalInputStatePayload(DigitalInputState=None))
            -> IgnoreElements
            -> BehaviorSubject BehaviorCommands

            BooleanProperty(Value=false) => #3
            DoubleProperty(Value=0) => #4
            #3, #4 -> Zip
            -> Bonsai.Harp.CreateTimestamped
            -> BehaviorSubject LeftPoke
            -> BehaviorSubject CenterPoke
            -> BehaviorSubject RightPoke

        SubscribeSubject BehaviorCommands
        -> Harp.Behavior.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM3)
        -> BehaviorSubject BehaviorMessages

        SubscribeSubject BehaviorMessages => #4
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData)
        -> MemberSelector(Selector=Seconds)
        -> PublishSubject Timestamp
        #4 -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState) => #8
        -> GroupWorkflow FilterPokeEvents
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value) => #1
            ExternalizedMapping(Value(DisplayName=Port)) => #2
            #1, #2 -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort0))
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
              Expression: !Convert.ToBoolean(it)
            #0 -> MemberSelector(Selector=Seconds) => #5
            #4, #5 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped => #7
            ExternalizedMapping(Subject) => #8
            #7, #8 -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Value) => #1
                ExternalizedMapping(Name(DisplayName=Subject))
                -> SubscribeSubject LeftPoke
                -> MemberSelector(Selector=Value) => #4
                #1, #4 -> WithLatestFrom
                -> NotEqual
                -> WorkflowOutput
            -> WorkflowOutput
        -> MulticastSubject LeftPoke
        #8 -> GroupWorkflow FilterPokeEvents
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value) => #1
            ExternalizedMapping(Value(DisplayName=Port)) => #2
            #1, #2 -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort1))
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
              Expression: Convert.ToBoolean(it)
            #0 -> MemberSelector(Selector=Seconds) => #5
            #4, #5 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped => #7
            ExternalizedMapping(Subject) => #8
            #7, #8 -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Value) => #1
                ExternalizedMapping(Name(DisplayName=Subject))
                -> SubscribeSubject CenterPoke
                -> MemberSelector(Selector=Value) => #4
                #1, #4 -> WithLatestFrom
                -> NotEqual
                -> WorkflowOutput
            -> WorkflowOutput
        -> MulticastSubject CenterPoke
        #8 -> GroupWorkflow FilterPokeEvents
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value) => #1
            ExternalizedMapping(Value(DisplayName=Port)) => #2
            #1, #2 -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort2))
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
              Expression: !Convert.ToBoolean(it)
            #0 -> MemberSelector(Selector=Seconds) => #5
            #4, #5 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped => #7
            ExternalizedMapping(Subject) => #8
            #7, #8 -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Value) => #1
                ExternalizedMapping(Name(DisplayName=Subject))
                -> SubscribeSubject RightPoke
                -> MemberSelector(Selector=Value) => #4
                #1, #4 -> WithLatestFrom
                -> NotEqual
                -> WorkflowOutput
            -> WorkflowOutput
        -> MulticastSubject RightPoke

        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable=DO1))
        -> MulticastSubject BehaviorCommands

        SubscribeSubject RewardOpenL
        -> PropertyMapping(PulseDO1)
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDO1Payload(PulseDO1=80))
        -> MulticastSubject BehaviorCommands

        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable=DO2))
        -> MulticastSubject BehaviorCommands

        SubscribeSubject RewardOpenR
        -> PropertyMapping(PulseDO2)
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDO2Payload(PulseDO2=80))
        -> MulticastSubject BehaviorCommands

    GroupWorkflow SoundCard
        GroupWorkflow InitializeSubjects
            Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreatePlaySoundOrFrequencyPayload(PlaySoundOrFrequency=2))
            -> IgnoreElements
            -> BehaviorSubject SoundCardCommands

            IntProperty(Value=2)
            -> BehaviorSubject SoundIndex

            IntProperty(Value=31)
            -> BehaviorSubject LastSoundIndex

            IntProperty(Value=0)
            -> Disable IgnoreElements
            -> BehaviorSubject LeftAttenuation

            IntProperty(Value=0)
            -> Disable IgnoreElements
            -> BehaviorSubject RightAttenuation

        SubscribeSubject SoundCardCommands
        -> Harp.SoundCard.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM4)

        Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreateConfigureDI0Payload(ConfigureDI0=Digital))
        -> MulticastSubject SoundCardCommands

        SubscribeSubject SoundIndex
        -> InputMapping(Selector=it, SoundIndexDI0(Selector=it))
        -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreateSoundIndexDI0Payload(SoundIndexDI0=4))
        -> MulticastSubject SoundCardCommands

        SubscribeSubject LeftAttenuation
        -> Multiply(Operand=DoubleProperty(Value=10)) => #10
        -> PropertyMapping(AttenuationLeft) => #11
        #10, #11 -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreateAttenuationLeftPayload(AttenuationLeft=1200))
        -> MulticastSubject SoundCardCommands

        SubscribeSubject RightAttenuation
        -> Multiply(Operand=DoubleProperty(Value=10)) => #15
        -> PropertyMapping(AttenuationRight) => #16
        #15, #16 -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreateAttenuationRightPayload(AttenuationRight=400))
        -> MulticastSubject SoundCardCommands

    Disable GroupWorkflow Camera
        Bonsai.PointGrey.FlyCapture(Index=0, ColorProcessing=Default) => #0
        -> MemberSelector(Selector=Image)
        -> Bonsai.Vision.Crop(RegionOfInterest(X=63, Y=270, Width=700, Height=500))
        -> Bonsai.Vision.VideoWriter
          FileName="D:\Bonsai Videos\video_.avi"
          Suffix=Timestamp
          Buffered=true
          Overwrite=false
          FourCC=FMP4
          FrameRate=100
          FrameSize(Width=0, Height=0)
          ResizeInterpolation=NearestNeighbor
        #0 -> MemberSelector(Selector="Metadata.embeddedGPIOPinState,Metadata.embeddedFrameCounter,Metadata.embeddedTimeStamp,Metadata.embeddedShutter")
        -> Bonsai.IO.CsvWriter(FileName="D:\Bonsai Videos\cam_metadata_.csv", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

GroupWorkflow Distributions
    Bonsai.Numerics.CreateRandom(Seed=nil) => #0
    SubscribeSubject ExpFTMean
    -> Bonsai.Dsp.Pow(Power=-1)
    -> PropertyMapping(Rate) => #3
    #0, #3 -> Bonsai.Numerics.Distributions.CreateExponential(Rate=13.333333333333334)
    -> BehaviorSubject FTDistribution

    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1)
    -> BehaviorSubject SideDistribution

    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=2, Upper=5)
    -> BehaviorSubject SoundChoiceDistribution

    Bonsai.Numerics.CreateRandom(Seed=nil) => #12
    SubscribeSubject ILDs
    -> MemberSelector(Selector=Length)
    -> Subtract(Operand=IntProperty(Value=1))
    -> PropertyMapping(Upper) => #16
    #12, #16 -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=9)
    -> BehaviorSubject ILDDistribution

    IntProperty(Value=0)
    -> IgnoreElements
    -> BehaviorSubject NewABLRequest

    SubscribeSubject NewABLRequest => #22
    Bonsai.Numerics.CreateRandom(Seed=nil) => #23
    SubscribeSubject ABLList
    -> MemberSelector(Selector=Length)
    -> Subtract(Operand=IntProperty(Value=1))
    -> PropertyMapping(Upper) => #27
    #23, #27 -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=2) => #28
    #22, #28 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Bonsai.Numerics.Distributions.Sample
    -> BehaviorSubject ABLDistribution

    SubscribeSubject ILDs
    -> SLTFunctionality.ShuffleArray
    -> MulticastSubject ShuffledILDs

    SubscribeSubject ILDSteps => #36
    SubscribeSubject ILDStepSize => #37
    SubscribeSubject UseLog
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #39
      Expression: Convert.ToBoolean(it)
    SubscribeSubject ILDStepSize => #40
    #36, #37, #39, #40 -> Zip
    -> InputMapping(Selector=Item1, NumSteps(Selector=Item1), StepSize(Selector=Item2), UseLog(Selector=Item3), LogBase(Selector=Item4))
    -> SLTFunctionality.GenerateILDArray(NumSteps=5, StepSize=2, UseLog=false, LogBase=2)
    -> BehaviorSubject ILDs

GroupWorkflow InputParameters
    GroupWorkflow Training
        DoubleProperty(Value=16)
        -> BehaviorSubject TrainingLevel

        SubscribeSubject TrainingLevel => #2
        -> Subtract(Operand=DoubleProperty(Value=1))
        -> PropertyMapping(RowNumber) => #4
        #2, #4 -> SLTFunctionality.TrainingCSV(FileName=input_files\training_settings.csv, RowNumber=15)
        -> BehaviorSubject TrainingConfigurations

        SubscribeSubject TrainingConfigurations
        -> MemberSelector(Selector=TrialsPerBlock)
        -> BehaviorSubject TrialsPerBlock

        SubscribeSubject TrainingConfigurations
        -> MemberSelector(Selector=FixedABL)
        -> BehaviorSubject FixedABL

        SubscribeSubject TrainingConfigurations
        -> MemberSelector(Selector=DifferentABLs)
        -> BehaviorSubject DifferentABLs

        SubscribeSubject TrainingConfigurations
        -> MemberSelector(Selector=ABLBlock)
        -> BehaviorSubject ABLBlock

        SubscribeSubject TrainingConfigurations
        -> MemberSelector(Selector=ILDStepSize)
        -> BehaviorSubject ILDStepSize

        SubscribeSubject TrainingConfigurations
        -> MemberSelector(Selector=ILDSteps)
        -> BehaviorSubject ILDSteps

        SubscribeSubject TrainingConfigurations
        -> MemberSelector(Selector=UseLog)
        -> BehaviorSubject UseLog

        SubscribeSubject TrainingConfigurations
        -> MemberSelector(Selector=LogBase)
        -> BehaviorSubject LogBase

        SubscribeSubject TrainingConfigurations
        -> MemberSelector(Selector=IntendedITI)
        -> BehaviorSubject IntendedITI

        SubscribeSubject TrainingConfigurations
        -> MemberSelector(Selector=ITIReset)
        -> BehaviorSubject ITIReset

        SubscribeSubject TrainingConfigurations
        -> MemberSelector(Selector=MaxWait)
        -> BehaviorSubject MaxWait

        SubscribeSubject TrainingConfigurations
        -> MemberSelector(Selector=UseRT)
        -> BehaviorSubject UseRT

        SubscribeSubject TrainingConfigurations
        -> MemberSelector(Selector=UseMaxRT)
        -> BehaviorSubject UseMaxRT

        SubscribeSubject TrainingConfigurations
        -> MemberSelector(Selector=MaxMT)
        -> BehaviorSubject MaxMT

        SubscribeSubject TrainingConfigurations
        -> MemberSelector(Selector=AbortPenalty)
        -> BehaviorSubject AbortPenalty

        SubscribeSubject TrainingConfigurations
        -> MemberSelector(Selector=IncorrectPenalty)
        -> BehaviorSubject IncorrectPenalty

        SubscribeSubject TrainingConfigurations
        -> MemberSelector(Selector=FixationAbortPenalty)
        -> BehaviorSubject FixationAbortPenalty

        SubscribeSubject TrainingConfigurations
        -> MemberSelector(Selector=UsePerformance)
        -> BehaviorSubject UsePerformance

        SubscribeSubject TrainingConfigurations
        -> MemberSelector(Selector=CriticalPerformance)
        -> BehaviorSubject CriticalPerformance

        SubscribeSubject TrainingConfigurations
        -> MemberSelector(Selector=RepeatError)
        -> BehaviorSubject RepeatError

        SubscribeSubject TrainingConfigurations
        -> MemberSelector(Selector=RepeatAbort)
        -> BehaviorSubject RepeatAbort

        SubscribeSubject TrainingConfigurations
        -> MemberSelector(Selector=Speakers)
        -> BehaviorSubject Speakers

    GroupWorkflow AnimalSpecific
        SLTFunctionality.AnimalSpecificJSON(FilePath=input_files\animal_settings.json)
        -> BehaviorSubject AnimalSpecificConfigurations

        SubscribeSubject AnimalSpecificConfigurations
        -> MemberSelector(Selector=Animal)
        -> BehaviorSubject Animal

        SubscribeSubject AnimalSpecificConfigurations
        -> MemberSelector(Selector=Box)
        -> BehaviorSubject Box

        SubscribeSubject AnimalSpecificConfigurations
        -> MemberSelector(Selector=Session)
        -> BehaviorSubject Session

        SubscribeSubject AnimalSpecificConfigurations
        -> MemberSelector(Selector=SessionType)
        -> BehaviorSubject SessionType

        SubscribeSubject AnimalSpecificConfigurations
        -> MemberSelector(Selector=SessionDuration)
        -> BehaviorSubject SessionDuration

        SubscribeSubject AnimalSpecificConfigurations
        -> MemberSelector(Selector=StartingTrialNumber)
        -> Subtract(Operand=IntProperty(Value=1))
        -> BehaviorSubject Trial

        SubscribeSubject AnimalSpecificConfigurations
        -> MemberSelector(Selector=StartingBlockNumber)
        -> BehaviorSubject Block

        SubscribeSubject AnimalSpecificConfigurations
        -> MemberSelector(Selector=ABLList)
        -> BehaviorSubject ABLList

        SubscribeSubject AnimalSpecificConfigurations
        -> MemberSelector(Selector=CycleILD)
        -> BehaviorSubject CycleILD

        SubscribeSubject AnimalSpecificConfigurations
        -> MemberSelector(Selector=Bias)
        -> BehaviorSubject Bias

        SubscribeSubject AnimalSpecificConfigurations
        -> MemberSelector(Selector=MinFT)
        -> BehaviorSubject BaseFT

        SubscribeSubject AnimalSpecificConfigurations
        -> MemberSelector(Selector=FTDelta)
        -> BehaviorSubject FTDelta

        SubscribeSubject AnimalSpecificConfigurations
        -> MemberSelector(Selector=FTTarget)
        -> BehaviorSubject FTTarget

        SubscribeSubject AnimalSpecificConfigurations
        -> MemberSelector(Selector=ExpFTMean)
        -> BehaviorSubject ExpFTMean

        SubscribeSubject AnimalSpecificConfigurations
        -> MemberSelector(Selector=MinRT)
        -> BehaviorSubject BaseRT

        SubscribeSubject AnimalSpecificConfigurations
        -> MemberSelector(Selector=RTDelta)
        -> BehaviorSubject RTDelta

        SubscribeSubject AnimalSpecificConfigurations
        -> MemberSelector(Selector=RTTarget)
        -> BehaviorSubject RTTarget

        SubscribeSubject AnimalSpecificConfigurations
        -> MemberSelector(Selector=MaxRT)
        -> BehaviorSubject MaxRT

        SubscribeSubject AnimalSpecificConfigurations
        -> MemberSelector(Selector=MinMT)
        -> BehaviorSubject MinMT

        SubscribeSubject AnimalSpecificConfigurations
        -> MemberSelector(Selector=MinLNP)
        -> BehaviorSubject IntendedLNP

        SubscribeSubject AnimalSpecificConfigurations
        -> MemberSelector(Selector=LNPDelta)
        -> BehaviorSubject LNPDelta

        SubscribeSubject AnimalSpecificConfigurations
        -> MemberSelector(Selector=LNPTarget)
        -> BehaviorSubject LNPTarget

    GroupWorkflow SetupSettings
        DoubleProperty(Value=80)
        -> BehaviorSubject RewardOpenL

        DoubleProperty(Value=80)
        -> BehaviorSubject RewardOpenR

    GroupWorkflow OutputFile
        DoubleProperty(Value=0)
        -> ToArray
        -> IgnoreElements
        -> BehaviorSubject CSV

        SubscribeSubject CSV
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
                it[0] as Animal,
                it[1] as Session,
                it[2] as SessionType,
                it[3] as Trial,
                it[4] as Block,
                it[5] as TrialsPerBlock,
                it[6] as TrainingLevel,
                it[7] as ABL,
                it[8] as ILD,
                it[9] as Bias,
                it[10] as LeftAmp,
                it[11] as RightAmp,
                it[12] as WaveformL,
                it[13] as WaveformR,
                it[14] as TrialStart,
                it[15] as TrialEnd,
                it[16] as TrialDuration,
                it[17] as IntendedITI,
                it[18] as ITIStart,
                it[19] as ITIEnd,
                it[20] as TimedITI,
                it[21] as MaxWait,
                it[22] as TimeToCNP,
                it[23] as BaseFix,
                it[24] as ExpFixMean,
                it[25] as IntendedFix,
                it[26] as TimedFix,
                it[27] as BaseRT,
                it[28] as MaxRT,
                it[29] as TimedRT,
                it[30] as MaxMT,
                it[31] as TimedMT,
                it[32] as IntendedLNP,
                it[33] as TimedLNP,
                it[34] as ResponsePoke,
                it[35] as Success,
                it[36] as AbortEvent,
                it[37] as RepeatTrial,
                it[38] as BlockPerformance,
                it[39] as BlockAbortRatio,
                it[40] as LEDTrial,
                it[41] as TimedLED,
                it[42] as LEDPowerL,
                it[43] as LEDPowerR,
                it[44] as Box
            )
        -> Bonsai.IO.CsvWriter(FileName=output_files\experiment.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=true)

        DoubleProperty(Value=0)
        -> BehaviorSubject ABL

        DoubleProperty(Value=0)
        -> BehaviorSubject ILD

        DoubleProperty(Value=17)
        -> BehaviorSubject LeftAmp

        DoubleProperty(Value=18)
        -> BehaviorSubject RightAmp

        IntProperty(Value=0)
        -> BehaviorSubject WaveformL

        IntProperty(Value=0)
        -> BehaviorSubject WaveformR

        DoubleProperty(Value=0)
        -> IgnoreElements
        -> BehaviorSubject TrialStart

        DoubleProperty(Value=0)
        -> IgnoreElements
        -> BehaviorSubject TrialEnd

        DoubleProperty(Value=0)
        -> BehaviorSubject TimeToCNP

        DoubleProperty(Value=0)
        -> IgnoreElements
        -> BehaviorSubject IntendedFT

        DoubleProperty(Value=0)
        -> BehaviorSubject TimedFT

        DoubleProperty(Value=0)
        -> BehaviorSubject TimedRT

        DoubleProperty(Value=0)
        -> BehaviorSubject TimedMT

        DoubleProperty(Value=0)
        -> BehaviorSubject TimedLNP

        IntProperty(Value=0)
        -> IgnoreElements
        -> BehaviorSubject ResponsePoke

        IntProperty(Value=0)
        -> IgnoreElements
        -> BehaviorSubject Success

        IntProperty(Value=0)
        -> IgnoreElements
        -> BehaviorSubject AbortEvent

        IntProperty(Value=0)
        -> IgnoreElements
        -> BehaviorSubject RepeatTrial

        DoubleProperty(Value=0)
        -> BehaviorSubject BlockPerformance

        DoubleProperty(Value=0)
        -> BehaviorSubject BlockAbortRatio

        DoubleProperty(Value=13)
        -> BehaviorSubject LEDTrial

        DoubleProperty(Value=14)
        -> BehaviorSubject TimedLED

        DoubleProperty(Value=15)
        -> BehaviorSubject LEDPowerL

        DoubleProperty(Value=16)
        -> BehaviorSubject LEDPowerR

    GroupWorkflow AuxiliaryParameters
        DoubleProperty(Value=0)
        -> BehaviorSubject ILDIndex

        DoubleProperty(Value=0)
        -> BehaviorSubject ITIStart

        DoubleProperty(Value=0)
        -> BehaviorSubject ITIEnd

        DoubleProperty(Value=0)
        -> BehaviorSubject TrialsCompleted

        DoubleProperty(Value=0)
        -> BehaviorSubject TrialsAborted

        DoubleProperty(Value=0)
        -> BehaviorSubject RightAnswers

        IntProperty(Value=1)
        -> BehaviorSubject BlockTrial

        DoubleProperty(Value=0)
        -> IgnoreElements
        -> BehaviorSubject LNPStart

        DoubleProperty(Value=0)
        -> ToArray
        -> IgnoreElements
        -> BehaviorSubject ShuffledILDs

        IntProperty(Value=0)
        -> BehaviorSubject LeftOrRight

BooleanProperty(Value=true)
-> SelectMany Inter-TrialInterval => #4
    SubscribeSubject CenterPoke
    -> Condition
        WorkflowInput Source1
        -> MemberSelector(Selector=Value) => #1
        SubscribeSubject ITIReset
        -> NotEqual(Operand=IntProperty(Value=0)) => #3
        #1, #3 -> CombineLatest
        -> LogicalAnd
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #2
    WorkflowInput Source1
    -> GroupWorkflow TimestampEvent
        WorkflowInput Source1 => #0
        SubscribeSubject Timestamp => #1
        #0, #1 -> CombineLatest
        -> Bonsai.Harp.CreateTimestamped
        -> Take(Count=1)
        -> WorkflowOutput
    -> MemberSelector(Selector=Seconds)
    -> MulticastSubject ITIStart => #6
    SubscribeSubject IntendedITI
    -> Multiply(Operand=DoubleProperty(Value=10000000))
    -> PropertyMapping(DueTime) => #9
    #6, #9 -> Delay(DueTime=PT1S)
    -> GroupWorkflow TimestampEvent
        WorkflowInput Source1 => #0
        SubscribeSubject Timestamp => #1
        #0, #1 -> CombineLatest
        -> Bonsai.Harp.CreateTimestamped
        -> Take(Count=1)
        -> WorkflowOutput
    -> MemberSelector(Selector=Seconds)
    -> MulticastSubject ITIEnd
    -> BooleanProperty(Value=true) => #14
    #2, #14 -> Merge => #15
    IntProperty(Value=1) => #16
    #15, #16 -> Zip
    -> Take(Count=1)
    -> WorkflowOutput
    #14 -> GroupWorkflow NewBlock
        WorkflowInput Source1 => #0
        SubscribeSubject Trial => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Take(Count=1)
        -> Add(Operand=IntProperty(Value=1))
        -> MulticastSubject Trial
        SubscribeSubject TrainingLevel
        -> Take(Count=1) => #8
        SubscribeSubject Block => #9
        #0, #9 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Take(Count=1) => #12
        -> Condition
            SubscribeSubject TrialsCompleted => #0
            SubscribeSubject TrialsPerBlock => #1
            #0, #1 -> Zip
            -> Equal
            -> WorkflowOutput
        -> Add(Operand=DoubleProperty(Value=1))
        -> MulticastSubject Block => #15
        -> Condition => #16
            SubscribeSubject UsePerformance
            -> Equal(Operand=DoubleProperty(Value=0)) => #1
            SubscribeSubject UsePerformance
            -> Equal(Operand=DoubleProperty(Value=1)) => #3
            SubscribeSubject BlockPerformance => #4
            SubscribeSubject CriticalPerformance => #5
            #4, #5 -> Zip
            -> GreaterThanOrEqual => #7
            #3, #7 -> Zip
            -> LogicalAnd => #9
            #1, #9 -> Zip
            -> LogicalOr
            -> WorkflowOutput
        #8, #16 -> SubscribeWhen
        -> Add(Operand=IntProperty(Value=1))
        -> MulticastSubject TrainingLevel => #19
        #15 -> Condition
            SubscribeSubject UsePerformance
            -> Equal(Operand=DoubleProperty(Value=0)) => #1
            SubscribeSubject UsePerformance
            -> Equal(Operand=DoubleProperty(Value=1)) => #3
            SubscribeSubject BlockPerformance => #4
            SubscribeSubject CriticalPerformance => #5
            #4, #5 -> Zip
            -> GreaterThanOrEqual => #7
            #3, #7 -> Zip
            -> LogicalAnd => #9
            #1, #9 -> Zip
            -> LogicalOr
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        -> DoubleProperty(Value=0) => #21
        #19, #21 -> Merge
        -> DoubleProperty(Value=0)
        -> MulticastSubject TrialsCompleted
        -> MulticastSubject TrialsAborted
        -> MulticastSubject RightAnswers
        -> MulticastSubject BlockPerformance
        -> MulticastSubject BlockAbortRatio
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #29
          Expression: Convert.ToInt32(it)
        SubscribeSubject BlockTrial
        -> Take(Count=1) => #31
        #12 -> Condition => #32
            SubscribeSubject TrialsCompleted => #0
            SubscribeSubject TrialsPerBlock => #1
            #0, #1 -> Zip
            -> NotEqual
            -> WorkflowOutput
        #31, #32 -> SubscribeWhen
        -> Add(Operand=IntProperty(Value=1)) => #34
        #29, #34 -> Merge
        -> MulticastSubject BlockTrial
        -> WorkflowOutput
    -> GroupWorkflow RandomizeLouderSpeaker
        WorkflowInput Source1
        -> BehaviorSubject RLS

        Disable SubscribeSubject RLS => #2
        Disable SubscribeSubject LastSoundIndex => #3
        #2, #3 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2)
        -> Disable Take(Count=1) => #6
        -> Disable Condition
            WorkflowInput Source1
            -> LessThan(Operand=IntProperty(Value=31))
            -> WorkflowOutput
        -> Disable Add(Operand=IntProperty(Value=1)) => #8
        #6 -> Disable Condition
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=31))
            -> WorkflowOutput
        -> Disable IntProperty(Value=2) => #10
        #8, #10 -> Disable Merge
        -> Disable MulticastSubject SoundIndex
        -> Disable MulticastSubject LastSoundIndex

        SubscribeSubject RLS => #14
        SubscribeSubject SideDistribution => #15
        #14, #15 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Numerics.Distributions.Sample => #18
        -> Condition
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> IntProperty(Value=120)
        -> MulticastSubject LeftAttenuation
        -> IntProperty(Value=40)
        -> MulticastSubject RightAttenuation
        -> IntProperty(Value=-1) => #24
        #18 -> Condition
            WorkflowInput Source1
            -> NotEqual(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> IntProperty(Value=40)
        -> MulticastSubject LeftAttenuation
        -> IntProperty(Value=120)
        -> MulticastSubject RightAttenuation
        -> IntProperty(Value=1) => #30
        #24, #30 -> Merge
        -> MulticastSubject LeftOrRight

        SubscribeSubject SoundChoiceDistribution
        -> Bonsai.Numerics.Distributions.Sample
        -> MulticastSubject SoundIndex

        Disable SubscribeSubject RLS => #36
        Disable SubscribeSubject ABLBlock => #37
        #36, #37 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2) => #39
        Disable SubscribeSubject RLS => #40
        Disable SubscribeSubject BlockTrial => #41
        #40, #41 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2) => #43
        #39, #43 -> Disable Zip => #44
        -> Disable Condition => #45
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> Equal(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        #44 -> Disable Condition => #46
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item1)
            -> NotEqual(Operand=DoubleProperty(Value=0)) => #2
            #0 -> MemberSelector(Selector=Item2)
            -> Equal(Operand=IntProperty(Value=1)) => #4
            #2, #4 -> Zip
            -> LogicalAnd
            -> WorkflowOutput
        #45, #46 -> Disable Merge
        -> Disable MemberSelector(Selector=Item1)
        -> Disable MulticastSubject NewABLRequest

        Disable SubscribeSubject ABLList => #50
        Disable SubscribeSubject ABLDistribution
        -> Disable PropertyMapping(Value) => #52
        #50, #52 -> Disable Index(Operand=IntProperty(Value=1)) => #53
        Disable SubscribeSubject RLS
        -> Disable BooleanProperty(Value=false) => #55
        -> Disable Condition => #56
            SubscribeSubject DifferentABLs
            -> NotEqual(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        #53, #56 -> Disable SubscribeWhen => #57
        Disable SubscribeSubject FixedABL => #58
        #55 -> Disable Condition => #59
            SubscribeSubject DifferentABLs
            -> Equal(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        #58, #59 -> Disable SubscribeWhen => #60
        #57, #60 -> Disable Merge
        -> Disable MulticastSubject ABL => #62
        Disable SubscribeSubject RLS => #63
        Disable SubscribeSubject ILDs => #64
        #63, #64 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2) => #66
        Disable SubscribeSubject ILDDistribution
        -> Disable Bonsai.Numerics.Distributions.Sample
        -> Disable PropertyMapping(Value) => #69
        #66, #69 -> Disable Index(Operand=IntProperty(Value=9))
        -> Disable Condition => #71
            SubscribeSubject CycleILD
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        Disable SubscribeSubject RLS => #72
        Disable SubscribeSubject ShuffledILDs => #73
        #72, #73 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2) => #75
        Disable SubscribeSubject RLS => #76
        Disable SubscribeSubject ILDIndex => #77
        #76, #77 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2)
        -> Disable Take(Count=1) => #80
        -> Disable PropertyMapping(Value) => #81
        #75, #81 -> Disable Index(Operand=IntProperty(Value=8))
        -> Disable Condition => #83
            SubscribeSubject CycleILD
            -> NotEqual(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        #71, #83 -> Disable Merge
        -> Disable MulticastSubject ILD => #85
        -> Disable Divide(Operand=DoubleProperty(Value=2)) => #86
        #62, #86 -> Disable Zip
        -> Disable Condition => #88
            SubscribeSubject RepeatTrial
            -> Take(Count=1) => #1
            -> Equal(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
            #1 -> DoubleProperty(Value=0)
            -> MulticastSubject RepeatTrial
        -> Disable Subtract
        -> Disable MulticastSubject LeftAttenuation
        #88 -> Disable Add
        -> Disable MulticastSubject RightAttenuation
        #85 -> Disable Condition
            WorkflowInput Source1
            -> GreaterThan(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        -> Disable DoubleProperty(Value=40)
        -> Disable MulticastSubject LeftAttenuation
        -> Disable DoubleProperty(Value=30)
        -> Disable MulticastSubject RightAttenuation
        #85 -> Disable Condition
            WorkflowInput Source1
            -> LessThan(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        -> Disable DoubleProperty(Value=30)
        -> Disable MulticastSubject LeftAttenuation
        -> Disable DoubleProperty(Value=40)
        -> Disable MulticastSubject RightAttenuation
        #80 -> Disable Add(Operand=DoubleProperty(Value=1)) => #103
        #75 -> Disable MemberSelector(Selector=Length) => #104
        #103, #104 -> Disable Zip => #105
        -> Disable Condition
            WorkflowInput Source1
            -> NotEqual
            -> WorkflowOutput
        -> Disable MemberSelector(Selector=Item1)
        -> Disable MulticastSubject ILDIndex
        #105 -> Disable Condition => #109
            WorkflowInput Source1
            -> Equal
            -> WorkflowOutput
        Disable SubscribeSubject ILDs
        -> Disable Take(Count=1) => #111
        #109, #111 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2)
        -> Disable MulticastSubject ILDs
        -> Disable DoubleProperty(Value=0)
        -> Disable MulticastSubject ILDIndex

    Disable GroupWorkflow RandomizeLouderSpeaker
        WorkflowInput Source1
        -> BehaviorSubject RLS

        Disable SubscribeSubject RLS => #2
        Disable SubscribeSubject LastSoundIndex => #3
        #2, #3 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2)
        -> Disable Take(Count=1) => #6
        -> Disable Condition
            WorkflowInput Source1
            -> LessThan(Operand=IntProperty(Value=31))
            -> WorkflowOutput
        -> Disable Add(Operand=IntProperty(Value=1)) => #8
        #6 -> Disable Condition
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=31))
            -> WorkflowOutput
        -> Disable IntProperty(Value=2) => #10
        #8, #10 -> Disable Merge
        -> Disable MulticastSubject SoundIndex
        -> Disable MulticastSubject LastSoundIndex

        IntProperty(Value=2)
        -> MulticastSubject SoundIndex

        SubscribeSubject RLS => #16
        SubscribeSubject ABLBlock => #17
        #16, #17 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #19
        SubscribeSubject RLS => #20
        SubscribeSubject BlockTrial => #21
        #20, #21 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #23
        #19, #23 -> Zip => #24
        -> Condition => #25
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> Equal(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        #24 -> Condition => #26
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item1)
            -> NotEqual(Operand=DoubleProperty(Value=0)) => #2
            #0 -> MemberSelector(Selector=Item2)
            -> Equal(Operand=IntProperty(Value=1)) => #4
            #2, #4 -> Zip
            -> LogicalAnd
            -> WorkflowOutput
        #25, #26 -> Merge
        -> MemberSelector(Selector=Item1)
        -> MulticastSubject NewABLRequest

        SubscribeSubject ABLList => #30
        SubscribeSubject ABLDistribution
        -> PropertyMapping(Value) => #32
        #30, #32 -> Index(Operand=IntProperty(Value=1)) => #33
        SubscribeSubject RLS
        -> BooleanProperty(Value=false) => #35
        -> Condition => #36
            SubscribeSubject DifferentABLs
            -> NotEqual(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        #33, #36 -> SubscribeWhen => #37
        SubscribeSubject FixedABL => #38
        #35 -> Condition => #39
            SubscribeSubject DifferentABLs
            -> Equal(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        #38, #39 -> SubscribeWhen => #40
        #37, #40 -> Merge
        -> MulticastSubject ABL => #42
        SubscribeSubject RLS => #43
        SubscribeSubject ILDs => #44
        #43, #44 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #46
        SubscribeSubject ILDDistribution
        -> Bonsai.Numerics.Distributions.Sample
        -> PropertyMapping(Value) => #49
        #46, #49 -> Index(Operand=IntProperty(Value=9))
        -> Condition => #51
            SubscribeSubject CycleILD
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        SubscribeSubject RLS => #52
        SubscribeSubject ShuffledILDs => #53
        #52, #53 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #55
        SubscribeSubject RLS => #56
        SubscribeSubject ILDIndex => #57
        #56, #57 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Take(Count=1) => #60
        -> PropertyMapping(Value) => #61
        #55, #61 -> Index(Operand=IntProperty(Value=8))
        -> Condition => #63
            SubscribeSubject CycleILD
            -> NotEqual(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        #51, #63 -> Merge
        -> MulticastSubject ILD => #65
        -> Disable Divide(Operand=DoubleProperty(Value=2)) => #66
        #42, #66 -> Disable Zip
        -> Disable Condition => #68
            SubscribeSubject RepeatTrial
            -> Take(Count=1) => #1
            -> Equal(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
            #1 -> DoubleProperty(Value=0)
            -> MulticastSubject RepeatTrial
        -> Disable Subtract
        -> Disable MulticastSubject LeftAttenuation
        #68 -> Disable Add
        -> Disable MulticastSubject RightAttenuation
        #65 -> Condition
            WorkflowInput Source1
            -> GreaterThan(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        -> DoubleProperty(Value=40)
        -> MulticastSubject LeftAttenuation
        -> DoubleProperty(Value=30)
        -> MulticastSubject RightAttenuation
        #65 -> Condition
            WorkflowInput Source1
            -> LessThan(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        -> DoubleProperty(Value=30)
        -> MulticastSubject LeftAttenuation
        -> DoubleProperty(Value=40)
        -> MulticastSubject RightAttenuation
        #60 -> Add(Operand=DoubleProperty(Value=1)) => #83
        #55 -> MemberSelector(Selector=Length) => #84
        #83, #84 -> Zip => #85
        -> Condition
            WorkflowInput Source1
            -> NotEqual
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1)
        -> MulticastSubject ILDIndex
        #85 -> Condition => #89
            WorkflowInput Source1
            -> Equal
            -> WorkflowOutput
        SubscribeSubject ILDs
        -> Take(Count=1) => #91
        #89, #91 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> MulticastSubject ILDs
        -> DoubleProperty(Value=0)
        -> MulticastSubject ILDIndex
-> Condition
    WorkflowInput Source1
    -> MemberSelector(Selector=Item1)
    -> WorkflowOutput
-> SelectMany StartTrial => #6
    SubscribeSubject CenterPoke
    -> Condition => #1
        WorkflowInput Source1
        -> MemberSelector(Selector=Value)
        -> WorkflowOutput
    -> MemberSelector(Selector=Seconds) => #2
    WorkflowInput Source1
    -> GroupWorkflow TimestampEvent
        WorkflowInput Source1 => #0
        SubscribeSubject Timestamp => #1
        #0, #1 -> CombineLatest
        -> Bonsai.Harp.CreateTimestamped
        -> Take(Count=1)
        -> WorkflowOutput
    -> MemberSelector(Selector=Seconds)
    -> MulticastSubject TrialStart => #6
    #2, #6 -> Zip
    -> Subtract
    -> MulticastSubject TimeToCNP
    SubscribeSubject MaxWait
    -> Multiply(Operand=DoubleProperty(Value=10000000))
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT3S, Period=PT0S)
    -> BooleanProperty(Value=false)
    -> GroupWorkflow TimestampEvent => #15
        WorkflowInput Source1 => #0
        SubscribeSubject Timestamp => #1
        #0, #1 -> CombineLatest
        -> Bonsai.Harp.CreateTimestamped
        -> Take(Count=1)
        -> WorkflowOutput
    #15, #1 -> Merge
    -> Take(Count=1)
    -> MemberSelector(Selector=Value) => #18
    IntProperty(Value=2) => #19
    #18, #19 -> Zip
    -> WorkflowOutput
-> Condition
    WorkflowInput Source1
    -> MemberSelector(Selector=Item1)
    -> WorkflowOutput
-> SelectMany FixationTime => #8
    SubscribeSubject CenterPoke => #0
    -> Condition => #1
        WorkflowInput Source1
        -> MemberSelector(Selector=Value)
        -> Equal(Operand=BooleanProperty(Value=false))
        -> WorkflowOutput
    -> MemberSelector(Selector=Seconds) => #2
    #0 -> Condition
        WorkflowInput Source1
        -> MemberSelector(Selector=Value)
        -> WorkflowOutput
    -> MemberSelector(Selector=Seconds) => #4
    #2, #4 -> Zip
    -> Subtract
    -> MulticastSubject TimedFT
    SubscribeSubject BaseFT => #8
    SubscribeSubject FTDistribution
    -> Bonsai.Numerics.Distributions.Sample => #10
    #8, #10 -> Zip
    -> Add
    -> MulticastSubject IntendedFT
    -> Multiply(Operand=DoubleProperty(Value=10000))
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT0.0101536S, Period=PT0S)
    -> BooleanProperty(Value=true)
    -> GroupWorkflow TimestampEvent => #18
        WorkflowInput Source1 => #0
        SubscribeSubject Timestamp => #1
        #0, #1 -> CombineLatest
        -> Bonsai.Harp.CreateTimestamped
        -> Take(Count=1)
        -> WorkflowOutput
    #1, #18 -> Merge
    -> Take(Count=1)
    -> MemberSelector(Selector=Value) => #21
    IntProperty(Value=3) => #22
    #21, #22 -> Zip
    -> WorkflowOutput
-> Condition
    WorkflowInput Source1
    -> MemberSelector(Selector=Item1)
    -> WorkflowOutput
-> SelectMany Stimulus => #10
    SubscribeSubject CenterPoke
    -> Condition => #1
        WorkflowInput Source1
        -> MemberSelector(Selector=Value)
        -> Equal(Operand=BooleanProperty(Value=false))
        -> WorkflowOutput
    -> MemberSelector(Selector=Seconds) => #2
    WorkflowInput Source1
    -> GroupWorkflow PlaySound
        WorkflowInput Source1
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO0))
        -> MulticastSubject BehaviorCommands
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DO0))
        -> MulticastSubject BehaviorCommands
        -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreateSoundIndexDI0Payload(SoundIndexDI0=31))
        -> MulticastSubject SoundCardCommands
        -> WorkflowOutput
    -> GroupWorkflow TimestampEvent
        WorkflowInput Source1 => #0
        SubscribeSubject Timestamp => #1
        #0, #1 -> CombineLatest
        -> Bonsai.Harp.CreateTimestamped
        -> Take(Count=1)
        -> WorkflowOutput
    -> MemberSelector(Selector=Seconds)
    -> BehaviorSubject RTStart => #7
    #2, #7 -> Zip
    -> Subtract
    -> MulticastSubject TimedRT
    SubscribeSubject CenterPoke
    -> Condition
        WorkflowInput Source1
        -> MemberSelector(Selector=Value)
        -> WorkflowOutput
    -> MemberSelector(Selector=Seconds) => #13
    #2, #13 -> Zip
    -> Subtract
    -> MulticastSubject TimedFT
    #1 -> BooleanProperty(Value=true) => #17
    #17, #2 -> Zip
    -> Bonsai.Harp.CreateTimestamped => #19
    SubscribeSubject MaxRT
    -> Multiply(Operand=DoubleProperty(Value=10000000))
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT10S, Period=PT0S)
    -> Condition
        SubscribeSubject UseMaxRT
        -> NotEqual(Operand=DoubleProperty(Value=0))
        -> WorkflowOutput
    -> BooleanProperty(Value=false)
    -> GroupWorkflow TimestampEvent => #26
        WorkflowInput Source1 => #0
        SubscribeSubject Timestamp => #1
        #0, #1 -> CombineLatest
        -> Bonsai.Harp.CreateTimestamped
        -> Take(Count=1)
        -> WorkflowOutput
    #19, #26 -> Merge => #27
    -> Condition
        SubscribeSubject UseRT
        -> NotEqual(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> Disable IntProperty(Value=31)
    -> Disable MulticastSubject SoundIndex
    -> GroupWorkflow StopSound
        WorkflowInput Source1
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO0))
        -> MulticastSubject BehaviorCommands
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DO0))
        -> MulticastSubject BehaviorCommands
        -> WorkflowOutput
    #27 -> Take(Count=1) => #32
    -> Condition
        WorkflowInput Source1
        -> MemberSelector(Selector=Seconds) => #1
        SubscribeSubject RTStart => #2
        #1, #2 -> Zip
        -> Subtract => #4
        SubscribeSubject BaseRT => #5
        #4, #5 -> Zip
        -> GreaterThanOrEqual
        -> WorkflowOutput
    -> MemberSelector(Selector=Value) => #34
    #32 -> Condition
        WorkflowInput Source1
        -> MemberSelector(Selector=Seconds) => #1
        SubscribeSubject RTStart => #2
        #1, #2 -> Zip
        -> Subtract => #4
        SubscribeSubject BaseRT => #5
        #4, #5 -> Zip
        -> LessThan
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #36
    #34, #36 -> Merge => #37
    IntProperty(Value=4) => #38
    #37, #38 -> Zip
    -> WorkflowOutput
-> Condition
    WorkflowInput Source1
    -> MemberSelector(Selector=Item1)
    -> WorkflowOutput
-> SelectMany Choice => #12
    SubscribeSubject LeftPoke
    -> Condition => #1
        WorkflowInput Source1
        -> MemberSelector(Selector=Value)
        -> WorkflowOutput
    -> IntProperty(Value=-1) => #2
    SubscribeSubject RightPoke
    -> Condition => #4
        WorkflowInput Source1
        -> MemberSelector(Selector=Value)
        -> WorkflowOutput
    -> IntProperty(Value=1) => #5
    #2, #5 -> Merge
    -> Take(Count=1)
    -> MulticastSubject ResponsePoke
    -> Condition
        SubscribeSubject UseRT
        -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> IntProperty(Value=31)
    -> MulticastSubject SoundIndex
    -> GroupWorkflow PlaySound
        WorkflowInput Source1
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO0))
        -> MulticastSubject BehaviorCommands
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DO0))
        -> MulticastSubject BehaviorCommands
        -> WorkflowOutput
    #1 -> MemberSelector(Selector=Seconds) => #13
    #4 -> MemberSelector(Selector=Seconds) => #14
    #13, #14 -> Merge
    -> Take(Count=1)
    -> MulticastSubject LNPStart => #17
    SubscribeSubject CenterPoke
    -> Condition
        WorkflowInput Source1
        -> MemberSelector(Selector=Value)
        -> Equal(Operand=BooleanProperty(Value=false))
        -> WorkflowOutput
    -> MemberSelector(Selector=Seconds) => #20
    #17, #20 -> Zip
    -> Subtract
    -> MulticastSubject TimedMT => #23
    -> Condition
        WorkflowInput Source1 => #0
        SubscribeSubject MinMT => #1
        #0, #1 -> Zip
        -> GreaterThanOrEqual
        -> WorkflowOutput
    -> BooleanProperty(Value=true) => #25
    #23 -> Condition
        WorkflowInput Source1 => #0
        SubscribeSubject MinMT => #1
        #0, #1 -> Zip
        -> LessThan
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #27
    SubscribeSubject MaxMT
    -> Multiply(Operand=DoubleProperty(Value=10000000))
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT3S, Period=PT0S)
    -> BooleanProperty(Value=false) => #32
    #25, #27, #32 -> Merge
    -> Take(Count=1) => #34
    IntProperty(Value=5) => #35
    #34, #35 -> Zip
    -> WorkflowOutput
-> Condition
    WorkflowInput Source1
    -> MemberSelector(Selector=Item1)
    -> WorkflowOutput
-> SelectMany Reward => #14
    GroupWorkflow UpdateSubjects
        IntProperty(Value=0)
        -> MulticastSubject AbortEvent

        DoubleProperty(Value=0) => #2
        SubscribeSubject Correct => #3
        #2, #3 -> SubscribeWhen
        -> MulticastSubject RepeatTrial

        SubscribeSubject RepeatError => #6
        SubscribeSubject Incorrect => #7
        #6, #7 -> SubscribeWhen
        -> MulticastSubject RepeatTrial

        SubscribeSubject TrialsAborted => #10
        SubscribeSubject BlockTrial => #11
        #10, #11 -> Zip
        -> Divide
        -> MulticastSubject BlockAbortRatio

        SubscribeSubject BaseFT => #15
        SubscribeSubject FTDelta => #16
        #15, #16 -> Zip
        -> Add => #18
        -> Condition => #19
            WorkflowInput Source1 => #0
            SubscribeSubject FTTarget => #1
            #0, #1 -> Zip
            -> LessThanOrEqual
            -> WorkflowOutput
        SubscribeSubject FTTarget => #20
        #18 -> Condition => #21
            WorkflowInput Source1 => #0
            SubscribeSubject FTTarget => #1
            #0, #1 -> Zip
            -> LessThanOrEqual
            -> LogicalAnd(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        #20, #21 -> SubscribeWhen => #22
        #19, #22 -> Merge
        -> MulticastSubject BaseFT

        SubscribeSubject BaseRT => #25
        SubscribeSubject RTDelta => #26
        #25, #26 -> Zip
        -> Add => #28
        -> Condition => #29
            WorkflowInput Source1 => #0
            SubscribeSubject RTTarget => #1
            #0, #1 -> Zip
            -> LessThanOrEqual
            -> WorkflowOutput
        SubscribeSubject RTTarget => #30
        #28 -> Condition => #31
            WorkflowInput Source1 => #0
            SubscribeSubject RTTarget => #1
            #0, #1 -> Zip
            -> LessThanOrEqual
            -> LogicalAnd(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        #30, #31 -> SubscribeWhen => #32
        #29, #32 -> Merge
        -> MulticastSubject BaseRT

        SubscribeSubject IntendedLNP => #35
        SubscribeSubject LNPDelta => #36
        #35, #36 -> Zip
        -> Add => #38
        -> Condition => #39
            WorkflowInput Source1 => #0
            SubscribeSubject LNPTarget => #1
            #0, #1 -> Zip
            -> LessThanOrEqual
            -> WorkflowOutput
        SubscribeSubject LNPTarget => #40
        #38 -> Condition => #41
            WorkflowInput Source1 => #0
            SubscribeSubject LNPTarget => #1
            #0, #1 -> Zip
            -> LessThanOrEqual
            -> LogicalAnd(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        #40, #41 -> SubscribeWhen => #42
        #39, #42 -> Merge
        -> MulticastSubject IntendedLNP

        SubscribeSubject RightAnswers => #45
        SubscribeSubject Correct => #46
        #45, #46 -> SubscribeWhen
        -> Add(Operand=DoubleProperty(Value=1)) => #48
        SubscribeSubject RightAnswers => #49
        SubscribeSubject Incorrect => #50
        #49, #50 -> SubscribeWhen => #51
        #48, #51 -> Merge
        -> Take(Count=1)
        -> MulticastSubject RightAnswers => #54
        SubscribeSubject TrialsCompleted
        -> Take(Count=1)
        -> Add(Operand=IntProperty(Value=1))
        -> MulticastSubject TrialsCompleted => #58
        #54, #58 -> Zip
        -> Divide
        -> MulticastSubject BlockPerformance

    SubscribeSubject ResponsePoke => #1
    SubscribeSubject LeftOrRight => #2
    #1, #2 -> WithLatestFrom
    -> Equal => #4
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> BehaviorSubject Correct
    -> SelectMany => #7
        SubscribeSubject IntendedLNP => #0
        SubscribeSubject Timestamp => #1
        SubscribeSubject LNPStart => #2
        #1, #2 -> Zip
        -> Subtract => #4
        #0, #4 -> Zip
        -> Subtract
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(Math.Max(it, 0))
        -> InputMapping(Selector=it, DueTime(Selector=it))
        -> SelectMany "Delay (DuckTapeSolution)"
            WorkflowInput Source1 => #0
            ExternalizedMapping(DueTime) => #1
            #0, #1 -> Delay(DueTime=PT0.01S)
            -> Take(Count=1)
            -> WorkflowOutput
        -> GroupWorkflow TimestampEvent => #10
            WorkflowInput Source1 => #0
            SubscribeSubject Timestamp => #1
            #0, #1 -> CombineLatest
            -> Bonsai.Harp.CreateTimestamped
            -> Take(Count=1)
            -> WorkflowOutput
        SubscribeSubject LeftPoke
        -> Condition => #12
            SubscribeSubject ResponsePoke
            -> Equal(Operand=IntProperty(Value=-1))
            -> WorkflowOutput
        #10, #12 -> WithLatestFrom => #13
        SubscribeSubject RightPoke
        -> Condition => #15
            SubscribeSubject ResponsePoke
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        #10, #15 -> WithLatestFrom => #16
        #13, #16 -> Merge => #17
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> MemberSelector(Selector=Value)
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        -> MemberSelector(Selector=Item2.Seconds) => #19
        #17 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> MemberSelector(Selector=Value)
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1.Seconds) => #21
        #19, #21 -> Merge => #22
        SubscribeSubject LNPStart => #23
        #22, #23 -> Zip
        -> Subtract
        -> MulticastSubject TimedLNP => #26
        SubscribeSubject IntendedLNP => #27
        #26, #27 -> Zip
        -> Take(Count=1)
        -> WorkflowOutput
    -> Condition
        WorkflowInput Source1
        -> GreaterThanOrEqual
        -> WorkflowOutput
    -> GroupWorkflow WaterDelivery
        SubscribeSubject LeftOrRight => #0
        WorkflowInput Source1 => #1
        #0, #1 -> Zip
        -> MemberSelector(Selector=Item1) => #3
        -> Condition
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=-1))
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO1))
        -> MulticastSubject BehaviorCommands => #6
        #3 -> Condition
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO2))
        -> MulticastSubject BehaviorCommands => #9
        #6, #9 -> Merge
        -> WorkflowOutput
    -> IntProperty(Value=1) => #10
    #7 -> Condition
        WorkflowInput Source1
        -> LessThan
        -> WorkflowOutput
    -> IntProperty(Value=1) => #12
    #4 -> Condition
        WorkflowInput Source1
        -> Equal(Operand=BooleanProperty(Value=false))
        -> WorkflowOutput
    -> BehaviorSubject Incorrect => #14
    SubscribeSubject IncorrectPenalty
    -> Multiply(Operand=IntProperty(Value=10000000))
    -> PropertyMapping(DueTime) => #17
    #14, #17 -> Delay(DueTime=PT2S)
    -> IntProperty(Value=-1) => #19
    #10, #12, #19 -> Merge
    -> MulticastSubject Success
    -> GroupWorkflow TimestampEvent
        WorkflowInput Source1 => #0
        SubscribeSubject Timestamp => #1
        #0, #1 -> CombineLatest
        -> Bonsai.Harp.CreateTimestamped
        -> Take(Count=1)
        -> WorkflowOutput
    -> MemberSelector(Selector=Seconds)
    -> MulticastSubject TrialEnd
    -> BooleanProperty(Value=true) => #25
    IntProperty(Value=6) => #26
    #25, #26 -> Zip
    -> WorkflowOutput
#12 -> Condition => #15
    WorkflowInput Source1
    -> MemberSelector(Selector=Item1)
    -> Equal(Operand=BooleanProperty(Value=false))
    -> WorkflowOutput
#10 -> Condition => #16
    WorkflowInput Source1
    -> MemberSelector(Selector=Item1)
    -> Equal(Operand=BooleanProperty(Value=false))
    -> WorkflowOutput
#8 -> Condition => #17
    WorkflowInput Source1
    -> MemberSelector(Selector=Item1)
    -> Equal(Operand=BooleanProperty(Value=false))
    -> WorkflowOutput
#6 -> Condition => #18
    WorkflowInput Source1
    -> MemberSelector(Selector=Item1)
    -> Equal(Operand=BooleanProperty(Value=false))
    -> WorkflowOutput
#15, #16, #17, #18 -> Merge
-> SelectMany Abort => #20
    SubscribeSubject FixationAbortPenalty => #0
    WorkflowInput Source1
    -> MemberSelector(Selector=Item2)
    -> MulticastSubject AbortEvent => #3
    -> Condition => #4
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=3))
        -> WorkflowOutput
    #0, #4 -> SubscribeWhen => #5
    SubscribeSubject AbortPenalty => #6
    #3 -> Condition => #7
        WorkflowInput Source1
        -> NotEqual(Operand=IntProperty(Value=3))
        -> WorkflowOutput
    #6, #7 -> SubscribeWhen => #8
    #5, #8 -> Merge
    -> Multiply(Operand=IntProperty(Value=10000000))
    -> InputMapping(Selector=it, DueTime(Selector=it))
    -> SelectMany "Delay (DuckTapeSolution)"
        WorkflowInput Source1 => #0
        ExternalizedMapping(DueTime) => #1
        #0, #1 -> Delay(DueTime=PT10S)
        -> Take(Count=1)
        -> WorkflowOutput
    -> IntProperty(Value=0)
    -> MulticastSubject Success
    -> GroupWorkflow TimestampEvent
        WorkflowInput Source1 => #0
        SubscribeSubject Timestamp => #1
        #0, #1 -> CombineLatest
        -> Bonsai.Harp.CreateTimestamped
        -> Take(Count=1)
        -> WorkflowOutput
    -> MemberSelector(Selector=Seconds)
    -> MulticastSubject TrialEnd
    -> Take(Count=1)
    -> BooleanProperty(Value=false) => #19
    IntProperty(Value=7) => #20
    #19, #20 -> Zip
    -> WorkflowOutput
    #3 -> GroupWorkflow UpdateSubjects
        WorkflowInput Source1 => #0
        -> Equal(Operand=DoubleProperty(Value=2)) => #1
        -> DoubleProperty(Value=0)
        -> MulticastSubject TimeToCNP
        #1 -> DoubleProperty(Value=0)
        -> MulticastSubject IntendedFT
        #0 -> Equal(Operand=DoubleProperty(Value=4)) => #6
        #1, #6 -> Zip
        -> LogicalOr
        -> DoubleProperty(Value=0)
        -> MulticastSubject TimedFT
        #0 -> Equal(Operand=DoubleProperty(Value=3)) => #11
        #1, #11, #6 -> Zip
        -> LogicalOr
        -> DoubleProperty(Value=0)
        -> MulticastSubject TimedRT
        #0 -> Equal(Operand=DoubleProperty(Value=5)) => #16
        #1, #11, #6, #16 -> Zip
        -> LogicalOr => #18
        -> IntProperty(Value=0)
        -> MulticastSubject ResponsePoke
        #18 -> DoubleProperty(Value=0)
        -> MulticastSubject TimedMT

        DoubleProperty(Value=0)
        -> MulticastSubject TimedLNP

        SubscribeSubject RepeatAbort
        -> MulticastSubject RepeatTrial

        SubscribeSubject BlockPerformance
        -> Take(Count=1)
        -> MulticastSubject BlockPerformance

        SubscribeSubject TrialsAborted
        -> Take(Count=1)
        -> Add(Operand=DoubleProperty(Value=1))
        -> MulticastSubject TrialsAborted => #33
        SubscribeSubject BlockTrial => #34
        #33, #34 -> Zip
        -> Divide
        -> MulticastSubject BlockAbortRatio
#14, #20 -> Merge
-> SelectMany OutputFile => #22
    SubscribeSubject Box => #0
    SubscribeSubject LEDPowerR => #1
    SubscribeSubject LEDPowerL => #2
    SubscribeSubject TimedLED => #3
    SubscribeSubject LEDTrial => #4
    SubscribeSubject BlockAbortRatio => #5
    SubscribeSubject BlockPerformance => #6
    SubscribeSubject RepeatTrial => #7
    SubscribeSubject AbortEvent => #8
    SubscribeSubject Success => #9
    SubscribeSubject ResponsePoke => #10
    SubscribeSubject TimedLNP => #11
    SubscribeSubject IntendedLNP => #12
    SubscribeSubject TimedMT => #13
    SubscribeSubject MaxMT => #14
    SubscribeSubject TimedRT => #15
    SubscribeSubject MaxRT => #16
    SubscribeSubject BaseRT => #17
    SubscribeSubject TimedFT => #18
    SubscribeSubject IntendedFT => #19
    SubscribeSubject ExpFTMean => #20
    SubscribeSubject BaseFT => #21
    SubscribeSubject TimeToCNP => #22
    SubscribeSubject MaxWait => #23
    SubscribeSubject ITIEnd => #24
    SubscribeSubject ITIStart => #25
    #24, #25 -> Zip
    -> Subtract => #27
    SubscribeSubject ITIEnd => #28
    SubscribeSubject ITIStart => #29
    SubscribeSubject IntendedITI => #30
    SubscribeSubject TrialEnd => #31
    SubscribeSubject TrialStart => #32
    #31, #32 -> Zip
    -> Subtract => #34
    SubscribeSubject TrialEnd => #35
    SubscribeSubject TrialStart => #36
    SubscribeSubject WaveformR => #37
    SubscribeSubject WaveformL => #38
    SubscribeSubject RightAmp => #39
    SubscribeSubject LeftAmp => #40
    SubscribeSubject Bias => #41
    SubscribeSubject ILD => #42
    SubscribeSubject ABL => #43
    SubscribeSubject TrainingLevel => #44
    SubscribeSubject TrialsPerBlock => #45
    SubscribeSubject Block => #46
    SubscribeSubject Trial => #47
    SubscribeSubject SessionType => #48
    SubscribeSubject Session => #49
    SubscribeSubject Animal
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #51
      Expression: Convert.ToDouble(it)
    #49, #51 -> SubscribeWhen
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #53
      Expression: Convert.ToDouble(it)
    #48, #53 -> SubscribeWhen
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #55
      Expression: Convert.ToDouble(it)
    #47, #55 -> SubscribeWhen
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #57
      Expression: Convert.ToDouble(it)
    #46, #57 -> SubscribeWhen
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #59
      Expression: Convert.ToDouble(it)
    #45, #59 -> SubscribeWhen
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #61
      Expression: Convert.ToDouble(it)
    #44, #61 -> SubscribeWhen
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #63
      Expression: Convert.ToDouble(it)
    #43, #63 -> SubscribeWhen => #64
    #42, #64 -> SubscribeWhen => #65
    #41, #65 -> SubscribeWhen => #66
    #40, #66 -> SubscribeWhen => #67
    #39, #67 -> SubscribeWhen => #68
    #38, #68 -> SubscribeWhen
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #70
      Expression: Convert.ToDouble(it)
    #37, #70 -> SubscribeWhen
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #72
      Expression: Convert.ToDouble(it)
    #36, #72 -> SubscribeWhen => #73
    #35, #73 -> SubscribeWhen => #74
    #34, #74 -> SubscribeWhen => #75
    #30, #75 -> SubscribeWhen => #76
    #29, #76 -> SubscribeWhen => #77
    #28, #77 -> SubscribeWhen => #78
    #27, #78 -> SubscribeWhen => #79
    #23, #79 -> SubscribeWhen => #80
    #22, #80 -> SubscribeWhen => #81
    #21, #81 -> SubscribeWhen => #82
    #20, #82 -> SubscribeWhen => #83
    #19, #83 -> SubscribeWhen => #84
    #18, #84 -> SubscribeWhen => #85
    #17, #85 -> SubscribeWhen => #86
    #16, #86 -> SubscribeWhen => #87
    #15, #87 -> SubscribeWhen => #88
    #14, #88 -> SubscribeWhen => #89
    #13, #89 -> SubscribeWhen => #90
    #12, #90 -> SubscribeWhen => #91
    #11, #91 -> SubscribeWhen => #92
    #10, #92 -> SubscribeWhen
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #94
      Expression: Convert.ToDouble(it)
    #9, #94 -> SubscribeWhen
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #96
      Expression: Convert.ToDouble(it)
    #8, #96 -> SubscribeWhen
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #98
      Expression: Convert.ToDouble(it)
    #7, #98 -> SubscribeWhen
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #100
      Expression: Convert.ToDouble(it)
    #6, #100 -> SubscribeWhen => #101
    #5, #101 -> SubscribeWhen => #102
    #4, #102 -> SubscribeWhen => #103
    #3, #103 -> SubscribeWhen => #104
    #2, #104 -> SubscribeWhen => #105
    #1, #105 -> SubscribeWhen => #106
    #0, #106 -> SubscribeWhen
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #108
      Expression: Convert.ToDouble(it)
    #108, #106, #105, #104, #103, #102, #101, #100, #98, #96, #94, #92, #91, #90, #89, #88, #87, #86, #85, #84, #83, #82, #81, #80, #79, #78, #77, #76, #75, #74, #73, #72, #70, #68, #67, #66, #65, #64, #63, #61, #59, #57, #55, #53, #51 -> Merge => #109
    #108 -> Delay(DueTime=PT0.001S) => #110
    #109, #110 -> TakeUntil
    -> ToArray
    -> MulticastSubject CSV
    -> BooleanProperty(Value=false) => #114
    IntProperty(Value=8) => #115
    #114, #115 -> Zip
    -> WorkflowOutput
#4 -> Condition
    WorkflowInput Source1
    -> MemberSelector(Selector=Item1)
    -> Equal(Operand=BooleanProperty(Value=false))
    -> WorkflowOutput
-> Delay(DueTime=PT0.01S) => #24
#22, #24 -> Merge
-> Take(Count=1)
-> Repeat => #27
SubscribeSubject SessionDuration
-> PropertyMapping(DueTime)
-> Timer(DueTime=PT1H, Period=PT0S) => #30
#27, #30 -> SubscribeWhen => #31
#27, #31 -> TakeUntil
-> WorkflowOutput
